def model modules as
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // /////////////////////////////////////////// non-BC Vessel ////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp vp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    // C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v_in-v);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//

  def comp pp_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp pv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    q = q_C+q_0;
    // emperical relation
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    ode(q_C, t) = v-v_out;
    // constitutive laws
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out);
  enddef;

  def comp pp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    q = q_C+q_0;
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R/2{dimensionless}*v)/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_d);
    ode(v_d, t) = (u-u_out-R/2{dimensionless}*v_d)/(I/2{dimensionless});
  enddef;

  def comp pp_simple_novisco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var Rp: Js_per_m6 {pub: in};
    var fracR: dimensionless {pub: in};
    var Rp_loc: Js_per_m6 {pub: out};
    var Rd_loc: Js_per_m6 {pub: out};
    Rp_loc = sel
      case Rp > 0.0{Js_per_m6}:
        Rp;
      case (Rp <= 0.0{Js_per_m6}) and (fracR >= 0.0{dimensionless}):
        R*fracR;
      case (Rp <= 0.0{Js_per_m6}) and (fracR < 0.0{dimensionless}):
        R*0.5{dimensionless};
    endsel;
    Rd_loc = R-Rp_loc;
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    q = q_C+q_0;
    // Conservation Laws
    ode(v, t) = (u_in-u-Rp_loc*v)/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u_C = q_C/C;
    u = u_0+u_C+u_ext;
    ode(v_d, t) = (u-u_out-Rd_loc*v_d)/(I/2{dimensionless});
  enddef;

  def comp vv_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp vv_rigid_type as
    var t: second {pub: in};
    // IF KEEPING TRACK OF VOLUME, DONT USE THIS MODULE. IT DOESNT HAVE A BASELINE VOLUME.
    // Constitutive parameters
    var R: Js_per_m6 {pub: in};
    // State Variables
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    // Conservation Laws
    u = (v_in-v_out)/R;
  enddef;

  def comp vp_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    q = q_C+q_0;
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v_in-v);
  enddef;

  def comp vp_simple_novisco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    q = q_C+q_0;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/C;
    u = u_0+u_C+u_ext;
  enddef;

  def comp vp_simple_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var R: Js_per_m6 {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_init: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var R_nonlinear: Js_per_m6 {pub: out};
    // IMPORTANT, I AM USING q_init in this nonlinear law. to allow freedom on the Resistance set point.
    R_nonlinear = R*sqr(q_init/q);
    // Conservation Laws
    ode(v, t) = (u-u_out-R_nonlinear*v)/I;
    ode(q, t) = v_in-v;
    u = u_0+u_ext+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube));
  enddef;

  def comp vp_ven_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C_init: m3 {pub: in};
    var q_C_change: m3 {init: q_C_init, pub: out};
    var q_C: m3 {pub: out};
    var q: m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: out};
    var Delta_q_us: dimensionless {pub: in};
    var Delta_C: dimensionless {pub: in};
    var C_wCont: m6_per_J {pub: out};
    // TODO double check that this applies to veins
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C_wCont;
    u = u_C+u_ext+R_v*(v_in-v);
    q_us_wCont = q_us_0*(1{dimensionless}-Delta_q_us);
    C_wCont = C*(1{dimensionless}-Delta_C);
  enddef;

  def comp vp_ven_simple_novisco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var q_C_init: m3 {pub: in};
    var q_C_change: m3 {init: q_C_init, pub: out};
    var q_C: m3 {pub: out};
    var q: m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us_0: m3 {pub: in};
    var q_us_wCont: m3 {pub: out};
    var Delta_q_us: dimensionless {pub: in};
    var Delta_C: dimensionless {pub: in};
    var C_wCont: m6_per_J {pub: out};
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C_change, t) = v_in-v;
    // TODO CHECK THAT CHANGING US VOLUME LIKE THIS CONSERVES VOLUME!!!!
    q_C = q_C_change+q_us_0-q_us_wCont;
    q = q_C+q_us_wCont;
    u_C = q_C/C_wCont;
    u = u_C+u_ext;
    q_us_wCont = q_us_0*(1{dimensionless}-Delta_q_us);
    C_wCont = C*(1{dimensionless}-Delta_C);
  enddef;
  // //////////////////////////////////////////////////////////////////////////////////////////////////////
  // ///////////////////////////////////////// output-BC Vessel ///////////////////////////////////////////
  // //////////////////////////////////////////////////////////////////////////////////////////////////////

  def comp pp_T_fixed_I_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T/2{dimensionless})/I_T;
  enddef;

  def comp pp_T_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_1_T: Js_per_m6 {pub: in};
    var R_2_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    // + u_ext;
    u = u_C+u_ext+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_1_T)/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_2_T)/I_T;
  enddef;

  def comp pp_T_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var Delta_R: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T+u_ext;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = R_T*(1{dimensionless}+Delta_R)*R_local_multiplier;
  enddef;

  def comp pp_T_R1CR2_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T1: Js_per_m6 {pub: in};
    var R_T2: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var R_T1_wCont: Js_per_m6 {pub: out};
    var R_T2_wCont: Js_per_m6 {pub: out};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    u = u_C+u_ext;
    v = (u_in-u)/R_T1_wCont;
    v_T = (u-u_out)/R_T2_wCont;
    R_T1_wCont = (R_T1+Delta_R*R_T1/(R_T1+R_T2))*R_local_multiplier;
    R_T2_wCont = (R_T2+Delta_R*R_T2/(R_T1+R_T2))*R_local_multiplier;
  enddef;

  def comp pp_T_RCR_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    var Delta_R: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    u = u_C+(+u_ext);
    v = (u_in-u)/(R_T_wCont/2{dimensionless});
    v_T = (u-u_out)/(R_T_wCont/2{dimensionless});
    R_T_wCont = R_T*(1{dimensionless}+Delta_R)*R_local_multiplier;
  enddef;

  def comp pp_T_RICRI_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T_1: Js2_per_m6 {pub: in};
    var I_T_2: Js2_per_m6 {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_1: Js_per_m6;
    var R_T_2: Js_per_m6;
    var frac_R_T_1_of_R_T: dimensionless {pub: in};
    var C_T: m6_per_J {pub: in};
    R_T_1 = frac_R_T_1_of_R_T*R_T;
    R_T_2 = (1{dimensionless}-frac_R_T_1_of_R_T)*R_T;
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    // rearrange to try to make opencor recognise an ode
    // ode(q, t) = (u_in-(q/C_T+u_ext))/R_T_1-(q/C_T+u_ext-u_out)/R_T_2;
    u_C = (q-q_us)/C_T;
    u = u_C+u_ext;
    ode(v, t) = (u_in-u-R_T_1*v)/I_T_1;
    ode(v_T, t) = (u-u_out-R_T_2*v_T)/I_T_2;
  enddef;

  def comp pp_T_R1ICR2I_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T1: Js2_per_m6 {pub: in};
    var I_T2: Js2_per_m6 {pub: in};
    var R_T1: Js_per_m6 {pub: in};
    var R_T2: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    u_C = (q-q_us)/C_T;
    u = u_C+u_ext;
    // + 0.01{second}/C_T*(v-v_T); // No visco term
    ode(v, t) = (u_in-u-R_T1*v)/I_T1;
    ode(v_T, t) = (u-u_out-R_T2*v_T)/I_T2;
  enddef;

  def comp pp_T_RICRI_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T_1: Js2_per_m6 {pub: in};
    var I_T_2: Js2_per_m6 {pub: in};
    var R_T: Js_per_m6 {pub: in};
    var R_T_1: Js_per_m6;
    var R_T_2: Js_per_m6;
    var frac_R_T_1_of_R_T: dimensionless {pub: in};
    // var C_T: m6_per_J {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    R_T_1 = frac_R_T_1_of_R_T*R_T;
    R_T_2 = (1{dimensionless}-frac_R_T_1_of_R_T)*R_T;
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var q_us: m3 {pub: in};
    var q_init: m3 {pub: in};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v-v_T;
    // rearrange to try to make opencor recognise an ode
    // ode(q, t) = (u_in-(q/C_T+u_ext))/R_T_1-(q/C_T+u_ext-u_out)/R_T_2;
    // u           = q/C_T+u_ext;
    u = K_tube*(pow(q/q_us, m_tube)-pow(q/q_us, n_tube))+u_ext;
    ode(v, t) = (u_in-u-R_T_1*v)/I_T_1;
    ode(v_T, t) = (u-u_out-R_T_2*v_T)/I_T_2;
  enddef;

  def comp vp_T_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T2: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_in: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_init: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    var R_T2_wCont: Js_per_m6 {pub: out};
    var Delta_R: dimensionless {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v_in-v_T;
    u_C = (q-q_us)/C_T;
    u = u_C+u_ext;
    v_T = (u-u_out)/R_T2_wCont;
    R_T2_wCont = R_T2*(1{dimensionless}+Delta_R)*R_local_multiplier;
  enddef;

  def comp vp_T_R1CR2_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T1: Js_per_m6 {pub: in};
    var R_T2: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_in: m3_per_s {pub: in};
    var v_T: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_init: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    // R_T1_wCont is only used to transfer to the FV coupling with Lucas' models.
    var R_T1_wCont: Js_per_m6 {pub: out};
    var R_T2_wCont: Js_per_m6 {pub: out};
    // TODO this hasn't been modified for new control laws.
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v_in-v_T;
    u_C = (q-q_us)/C_T;
    u = u_C+u_ext;
    v_T = (u-u_out)/R_T2_wCont;
    // The below assumes that Delta_R1 is proportional to R1 etc
    R_T1_wCont = (R_T1+Delta_R*R_T1/(R_T1+R_T2))*R_local_multiplier;
    R_T2_wCont = (R_T2+Delta_R*R_T2/(R_T1+R_T2))*R_local_multiplier;
  enddef;

  def comp vp_T_R1CR2_wI_wCont_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T1: Js_per_m6 {pub: in};
    var R_T2: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_in: m3_per_s {pub: in};
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_init: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    // R_T1_wCont is only used to transfer to the FV coupling with Lucas' models.
    var R_T1_wCont: Js_per_m6 {pub: out};
    var R_T2_wCont: Js_per_m6 {pub: out};
    var Delta_R: Js_per_m6 {pub: in};
    var R_local_multiplier: dimensionless {pub: in};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v_in-v_T;
    u_C = (q-q_us)/C_T;
    u = u_C+u_ext;
    ode(v_T, t) = (u-R_T2_wCont*v_T-u_out)/I_T;
    // v_T       = (u-u_out)/R_T2_wCont;
    // The below assumes that Delta_R1 is proportional to R1 etc
    R_T1_wCont = (R_T1+Delta_R*R_T1/(R_T1+R_T2))*R_local_multiplier;
    R_T2_wCont = (R_T2+Delta_R*R_T2/(R_T1+R_T2))*R_local_multiplier;
  enddef;

  def comp vp_T_R1CR2_wI_type as
    var t: second {pub: in};
    // Constitutive parameters
    var R_T1: Js_per_m6 {pub: in};
    var R_T2: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    var I_T: Js2_per_m6 {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_in: m3_per_s {pub: in};
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_init: m3 {pub: in};
    var q_us: m3 {pub: in};
    var q: m3 {init: q_init, pub: out};
    // Conservation Laws
    // For now terminals don't have a gravity effect, change this for leg terminals
    ode(q, t) = v_in-v_T;
    u_C = (q-q_us)/C_T;
    u = u_C+u_ext;
    ode(v_T, t) = (u-R_T2*v_T-u_out)/I_T;
    // v_T       = (u-u_out)/R_T2;
  enddef;
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // //////////////////////////////////////////// Junctions //////////////////////////////////////////////
  // /////////////////////////////////////////////////////////////////////////////////////////////////////
  // Bifurcation

  def comp pv_split_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var du_C_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp pv_split_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    R_v = 0.01{second}/C;
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var du_C_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q: m3 {pub: out};
    q = q_C+q_0;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_1-v_out_2)/C;
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    u_C = q_C/C+u_ext;
    u = u_0+u_C+R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp vv_split_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_in: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;

  def comp vv_split_novisco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_in: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext;
    u_d = u_0+u_C_d+u_ext;
  enddef;

  def comp vv_split_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_in: m3_per_s {pub: in};
    var u_C: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q: m3 {pub: out};
    q = q_C+q_C_d+q_0;
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in-v;
    u_C = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless})+u_ext;
    u = u_0+u_C+2{dimensionless}*R_v*(v_in-v);
    u_d = u_0+u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;
  // -----------------------------------------------------------------------------//
  // -----------------------------------------------------------------------------//
  // 2 in 2 out junction

  def comp vv_2in2out_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_ext+u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_0+u_ext+u_C_d+2{dimensionless}*R_v*(v-v_out_1-v_out_2);
  enddef;
  // 2in1out merge vv

  def comp vv_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_C_d+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_ext+u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_0+u_ext+u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;
  // 2in1out merge vp

  def comp vp_merge_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/C;
    u = u_0+u_ext+u_C+R_v*(v_in_1+v_in_2-v);
  enddef;

  def comp vp_merge_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    q = q_C+q_0;
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    // ode(u_C, t) = (v_in_1+v_in_2-v)/C;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/C;
    u = u_0+u_ext+u_C+R_v*(v_in_1+v_in_2-v);
  enddef;
  // 2in1out merge vv simple

  def comp vv_merge_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I: Js2_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var R: Js_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    q = q_Cq_C_d+q_0;
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    u_C = q_C/(C/2{dimensionless});
    ode(q_C_d, t) = v-v_out;
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_ext+u_C+2{dimensionless}*R_v*(v_in_1+v_in_2-v);
    u_d = u_0+u_ext+u_C_d+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp zero_flow as
    var v_zero: m3_per_s {pub: out};
    v_zero = 0{m3_per_s};
  enddef;

  def comp flow_sum_2_type as
    var t: second {pub: in};
    var v_1: m3_per_s {pub: in};
    var v_2: m3_per_s {pub: in};
    var v_total: m3_per_s {pub: out};
    v_total = v_1+v_2;
  enddef;

  def comp W_controller2_type as
    var t: second {pub: in};
    // Constitutive parameters
    var I_T: Js2_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var R_T: Js_per_m6 {pub: in};
    var C_T: m6_per_J {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u_in: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    // v_T is the output flow to the venous side
    var v_T: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: out};
    var q_T: m3 {init: 0.0, pub: out};
    var R_T_wCont: Js_per_m6 {pub: out};
    // Conservation Laws
    // Improve this R_v estimate?
    R_v = 0.01{second}/C_T;
    I_T = 1e-6{Js2_per_m6};
    // Conservation Laws
    //  For now terminals don't have a gravity effect, change this for leg terminals
    // u_out = 0{J_per_m3};
    u_out = 0{dimensionless};
    ode(q_T, t) = v-v_T;
    u_C = q_T/C_T;
    u = u_C+R_v*(v-v_T);
    ode(v, t) = (u_in-u-v*R_T_wCont/2{dimensionless})/I_T;
    ode(v_T, t) = (u-u_out-v_T*R_T_wCont/2{dimensionless})/I_T;
    R_T_wCont = R_T;
  enddef;
  // -----------------------------------------------------------------------------//
  // --------------- NONLINEAR ELASTIC/VISCOELASTIC VESSEL MODULES ---------------//
  // -----------------------------------------------------------------------------//

  def comp pv_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0 = pi*sqr(r_0)*l;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    q = q_C+q_0;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp pv_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp pv_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v-v_out;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vp_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0 = pi*sqr(r_0)*l;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    q = q_C+q_0;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp vp_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp vp_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v_in-v)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp pp_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0 = pi*sqr(r_0)*l;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    ode(v_d, t) = (u-u_out-R_flag*R/2{dimensionless}*v_d)/(I/2{dimensionless});
    q = q_C+q_0;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp pp_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    ode(v_d, t) = (u-u_out-R_flag*R/2{dimensionless}*v_d)/(I/2{dimensionless});
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp pp_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R/2{dimensionless}*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/(I/2{dimensionless});
    ode(q_C, t) = v-v_d;
    ode(v_d, t) = (u-u_out-R_flag*R/2{dimensionless}*v_d)/(I/2{dimensionless});
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_d)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out;
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+2{dimensionless}*K_tube_visco*(v_in-v)+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+2{dimensionless}*K_tube_visco*(v-v_out)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp pv_split_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0 = pi*sqr(r_0)*l;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be.
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_1-v_out_2);
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    q = q_C+q_0;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp pv_split_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be.
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_1-v_out_2);
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp pv_split_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be.
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_1-v_out_2);
    // the below allows non constant compliance
    ode(q_C, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_1-v_out_2)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_split_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_split_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_split_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_1-v_out_2;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+2{dimensionless}*K_tube_visco*(v_in-v)+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+2{dimensionless}*K_tube_visco*(v-v_out_1-v_out_2)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vp_merge_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0 = pi*sqr(r_0)*l;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    q = q_C+q_0;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp vp_merge_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp vp_merge_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v_in_1+v_in_2-v)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_merge_nonlinear_constR_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    // R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_merge_nonlinear_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var K_tube: J_per_m3 {pub: in};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_merge_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    // I = I_scale*rho*l/(pi*sqr(r));
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_1+v_in_2-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+2{dimensionless}*K_tube_visco*(v_in_1+v_in_2-v)+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+2{dimensionless}*K_tube_visco*(v-v_out)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//
  // ---------------------- GENERIC JUNCTION VESSEL MODULES ----------------------//
  // -----------------------------------------------------------------------------//

  def comp vv_MinNout_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    q = q_0+q_C+q_C_d;
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out_sum;
    u_C = q_C/(C/2{dimensionless});
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in_sum-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out_sum);
  enddef;

  def comp vv_MinNout_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_0+q_C+q_C_d;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out_sum;
    u_C = q_C/(C/2{dimensionless});
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in_sum-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out_sum);
  enddef;

  def comp vv_MinNout_nonlinear_constR_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out_sum;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_MinNout_nonlinear_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out_sum;
    // Nonlinear tube law.
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_MinNout_nonlinear_visco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out_sum;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vp_Min_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    q = q_C+q_0;
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in_sum-v;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v_in_sum-v);
  enddef;

  def comp vp_Min_simple_novisco_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
    q = q_C+q_0;
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var u_out: J_per_m3 {pub: in};
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v)/I;
    ode(q_C, t) = v_in_sum-v;
    u_C = q_C/C;
    u = u_0+u_C+u_ext;
  enddef;

  def comp vp_Min_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var u_out: J_per_m3 {pub: in};
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_out-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v_in_sum-v);
  enddef;

  def comp vp_Min_nonlinear_constR_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var u_out: J_per_m3 {pub: in};
    var K_tube: J_per_m3 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp vp_Min_nonlinear_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var u_out: J_per_m3 {pub: in};
    var K_tube: J_per_m3 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp vp_Min_nonlinear_visco_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var u_out: J_per_m3 {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_out-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v_in_sum-v)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_Min_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var v_out: m3_per_s {pub: in};
    q = q_0+q_C_d+q_C;
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out;
    u_C = q_C/(C/2{dimensionless});
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in_sum-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp vv_Min_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var v_out: m3_per_s {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_0+q_C_d+q_C;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out;
    u_C = q_C/(C/2{dimensionless});
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in_sum-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out);
  enddef;

  def comp vv_Min_nonlinear_constR_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_out: m3_per_s {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_Min_nonlinear_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_out: m3_per_s {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_Min_nonlinear_visco_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in_sum: m3_per_s {pub: in};
    var v_out: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in_sum-v;
    ode(q_C_d, t) = v-v_out;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp pv_Nout_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var du_C_dt: J_per_m3s {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    q = q_C+q_0;
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v)/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_sum)/C;
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out_sum);
  enddef;

  def comp pv_Nout_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var du_C_dt: J_per_m3s {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u_in-u-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    du_C_dt = (v-v_out_sum)/C;
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    u_C = q_C/C;
    u = u_0+u_C+u_ext+R_v*(v-v_out_sum);
  enddef;

  def comp pv_Nout_nonlinear_constR_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp pv_Nout_nonlinear_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+u_ext;
  enddef;

  def comp pv_Nout_nonlinear_visco_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {init: 0.0, pub: out};
    var u: J_per_m3 {pub: out};
    var du_dt: J_per_m3s {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_0: m3 {pub: out};
    var q: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_C+q_0;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u_in-u-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    // The below assumes constant compliance and is only used as an approximate output for the baroreceptor
    // TODO differentiate the tube law to get what this should be
    du_dt = K_tube*(m_tube*pow(q, m_tube-1{dimensionless})/pow(q_0, m_tube)-n_tube*pow(q, n_tube-1{dimensionless})/pow(q_0, n_tube))*(v-v_out_sum);
    // The below allows non constant compliance
    ode(q_C, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q/q_0, m_tube)-pow(q/q_0, n_tube))+K_tube_visco*(v-v_out_sum)+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//

  def comp vv_Nout_simple_type as
    var t: second {pub: in};
    // Constitutive parameters
    var q_0: m3 {pub: in};
    var u_0: J_per_m3 {pub: in};
    var R: Js_per_m6 {pub: in};
    var C: m6_per_J {pub: in};
    var I: Js2_per_m6 {pub: in};
    var R_v: Js_per_m6 {pub: out};
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    q = q_0+q_C+q_C_d;
    // Constitutive Relations
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v)/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_sum;
    u_C = q_C/(C/2{dimensionless});
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out_sum);
  enddef;

  def comp vv_Nout_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    var R_v: Js_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_C: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var u_C_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_0: m3 {pub: out};
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    q_0 = pi*sqr(r_0)*l;
    q = q_0+q_C+q_C_d;
    // Constitutive Relations
    h = r_0*(a_vessel*exp(b_vessel*r_0)+c_vessel*exp(d_vessel*r_0));
    I = rho*l/(pi*sqr(r_0));
    C = 2{dimensionless}*pi*pow(r_0, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    R_v = 0.01{second}/C;
    // Conservation Laws
    ode(v, t) = (u-u_d-R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_sum;
    u_C = q_C/(C/2{dimensionless});
    u_C_d = q_C_d/(C/2{dimensionless});
    u = u_0+u_C+u_ext+2{dimensionless}*R_v*(v_in-v);
    u_d = u_0+u_C_d+u_ext+2{dimensionless}*R_v*(v-v_out_sum);
  enddef;

  def comp vv_Nout_nonlinear_constR_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r_0, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_Nout_nonlinear_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_sum;
    // Nonlinear tube law
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;

  def comp vv_Nout_nonlinear_visco_type as
    // OK
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var g: m_per_s2 {pub: in};
    var beta_g: dimensionless {pub: in};
    var theta: dimensionless {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: out};
    var r_0: metre {pub: in};
    var u_0: J_per_m3 {pub: in};
    var I: Js2_per_m6 {pub: out};
    var R: Js_per_m6 {pub: out};
    var m_tube: dimensionless {pub: in};
    var n_tube: dimensionless {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {init: 0.0, pub: out};
    var u_d: J_per_m3 {pub: out};
    var q_C: m3 {init: 0.0, pub: out};
    var q_C_d: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_p: m3 {pub: out};
    var q_d: m3 {pub: out};
    var q_0_2: m3 {pub: out};
    var R_flag: dimensionless {pub: in};
    var I_scale: dimensionless {pub: in};
    var v_in: m3_per_s {pub: in};
    var v_out_sum: m3_per_s {pub: in};
    var K_tube: J_per_m3 {pub: in};
    var K_tube_visco: Js_per_m6 {pub: in};
    q_0_2 = pi*sqr(r_0)*l/2{dimensionless};
    q_p = q_C+q_0_2;
    q_d = q_C_d+q_0_2;
    q = q_p+q_d;
    r = sqrt(q/(pi*l));
    // Constitutive Relations
    I = I_scale*rho*l/(pi*sqr(r_0));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    ode(v, t) = (u-u_d-R_flag*R*v-beta_g*rho*g*l*cos(theta*pi/180{dimensionless}))/I;
    ode(q_C, t) = v_in-v;
    ode(q_C_d, t) = v-v_out_sum;
    // Nonlinear tube law
    // for this 0D module, the length l must be divided by 2 in the formula for K_tube_visco, as the element is split with two pressure variables
    u = u_0+K_tube*(pow(q_p/q_0_2, m_tube)-pow(q_p/q_0_2, n_tube))+u_ext;
    u_d = u_0+K_tube*(pow(q_d/q_0_2, m_tube)-pow(q_d/q_0_2, n_tube))+u_ext;
  enddef;
  // -----------------------------------------------------------------------------//
  // ----- Capillary types below ---- //

  def comp pv_constriction_type as
    var t: second {pub: in};
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // Constitutive parameters
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    // State Variables
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u: J_per_m3 {pub: out};
    var v_out: m3_per_s {pub: in};
    var q_C: m3 {init: 0.0, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R)/I;
    v = (u_in-u)/R;
    ode(q_C, t) = v-v_out;
    // constitutive laws
    u = q_C/C+u_ext;
  enddef;

  def comp pv_split_capillary_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u: J_per_m3 {pub: out};
    var v_out_1: m3_per_s {pub: in};
    var v_out_2: m3_per_s {pub: in};
    var v_out_total: m3_per_s {pub: out};
    var q_C_init: m3 {pub: in};
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t) = (u_in-u-R*v)/I;
    v = (u_in-u)/R;
    // the below allows non constant compliance
    v_out_total = v_out_1+v_out_2;
    ode(q_C, t) = v-v_out_total;
    u = q_C/C+u_ext;
  enddef;

  def comp pp_capillary_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var v: m3_per_s {pub: out};
    var u: J_per_m3 {pub: out};
    var v_d: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u_in-u-v*R/2{dimensionless})/I;
    v = (u_in-u)/(R/2{dimensionless});
    ode(q_C, t) = v-v_d;
    u = q_C/C+u_ext;
    // ode(v_d, t) = (u-u_out-v_d*R/2{dimensionless})/I;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp vp_merge_capillary_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in_1: m3_per_s {pub: in};
    var v_in_2: m3_per_s {pub: in};
    var v_in_total: m3_per_s {pub: out};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u-u_out-v*R)/I;
    v = (u-u_out)/R;
    v_in_total = v_in_1+v_in_2;
    ode(q_C, t) = v_in_total-v;
    u = q_C/C+u_ext;
  enddef;

  def comp vp_capillary_type as
    var t: second {pub: in};
    // Constitutive parameters
    var mu: Js_per_m3 {pub: in};
    var rho: Js2_per_m5 {pub: in};
    var E: J_per_m3 {pub: in};
    var l: metre {pub: in};
    var h: metre {pub: out};
    var r: metre {pub: in};
    var C: m6_per_J {pub: out};
    var R: Js_per_m6 {pub: out};
    // var I: Js2_per_m6 {pub: out};
    var a_vessel: dimensionless {pub: in};
    var b_vessel: per_m {pub: in};
    var c_vessel: dimensionless {pub: in};
    var d_vessel: per_m {pub: in};
    // State Variables
    var u_ext: J_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u: J_per_m3 {pub: out};
    var v: m3_per_s {pub: out};
    var u_out: J_per_m3 {pub: in};
    var q_C_init: m3 {pub: in};
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    // Constitutive Relations
    h = r*(a_vessel*exp(b_vessel*r)+c_vessel*exp(d_vessel*r));
    // I = rho*l/(pi*sqr(r));
    C = 2{dimensionless}*pi*pow(r, 3{dimensionless})*l/(E*h);
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    // Conservation Laws
    // ode(v, t)   = (u-u_out-v*R)/I;
    v = (u-u_out)/R;
    ode(q_C, t) = v_in-v;
    u = q_C/C+u_ext;
  enddef;
  // ////////////////////////////Hematocrit_directionality_modules///////////////

  def comp PP_capillary_H_D as
    // import variables
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    var w_v_d: dimensionless {pub: out};
    // w_v   = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v = sel
      case v > 0{dimensionless}:
        1{dimensionless};
      case v < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    w_v_d = sel
      case v_d > 0{dimensionless}:
        1{dimensionless};
      case v_d < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    var H_down: dimensionless {init: H_global_L, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v_d: dimensionless {pub: out};
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v_d)*H_down;
    H_R_out = w_v_d*H_down;
    var v_RBC: m3_per_s {pub: out};
    var v_d_RBC: m3_per_s {pub: out};
    v_RBC = 1.37{dimensionless}*v;
    v_d_RBC = 1.37{dimensionless}*v_d;
    var RBC_volume: m3 {init: RBC_volume_init, pub: out};
    ode(RBC_volume, t) = v_RBC*RBC_volume_L-v_d_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    // //////////////
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    var v_d: m3_per_s {pub: out};
    var v_d_mm3_s: mm3_per_s {pub: out};
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp PP_pericyte_H_D as
    // import variables
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var t: second {pub: in};
    var R_constriction_base: Js_per_m6 {pub: in};
    var R_constriction_final: Js_per_m6 {pub: in};
    var R_constriction: Js_per_m6 {pub: out};
    R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    var w_v_d: dimensionless {pub: out};
    // w_v   = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v = sel
      case v > 0{dimensionless}:
        1{dimensionless};
      case v < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    w_v_d = sel
      case v_d > 0{dimensionless}:
        1{dimensionless};
      case v_d < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    var H_down: dimensionless {init: H_global_L, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = (s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean)*(1{dimensionless}-blockage);
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v_d: dimensionless {pub: out};
    s_v_d = sel
      case abs(v_d) > v_eps:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v_d)*H_down;
    H_R_out = w_v_d*H_down;
    // var blockage: dimensionles {pub:out};
    var blockage: dimensionless {pub: out};
    // blockage = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+pow(R_constriction/1e5{Js_per_m6}, 8{dimensionless}));
    var R_constriction_blockage_threshold: Js_per_m6 {pub: in};
    blockage = sel
      case R_constriction < R_constriction_blockage_threshold:
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    var v_RBC: m3_per_s {pub: out};
    var v_d_RBC: m3_per_s {pub: out};
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-(1{dimensionless}-w_v_d)*blockage);
    // v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-w_v_d*blockage);
    v_RBC = 1.37{dimensionless}*v*(1{dimensionless}-blockage);
    v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-blockage);
    var RBC_volume: m3 {init: RBC_volume_init, pub: out};
    ode(RBC_volume, t) = v_RBC*RBC_volume_L-v_d_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    // //////////////
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+R_constriction;
    // var blockage: dimensionless {pub: out};
    // blockage = 1{dimensionless}/(1{dimensionless}+pow(R_constriction/50000{Js_per_m6}, 8{dimensionless}));
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    var v_d: m3_per_s {pub: out};
    var v_d_mm3_s: mm3_per_s {pub: out};
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp PP_pericyte_H_D_BS_RO as
    // import variables
    var v_downstream_RHS: m3_per_s {pub: in};
    var v_downstream_LHS: m3_per_s {pub: in};
    var v_downstream: m3_per_s {pub: out};
    v_downstream = w_v*v_downstream_RHS+(1{dimensionless}-w_v)*v_downstream_LHS;
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var t: second {pub: in};
    // var R_constriction_base: Js_per_m6 {pub: in};
    // var R_constriction_final: Js_per_m6 {pub: in};
    // var R_constriction: Js_per_m6 {pub: out};
    // R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    // var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var tau_base: second {pub: in};
    var gate: dimensionless {pub: out};
    var v_base: m3_per_s {init: v_base_init, pub: out};
    var v_base_init: m3_per_s {pub: in};
    gate = sel
      case t < t0:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    ode(v_base, t) = gate*(abs(v)-v_base)/tau_base;
    var mu_plasma: Js_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    // var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    // var w_v_d: dimensionless {pub: out};
    // w_v   = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v = sel
      case v > 0{dimensionless}:
        1{dimensionless};
      case v < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // /////compliance kept in new modules for compliance port mapping
    // for VV junction compliance determination
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    // w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    // w_v_d = sel
    //     case v_d > 0{dimensionless}:
    //         1{dimensionless};
    //     case v_d < 0{dimensionless}:
    //         0{dimensionless};
    //     otherwise:
    //         0.5{dimensionless};
    // endsel;
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    var H_down: dimensionless {init: H_global_L, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = (s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean)*(1{dimensionless}-stall);
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v: dimensionless {pub: out};
    s_v = sel
      case abs(v) > v_eps:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v)*H_down;
    H_R_out = w_v*H_down;
    // var blockage: dimensionles {pub:out};
    // var blockage: dimensionless {pub: out};
    // blockage = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+pow(R_constriction/1e5{Js_per_m6}, 8{dimensionless}));
    // var R_constriction_blockage_threshold: Js_per_m6 {pub: in};
    // blockage = sel
    //     case R_constriction < R_constriction_blockage_threshold:
    //         0{dimensionless};
    //     otherwise:
    //         1{dimensionless};
    // endsel;
    var v_RBC: m3_per_s {pub: out};
    var v_d_RBC: m3_per_s {pub: out};
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-(1{dimensionless}-w_v_d)*blockage);
    // v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-w_v_d*blockage);
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-blockage);
    // v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-blockage);
    v_RBC = 1.37{dimensionless}*v*(1{dimensionless}-stall);
    v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-stall);
    var RBC_volume: m3 {init: RBC_volume_init, pub: out};
    ode(RBC_volume, t) = v_RBC*RBC_volume_L-v_d_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    // //////////////
    // var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us;
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{per_m}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{per_m}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{per_m}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{dimensionless}*2{dimensionless}*r*1e6{per_m})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{dimensionless}*r*1e6{per_m}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{per_m}/(2{dimensionless}*r*1e6{per_m}-1.1{dimensionless}));
    var Re_stall: Js_per_m6 {pub: in};
    // 1e21 for stalled resistance
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+Re_stall*stall;
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u_in-u_out)/R;
    // var u: J_per_m3 {pub: out};
    // var u_mmHg: dimensionless {pub: out};
    // u_mmHg      = u/133.322{J_per_m3};
    // u           = q_C/C+u_ext;
    // ode(q_C, t) = v-v_d;
    var v_d: m3_per_s {pub: out};
    var v_d_mm3_s: mm3_per_s {pub: out};
    v_d_mm3_s = v_d/one_mm3;
    v_d = v;
    // ///////////////radius modulation////////////////////
    var r_m: metre {pub: out};
    // modulated radius
    r_m = alpha*r;
    var alpha: dimensionless {pub: out};
    alpha = 1{dimensionless}+(alpha_max-1{dimensionless})*K_deprived;
    // var alpha_target: dimensionless {pub:out};
    // alpha_target = 1{dimensionless}+(alpha_max-1{dimensionless})/(1{dimensionless}+pow(10{dimensionless}*abs(v_downstream)/(v_base+v_eps), 4{dimensionless}));
    // alpha_target=1{dimensionless}+(alpha_max-1{dimensionless})*q_deprived;
    // the number 10 above says when flow in the pericyte is 10% of baseline flowing state, is the midpoint and vessel starts dilating
    // var alpha_init: dimensionless { pub: in};
    var tau_K_deprived: second {pub: in};
    var alpha_max: dimensionless {pub: in};
    var alpha_min: dimensionless {pub: in};
    var BOSF_Bx: m3_per_s {pub: in};
    // branch-order_specific_flow
    var K_deprived: dimensionless {init: K_deprived_init, pub: out};
    var K_deprived_init: dimensionless {pub: in};
    // should be initilaized to 0 for alpha to start at 1
    var low_q: dimensionless {pub: out};
    var f_crit: dimensionless {pub: in};
    // critical fraction of flow to baseline flow where it is considered half deprived, e.g if 10 then 1/10=is ur flow i 10% of baseline flow you are cosnidered half deprived
    var n: dimensionless {pub: in};
    // controls steepness of function, at 8 its like a step wise function
    low_q = 1{dimensionless}/(1{dimensionless}+pow(f_crit*abs(v)/BOSF_Bx, n));
    // low_q              = 1{dimensionless}/(1{dimensionless}+pow(f_crit*abs(v)/v_base, n));
    ode(K_deprived, t) = (low_q-K_deprived)/tau_K_deprived;
    var r_stall: metre {pub: out};
    var r_stall_scale: dimensionless {pub: in};
    r_stall = r*r_stall_scale;
    var r_thresh: metre {pub: out};
    // r_thresh      = r_stall*(1{dimensionless}+r_fs*(1{dimensionless}-deformation_force));
    r_thresh = r_stall*(1{dimensionless}+fs*low_q);
    var Z_ref: dimensionless {pub: out};
    Z_ref = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{per_m}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{per_m}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{per_m}, 12{dimensionless}));
    var mu_45_ref: dimensionless {pub: out};
    mu_45_ref = 6{dimensionless}*exp(-0.085{dimensionless}*2{dimensionless}*r*1e6{per_m})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{dimensionless}*r*1e6{per_m}, 0.645{dimensionless}));
    var mu_ref: Js_per_m3 {pub: out};
    mu_ref = hem_dep_u_rel_ref*mu_plasma;
    var hem_dep_u_rel_ref: dimensionless {pub: out};
    hem_dep_u_rel_ref = 1{dimensionless}+(mu_45_ref-1{dimensionless})*sqr(2{dimensionless}*r*1e6{per_m}/(2{dimensionless}*r*1e6{per_m}-1.1{dimensionless}));
    var fs: dimensionless {pub: in};
    var stall_target: dimensionless {pub: out};
    var stall_memory: dimensionless {init: stall_init, pub: out};
    var stall_init: dimensionless {pub: in};
    var stall: dimensionless {pub: out};
    var tau_stall: second {pub: in};
    stall_target = sel
      case (t >= t0) and (r_m < r_thresh):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    ode(stall_memory, t) = (stall_target-stall_memory)/tau_stall;
    stall = sel
      case stall_memory > 0.5{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;
  // //////////////////////////////
  // ///////////////////////////////
  // ///////////////////////////////

  def comp VP_pericyte_H_D_BS_RO as
    // import variables
    var v_downstream: m3_per_s {pub: out};
    v_downstream = w_v*v_downstream_RHS+(1{dimensionless}-w_v)*v_in;
    var v_downstream_RHS: m3_per_s {pub: in};
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var t: second {pub: in};
    // var R_constriction_base: Js_per_m6 {pub: in};
    // var R_constriction_final: Js_per_m6 {pub: in};
    // var R_constriction: Js_per_m6 {pub: out};
    // R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    // var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var tau_base: second {pub: in};
    var gate: dimensionless {pub: out};
    var v_base: m3_per_s {init: v_base_init, pub: out};
    var v_base_init: m3_per_s {pub: in};
    gate = sel
      case t < t0:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // ode(v_base, t) = gate*(abs(v)-v_base)/tau_base;
    var mu_plasma: Js_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    // var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    // w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v = sel
      case v > 0{dimensionless}:
        1{dimensionless};
      case v < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    var H_down: dimensionless {init: H_global_L, pub: out};
    var H_down_target: dimensionless {pub: out};
    // H_down_target  = (s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean)*(1{dimensionless}-blockage);
    H_down_target = (s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean)*(1{dimensionless}-stall);
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v: dimensionless {pub: out};
    s_v = abs(v)/(abs(v)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v)*H_down;
    H_R_out = w_v*H_down;
    // var blockage: dimensionless {pub: out};
    // blockage = sel
    //     case R_constriction < R_constriction_blockage_threshold:
    //         0{dimensionless};
    //     otherwise:
    //         1{dimensionless};
    // endsel;
    // blockage = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+pow(R_constriction/1e5{Js_per_m6}, 8{dimensionless}));
    // var R_constriction_blockage_threshold: Js_per_m6 {pub: in};
    var v_in_RBC: m3_per_s {pub: out};
    var v_RBC: m3_per_s {pub: out};
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-(1{dimensionless}-w_v)*blockage);
    // v_in_RBC = 1.37{dimensionless}*v_in*(1{dimensionless}-w_d*blockage);
    // the above formulas are for if we wanna have the sections with the flow before the vlockage site to be unaffected by the blockage
    v_in_RBC = 1.3{dimensionless}*v_in*(1{dimensionless}-stall);
    v_RBC = 1.3{dimensionless}*v*(1{dimensionless}-stall);
    var RBC_volume: m3 {init: RBC_volume_init, pub: out};
    ode(RBC_volume, t) = v_in_RBC*RBC_volume_L-v_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    // //////////////
    // var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us;
    var C: m6_per_J {pub: out};
    // /////complaince kept for complaince port mapping for VV_junct complaince determination
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{per_m}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{per_m}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{per_m}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{dimensionless}*2{dimensionless}*r*1e6{per_m})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{dimensionless}*r*1e6{per_m}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{per_m}/(2{dimensionless}*r*1e6{per_m}-1.1{dimensionless}));
    var Re_stall: Js_per_m6 {pub: in};
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+Re_stall*stall;
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = v_in;
    var u: J_per_m3 {init: 133, pub: out};
    var u_mmHg: dimensionless {pub: out};
    var u_target: J_per_m3 {pub: out};
    var tau_u: second {pub: out};
    tau_u = R*C;
    u_mmHg = u/133.322{J_per_m3};
    u_target = v*R+u_out;
    ode(u, t) = (u_target-u)/tau_u;
    // ///////////////radius modulation////////////////////
    var r_m: metre {pub: out};
    // modulated radius
    r_m = alpha*r;
    var alpha: dimensionless {pub: out};
    alpha = 1{dimensionless}+(alpha_max-1{dimensionless})*K_deprived;
    // var alpha_target: dimensionless {pub:out};
    // alpha_target = 1{dimensionless}+(alpha_max-1{dimensionless})/(1{dimensionless}+pow(10{dimensionless}*abs(v_downstream)/(v_base+v_eps), 4{dimensionless}));
    // alpha_target=1{dimensionless}+(alpha_max-1{dimensionless})*q_deprived;
    // the number 10 above says when flow in the pericyte is 10% of baseline flowing state, is the midpoint and vessel starts dilating
    // var alpha_init: dimensionless { pub: in};
    var tau_K_deprived: second {pub: in};
    var alpha_max: dimensionless {pub: in};
    var alpha_min: dimensionless {pub: in};
    var BOSF_Bx: m3_per_s {pub: in};
    // branch-order_specific_flow
    var K_deprived: dimensionless {init: K_deprived_init, pub: out};
    var K_deprived_init: dimensionless {pub: in};
    // should be initilaized to 0 for alpha to start at 1
    var low_q: dimensionless {pub: out};
    var f_crit: dimensionless {pub: in};
    // critical fraction of flow to baseline flow where it is considered half deprived, e.g if 10 then 1/10=is ur flow i 10% of baseline flow you are cosnidered half deprived
    var n: dimensionless {pub: in};
    // controls steepness of function, at 8 its like a step wise function
    low_q = 1{dimensionless}/(1{dimensionless}+pow(f_crit*abs(v)/BOSF_Bx, n));
    // low_q              = 1{dimensionless}/(1{dimensionless}+pow(f_crit*abs(v)/v_base, n));
    ode(K_deprived, t) = (low_q-K_deprived)/tau_K_deprived;
    var r_stall: metre {pub: out};
    var r_stall_scale: dimensionless {pub: in};
    r_stall = r*r_stall_scale;
    var r_thresh: metre {pub: out};
    // r_thresh      = r_stall*(1{dimensionless}+r_fs*(1{dimensionless}-deformation_force));
    r_thresh = r_stall*(1{dimensionless}+fs*low_q);
    var Z_ref: dimensionless {pub: out};
    Z_ref = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{per_m}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{per_m}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{per_m}, 12{dimensionless}));
    var mu_45_ref: dimensionless {pub: out};
    mu_45_ref = 6{dimensionless}*exp(-0.085{dimensionless}*2{dimensionless}*r*1e6{per_m})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{dimensionless}*r*1e6{per_m}, 0.645{dimensionless}));
    var mu_ref: Js_per_m3 {pub: out};
    mu_ref = hem_dep_u_rel_ref*mu_plasma;
    var hem_dep_u_rel_ref: dimensionless {pub: out};
    hem_dep_u_rel_ref = 1{dimensionless}+(mu_45_ref-1{dimensionless})*sqr(2{dimensionless}*r*1e6{per_m}/(2{dimensionless}*r*1e6{per_m}-1.1{dimensionless}));
    var fs: dimensionless {pub: in};
    var stall_target: dimensionless {pub: out};
    var stall_memory: dimensionless {init: stall_init, pub: out};
    var stall_init: dimensionless {pub: in};
    var stall: dimensionless {pub: out};
    var tau_stall: second {pub: in};
    stall_target = sel
      case (t >= t0) and (r_m < r_thresh):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    ode(stall_memory, t) = (stall_target-stall_memory)/tau_stall;
    stall = sel
      case stall_memory > 0.5{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;

  def comp VP_capillary_H_D as
    // import variables
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    var H_down: dimensionless {init: H_global_L, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v: dimensionless {pub: out};
    s_v = abs(v)/(abs(v)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v)*H_down;
    H_R_out = w_v*H_down;
    var v_in_RBC: m3_per_s {pub: out};
    var v_RBC: m3_per_s {pub: out};
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-(1{dimensionless}-w_v)*blockage);
    // v_in_RBC = 1.37{dimensionless}*v_in*(1{dimensionless}-w_d*blockage);
    // the above formulas are for if we wanna have the sections with the flow before the vlockage site to be unaffected by the blockage
    v_in_RBC = 1.3{dimensionless}*v_in;
    v_RBC = 1.3{dimensionless}*v;
    var RBC_volume: m3 {init: RBC_volume_init, pub: out};
    ode(RBC_volume, t) = v_in_RBC*RBC_volume_L-v_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    // //////////////
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;

  def comp VP_pericyte_H_D as
    // import variables
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var t: second {pub: in};
    var R_constriction_base: Js_per_m6 {pub: in};
    var R_constriction_final: Js_per_m6 {pub: in};
    var R_constriction: Js_per_m6 {pub: out};
    R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    // w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v = sel
      case v > 0{dimensionless}:
        1{dimensionless};
      case v < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    var H_down: dimensionless {init: H_global_L, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = (s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean)*(1{dimensionless}-blockage);
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v: dimensionless {pub: out};
    s_v = abs(v)/(abs(v)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v)*H_down;
    H_R_out = w_v*H_down;
    var blockage: dimensionless {pub: out};
    blockage = sel
      case R_constriction < R_constriction_blockage_threshold:
        0{dimensionless};
      otherwise:
        1{dimensionless};
    endsel;
    // blockage = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+pow(R_constriction/1e5{Js_per_m6}, 8{dimensionless}));
    var R_constriction_blockage_threshold: Js_per_m6 {pub: in};
    var v_in_RBC: m3_per_s {pub: out};
    var v_RBC: m3_per_s {pub: out};
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-(1{dimensionless}-w_v)*blockage);
    // v_in_RBC = 1.37{dimensionless}*v_in*(1{dimensionless}-w_d*blockage);
    // the above formulas are for if we wanna have the sections with the flow before the vlockage site to be unaffected by the blockage
    v_in_RBC = 1.3{dimensionless}*v_in*(1{dimensionless}-blockage);
    v_RBC = 1.3{dimensionless}*v*(1{dimensionless}-blockage);
    var RBC_volume: m3 {init: RBC_volume_init, pub: out};
    ode(RBC_volume, t) = v_in_RBC*RBC_volume_L-v_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    // //////////////
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+R_constriction;
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;

  def comp VV_junction_H_D as
    var div_0: dimensionless {pub: in};
    var div_0y: dimensionless {pub: in};
    var v_threshold: m3_per_s {pub: in};
    var k: dimensionless {pub: in};
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var q_C_init: m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    // ///////////////////////vessel mapping coupling module/////////////////////
    var vbc1: m3_per_s {pub: in};
    var vbc2: m3_per_s {pub: in};
    var vbc3: m3_per_s {pub: in};
    var vbc4: m3_per_s {pub: in};
    var vj1: m3_per_s {pub: out};
    var vj2: m3_per_s {pub: out};
    var vj3: m3_per_s {pub: out};
    var vj4: m3_per_s {pub: out};
    vj1 = vbc1;
    vj2 = vbc2;
    vj3 = -vbc3;
    vj4 = -vbc4;
    // ////////////Hematocrit to port (vessel to junction) mapping////////////
    var H_to1: dimensionless {pub: in};
    var H_to2: dimensionless {pub: in};
    var H_to3: dimensionless {pub: in};
    var H_to4: dimensionless {pub: in};
    // EXAMPLES — replace these with your actual port hematocrits:H_to1 = H_R_out_VP1;
    var H_split1: dimensionless {pub: out};
    var H_split2: dimensionless {pub: out};
    var H_split3: dimensionless {pub: out};
    var H_split4: dimensionless {pub: out};
    H_split1 = sel
      case alpha1 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta1 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to1;
    endsel;
    // not a split-daughter => unchanged
    H_split2 = sel
      case alpha2 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta2 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to2;
    endsel;
    H_split3 = sel
      case alpha3 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta3 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to3;
    endsel;
    H_split4 = sel
      case alpha4 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta4 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to4;
    endsel;
    var H_daughter1: dimensionless {pub: out};
    var H_daughter2: dimensionless {pub: out};
    var H_daughter3: dimensionless {pub: out};
    var H_daughter4: dimensionless {pub: out};
    H_daughter1 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split1;
      otherwise:
        H_to1;
    endsel;
    H_daughter2 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split2;
      otherwise:
        H_to2;
    endsel;
    H_daughter3 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split3;
      otherwise:
        H_to3;
    endsel;
    H_daughter4 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split4;
      otherwise:
        H_to4;
    endsel;
    // ---------- H_from*_target: if daughter -> H_daughter*, else unchanged ----------
    var H_from1_target: dimensionless {pub: out};
    var H_from2_target: dimensionless {pub: out};
    var H_from3_target: dimensionless {pub: out};
    var H_from4_target: dimensionless {pub: out};
    H_from1_target = sel
      case bc1_is_out == 1{dimensionless}:
        H_daughter1;
      otherwise:
        H_to1;
    endsel;
    H_from2_target = sel
      case bc2_is_out == 1{dimensionless}:
        H_daughter2;
      otherwise:
        H_to2;
    endsel;
    H_from3_target = sel
      case bc3_is_out == 1{dimensionless}:
        H_daughter3;
      otherwise:
        H_to3;
    endsel;
    H_from4_target = sel
      case bc4_is_out == 1{dimensionless}:
        H_daughter4;
      otherwise:
        H_to4;
    endsel;
    var H_from1: dimensionless {pub: out};
    var H_from2: dimensionless {pub: out};
    var H_from3: dimensionless {pub: out};
    var H_from4: dimensionless {pub: out};
    // When w_out ~ 0 (not a daughter), derivative ~0 => holds last daughter value.
    // ode(H_from1, t) = w_out1*(H_from1_target-H_from1)/tau_junc;
    H_from1 = w_out1*H_from1_target;
    H_from2 = w_out2*H_from2_target;
    H_from3 = w_out3*H_from3_target;
    H_from4 = w_out4*H_from4_target;
    // ode(H_from2, t) = w_out2*(H_from2_target-H_from2)/tau_junc;
    // ode(H_from3, t) = w_out3*(H_from3_target-H_from3)/tau_junc;
    // ode(H_from4, t) = w_out4*(H_from4_target-H_from4)/tau_junc;
    var r_bc1: metre {pub: in};
    // diameter of vessel at port 1 (junction side)
    var r_bc2: metre {pub: in};
    // diameter of vessel at port 2
    var r_bc3: metre {pub: in};
    // diameter of vessel at port 3
    var r_bc4: metre {pub: in};
    var D1: metre {pub: out};
    // diameter of vessel at port 1 (junction side)
    var D2: metre {pub: out};
    // diameter of vessel at port 2
    var D3: metre {pub: out};
    // diameter of vessel at port 3
    var D4: metre {pub: out};
    D1 = 2{dimensionless}*r_bc1;
    // <-- port1 attached vessel diameter (example: parent VV side)
    D2 = 2{dimensionless}*r_bc2;
    // <-- port2 (if unused, still define)
    D3 = 2{dimensionless}*r_bc3;
    // <-- port3 daughter candidate
    D4 = 2{dimensionless}*r_bc4;
    var w_in1: dimensionless {pub: out};
    var w_in2: dimensionless {pub: out};
    var w_in3: dimensionless {pub: out};
    var w_in4: dimensionless {pub: out};
    // 1 when vj is positive, 0 when vj is 0
    w_in1 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj1/v_scale);
    w_in2 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj2/v_scale);
    w_in3 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj3/v_scale);
    w_in4 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj4/v_scale);
    var w_out1: dimensionless {pub: out};
    var w_out2: dimensionless {pub: out};
    var w_out3: dimensionless {pub: out};
    var w_out4: dimensionless {pub: out};
    w_out1 = 1{dimensionless}-w_in1;
    // ~1 if vj1<0
    w_out2 = 1{dimensionless}-w_in2;
    w_out3 = 1{dimensionless}-w_in3;
    w_out4 = 1{dimensionless}-w_in4;
    var Qin1: m3_per_s {pub: out};
    var Qin2: m3_per_s {pub: out};
    var Qin3: m3_per_s {pub: out};
    var Qin4: m3_per_s {pub: out};
    var Qout1: m3_per_s {pub: out};
    var Qout2: m3_per_s {pub: out};
    var Qout3: m3_per_s {pub: out};
    var Qout4: m3_per_s {pub: out};
    // absolute flow into the junction
    Qin1 = w_in1*vj1;
    Qin2 = w_in2*vj2;
    Qin3 = w_in3*vj3;
    Qin4 = w_in4*vj4;
    // absolute (magnitude) of flow out of the junction
    Qout1 = w_out1*(-vj1);
    Qout2 = w_out2*(-vj2);
    Qout3 = w_out3*(-vj3);
    Qout4 = w_out4*(-vj4);
    var Qin_tot: m3_per_s {pub: out};
    var Qout_tot: m3_per_s {pub: out};
    Qin_tot = Qin1+Qin2+Qin3+Qin4;
    Qout_tot = Qout1+Qout2+Qout3+Qout4;
    var bc1_is_in: dimensionless {pub: out};
    var bc2_is_in: dimensionless {pub: out};
    var bc3_is_in: dimensionless {pub: out};
    var bc4_is_in: dimensionless {pub: out};
    var bc1_is_out: dimensionless {pub: out};
    var bc2_is_out: dimensionless {pub: out};
    var bc3_is_out: dimensionless {pub: out};
    var bc4_is_out: dimensionless {pub: out};
    bc1_is_in = sel
      case Qin1 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc2_is_in = sel
      case Qin2 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc3_is_in = sel
      case Qin3 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc4_is_in = sel
      case Qin4 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc1_is_out = sel
      case Qout1 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc2_is_out = sel
      case Qout2 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc3_is_out = sel
      case Qout3 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc4_is_out = sel
      case Qout4 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var n_in: dimensionless {pub: out};
    var n_out: dimensionless {pub: out};
    n_in = bc1_is_in+bc2_is_in+bc3_is_in+bc4_is_in;
    n_out = bc1_is_out+bc2_is_out+bc3_is_out+bc4_is_out;
    // junction_type: +1 split (1 feeder), -1 merge (>=2 feeders), 0 other/degenerate
    var junction_type: dimensionless {pub: out};
    junction_type = sel
      case n_in == 1{dimensionless}:
        1{dimensionless};
      case n_in >= 2{dimensionless}:
        -1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // --- junction mode flags derived from your junction_type ---
    var is_split: dimensionless {pub: out};
    var is_merge: dimensionless {pub: out};
    is_split = sel
      case junction_type == 1{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    is_merge = sel
      case junction_type == -1{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // ---------- pick FEED port in split: the largest Qin (ties broken 1->2->3->4) ----------
    var feed1: dimensionless {pub: out};
    var feed2: dimensionless {pub: out};
    var feed3: dimensionless {pub: out};
    var feed4: dimensionless {pub: out};
    feed1 = sel
      case (is_split == 1{dimensionless}) and (Qin1 >= Qin2) and (Qin1 >= Qin3) and (Qin1 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed2 = sel
      case (is_split == 1{dimensionless}) and (Qin2 > Qin1) and (Qin2 >= Qin3) and (Qin2 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed3 = sel
      case (is_split == 1{dimensionless}) and (Qin3 > Qin1) and (Qin3 > Qin2) and (Qin3 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed4 = sel
      case (is_split == 1{dimensionless}) and (Qin4 > Qin1) and (Qin4 > Qin2) and (Qin4 > Qin3):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // ---------- alpha = daughter port with biggest Qout (ties 1->2->3->4) ----------
    var alpha1: dimensionless {pub: out};
    var alpha2: dimensionless {pub: out};
    var alpha3: dimensionless {pub: out};
    var alpha4: dimensionless {pub: out};
    // alpha1 if port1 is a daughter AND has >= Qout than others
    alpha1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (Qout1 >= Qout2) and (Qout1 >= Qout3) and (Qout1 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // alpha2 only if not alpha1 (tie-break) and port2 is a daughter and beats remaining
    alpha2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (Qout2 > Qout1) and (Qout2 >= Qout3) and (Qout2 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    alpha3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (Qout3 > Qout1) and (Qout3 > Qout2) and (Qout3 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    alpha4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (Qout4 > Qout1) and (Qout4 > Qout2) and (Qout4 > Qout3):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var beta1: dimensionless {pub: out};
    var beta2: dimensionless {pub: out};
    var beta3: dimensionless {pub: out};
    var beta4: dimensionless {pub: out};
    // beta among remaining daughters (ties 1->2->3->4), must be a daughter
    beta1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (alpha1 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (alpha2 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (alpha3 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (alpha4 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var D_F: metre {pub: out};
    D_F = sel
      case feed1 == 1{dimensionless}:
        D1;
      case feed2 == 1{dimensionless}:
        D2;
      case feed3 == 1{dimensionless}:
        D3;
      case feed4 == 1{dimensionless}:
        D4;
      otherwise:
        D1;
    endsel;
    // ---------- D_alpha from which ALPHA port? ----------
    var D_alpha: metre {pub: out};
    D_alpha = sel
      case alpha1 == 1{dimensionless}:
        D1;
      case alpha2 == 1{dimensionless}:
        D2;
      case alpha3 == 1{dimensionless}:
        D3;
      case alpha4 == 1{dimensionless}:
        D4;
      otherwise:
        D3;
    endsel;
    // ---------- D_beta from which BETA port? ----------
    var D_beta: metre {pub: out};
    D_beta = sel
      case beta1 == 1{dimensionless}:
        D1;
      case beta2 == 1{dimensionless}:
        D2;
      case beta3 == 1{dimensionless}:
        D3;
      case beta4 == 1{dimensionless}:
        D4;
      otherwise:
        D4;
    endsel;
    // ---------- daughter outflow magnitudes for alpha/beta ----------
    var v_alpha: m3_per_s {pub: out};
    var v_beta: m3_per_s {pub: out};
    v_alpha = sel
      case alpha1 == 1{dimensionless}:
        Qout1;
      case alpha2 == 1{dimensionless}:
        Qout2;
      case alpha3 == 1{dimensionless}:
        Qout3;
      case alpha4 == 1{dimensionless}:
        Qout4;
      otherwise:
        0{m3_per_s};
    endsel;
    v_beta = sel
      case beta1 == 1{dimensionless}:
        Qout1;
      case beta2 == 1{dimensionless}:
        Qout2;
      case beta3 == 1{dimensionless}:
        Qout3;
      case beta4 == 1{dimensionless}:
        Qout4;
      otherwise:
        0{m3_per_s};
    endsel;
    var FQB_alpha: dimensionless {pub: out};
    FQB_alpha = (v_alpha+div_0)/(v_alpha+v_beta+2{dimensionless}*div_0);
    var FQE_alpha: dimensionless {pub: out};
    FQE_alpha = 1{dimensionless}/(1{dimensionless}+exp(-(A+B*ph)));
    var B: dimensionless {pub: out};
    B = 1{dimensionless}+6.98{dimensionless}*(1{dimensionless}-H_mean)/(D_F*1e6{dimensionless});
    var A: dimensionless {pub: out};
    A = -6.96{dimensionless}*ln(D_alpha*1e6{dimensionless}/(D_beta*1e6{dimensionless}))/(D_F*1e6{dimensionless});
    var X_0: dimensionless {pub: out};
    X_0 = 0.4{dimensionless}/(D_F*1e6{dimensionless});
    var ph: dimensionless {pub: out};
    ph = ln(y/(1{dimensionless}-y));
    var y_raw: dimensionless {pub: out};
    y_raw = (FQB_alpha-X_0)/(1{dimensionless}-2{dimensionless}*X_0+div_0);
    var y: dimensionless {pub: out};
    y = min(max(y_raw, div_0y), 1{dimensionless}-div_0y);
    // var epsilon_alpha: dimensionless {pub: out};
    // epsilon_alpha = H_VV_out_alpha-H_mean*FQE_alpha/(FQB_alpha+div_0);
    var H_VV_out_alpha: dimensionless {pub: out};
    H_VV_out_alpha = H_mean*FQE_alpha/(FQB_alpha+div_0);
    // ode(H_VV_out_alpha, t) = is_split*-k*epsilon_alpha;
    var H_VV_out_beta: dimensionless {pub: out};
    H_VV_out_beta = H_mean*(1{dimensionless}-FQE_alpha)/(1{dimensionless}-FQB_alpha+div_0);
    // ////////////////////////////////VV_BG////////////////////////////////
    // ////////////////////////////////////////////
    var RBC_in: m3_per_s {pub: out};
    RBC_in = Qin1*H_to1+Qin2*H_to2+Qin3*H_to3+Qin4*H_to4;
    var RBC_out: m3_per_s {pub: out};
    RBC_out = Qout1*H_from1+Qout2*H_from2+Qout3*H_from3+Qout4*H_from4;
    // --- stored RBC volume inside VV1 ---
    var RBC_volume_init: m3 {pub: out};
    var RBC_volume: m3 {init: RBC_volume_init, pub: out};
    RBC_volume_init = H_global_L*q_us;
    // mass balance
    ode(RBC_volume, t) = RBC_in-RBC_out;
    // --- mean VV1 hematocrit (concentration) ---
    var H_mean: dimensionless {pub: out};
    H_mean = RBC_volume/(q_us+div_0);
    // /////////////////////////////setting junctional compliance to greatest compliance of the vessels connected to it
    var C_conn1: m6_per_J {pub: in};
    var C_conn2: m6_per_J {pub: in};
    var C_conn3: m6_per_J {pub: in};
    var C_conn4: m6_per_J {pub: in};
    var C_max12: m6_per_J {pub: out};
    var C_max123: m6_per_J {pub: out};
    var C: m6_per_J {pub: out};
    C_max12 = sel
      case C_conn1 > C_conn2:
        C_conn1;
      case C_conn1 <= C_conn2:
        C_conn2;
    endsel;
    C_max123 = sel
      case C_max12 > C_conn3:
        C_max12;
      case C_max12 <= C_conn3:
        C_conn3;
    endsel;
    C = sel
      case C_max123 > C_conn4:
        C_max123;
      case C_max123 <= C_conn4:
        C_conn4;
    endsel;
    var q_C: m3 {init: q_C_init, pub: out};
    var q_C_d: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C+q_C_d;
    var R_VV_junc: Js_per_m6 {pub: in};
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    var u_d: J_per_m3 {pub: out};
    var u_d_mmHg: dimensionless {pub: out};
    //  Conservation Laws
    // question?????????? whether ode (q_c and q_C_d) should be vbc1-4 or vj1-4
    u = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C, t) = vbc1+vbc2-v;
    u_mmHg = u/133.322{J_per_m3};
    v = (u-u_d)/R_VV_junc;
    u_d = q_C_d/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-vbc3-vbc4;
    u_d_mmHg = u_d/133.322{J_per_m3};
  enddef;

  def comp VV_junction_H_D_I as
    var div_0: dimensionless {pub: in};
    var div_0y: dimensionless {pub: in};
    var v_threshold: m3_per_s {pub: in};
    var k: dimensionless {pub: in};
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var q_C_init: m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    // ///////////////////////vessel mapping coupling module/////////////////////
    var vbc1: m3_per_s {pub: in};
    var vbc2: m3_per_s {pub: in};
    var vbc3: m3_per_s {pub: in};
    var vbc4: m3_per_s {pub: in};
    var vj1: m3_per_s {pub: out};
    var vj2: m3_per_s {pub: out};
    var vj3: m3_per_s {pub: out};
    var vj4: m3_per_s {pub: out};
    vj1 = vbc1;
    vj2 = vbc2;
    vj3 = -vbc3;
    vj4 = -vbc4;
    // ////////////Hematocrit to port (vessel to junction) mapping////////////
    var H_to1: dimensionless {pub: in};
    var H_to2: dimensionless {pub: in};
    var H_to3: dimensionless {pub: in};
    var H_to4: dimensionless {pub: in};
    // EXAMPLES — replace these with your actual port hematocrits:H_to1 = H_R_out_VP1;
    var H_split1: dimensionless {pub: out};
    var H_split2: dimensionless {pub: out};
    var H_split3: dimensionless {pub: out};
    var H_split4: dimensionless {pub: out};
    H_split1 = sel
      case alpha1 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta1 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to1;
    endsel;
    // not a split-daughter => unchanged
    H_split2 = sel
      case alpha2 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta2 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to2;
    endsel;
    H_split3 = sel
      case alpha3 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta3 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to3;
    endsel;
    H_split4 = sel
      case alpha4 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta4 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to4;
    endsel;
    var H_daughter1: dimensionless {pub: out};
    var H_daughter2: dimensionless {pub: out};
    var H_daughter3: dimensionless {pub: out};
    var H_daughter4: dimensionless {pub: out};
    H_daughter1 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split1;
      otherwise:
        H_to1;
    endsel;
    H_daughter2 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split2;
      otherwise:
        H_to2;
    endsel;
    H_daughter3 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split3;
      otherwise:
        H_to3;
    endsel;
    H_daughter4 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split4;
      otherwise:
        H_to4;
    endsel;
    // ---------- H_from*_target: if daughter -> H_daughter*, else unchanged ----------
    var H_from1_target: dimensionless {pub: out};
    var H_from2_target: dimensionless {pub: out};
    var H_from3_target: dimensionless {pub: out};
    var H_from4_target: dimensionless {pub: out};
    H_from1_target = sel
      case bc1_is_out == 1{dimensionless}:
        H_daughter1;
      otherwise:
        H_to1;
    endsel;
    H_from2_target = sel
      case bc2_is_out == 1{dimensionless}:
        H_daughter2;
      otherwise:
        H_to2;
    endsel;
    H_from3_target = sel
      case bc3_is_out == 1{dimensionless}:
        H_daughter3;
      otherwise:
        H_to3;
    endsel;
    H_from4_target = sel
      case bc4_is_out == 1{dimensionless}:
        H_daughter4;
      otherwise:
        H_to4;
    endsel;
    var H_from1: dimensionless {pub: out};
    var H_from2: dimensionless {pub: out};
    var H_from3: dimensionless {pub: out};
    var H_from4: dimensionless {pub: out};
    // When w_out ~ 0 (not a daughter), derivative ~0 => holds last daughter value.
    H_from1 = w_out1*H_from1_target;
    H_from2 = w_out2*H_from2_target;
    H_from3 = w_out3*H_from3_target;
    H_from4 = w_out4*H_from4_target;
    // ode(H_from1, t) = w_out1*(H_from1_target-H_from1)/tau_junc;
    // ode(H_from2, t) = w_out2*(H_from2_target-H_from2)/tau_junc;
    // ode(H_from3, t) = w_out3*(H_from3_target-H_from3)/tau_junc;
    // ode(H_from4, t) = w_out4*(H_from4_target-H_from4)/tau_junc;
    var r_bc1: metre {pub: in};
    // diameter of vessel at port 1 (junction side)
    var r_bc2: metre {pub: in};
    // diameter of vessel at port 2
    var r_bc3: metre {pub: in};
    // diameter of vessel at port 3
    var r_bc4: metre {pub: in};
    var D1: metre {pub: out};
    // diameter of vessel at port 1 (junction side)
    var D2: metre {pub: out};
    // diameter of vessel at port 2
    var D3: metre {pub: out};
    // diameter of vessel at port 3
    var D4: metre {pub: out};
    D1 = 2{dimensionless}*r_bc1;
    // <-- port1 attached vessel diameter (example: parent VV side)
    D2 = 2{dimensionless}*r_bc2;
    // <-- port2 (if unused, still define)
    D3 = 2{dimensionless}*r_bc3;
    // <-- port3 daughter candidate
    D4 = 2{dimensionless}*r_bc4;
    var w_in1: dimensionless {pub: out};
    var w_in2: dimensionless {pub: out};
    var w_in3: dimensionless {pub: out};
    var w_in4: dimensionless {pub: out};
    // 1 when vj is positive, 0 when vj is 0
    w_in1 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj1/v_scale);
    w_in2 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj2/v_scale);
    w_in3 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj3/v_scale);
    w_in4 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj4/v_scale);
    var w_out1: dimensionless {pub: out};
    var w_out2: dimensionless {pub: out};
    var w_out3: dimensionless {pub: out};
    var w_out4: dimensionless {pub: out};
    w_out1 = 1{dimensionless}-w_in1;
    // ~1 if vj1<0
    w_out2 = 1{dimensionless}-w_in2;
    w_out3 = 1{dimensionless}-w_in3;
    w_out4 = 1{dimensionless}-w_in4;
    var Qin1: m3_per_s {pub: out};
    var Qin2: m3_per_s {pub: out};
    var Qin3: m3_per_s {pub: out};
    var Qin4: m3_per_s {pub: out};
    var Qout1: m3_per_s {pub: out};
    var Qout2: m3_per_s {pub: out};
    var Qout3: m3_per_s {pub: out};
    var Qout4: m3_per_s {pub: out};
    // absolute flow into the junction
    Qin1 = w_in1*vj1;
    Qin2 = w_in2*vj2;
    Qin3 = w_in3*vj3;
    Qin4 = w_in4*vj4;
    // absolute (magnitude) of flow out of the junction
    Qout1 = w_out1*(-vj1);
    Qout2 = w_out2*(-vj2);
    Qout3 = w_out3*(-vj3);
    Qout4 = w_out4*(-vj4);
    var Qin_tot: m3_per_s {pub: out};
    var Qout_tot: m3_per_s {pub: out};
    Qin_tot = Qin1+Qin2+Qin3+Qin4;
    Qout_tot = Qout1+Qout2+Qout3+Qout4;
    var bc1_is_in: dimensionless {pub: out};
    var bc2_is_in: dimensionless {pub: out};
    var bc3_is_in: dimensionless {pub: out};
    var bc4_is_in: dimensionless {pub: out};
    var bc1_is_out: dimensionless {pub: out};
    var bc2_is_out: dimensionless {pub: out};
    var bc3_is_out: dimensionless {pub: out};
    var bc4_is_out: dimensionless {pub: out};
    bc1_is_in = sel
      case Qin1 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc2_is_in = sel
      case Qin2 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc3_is_in = sel
      case Qin3 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc4_is_in = sel
      case Qin4 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc1_is_out = sel
      case Qout1 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc2_is_out = sel
      case Qout2 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc3_is_out = sel
      case Qout3 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc4_is_out = sel
      case Qout4 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var n_in: dimensionless {pub: out};
    var n_out: dimensionless {pub: out};
    n_in = bc1_is_in+bc2_is_in+bc3_is_in+bc4_is_in;
    n_out = bc1_is_out+bc2_is_out+bc3_is_out+bc4_is_out;
    // junction_type: +1 split (1 feeder), -1 merge (>=2 feeders), 0 other/degenerate
    var junction_type: dimensionless {pub: out};
    junction_type = sel
      case n_in == 1{dimensionless}:
        1{dimensionless};
      case n_in >= 2{dimensionless}:
        -1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // --- junction mode flags derived from your junction_type ---
    var is_split: dimensionless {pub: out};
    var is_merge: dimensionless {pub: out};
    is_split = sel
      case junction_type == 1{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    is_merge = sel
      case junction_type == -1{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // ---------- pick FEED port in split: the largest Qin (ties broken 1->2->3->4) ----------
    var feed1: dimensionless {pub: out};
    var feed2: dimensionless {pub: out};
    var feed3: dimensionless {pub: out};
    var feed4: dimensionless {pub: out};
    feed1 = sel
      case (is_split == 1{dimensionless}) and (Qin1 >= Qin2) and (Qin1 >= Qin3) and (Qin1 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed2 = sel
      case (is_split == 1{dimensionless}) and (Qin2 > Qin1) and (Qin2 >= Qin3) and (Qin2 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed3 = sel
      case (is_split == 1{dimensionless}) and (Qin3 > Qin1) and (Qin3 > Qin2) and (Qin3 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed4 = sel
      case (is_split == 1{dimensionless}) and (Qin4 > Qin1) and (Qin4 > Qin2) and (Qin4 > Qin3):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // ---------- alpha = daughter port with biggest Qout (ties 1->2->3->4) ----------
    var alpha1: dimensionless {pub: out};
    var alpha2: dimensionless {pub: out};
    var alpha3: dimensionless {pub: out};
    var alpha4: dimensionless {pub: out};
    // alpha1 if port1 is a daughter AND has >= Qout than others
    alpha1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (Qout1 >= Qout2) and (Qout1 >= Qout3) and (Qout1 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // alpha2 only if not alpha1 (tie-break) and port2 is a daughter and beats remaining
    alpha2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (Qout2 > Qout1) and (Qout2 >= Qout3) and (Qout2 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    alpha3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (Qout3 > Qout1) and (Qout3 > Qout2) and (Qout3 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    alpha4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (Qout4 > Qout1) and (Qout4 > Qout2) and (Qout4 > Qout3):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var Qout1_rem: m3_per_s {pub: out};
    var Qout2_rem: m3_per_s {pub: out};
    var Qout3_rem: m3_per_s {pub: out};
    var Qout4_rem: m3_per_s {pub: out};
    // if this port is alpha, remove it by setting to 0; else keep Qout
    Qout1_rem = sel
      case alpha1 == 1{dimensionless}:
        0{m3_per_s};
      otherwise:
        Qout1;
    endsel;
    Qout2_rem = sel
      case alpha2 == 1{dimensionless}:
        0{m3_per_s};
      otherwise:
        Qout2;
    endsel;
    Qout3_rem = sel
      case alpha3 == 1{dimensionless}:
        0{m3_per_s};
      otherwise:
        Qout3;
    endsel;
    Qout4_rem = sel
      case alpha4 == 1{dimensionless}:
        0{m3_per_s};
      otherwise:
        Qout4;
    endsel;
    var beta1: dimensionless {pub: out};
    var beta2: dimensionless {pub: out};
    var beta3: dimensionless {pub: out};
    var beta4: dimensionless {pub: out};
    // beta among remaining daughters (ties 1->2->3->4), must be a daughter
    beta1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (alpha1 == 0{dimensionless}) and (Qout1_rem >= Qout2_rem) and (Qout1_rem >= Qout3_rem) and (Qout1_rem >= Qout4_rem):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (alpha2 == 0{dimensionless}) and (Qout2_rem > Qout1_rem) and (Qout2_rem >= Qout3_rem) and (Qout2_rem >= Qout4_rem):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (alpha3 == 0{dimensionless}) and (Qout3_rem > Qout1_rem) and (Qout3_rem > Qout2_rem) and (Qout3_rem >= Qout4_rem):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (alpha4 == 0{dimensionless}) and (Qout4_rem > Qout1_rem) and (Qout4_rem > Qout2_rem) and (Qout4_rem > Qout3_rem):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var D_F: metre {pub: out};
    D_F = sel
      case feed1 == 1{dimensionless}:
        D1;
      case feed2 == 1{dimensionless}:
        D2;
      case feed3 == 1{dimensionless}:
        D3;
      case feed4 == 1{dimensionless}:
        D4;
      otherwise:
        D1;
    endsel;
    // ---------- D_alpha from which ALPHA port? ----------
    var D_alpha: metre {pub: out};
    D_alpha = sel
      case alpha1 == 1{dimensionless}:
        D1;
      case alpha2 == 1{dimensionless}:
        D2;
      case alpha3 == 1{dimensionless}:
        D3;
      case alpha4 == 1{dimensionless}:
        D4;
      otherwise:
        D3;
    endsel;
    // ---------- D_beta from which BETA port? ----------
    var D_beta: metre {pub: out};
    D_beta = sel
      case beta1 == 1{dimensionless}:
        D1;
      case beta2 == 1{dimensionless}:
        D2;
      case beta3 == 1{dimensionless}:
        D3;
      case beta4 == 1{dimensionless}:
        D4;
      otherwise:
        D4;
    endsel;
    // ---------- daughter outflow magnitudes for alpha/beta ----------
    var v_alpha: m3_per_s {pub: out};
    var v_beta: m3_per_s {pub: out};
    v_alpha = sel
      case alpha1 == 1{dimensionless}:
        Qout1;
      case alpha2 == 1{dimensionless}:
        Qout2;
      case alpha3 == 1{dimensionless}:
        Qout3;
      case alpha4 == 1{dimensionless}:
        Qout4;
      otherwise:
        0{m3_per_s};
    endsel;
    v_beta = sel
      case beta1 == 1{dimensionless}:
        Qout1;
      case beta2 == 1{dimensionless}:
        Qout2;
      case beta3 == 1{dimensionless}:
        Qout3;
      case beta4 == 1{dimensionless}:
        Qout4;
      otherwise:
        0{m3_per_s};
    endsel;
    var FQB_alpha: dimensionless {pub: out};
    FQB_alpha = (v_alpha+div_0)/(v_alpha+v_beta+2{dimensionless}*div_0);
    var FQE_alpha: dimensionless {pub: out};
    FQE_alpha = 1{dimensionless}/(1{dimensionless}+exp(-(A+B*ph)));
    var B: dimensionless {pub: out};
    B = 1{dimensionless}+6.98{dimensionless}*(1{dimensionless}-H_mean)/(D_F*1e6{dimensionless});
    var A: dimensionless {pub: out};
    A = -6.96{dimensionless}*ln(D_alpha*1e6{dimensionless}/(D_beta*1e6{dimensionless}))/(D_F*1e6{dimensionless});
    var X_0: dimensionless {pub: out};
    X_0 = 0.4{dimensionless}/(D_F*1e6{dimensionless});
    var ph: dimensionless {pub: out};
    ph = ln(y/(1{dimensionless}-y));
    var y_raw: dimensionless {pub: out};
    y_raw = (FQB_alpha-X_0)/(1{dimensionless}-2{dimensionless}*X_0+div_0);
    var y: dimensionless {pub: out};
    y = min(max(y_raw, div_0y), 1{dimensionless}-div_0y);
    // var epsilon_alpha: dimensionless {pub: out};
    // epsilon_alpha = H_VV_out_alpha-H_mean*FQE_alpha/(FQB_alpha+div_0);
    var H_VV_out_alpha: dimensionless {pub: out};
    H_VV_out_alpha = H_mean*FQE_alpha/(FQB_alpha+div_0);
    var H_VV_out_beta: dimensionless {pub: out};
    H_VV_out_beta = H_mean*(1{dimensionless}-FQE_alpha)/(1{dimensionless}-FQB_alpha+div_0);
    // ////////////////////////////////VV_BG////////////////////////////////
    // ////////////////////////////////////////////
    var RBC_in: m3_per_s {pub: out};
    RBC_in = Qin1*H_to1+Qin2*H_to2+Qin3*H_to3+Qin4*H_to4;
    var RBC_out: m3_per_s {pub: out};
    RBC_out = Qout1*H_from1+Qout2*H_from2+Qout3*H_from3+Qout4*H_from4;
    // --- stored RBC volume inside VV1 ---
    var RBC_volume_init: m3 {pub: out};
    var RBC_volume: m3 {init: RBC_volume_init, pub: out};
    RBC_volume_init = H_global_L*q_us;
    // mass balance
    ode(RBC_volume, t) = RBC_in-RBC_out;
    // --- mean VV1 hematocrit (concentration) ---
    var H_mean: dimensionless {pub: out};
    H_mean = RBC_volume/(q_us+div_0);
    // /////////////////////////////setting junctional compliance to greatest compliance of the vessels connected to it
    var C_conn1: m6_per_J {pub: in};
    var C_conn2: m6_per_J {pub: in};
    var C_conn3: m6_per_J {pub: in};
    var C_conn4: m6_per_J {pub: in};
    var C_max12: m6_per_J {pub: out};
    var C_max123: m6_per_J {pub: out};
    var C: m6_per_J {pub: out};
    C_max12 = sel
      case C_conn1 > C_conn2:
        C_conn1;
      case C_conn1 <= C_conn2:
        C_conn2;
    endsel;
    C_max123 = sel
      case C_max12 > C_conn3:
        C_max12;
      case C_max12 <= C_conn3:
        C_conn3;
    endsel;
    C = sel
      case C_max123 > C_conn4:
        C_max123;
      case C_max123 <= C_conn4:
        C_conn4;
    endsel;
    var q_C: m3 {init: q_C_init, pub: out};
    var q_C_d: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C+q_C_d;
    var R_VV_junc: Js_per_m6 {pub: in};
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    var u_d: J_per_m3 {pub: out};
    var u_d_mmHg: dimensionless {pub: out};
    //  Conservation Laws
    // question?????????? whether ode (q_c and q_C_d) should be vbc1-4 or vj1-4
    u = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C, t) = vbc1+vbc2-v;
    u_mmHg = u/133.322{J_per_m3};
    v = (u-u_d)/R_VV_junc;
    u_d = q_C_d/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-vbc3-vbc4;
    u_d_mmHg = u_d/133.322{J_per_m3};
  enddef;

  def comp PP_capillary_H_D_I as
    // import variables
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    var w_v_d: dimensionless {pub: out};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    var H_down: dimensionless {init: H_global_L, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v_d: dimensionless {pub: out};
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v_d)*H_down;
    H_R_out = w_v_d*H_down;
    var RBC_volume: m3 {pub: out};
    RBC_volume = (v*RBC_volume_L-v_d*RBC_volume_R)/(v+v_d);
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // flow from left to right (v_d>0) => outflow on right
    v_d_neg = (1{dimensionless}-w_v_d)*(-v_d);
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    // //////////////
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    var v_d: m3_per_s {pub: out};
    var v_d_mm3_s: mm3_per_s {pub: out};
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp PP_pericyte_H_D_I as
    // import variables
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var t: second {pub: in};
    var R_constriction_base: Js_per_m6 {pub: in};
    var R_constriction_final: Js_per_m6 {pub: in};
    var R_constriction: Js_per_m6 {pub: out};
    R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    var w_v_d: dimensionless {pub: out};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    var H_down: dimensionless {init: H_global_L, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v_d: dimensionless {pub: out};
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v_d)*H_down;
    H_R_out = w_v_d*H_down;
    var RBC_volume: m3 {pub: out};
    RBC_volume = (v*RBC_volume_L-v_d*RBC_volume_R)/(v+v_d);
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    // //////////////
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+R_constriction;
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    var v_d: m3_per_s {pub: out};
    var v_d_mm3_s: mm3_per_s {pub: out};
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp VP_capillary_H_D_I as
    // import variables
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    var H_down: dimensionless {init: H_global_L, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v: dimensionless {pub: out};
    s_v = abs(v)/(abs(v)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v)*H_down;
    H_R_out = w_v*H_down;
    var RBC_volume: m3 {pub: out};
    RBC_volume = (v_in*RBC_volume_L-v*RBC_volume_R)/(v_in+v);
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    // //////////////
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;

  def comp VP_pericyte_H_D_I as
    // import variables
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var t: second {pub: in};
    var R_constriction_base: Js_per_m6 {pub: in};
    var R_constriction_final: Js_per_m6 {pub: in};
    var R_constriction: Js_per_m6 {pub: out};
    R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    var H_down: dimensionless {init: H_global_L, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v: dimensionless {pub: out};
    s_v = abs(v)/(abs(v)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v)*H_down;
    H_R_out = w_v*H_down;
    var RBC_volume: m3 {pub: out};
    RBC_volume = (v_in*RBC_volume_L-v*RBC_volume_R)/(v_in+v);
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    // //////////////
    var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+R_constriction;
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;
enddef;
