<?xml version="1.0" encoding="UTF-8"?>
<model xmlns="http://www.cellml.org/cellml/2.0#" name="CardiovascularSystem">
  <units name="s2">
    <unit exponent="2" units="second"/>
  </units>
  <units name="Hz">
    <unit exponent="-1" units="second"/>
  </units>
  <units name="millis">
    <unit prefix="milli" units="second"/>
  </units>
  <units name="per_millis">
    <unit exponent="-1" units="millis"/>
  </units>
  <units name="mm">
    <unit prefix="milli" units="metre"/>
  </units>
  <units name="m2">
    <unit exponent="2" units="metre"/>
  </units>
  <units name="mm2">
    <unit exponent="2" prefix="milli" units="metre"/>
  </units>
  <units name="m3">
    <unit exponent="3" units="metre"/>
  </units>
  <units name="m4">
    <unit exponent="4" units="metre"/>
  </units>
  <units name="mm3">
    <unit exponent="3" prefix="milli" units="metre"/>
  </units>
  <units name="J_per_s">
    <unit units="joule"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mol_per_s">
    <unit units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mmol_per_s">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="umol_per_s">
    <unit prefix="micro" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="C_per_s">
    <unit units="coulomb"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mC_per_s">
    <unit prefix="milli" units="coulomb"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="uC_per_s">
    <unit prefix="micro" units="coulomb"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="nC_per_s">
    <unit prefix="nano" units="coulomb"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="Cm_per_millis">
    <unit units="coulomb"/>
    <unit units="metre"/>
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="m_per_s">
    <unit units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mm_per_s">
    <unit prefix="milli" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="um_per_s">
    <unit prefix="milli" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="rad_per_s">
    <unit units="radian"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m3_per_s">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mL">
    <unit prefix="milli" units="litre"/>
  </units>
  <units name="per_milliL_s">
    <unit exponent="-1" prefix="milli" units="litre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="s_per_m3">
    <unit units="second"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="s_per_milliV">
    <unit units="second"/>
    <unit exponent="-1" prefix="milli" units="volt"/>
  </units>
  <units name="s_per_millis">
    <unit units="second"/>
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="millis_per_s">
    <unit prefix="milli" units="second"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mm3_per_s">
    <unit exponent="3" prefix="milli" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="l_per_s">
    <unit units="litre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_ml_s">
    <unit exponent="-1" prefix="milli" units="litre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_m3_s">
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="J_per_mol">
    <unit units="joule"/>
    <unit exponent="-1" units="mole"/>
  </units>
  <units name="J_per_kmol_K">
    <unit units="joule"/>
    <unit exponent="-1" prefix="kilo" units="mole"/>
    <unit exponent="-1" units="kelvin"/>
  </units>
  <units name="J_per_M">
    <unit units="J_per_mol"/>
  </units>
  <units name="J_per_C">
    <unit units="joule"/>
    <unit exponent="-1" units="coulomb"/>
  </units>
  <units name="J_per_C_s">
    <unit units="joule"/>
    <unit exponent="-1" units="coulomb"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="J_per_m">
    <unit units="joule"/>
    <unit exponent="-1" units="metre"/>
  </units>
  <units name="J_per_m3">
    <unit units="joule"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="mmHg">
    <unit multiplier="133.32" units="pascal"/>
  </units>
  <units name="per_mmHg">
    <unit exponent="-1" units="mmHg"/>
  </units>
  <units name="mmHg2">
    <unit exponent="2" units="mmHg"/>
  </units>
  <units name="Pa_per_mmHg">
    <unit units="pascal"/>
    <unit exponent="-1" units="mmHg"/>
  </units>
  <units name="m3_per_J">
    <unit exponent="-1" units="joule"/>
    <unit exponent="3" units="metre"/>
  </units>
  <units name="J_per_m3s">
    <unit units="joule"/>
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m3_per_Js">
    <unit exponent="-1" units="joule"/>
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="J2_per_m6">
    <unit exponent="2" units="joule"/>
    <unit exponent="-6" units="metre"/>
  </units>
  <units name="Js2_per_C2">
    <unit exponent="2" units="second"/>
    <unit units="joule"/>
    <unit exponent="-2" units="coulomb"/>
  </units>
  <units name="Js2_per_mol2">
    <unit units="joule"/>
    <unit exponent="2" units="second"/>
    <unit exponent="-2" units="mole"/>
  </units>
  <units name="Js_per_mol2">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-2" units="mole"/>
  </units>
  <units name="Js_per_C2">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-2" units="coulomb"/>
  </units>
  <units name="J_per_mol2">
    <unit units="joule"/>
    <unit exponent="-2" units="mole"/>
  </units>
  <units name="C2_per_J_s">
    <unit exponent="2" units="coulomb"/>
    <unit exponent="-1" units="joule"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="J_per_C2">
    <unit units="joule"/>
    <unit exponent="-2" units="coulomb"/>
  </units>
  <units name="C2_per_J">
    <unit units="joule"/>
    <unit exponent="-2" units="coulomb"/>
  </units>
  <units name="mol_per_m3">
    <unit units="mole"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="M">
    <unit units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="mM">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="milliM">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="uM">
    <unit prefix="micro" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="kg_per_m3">
    <unit units="kilogram"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="m3_per_kg">
    <unit exponent="-1" units="kilogram"/>
    <unit exponent="3" units="metre"/>
  </units>
  <units name="per_m3">
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="mol_per_m2_s">
    <unit units="mole"/>
    <unit exponent="-2" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mM_m_per_s">
    <unit units="mM"/>
    <unit units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="J_per_m2_s">
    <unit units="joule"/>
    <unit exponent="-2" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="Js_per_m4">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-4" units="metre"/>
  </units>
  <units name="mM_per_s">
    <unit units="mM"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_s">
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_s2">
    <unit exponent="-2" units="second"/>
  </units>
  <units name="per_mM_s">
    <unit exponent="-1" units="mM"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m6_per_mol2_s">
    <unit exponent="6" units="metre"/>
    <unit exponent="-2" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m3_per_mol">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="mole"/>
  </units>
  <units name="mol_per_m3_s">
    <unit units="mole"/>
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_mol">
    <unit exponent="-1" units="mole"/>
  </units>
  <units name="J_per_mol_K">
    <unit units="joule"/>
    <unit exponent="-1" units="mole"/>
    <unit exponent="-1" units="kelvin"/>
  </units>
  <units name="m2_per_s">
    <unit exponent="2" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_C">
    <unit exponent="-1" units="coulomb"/>
  </units>
  <units name="per_m">
    <unit exponent="-1" units="metre"/>
  </units>
  <units name="per_mM">
    <unit exponent="-1" units="mM"/>
  </units>
  <units name="Js2_per_m2">
    <unit units="joule"/>
    <unit exponent="2" units="second"/>
    <unit exponent="-2" units="metre"/>
  </units>
  <units name="Js_per_m2">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-2" units="metre"/>
  </units>
  <units name="J_per_m2">
    <unit units="joule"/>
    <unit exponent="-2" units="metre"/>
  </units>
  <units name="m_per_s2">
    <unit units="metre"/>
    <unit exponent="-2" units="second"/>
  </units>
  <units name="rad_per_s2">
    <unit units="radian"/>
    <unit exponent="-2" units="second"/>
  </units>
  <units name="Js_per_m3">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="Js2_per_m5">
    <unit units="joule"/>
    <unit exponent="2" units="second"/>
    <unit exponent="-5" units="metre"/>
  </units>
  <units name="m5_per_Js2">
    <unit exponent="-1" units="joule"/>
    <unit exponent="-2" units="second"/>
    <unit exponent="5" units="metre"/>
  </units>
  <units name="J_per_m6">
    <unit units="joule"/>
    <unit exponent="-6" units="metre"/>
  </units>
  <units name="m6_per_J">
    <unit exponent="6" units="metre"/>
    <unit exponent="-1" units="joule"/>
  </units>
  <units name="m6_per_Js">
    <unit exponent="6" units="metre"/>
    <unit exponent="-1" units="joule"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mm6_per_J">
    <unit exponent="6" prefix="milli" units="metre"/>
    <unit exponent="-1" units="joule"/>
  </units>
  <units name="Js2_per_m9">
    <unit units="joule"/>
    <unit exponent="2" units="second"/>
    <unit exponent="-9" units="metre"/>
  </units>
  <units name="m6s_per_J">
    <unit units="second"/>
    <unit exponent="6" units="metre"/>
    <unit exponent="-1" units="joule"/>
  </units>
  <units name="Js_per_m6">
    <unit units="joule"/>
    <unit units="second"/>
    <unit exponent="-6" units="metre"/>
  </units>
  <units name="Js2_per_m6">
    <unit units="joule"/>
    <unit exponent="2" units="second"/>
    <unit exponent="-6" units="metre"/>
  </units>
  <units name="m3_per_s2">
    <unit exponent="3" units="metre"/>
    <unit exponent="-2" units="second"/>
  </units>
  <units name="mm3_per_s2">
    <unit exponent="3" prefix="milli" units="metre"/>
    <unit exponent="-2" units="second"/>
  </units>
  <units name="per_mm3">
    <unit exponent="-3" prefix="milli" units="metre"/>
  </units>
  <units name="UnitValve">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="second"/>
    <unit exponent="-0.5" units="J_per_m3"/>
  </units>
  <units name="J_per_m9">
    <unit units="joule"/>
    <unit exponent="-9" units="metre"/>
  </units>
  <units name="milliV">
    <unit prefix="milli" units="volt"/>
  </units>
  <units name="per_milliV">
    <unit exponent="-1" units="milliV"/>
  </units>
  <units name="millis_per_milliV">
    <unit exponent="-1" units="milliV"/>
    <unit units="millis"/>
  </units>
  <units name="per_V">
    <unit exponent="-1" units="volt"/>
  </units>
  <units name="milliV_per_V">
    <unit units="milliV"/>
    <unit exponent="-1" units="volt"/>
  </units>
  <units name="V_per_milliV">
    <unit units="volt"/>
    <unit exponent="-1" units="milliV"/>
  </units>
  <units name="V_per_s">
    <unit units="volt"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="milliV_per_kiloV">
    <unit prefix="milli" units="volt"/>
    <unit exponent="-1" prefix="kilo" units="volt"/>
  </units>
  <units name="V2">
    <unit exponent="2" units="volt"/>
  </units>
  <units name="milliV2">
    <unit exponent="2" prefix="milli" units="volt"/>
  </units>
  <units name="millimol">
    <unit prefix="milli" units="mole"/>
  </units>
  <units name="millimolar">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="per_millimolar">
    <unit exponent="-1" units="millimolar"/>
  </units>
  <units name="per_millimolar_s">
    <unit exponent="-1" units="millimolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="per_millimolar2_s">
    <unit exponent="-2" units="millimolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="millimolar_per_s">
    <unit units="millimolar"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="millimolar_per_megamolar">
    <unit units="millimolar"/>
    <unit exponent="-1" prefix="mega" units="mole"/>
    <unit units="litre"/>
  </units>
  <units name="per_millimol_milliS">
    <unit exponent="-1" prefix="milli" units="mole"/>
    <unit exponent="-1" prefix="milli" units="siemens"/>
  </units>
  <units name="per_millimol_millis">
    <unit exponent="-1" prefix="milli" units="mole"/>
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="per_millimol_s">
    <unit exponent="-1" prefix="milli" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="microm">
    <unit prefix="micro" units="metre"/>
  </units>
  <units name="microS">
    <unit prefix="micro" units="siemens"/>
  </units>
  <units name="microm3">
    <unit exponent="3" units="microm"/>
  </units>
  <units name="m3_per_microm3">
    <unit units="m3"/>
    <unit exponent="-1" units="microm3"/>
  </units>
  <units name="picoF">
    <unit prefix="pico" units="farad"/>
  </units>
  <units name="S_per_F">
    <unit units="siemens"/>
    <unit exponent="-1" units="farad"/>
  </units>
  <units name="m3_per_Fs">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="farad"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="A_per_F">
    <unit units="ampere"/>
    <unit exponent="-1" units="farad"/>
  </units>
  <units name="megaOhm">
    <unit prefix="mega" units="ohm"/>
  </units>
  <units name="nanoA">
    <unit prefix="nano" units="ampere"/>
  </units>
  <units name="nanoA_per_milliA">
    <unit prefix="nano" units="ampere"/>
    <unit exponent="-1" prefix="milli" units="ampere"/>
  </units>
  <units name="nanoA_per_A">
    <unit prefix="nano" units="ampere"/>
    <unit exponent="-1" units="ampere"/>
  </units>
  <units name="A_per_nanoA">
    <unit exponent="-1" prefix="nano" units="ampere"/>
    <unit units="ampere"/>
  </units>
  <units name="C_per_mol">
    <unit units="coulomb"/>
    <unit exponent="-1" units="mole"/>
  </units>
  <units name="m3_per_J_millis">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="joule"/>
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="m3_per_mol_millis">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="mole"/>
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="m3_per_millimol_s">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="second"/>
    <unit exponent="-1" prefix="milli" units="mole"/>
  </units>
  <units name="millimol_per_m3">
    <unit exponent="-3" units="metre"/>
    <unit prefix="milli" units="mole"/>
  </units>
  <units name="mmol_per_l">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="l_per_mmol">
    <unit units="litre"/>
    <unit exponent="-1" prefix="milli" units="mole"/>
  </units>
  <units name="l_per_mmol_per_s">
    <unit units="litre"/>
    <unit exponent="-1" prefix="milli" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="l2_per_mmol_per_s">
    <unit exponent="2" units="litre"/>
    <unit exponent="-1" prefix="milli" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mmol_per_s2">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-2" units="second"/>
  </units>
  <units name="mmol">
    <unit prefix="milli" units="mole"/>
  </units>
  <units name="mmol_per_l_per_s">
    <unit prefix="milli" units="mole"/>
    <unit exponent="-1" units="litre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="Hz2">
    <unit exponent="-2" units="second"/>
  </units>
  <units name="cm">
    <unit prefix="centi" units="metre"/>
  </units>
  <units name="J_per_m4_s">
    <unit exponent="-4" units="metre"/>
    <unit units="joule"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m3_per_mol_per_sec">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mol_per_m3_per_kPa">
    <unit units="mole"/>
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" prefix="kilo" units="pascal"/>
  </units>
  <units name="mol_per_m3_per_Pa">
    <unit units="mole"/>
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" units="pascal"/>
  </units>
  <units name="m3_per_mol_per_s">
    <unit exponent="3" units="metre"/>
    <unit exponent="-1" units="mole"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="mol_per_m3_per_s">
    <unit units="mole"/>
    <unit exponent="-3" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="dim">
    <unit units="dimensionless"/>
  </units>
  <units name="fmol">
    <unit prefix="femto" units="mole"/>
  </units>
  <units name="per_fmol">
    <unit exponent="-1" units="fmol"/>
  </units>
  <units name="nJ_per_s">
    <unit prefix="nano" units="joule"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="fmol_per_s">
    <unit units="fmol"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="nC_per_fmol">
    <unit prefix="nano" units="coulomb"/>
    <unit exponent="-1" units="fmol"/>
  </units>
  <units name="nC">
    <unit prefix="nano" units="coulomb"/>
  </units>
  <units name="nJ_per_fmol">
    <unit prefix="nano" units="joule"/>
    <unit exponent="-1" units="fmol"/>
  </units>
  <units name="nJ_per_nC">
    <unit prefix="nano" units="joule"/>
    <unit exponent="-1" units="nC"/>
  </units>
  <units name="fC">
    <unit prefix="femto" units="coulomb"/>
  </units>
  <units name="fF">
    <unit prefix="femto" units="farad"/>
  </units>
  <units name="volt_per_sec">
    <unit exponent="-1" units="second"/>
    <unit units="volt"/>
  </units>
  <units name="J_per_K_per_mol">
    <unit units="joule"/>
    <unit exponent="-1" units="kelvin"/>
    <unit exponent="-1" units="mole"/>
  </units>
  <units name="nS">
    <unit prefix="nano" units="siemens"/>
  </units>
  <units name="nSmV">
    <unit units="nS"/>
    <unit units="mV"/>
  </units>
  <units name="per_ms">
    <unit exponent="-1" prefix="milli" units="second"/>
  </units>
  <units name="mM4">
    <unit exponent="4" units="mM"/>
  </units>
  <units name="mM_per_ms">
    <unit units="mM"/>
    <unit exponent="-1" units="ms"/>
  </units>
  <units name="mMms">
    <unit units="mM"/>
    <unit units="ms"/>
  </units>
  <units name="per_mMms">
    <unit exponent="-1" units="mMms"/>
  </units>
  <units name="molar">
    <unit units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="micromolar">
    <unit prefix="micro" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="nanomolar">
    <unit prefix="nano" units="mole"/>
    <unit exponent="-1" units="litre"/>
  </units>
  <units name="ms">
    <unit prefix="milli" units="second"/>
  </units>
  <units name="m_cubed">
    <unit prefix="kilo" units="metre"/>
  </units>
  <units name="mV">
    <unit prefix="milli" units="volt"/>
  </units>
  <units name="m_cubed_per_second">
    <unit units="m_cubed"/>
    <unit units="per_s"/>
  </units>
  <units name="micromolar_m_cubed">
    <unit units="micromolar"/>
    <unit units="m_cubed"/>
  </units>
  <units name="C">
    <unit units="ampere"/>
    <unit units="second"/>
  </units>
  <units name="C_per_millimol">
    <unit units="C"/>
    <unit exponent="-1" prefix="milli" units="mole"/>
  </units>
  <units name="picoA">
    <unit prefix="pico" units="ampere"/>
  </units>
  <units name="picoA_per_picoFarad">
    <unit units="picoA"/>
    <unit exponent="-1" units="picoFarad"/>
  </units>
  <units name="microL">
    <unit prefix="micro" units="litre"/>
  </units>
  <units name="picoFarad">
    <unit prefix="pico" units="farad"/>
  </units>
  <units name="cm3_per_second">
    <unit exponent="3" prefix="centi" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="um3_per_second">
    <unit exponent="3" prefix="micro" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="m3mM">
    <unit exponent="3" units="metre"/>
    <unit units="mM"/>
  </units>
  <units name="ms2">
    <unit exponent="2" units="ms"/>
  </units>
  <units name="nM3_per_ps">
    <unit exponent="3" prefix="nano" units="metre"/>
    <unit exponent="-1" prefix="pico" units="second"/>
  </units>
  <units name="per_s_squared_m_cubed">
    <unit exponent="-2" units="second"/>
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="per_meters_cubed">
    <unit exponent="-3" units="metre"/>
  </units>
  <units name="umeter3">
    <unit exponent="3" prefix="micro" units="metre"/>
  </units>
  <units name="mill1">
    <unit exponent="-1" units="volt"/>
    <unit prefix="milli" units="volt"/>
  </units>
  <units name="picoV">
    <unit prefix="pico" units="volt"/>
  </units>
  <units name="pic0">
    <unit exponent="-1" units="volt"/>
    <unit units="picoV"/>
  </units>
  <units name="nanoV">
    <unit prefix="nano" units="volt"/>
  </units>
  <units name="nan0">
    <unit exponent="-1" units="volt"/>
    <unit units="nanoV"/>
  </units>
  <units name="kPa">
    <unit prefix="kilo" units="pascal"/>
  </units>
  <units name="L_per_s">
    <unit exponent="3" prefix="deci" units="metre"/>
    <unit exponent="-1" units="second"/>
  </units>
  <units name="L_per_s_per_kPa">
    <unit exponent="3" prefix="deci" units="metre"/>
    <unit exponent="-1" units="second"/>
    <unit exponent="-1" prefix="kilo" units="pascal"/>
  </units>
  <units name="kPa_per_L">
    <unit prefix="kilo" units="pascal"/>
    <unit exponent="-3" prefix="deci" units="metre"/>
  </units>
  <units name="L_per_kPa">
    <unit exponent="3" prefix="deci" units="metre"/>
    <unit exponent="-1" prefix="kilo" units="pascal"/>
  </units>
  <units name="kPa_s_per_L">
    <unit prefix="kilo" units="pascal"/>
    <unit units="second"/>
    <unit exponent="-3" prefix="deci" units="metre"/>
  </units>
  <component name="parameters">
    <variable name="l_inlet_capillary" units="metre" initial_value="0.0005" interface="public"/>
    <variable name="r_inlet_capillary" units="metre" initial_value="0.000008" interface="public"/>
    <variable name="H_L_out_RHSV_inlet_capillary" units="dimensionless" initial_value="0.6" interface="public"/>
    <variable name="H_R_out_LHSV_inlet_capillary" units="dimensionless" initial_value="0.45" interface="public"/>
    <variable name="u_in_inlet_capillary" units="J_per_m3" initial_value="6666" interface="public"/>
    <variable name="u_out_inlet_capillary" units="J_per_m3" initial_value="6600" interface="public"/>
  </component>
  <component name="parameters_global">
    <variable name="H_global_L" units="dimensionless" initial_value="0.45" interface="public"/>
    <variable name="H_global_R" units="dimensionless" initial_value="0.6" interface="public"/>
    <variable name="gamma_mirror" units="dimensionless" initial_value="0.02" interface="public"/>
    <variable name="tau_H_down" units="second" initial_value="0.00001" interface="public"/>
    <variable name="tau_H_mean" units="second" initial_value="0.01" interface="public"/>
    <variable name="v_eps" units="m3_per_s" initial_value="1E-30" interface="public"/>
    <variable name="q_C_init" units="m3" initial_value="0" interface="public"/>
    <variable name="mu_plasma" units="Js_per_m3" initial_value="0.001" interface="public"/>
    <variable name="u_ext" units="J_per_m3" initial_value="133" interface="public"/>
    <variable name="tau_link" units="second" initial_value="0.00001" interface="public"/>
    <variable name="v_scale" units="m3_per_s" initial_value="1.00E-16" interface="public"/>
    <variable name="one_mm3" units="m3" initial_value="1.00E-09" interface="public"/>
  </component>
  <component name="environment">
    <variable name="time" units="second" interface="public"/>
  </component>
  <component name="inlet_capillary_module">
    <variable name="t" units="second" interface="public"/>
    <variable name="H_global_L" units="dimensionless" interface="public"/>
    <variable name="H_global_R" units="dimensionless" interface="public"/>
    <variable name="H_L_out_RHSV" units="dimensionless" interface="public"/>
    <variable name="H_R_out_LHSV" units="dimensionless" interface="public"/>
    <variable name="gamma_mirror" units="dimensionless" interface="public"/>
    <variable name="tau_H_down" units="second" interface="public"/>
    <variable name="tau_H_mean" units="second" interface="public"/>
    <variable name="v_eps" units="m3_per_s" interface="public"/>
    <variable name="q_C_init" units="m3" interface="public"/>
    <variable name="l" units="metre" interface="public"/>
    <variable name="r" units="metre" interface="public"/>
    <variable name="mu_plasma" units="Js_per_m3" interface="public"/>
    <variable name="u_in" units="J_per_m3" interface="public"/>
    <variable name="u_ext" units="J_per_m3" interface="public"/>
    <variable name="u_out" units="J_per_m3" interface="public"/>
    <variable name="tau_link" units="second" interface="public"/>
    <variable name="v_scale" units="m3_per_s" interface="public"/>
    <variable name="one_mm3" units="m3" interface="public"/>
    <variable name="w_v" units="dimensionless" interface="public"/>
    <variable name="w_v_d" units="dimensionless" interface="public"/>
    <variable name="H_link_R" units="dimensionless" initial_value="H_global_L" interface="public"/>
    <variable name="H_link_L" units="dimensionless" initial_value="H_global_L" interface="public"/>
    <variable name="H_L_in" units="dimensionless" interface="public"/>
    <variable name="H_R_in" units="dimensionless" interface="public"/>
    <variable name="H_up" units="dimensionless" interface="public"/>
    <variable name="H_down" units="dimensionless" initial_value="H_global_L" interface="public"/>
    <variable name="H_down_target" units="dimensionless" interface="public"/>
    <variable name="s_v_d" units="dimensionless" interface="public"/>
    <variable name="H_L_out" units="dimensionless" interface="public"/>
    <variable name="H_R_out" units="dimensionless" interface="public"/>
    <variable name="RBC_volume" units="m3" initial_value="RBC_volume_init" interface="public"/>
    <variable name="RBC_volume_init" units="m3" interface="public"/>
    <variable name="v_pos" units="m3_per_s" interface="public"/>
    <variable name="v_neg" units="m3_per_s" interface="public"/>
    <variable name="v_d_pos" units="m3_per_s" interface="public"/>
    <variable name="v_d_neg" units="m3_per_s" interface="public"/>
    <variable name="H_target" units="dimensionless" interface="public"/>
    <variable name="H_mean" units="dimensionless" initial_value="H_global_L" interface="public"/>
    <variable name="H_mass_L" units="dimensionless" interface="public"/>
    <variable name="H_mass_R" units="dimensionless" interface="public"/>
    <variable name="q_C" units="m3" initial_value="q_C_init" interface="public"/>
    <variable name="q" units="m3" interface="public"/>
    <variable name="q_us" units="m3" interface="public"/>
    <variable name="C" units="m6_per_J" interface="public"/>
    <variable name="Z" units="dimensionless" interface="public"/>
    <variable name="mu_45" units="dimensionless"/>
    <variable name="mu" units="Js_per_m3" interface="public"/>
    <variable name="hem_dep_u_rel" units="dimensionless"/>
    <variable name="R" units="Js_per_m6" interface="public"/>
    <variable name="v" units="m3_per_s" interface="public"/>
    <variable name="v_mm3_s" units="mm3_per_s" interface="public"/>
    <variable name="u" units="J_per_m3" interface="public"/>
    <variable name="u_mmHg" units="dimensionless" interface="public"/>
    <variable name="v_d" units="m3_per_s" interface="public"/>
    <variable name="v_d_mm3_s" units="mm3_per_s" interface="public"/>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>w_v</ci>
        <apply>
          <plus/>
          <cn cellml:units="dimensionless">0.5</cn>
          <apply>
            <times/>
            <apply>
              <divide/>
              <cn cellml:units="dimensionless">1</cn>
              <pi/>
            </apply>
            <apply>
              <arctan/>
              <apply>
                <divide/>
                <ci>v</ci>
                <ci>v_scale</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>w_v_d</ci>
        <apply>
          <plus/>
          <cn cellml:units="dimensionless">0.5</cn>
          <apply>
            <times/>
            <apply>
              <divide/>
              <cn cellml:units="dimensionless">1</cn>
              <pi/>
            </apply>
            <apply>
              <arctan/>
              <apply>
                <divide/>
                <ci>v_d</ci>
                <ci>v_scale</ci>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>H_link_R</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>H_L_out_RHSV</ci>
            <ci>H_link_R</ci>
          </apply>
          <ci>tau_link</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>H_link_L</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>H_R_out_LHSV</ci>
            <ci>H_link_L</ci>
          </apply>
          <ci>tau_link</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>H_L_in</ci>
        <ci>H_link_L</ci>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>H_R_in</ci>
        <ci>H_link_R</ci>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>H_up</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>w_v_d</ci>
            <ci>H_L_in</ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1</cn>
              <ci>w_v_d</ci>
            </apply>
            <ci>H_R_in</ci>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>H_down_target</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>s_v_d</ci>
            <apply>
              <plus/>
              <ci>H_mean</ci>
              <apply>
                <times/>
                <ci>gamma_mirror</ci>
                <apply>
                  <minus/>
                  <ci>H_mean</ci>
                  <ci>H_up</ci>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <times/>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1</cn>
              <ci>s_v_d</ci>
            </apply>
            <ci>H_mean</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>H_down</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>H_down_target</ci>
            <ci>H_down</ci>
          </apply>
          <ci>tau_H_down</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>s_v_d</ci>
        <apply>
          <divide/>
          <apply>
            <abs/>
            <ci>v_d</ci>
          </apply>
          <apply>
            <plus/>
            <apply>
              <abs/>
              <ci>v_d</ci>
            </apply>
            <ci>v_eps</ci>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>H_L_out</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1</cn>
              <ci>w_v_d</ci>
            </apply>
            <ci>H_down</ci>
          </apply>
          <apply>
            <times/>
            <ci>w_v_d</ci>
            <ci>H_L_in</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>H_R_out</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>w_v_d</ci>
            <ci>H_down</ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1</cn>
              <ci>w_v_d</ci>
            </apply>
            <ci>H_R_in</ci>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>RBC_volume</ci>
        </apply>
        <apply>
          <minus/>
          <apply>
            <times/>
            <ci>v</ci>
            <ci>H_mass_L</ci>
          </apply>
          <apply>
            <times/>
            <ci>v_d</ci>
            <ci>H_mass_R</ci>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>RBC_volume_init</ci>
        <apply>
          <times/>
          <ci>H_global_L</ci>
          <ci>q_us</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>v_pos</ci>
        <apply>
          <times/>
          <ci>w_v</ci>
          <ci>v</ci>
        </apply>
      </apply>
      <!-- inflow from left (v>0)-->
      <apply>
        <eq/>
        <ci>v_neg</ci>
        <apply>
          <times/>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>w_v</ci>
          </apply>
          <apply>
            <minus/>
            <ci>v</ci>
          </apply>
        </apply>
      </apply>
      <!-- outflow to left (v<0)-->
      <apply>
        <eq/>
        <ci>v_d_pos</ci>
        <apply>
          <times/>
          <ci>w_v_d</ci>
          <ci>v_d</ci>
        </apply>
      </apply>
      <!-- flow from left to right (v_d>0) =>outflow on right-->
      <apply>
        <eq/>
        <ci>v_d_neg</ci>
        <apply>
          <times/>
          <apply>
            <minus/>
            <cn cellml:units="dimensionless">1</cn>
            <ci>w_v_d</ci>
          </apply>
          <apply>
            <minus/>
            <ci>v_d</ci>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>H_target</ci>
        <apply>
          <divide/>
          <ci>RBC_volume</ci>
          <ci>q</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>H_mean</ci>
        </apply>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>H_target</ci>
            <ci>H_mean</ci>
          </apply>
          <ci>tau_H_mean</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>H_mass_L</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>w_v</ci>
            <ci>H_L_in</ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1</cn>
              <ci>w_v</ci>
            </apply>
            <ci>H_L_out</ci>
          </apply>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>H_mass_R</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <ci>w_v_d</ci>
            <ci>H_R_out</ci>
          </apply>
          <apply>
            <times/>
            <apply>
              <minus/>
              <cn cellml:units="dimensionless">1</cn>
              <ci>w_v_d</ci>
            </apply>
            <ci>H_R_in</ci>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>q_us</ci>
        <apply>
          <times/>
          <pi/>
          <apply>
            <power/>
            <ci>r</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
          <ci>l</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>q</ci>
        <apply>
          <plus/>
          <ci>q_us</ci>
          <ci>q_C</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>C</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <pi/>
            <apply>
              <power/>
              <cn type="e-notation" cellml:units="metre">8.5<sep/>-9</cn>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
            <ci>l</ci>
          </apply>
          <cn cellml:units="J_per_m3">133.322</cn>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>Z</ci>
        <apply>
          <plus/>
          <apply>
            <times/>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless">0.8</cn>
              <apply>
                <exp/>
                <apply>
                  <times/>
                  <apply>
                    <minus/>
                    <cn cellml:units="dimensionless">0.075</cn>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                  <ci>r</ci>
                  <cn type="e-notation" cellml:units="dimensionless">1<sep/>6</cn>
                </apply>
              </apply>
            </apply>
            <apply>
              <plus/>
              <apply>
                <minus/>
                <cn cellml:units="dimensionless">1</cn>
              </apply>
              <apply>
                <divide/>
                <cn cellml:units="dimensionless">1</cn>
                <apply>
                  <plus/>
                  <cn cellml:units="dimensionless">1</cn>
                  <apply>
                    <times/>
                    <apply>
                      <power/>
                      <cn cellml:units="dimensionless">10</cn>
                      <apply>
                        <minus/>
                        <cn cellml:units="dimensionless">11</cn>
                      </apply>
                    </apply>
                    <apply>
                      <power/>
                      <apply>
                        <times/>
                        <cn cellml:units="dimensionless">2</cn>
                        <ci>r</ci>
                        <cn type="e-notation" cellml:units="dimensionless">1<sep/>6</cn>
                      </apply>
                      <cn cellml:units="dimensionless">12</cn>
                    </apply>
                  </apply>
                </apply>
              </apply>
            </apply>
          </apply>
          <apply>
            <divide/>
            <cn cellml:units="dimensionless">1</cn>
            <apply>
              <plus/>
              <cn cellml:units="dimensionless">1</cn>
              <apply>
                <times/>
                <apply>
                  <power/>
                  <cn cellml:units="dimensionless">10</cn>
                  <apply>
                    <minus/>
                    <cn cellml:units="dimensionless">11</cn>
                  </apply>
                </apply>
                <apply>
                  <power/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>r</ci>
                    <cn type="e-notation" cellml:units="dimensionless">1<sep/>6</cn>
                  </apply>
                  <cn cellml:units="dimensionless">12</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>mu_45</ci>
        <apply>
          <minus/>
          <apply>
            <plus/>
            <apply>
              <times/>
              <cn cellml:units="dimensionless">6</cn>
              <apply>
                <exp/>
                <apply>
                  <times/>
                  <apply>
                    <minus/>
                    <cn cellml:units="per_m">0.085</cn>
                  </apply>
                  <cn cellml:units="dimensionless">2</cn>
                  <ci>r</ci>
                  <cn type="e-notation" cellml:units="dimensionless">1<sep/>6</cn>
                </apply>
              </apply>
            </apply>
            <cn cellml:units="dimensionless">3.2</cn>
          </apply>
          <apply>
            <times/>
            <cn cellml:units="dimensionless">2.44</cn>
            <apply>
              <exp/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <cn cellml:units="dimensionless">0.06</cn>
                </apply>
                <apply>
                  <power/>
                  <apply>
                    <times/>
                    <cn cellml:units="per_m">2</cn>
                    <ci>r</ci>
                    <cn type="e-notation" cellml:units="dimensionless">1<sep/>6</cn>
                  </apply>
                  <cn cellml:units="dimensionless">0.645</cn>
                </apply>
              </apply>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML">
      <apply>
        <eq/>
        <ci>mu</ci>
        <apply>
          <times/>
          <ci>hem_dep_u_rel</ci>
          <ci>mu_plasma</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>hem_dep_u_rel</ci>
        <apply>
          <plus/>
          <cn cellml:units="dimensionless">1</cn>
          <apply>
            <times/>
            <apply>
              <divide/>
              <apply>
                <times/>
                <apply>
                  <minus/>
                  <ci>mu_45</ci>
                  <cn cellml:units="dimensionless">1</cn>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <power/>
                    <apply>
                      <minus/>
                      <cn cellml:units="dimensionless">1</cn>
                      <ci>H_mean</ci>
                    </apply>
                    <ci>Z</ci>
                  </apply>
                  <cn cellml:units="dimensionless">1</cn>
                </apply>
              </apply>
              <apply>
                <minus/>
                <apply>
                  <power/>
                  <apply>
                    <minus/>
                    <cn cellml:units="dimensionless">1</cn>
                    <ci>H_global_L</ci>
                  </apply>
                  <ci>Z</ci>
                </apply>
                <cn cellml:units="dimensionless">1</cn>
              </apply>
            </apply>
            <apply>
              <power/>
              <apply>
                <divide/>
                <apply>
                  <times/>
                  <cn cellml:units="dimensionless">2</cn>
                  <ci>r</ci>
                  <cn type="e-notation" cellml:units="dimensionless">1<sep/>6</cn>
                </apply>
                <apply>
                  <minus/>
                  <apply>
                    <times/>
                    <cn cellml:units="dimensionless">2</cn>
                    <ci>r</ci>
                    <cn type="e-notation" cellml:units="dimensionless">1<sep/>6</cn>
                  </apply>
                  <cn cellml:units="metre">1.1</cn>
                </apply>
              </apply>
              <cn cellml:units="dimensionless">2</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>R</ci>
        <apply>
          <divide/>
          <apply>
            <times/>
            <cn cellml:units="dimensionless">8</cn>
            <ci>mu</ci>
            <ci>l</ci>
          </apply>
          <apply>
            <times/>
            <pi/>
            <apply>
              <power/>
              <ci>r</ci>
              <cn cellml:units="dimensionless">4</cn>
            </apply>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>v_mm3_s</ci>
        <apply>
          <divide/>
          <ci>v</ci>
          <ci>one_mm3</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>u_in</ci>
            <ci>u</ci>
          </apply>
          <apply>
            <divide/>
            <ci>R</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>u_mmHg</ci>
        <apply>
          <divide/>
          <ci>u</ci>
          <cn cellml:units="J_per_m3">133.322</cn>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>u</ci>
        <apply>
          <plus/>
          <apply>
            <divide/>
            <ci>q_C</ci>
            <ci>C</ci>
          </apply>
          <ci>u_ext</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <apply>
          <diff/>
          <bvar>
            <ci>t</ci>
          </bvar>
          <ci>q_C</ci>
        </apply>
        <apply>
          <minus/>
          <ci>v</ci>
          <ci>v_d</ci>
        </apply>
      </apply>
    </math>
    <math xmlns="http://www.w3.org/1998/Math/MathML" xmlns:cellml="http://www.cellml.org/cellml/2.0#">
      <apply>
        <eq/>
        <ci>v_d_mm3_s</ci>
        <apply>
          <divide/>
          <ci>v_d</ci>
          <ci>one_mm3</ci>
        </apply>
      </apply>
      <apply>
        <eq/>
        <ci>v_d</ci>
        <apply>
          <divide/>
          <apply>
            <minus/>
            <ci>u</ci>
            <ci>u_out</ci>
          </apply>
          <apply>
            <divide/>
            <ci>R</ci>
            <cn cellml:units="dimensionless">2</cn>
          </apply>
        </apply>
      </apply>
    </math>
  </component>
  <component name="terminal_venous_connection"/>
  <component name="generic_junction_connection"/>
  <component name="sum_blood_volume"/>
  <component name="inlet_capillary">
    <variable name="H_global_L" units="dimensionless" interface="public"/>
    <variable name="H_global_R" units="dimensionless" interface="public"/>
    <variable name="H_L_out_RHSV" units="dimensionless" interface="public"/>
    <variable name="H_R_out_LHSV" units="dimensionless" interface="public"/>
    <variable name="gamma_mirror" units="dimensionless" interface="public"/>
    <variable name="tau_H_down" units="second" interface="public"/>
    <variable name="tau_H_mean" units="second" interface="public"/>
    <variable name="v_eps" units="m3_per_s" interface="public"/>
    <variable name="q_C_init" units="m3" interface="public"/>
    <variable name="mu_plasma" units="Js_per_m3" interface="public"/>
    <variable name="u_in" units="J_per_m3" interface="public"/>
    <variable name="u_out" units="J_per_m3" interface="public"/>
    <variable name="u_ext" units="J_per_m3" interface="public"/>
    <variable name="tau_link" units="second" interface="public"/>
    <variable name="v_scale" units="m3_per_s" interface="public"/>
    <variable name="one_mm3" units="m3" interface="public"/>
    <variable name="w_v" units="dimensionless" interface="public"/>
    <variable name="w_v_d" units="dimensionless" interface="public"/>
    <variable name="H_link_R" units="dimensionless" interface="public"/>
    <variable name="H_link_L" units="dimensionless" interface="public"/>
    <variable name="H_L_in" units="dimensionless" interface="public"/>
    <variable name="H_R_in" units="dimensionless" interface="public"/>
    <variable name="H_up" units="dimensionless" interface="public"/>
    <variable name="H_down" units="dimensionless" interface="public"/>
    <variable name="H_down_target" units="dimensionless" interface="public"/>
    <variable name="s_v_d" units="dimensionless" interface="public"/>
    <variable name="H_L_out" units="dimensionless" interface="public"/>
    <variable name="H_R_out" units="dimensionless" interface="public"/>
    <variable name="RBC_volume" units="m3" interface="public"/>
    <variable name="RBC_volume_init" units="m3" interface="public"/>
    <variable name="v_pos" units="m3_per_s" interface="public"/>
    <variable name="v_neg" units="m3_per_s" interface="public"/>
    <variable name="v_d_pos" units="m3_per_s" interface="public"/>
    <variable name="v_d_neg" units="m3_per_s" interface="public"/>
    <variable name="H_target" units="dimensionless" interface="public"/>
    <variable name="H_mean" units="dimensionless" interface="public"/>
    <variable name="H_mass_L" units="dimensionless" interface="public"/>
    <variable name="H_mass_R" units="dimensionless" interface="public"/>
    <variable name="q_C" units="m3" interface="public"/>
    <variable name="q" units="m3" interface="public"/>
    <variable name="q_us" units="m3" interface="public"/>
    <variable name="C" units="m6_per_J" interface="public"/>
    <variable name="Z" units="dimensionless" interface="public"/>
    <variable name="mu_45" units="dimensionless" interface="public"/>
    <variable name="mu" units="Js_per_m3" interface="public"/>
    <variable name="hem_dep_u_rel" units="dimensionless" interface="public"/>
    <variable name="R" units="Js_per_m6" interface="public"/>
    <variable name="v" units="m3_per_s" interface="public"/>
    <variable name="v_mm3_s" units="mm3_per_s" interface="public"/>
    <variable name="u" units="J_per_m3" interface="public"/>
    <variable name="u_mmHg" units="dimensionless" interface="public"/>
    <variable name="v_d" units="m3_per_s" interface="public"/>
    <variable name="v_d_mm3_s" units="mm3_per_s" interface="public"/>
  </component>
  <component name="global">
    <variable name="H_global_L" units="dimensionless" interface="public"/>
    <variable name="H_global_R" units="dimensionless" interface="public"/>
    <variable name="gamma_mirror" units="dimensionless" interface="public"/>
    <variable name="tau_H_down" units="second" interface="public"/>
    <variable name="tau_H_mean" units="second" interface="public"/>
    <variable name="v_eps" units="m3_per_s" interface="public"/>
    <variable name="q_C_init" units="m3" interface="public"/>
    <variable name="mu_plasma" units="Js_per_m3" interface="public"/>
    <variable name="u_ext" units="J_per_m3" interface="public"/>
    <variable name="tau_link" units="second" interface="public"/>
    <variable name="v_scale" units="m3_per_s" interface="public"/>
    <variable name="one_mm3" units="m3" interface="public"/>
  </component>
  <connection component_1="parameters" component_2="inlet_capillary_module">
    <map_variables variable_1="l_inlet_capillary" variable_2="l"/>
    <map_variables variable_1="r_inlet_capillary" variable_2="r"/>
    <map_variables variable_1="H_L_out_RHSV_inlet_capillary" variable_2="H_L_out_RHSV"/>
    <map_variables variable_1="H_R_out_LHSV_inlet_capillary" variable_2="H_R_out_LHSV"/>
    <map_variables variable_1="u_in_inlet_capillary" variable_2="u_in"/>
    <map_variables variable_1="u_out_inlet_capillary" variable_2="u_out"/>
  </connection>
  <connection component_1="parameters_global" component_2="global">
    <map_variables variable_1="H_global_L" variable_2="H_global_L"/>
    <map_variables variable_1="H_global_R" variable_2="H_global_R"/>
    <map_variables variable_1="gamma_mirror" variable_2="gamma_mirror"/>
    <map_variables variable_1="tau_H_down" variable_2="tau_H_down"/>
    <map_variables variable_1="tau_H_mean" variable_2="tau_H_mean"/>
    <map_variables variable_1="v_eps" variable_2="v_eps"/>
    <map_variables variable_1="q_C_init" variable_2="q_C_init"/>
    <map_variables variable_1="mu_plasma" variable_2="mu_plasma"/>
    <map_variables variable_1="u_ext" variable_2="u_ext"/>
    <map_variables variable_1="tau_link" variable_2="tau_link"/>
    <map_variables variable_1="v_scale" variable_2="v_scale"/>
    <map_variables variable_1="one_mm3" variable_2="one_mm3"/>
  </connection>
  <connection component_1="parameters_global" component_2="inlet_capillary_module">
    <map_variables variable_1="H_global_L" variable_2="H_global_L"/>
    <map_variables variable_1="H_global_R" variable_2="H_global_R"/>
    <map_variables variable_1="gamma_mirror" variable_2="gamma_mirror"/>
    <map_variables variable_1="tau_H_down" variable_2="tau_H_down"/>
    <map_variables variable_1="tau_H_mean" variable_2="tau_H_mean"/>
    <map_variables variable_1="v_eps" variable_2="v_eps"/>
    <map_variables variable_1="q_C_init" variable_2="q_C_init"/>
    <map_variables variable_1="mu_plasma" variable_2="mu_plasma"/>
    <map_variables variable_1="u_ext" variable_2="u_ext"/>
    <map_variables variable_1="tau_link" variable_2="tau_link"/>
    <map_variables variable_1="v_scale" variable_2="v_scale"/>
    <map_variables variable_1="one_mm3" variable_2="one_mm3"/>
  </connection>
  <connection component_1="environment" component_2="inlet_capillary_module">
    <map_variables variable_1="time" variable_2="t"/>
  </connection>
  <connection component_1="inlet_capillary_module" component_2="inlet_capillary">
    <map_variables variable_1="H_global_L" variable_2="H_global_L"/>
    <map_variables variable_1="H_global_R" variable_2="H_global_R"/>
    <map_variables variable_1="H_L_out_RHSV" variable_2="H_L_out_RHSV"/>
    <map_variables variable_1="H_R_out_LHSV" variable_2="H_R_out_LHSV"/>
    <map_variables variable_1="gamma_mirror" variable_2="gamma_mirror"/>
    <map_variables variable_1="tau_H_down" variable_2="tau_H_down"/>
    <map_variables variable_1="tau_H_mean" variable_2="tau_H_mean"/>
    <map_variables variable_1="v_eps" variable_2="v_eps"/>
    <map_variables variable_1="q_C_init" variable_2="q_C_init"/>
    <map_variables variable_1="mu_plasma" variable_2="mu_plasma"/>
    <map_variables variable_1="u_in" variable_2="u_in"/>
    <map_variables variable_1="u_ext" variable_2="u_ext"/>
    <map_variables variable_1="u_out" variable_2="u_out"/>
    <map_variables variable_1="tau_link" variable_2="tau_link"/>
    <map_variables variable_1="v_scale" variable_2="v_scale"/>
    <map_variables variable_1="one_mm3" variable_2="one_mm3"/>
    <map_variables variable_1="w_v" variable_2="w_v"/>
    <map_variables variable_1="w_v_d" variable_2="w_v_d"/>
    <map_variables variable_1="H_link_R" variable_2="H_link_R"/>
    <map_variables variable_1="H_link_L" variable_2="H_link_L"/>
    <map_variables variable_1="H_L_in" variable_2="H_L_in"/>
    <map_variables variable_1="H_R_in" variable_2="H_R_in"/>
    <map_variables variable_1="H_up" variable_2="H_up"/>
    <map_variables variable_1="H_down" variable_2="H_down"/>
    <map_variables variable_1="H_down_target" variable_2="H_down_target"/>
    <map_variables variable_1="s_v_d" variable_2="s_v_d"/>
    <map_variables variable_1="H_L_out" variable_2="H_L_out"/>
    <map_variables variable_1="H_R_out" variable_2="H_R_out"/>
    <map_variables variable_1="RBC_volume" variable_2="RBC_volume"/>
    <map_variables variable_1="RBC_volume_init" variable_2="RBC_volume_init"/>
    <map_variables variable_1="v_pos" variable_2="v_pos"/>
    <map_variables variable_1="v_neg" variable_2="v_neg"/>
    <map_variables variable_1="v_d_pos" variable_2="v_d_pos"/>
    <map_variables variable_1="v_d_neg" variable_2="v_d_neg"/>
    <map_variables variable_1="H_target" variable_2="H_target"/>
    <map_variables variable_1="H_mean" variable_2="H_mean"/>
    <map_variables variable_1="H_mass_L" variable_2="H_mass_L"/>
    <map_variables variable_1="H_mass_R" variable_2="H_mass_R"/>
    <map_variables variable_1="q_C" variable_2="q_C"/>
    <map_variables variable_1="q" variable_2="q"/>
    <map_variables variable_1="q_us" variable_2="q_us"/>
    <map_variables variable_1="C" variable_2="C"/>
    <map_variables variable_1="Z" variable_2="Z"/>
    <map_variables variable_1="mu_45" variable_2="mu_45"/>
    <map_variables variable_1="mu" variable_2="mu"/>
    <map_variables variable_1="hem_dep_u_rel" variable_2="hem_dep_u_rel"/>
    <map_variables variable_1="R" variable_2="R"/>
    <map_variables variable_1="v" variable_2="v"/>
    <map_variables variable_1="v_mm3_s" variable_2="v_mm3_s"/>
    <map_variables variable_1="u" variable_2="u"/>
    <map_variables variable_1="u_mmHg" variable_2="u_mmHg"/>
    <map_variables variable_1="v_d" variable_2="v_d"/>
    <map_variables variable_1="v_d_mm3_s" variable_2="v_d_mm3_s"/>
  </connection>
</model>
