def model my_model as
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit nS as
    // nanoSieman
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {expo: 3};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_M as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit J_per_MK as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit Farad as
    unit coulomb;
    unit volt {expo: -1};
  enddef;
  def unit picoFarad as
    unit Farad {pref: pico};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  // Density (kg/m3)
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;

  def comp vv_junction as
    // ////global vairbales
    var u3: J_per_m3 {init: 6550, pub: out};
    var t: second {init: 0, pub: out};
    var tau_H_mean: second {init: 0.01, pub: out};
    var mu_plasma: Js_per_m3 {init: 0.001, pub: out};
    var u_ext: J_per_m3 {init: 133, pub: out};
    var v_scale: m3_per_s {init: 1e-16, pub: out};
    var tau_link: second {init: 1e-5, pub: out};
    var H_global_L: dimensionless {init: 0.45, pub: out};
    var H_global_R: dimensionless {init: 0.6, pub: out};
    var v_eps: m3_per_s {init: 1e-30, pub: out};
    // prevent 0/0
    var tau_junc: second {init: 1e-4, pub: out};
    // lag for sampling/holding
    var l_PV1: metre {init: 0.00009, pub: out};
    var r_PV1: metre {init: 0.000008, pub: out};
    var l_VP1: metre {init: 0.0002, pub: out};
    var r_VP1: metre {init: 0.0000077, pub: out};
    var v_in: m3_per_s {init: 1.99e-13, pub: out};
    var t0: second {init: 100, pub: out};
    var tau_sig: second {init: 0.1, pub: out};
    // transition width
    var u_in: J_per_m3 {pub: out};
    u_in = sel
      case t > 100{second}:
        6666{J_per_m3};
      case t <= 100{second}:
        6666{J_per_m3};
    endsel;
    var u_out1: J_per_m3 {init: 6500, pub: out};
    var u_out2_init: J_per_m3 {init: 6500, pub: out};
    var u_out2_final: J_per_m3 {init: 6800, pub: out};
    var u_out2: J_per_m3 {pub: out};
    u_out2 = u_out2_init+(u_out2_final-u_out2_init)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    // ///////to be commented out
    // var u_out_1: J_per_m3 {init: 6100, pub: out};
    // var v_out_3: m3_per_s {init: 1.98e-13, pub: out};
    var l_PP1: metre {init: 0.0005, pub: out};
    var r_PP1: metre {init: 0.000008, pub: out};
    var l_PP2: metre {init: 0.00005, pub: out};
    var r_PP2: metre {init: 0.000004, pub: out};
    var l_PP3: metre {init: 0.00005, pub: out};
    var r_PP3: metre {init: 0.0000035, pub: out};
    // ///for initialization of RBC_mass_PP3,q_PP3
    var div_0: dimensionless {init: 1e-25, pub: out};
    var div_0y: dimensionless {init: 1e-8, pub: out};
    // so when intializing with no flow, hematocrit =0.45 because 0.45+Div_0/div_0
    var H_ph: dimensionless {init: 0.0, pub: out};
    // var H_L_out_VP1: dimensionless {init: 0.6, pub: out};
    var one_mm3: m3 {init: 1e-9, pub: out};
    // 1 mm^3 in m^3
    // /place holder for the blocked vessel in vv junction
    var l_VV1: metre {init: 0.000001, pub: out};
    var r_VV1: metre {init: 0.000005, pub: out};
    var q_C_init: m3 {init: 0, pub: out};
    var l_VV2: metre {init: 0.00000, pub: out};
    var r_VV2: metre {init: 0.000000, pub: out};
    // /////////////////////////////PP1/////////////////////////////////////
    var w_v1: dimensionless {pub: out};
    var w_v2: dimensionless {pub: out};
    w_v1 = 0.5{dimensionless}+1{dimensionless}/pi*atan(v1/v_scale);
    w_v2 = 0.5{dimensionless}+1{dimensionless}/pi*atan(v2/v_scale);
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_PP1R: dimensionless {init: H_global_L, pub: out};
    ode(H_link_PP1R, t) = (H_L_out_VP1-H_link_PP1R)/tau_link;
    var H_L_in_PP1: dimensionless {pub: out};
    var H_R_in_PP1: dimensionless {pub: out};
    var H_up_PP1: dimensionless {pub: out};
    var H_down_PP1: dimensionless {init: H_global_L, pub: out};
    var H_L_out_PP1: dimensionless {pub: out};
    var H_R_out_PP1: dimensionless {pub: out};
    var gamma_mirror: dimensionless {init: 0.02, pub: out};
    var s_v2: dimensionless {pub: out};
    var tau_H_down: second {init: 0.00001, pub: out};
    s_v2 = abs(v2)/(abs(v2)+v_eps);
    var H_down_PP1_target: dimensionless {pub: out};
    H_down_PP1_target = s_v2*(H_mean_PP1+gamma_mirror*(H_mean_PP1-H_up_PP1))+(1{dimensionless}-s_v2)*H_mean_PP1;
    ode(H_down_PP1, t) = (H_down_PP1_target-H_down_PP1)/tau_H_down;
    H_L_in_PP1 = H_global_L;
    // *** loop-broken "incoming from right" ***
    H_R_in_PP1 = H_link_PP1R;
    H_up_PP1 = w_v2*H_L_in_PP1+(1{dimensionless}-w_v2)*H_R_in_PP1;
    // H_down_PP1  = 2{dimensionless}*H_mean_PP1-H_up_PP1;
    H_L_out_PP1 = (1{dimensionless}-w_v2)*H_down_PP1+w_v2*H_L_in_PP1;
    H_R_out_PP1 = w_v2*H_down_PP1+(1{dimensionless}-w_v2)*H_R_in_PP1;
    var RBC_mass_PP1: m3 {init: RBC_mass_PP1_init, pub: out};
    var RBC_mass_PP1_init: m3 {pub: out};
    RBC_mass_PP1_init = H_global_L*q_us_PP1;
    var H_PP1_target: dimensionless {pub: out};
    H_PP1_target = RBC_mass_PP1/q_PP1;
    var H_mean_PP1: dimensionless {init: H_global_L, pub: out};
    ode(H_mean_PP1, t) = (H_PP1_target-H_mean_PP1)/tau_H_mean;
    var H_mass_L_PP1: dimensionless {pub: out};
    var H_mass_R_PP1: dimensionless {pub: out};
    H_mass_L_PP1 = w_v1*H_L_in_PP1+(1{dimensionless}-w_v1)*H_L_out_PP1;
    H_mass_R_PP1 = w_v2*H_R_out_PP1+(1{dimensionless}-w_v2)*H_R_in_PP1;
    // ode(RBC_mass_PP1, t) = v1*H_mass_L_PP1-v2*H_mass_R_PP1;
    var v1_pos: m3_per_s {pub: out};
    var v1_neg: m3_per_s {pub: out};
    var v2_pos: m3_per_s {pub: out};
    var v2_neg: m3_per_s {pub: out};
    v1_pos = w_v1*v1;
    // inflow from left (v1>0)
    v1_neg = (1{dimensionless}-w_v1)*(-v1);
    // outflow to left (v1<0)
    v2_pos = w_v2*v2;
    // flow from left to right (v2>0) => outflow on right
    v2_neg = (1{dimensionless}-w_v2)*(-v2);
    // inflow from right (v2<0)
    ode(RBC_mass_PP1, t) = v1*H_mass_L_PP1-v2*H_mass_R_PP1;
    // inflows
    // outflows
    // //////////////
    var q_C_PP1: m3 {init: q_C_init, pub: out};
    var q_PP1: m3 {pub: out};
    var q_us_PP1: m3 {pub: out};
    q_us_PP1 = pi*sqr(r_PP1)*l_PP1;
    q_PP1 = q_us_PP1+q_C_PP1;
    var C_PP1: m6_per_J {pub: out};
    C_PP1 = pi*sqr(8.5e-9{metre})*l_PP1/133.322{J_per_m3};
    var Z_PP1: dimensionless {pub: out};
    Z_PP1 = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r_PP1*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r_PP1*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r_PP1*1e6{dimensionless}, 12{dimensionless}));
    var mu_45_PP1: dimensionless;
    mu_45_PP1 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r_PP1*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_PP1*1e6{dimensionless}, 0.645{dimensionless}));
    var mu_PP1: Js_per_m3 {pub: out};
    mu_PP1 = hem_dep_u_rel_PP1*mu_plasma;
    var hem_dep_u_rel_PP1: dimensionless;
    hem_dep_u_rel_PP1 = 1{dimensionless}+(mu_45_PP1-1{dimensionless})*(pow(1{dimensionless}-H_mean_PP1, Z_PP1)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z_PP1)-1{dimensionless})*sqr(2{dimensionless}*r_PP1*1e6{dimensionless}/(2{dimensionless}*r_PP1*1e6{dimensionless}-1.1{metre}));
    var R_PP1: Js_per_m6 {pub: out};
    R_PP1 = 8{dimensionless}*mu_PP1*l_PP1/(pi*pow(r_PP1, 4{dimensionless}));
    var v1: m3_per_s {pub: out};
    var v1_mm3_s: mm3_per_s {pub: out};
    v1_mm3_s = v1/one_mm3;
    v1 = (u_in-u1)/(R_PP1/2{dimensionless});
    var u1: J_per_m3 {pub: out};
    var u1_mmHg: dimensionless {pub: out};
    u1_mmHg = u1/133.322{J_per_m3};
    u1 = q_C_PP1/C_PP1+u_ext;
    ode(q_C_PP1, t) = v1-v2;
    var v2: m3_per_s {pub: out};
    var v2_mm3_s: mm3_per_s {pub: out};
    v2_mm3_s = v2/one_mm3;
    v2 = (u1-u2)/(R_PP1/2{dimensionless});
    var w_v3: dimensionless {pub: out};
    w_v3 = 0.5{dimensionless}+1{dimensionless}/pi*atan(v3/v_scale);
    // ///////////////////coupling between modules when L-R flow
    var H_link_VP1L: dimensionless {init: H_global_L, pub: out};
    ode(H_link_VP1L, t) = (H_R_out_PP1-H_link_VP1L)/tau_link;
    var H_L_in_VP1: dimensionless {pub: out};
    var H_R_in_VP1: dimensionless {pub: out};
    var H_up_VP1: dimensionless {pub: out};
    var H_down_VP1: dimensionless {init: H_global_L, pub: out};
    var H_L_out_VP1: dimensionless {pub: out};
    var H_R_out_VP1: dimensionless {pub: out};
    var H_down_VP1_target: dimensionless {pub: out};
    H_down_VP1_target = s_v2*(H_mean_VP1+gamma_mirror*(H_mean_VP1-H_up_VP1))+(1{dimensionless}-s_v2)*H_mean_VP1;
    ode(H_down_VP1, t) = (H_down_VP1_target-H_down_VP1)/tau_H_down;
    // *** loop-broken "incoming from left" ***
    H_L_in_VP1 = H_link_VP1L;
    H_R_in_VP1 = H_global_R;
    H_up_VP1 = w_v3*H_L_in_VP1+(1{dimensionless}-w_v3)*H_R_in_VP1;
    // w_v3 just determines the directionality inside the vessel and therefore which L or R interface to use
    // H_down_VP1  = 2{dimensionless}*H_mean_VP1-H_up_VP1;
    H_L_out_VP1 = (1{dimensionless}-w_v3)*H_down_VP1+w_v3*H_L_in_VP1;
    H_R_out_VP1 = w_v3*H_down_VP1+(1{dimensionless}-w_v3)*H_R_in_VP1;
    var RBC_mass_VP1: m3 {init: RBC_mass_VP1_init, pub: out};
    var RBC_mass_VP1_init: m3 {pub: out};
    RBC_mass_VP1_init = H_global_L*q_us_VP1;
    var H_VP1_target: dimensionless {pub: out};
    H_VP1_target = RBC_mass_VP1/q_VP1;
    var H_mean_VP1: dimensionless {init: H_global_L, pub: out};
    ode(H_mean_VP1, t) = (H_VP1_target-H_mean_VP1)/tau_H_mean;
    var H_mass_L_VP1: dimensionless {pub: out};
    var H_mass_R_VP1: dimensionless {pub: out};
    H_mass_L_VP1 = w_v2*H_L_in_VP1+(1{dimensionless}-w_v2)*H_L_out_VP1;
    H_mass_R_VP1 = w_v3*H_R_out_VP1+(1{dimensionless}-w_v3)*H_R_in_VP1;
    ode(RBC_mass_VP1, t) = v2*H_mass_L_VP1-v3*H_mass_R_VP1;
    var q_C_VP1: m3 {init: q_C_init, pub: out};
    var q_VP1: m3 {pub: out};
    var q_us_VP1: m3 {pub: out};
    q_us_VP1 = pi*sqr(r_VP1)*l_VP1;
    q_VP1 = q_us_VP1+q_C_VP1;
    var C_VP1: m6_per_J {pub: out};
    C_VP1 = pi*sqr(8.5e-9{metre})*l_VP1/133.322{J_per_m3};
    var Z_VP1: dimensionless {pub: out};
    Z_VP1 = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r_VP1*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r_VP1*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r_VP1*1e6{dimensionless}, 12{dimensionless}));
    var mu_45_VP1: dimensionless;
    mu_45_VP1 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r_VP1*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_VP1*1e6{dimensionless}, 0.645{dimensionless}));
    var mu_VP1: Js_per_m3 {pub: out};
    mu_VP1 = hem_dep_u_rel_VP1*mu_plasma;
    var hem_dep_u_rel_VP1: dimensionless;
    hem_dep_u_rel_VP1 = 1{dimensionless}+(mu_45_VP1-1{dimensionless})*(pow(1{dimensionless}-H_mean_VP1, Z_VP1)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z_VP1)-1{dimensionless})*sqr(2{dimensionless}*r_VP1*1e6{dimensionless}/(2{dimensionless}*r_VP1*1e6{dimensionless}-1.1{metre}));
    var R_VP1: Js_per_m6 {pub: out};
    R_VP1 = 8{dimensionless}*mu_VP1*l_VP1/(pi*pow(r_VP1, 4{dimensionless}));
    var v3: m3_per_s {pub: out};
    var v3_mm3_s: mm3_per_s {pub: out};
    v3_mm3_s = v3/one_mm3;
    v3 = (u2-u3)/R_VP1;
    var u2: J_per_m3 {pub: out};
    var u2_mmHg: dimensionless {pub: out};
    u2_mmHg = u2/133.322{J_per_m3};
    u2 = q_C_VP1/C_VP1+u_ext;
    ode(q_C_VP1, t) = v2-v3;
  enddef;
enddef;
