def model my_model as
  def unit millivolt as
    unit volt {pref: milli};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit nS as
    // nanoSieman
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {expo: 3};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_M as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit J_per_MK as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit Farad as
    unit coulomb;
    unit volt {expo: -1};
  enddef;
  def unit picoFarad as
    unit Farad {pref: pico};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  // Density (kg/m3)
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;

  def comp vv_junction as
    // ////global vairbales
    // var u3: J_per_m3 {init: 6550, pub: out};
    var t: second {init: 0, pub: out};
    var tau_H_mean: second {init: 0.01, pub: out};
    var mu_plasma: Js_per_m3 {init: 0.001, pub: out};
    var u_ext: J_per_m3 {init: 133, pub: out};
    var v_scale: m3_per_s {init: 1e-16, pub: out};
    var tau_link: second {init: 1e-5, pub: out};
    var H_global_L: dimensionless {init: 0.45, pub: out};
    var H_global_R: dimensionless {init: 0.6, pub: out};
    var v_eps: m3_per_s {init: 1e-30, pub: out};
    // prevent 0/0
    var tau_junc: second {init: 1e-4, pub: out};
    // lag for sampling/holding
    var l_PV1: metre {init: 0.00009, pub: out};
    var r_PV1: metre {init: 0.000008, pub: out};
    var l_VP1: metre {init: 0.0002, pub: out};
    var r_VP1: metre {init: 0.0000077, pub: out};
    var v_in: m3_per_s {init: 1.99e-13, pub: out};
    var t0: second {init: 100, pub: out};
    var tau_sig: second {init: 0.1, pub: out};
    // transition width
    var u_in: J_per_m3 {pub: out};
    u_in = sel
      case t > 100{second}:
        6666{J_per_m3};
      case t <= 100{second}:
        6666{J_per_m3};
    endsel;
    var u_out1: J_per_m3 {init: 6500, pub: out};
    var u_out2_init: J_per_m3 {init: 6500, pub: out};
    var u_out2_final: J_per_m3 {init: 6800, pub: out};
    var u_out2: J_per_m3 {pub: out};
    u_out2 = u_out2_init+(u_out2_final-u_out2_init)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    // ///////to be commented out
    // var u_out_1: J_per_m3 {init: 6100, pub: out};
    // var v_out_3: m3_per_s {init: 1.98e-13, pub: out};
    var l_PP1: metre {init: 0.0005, pub: out};
    var r_PP1: metre {init: 0.000008, pub: out};
    var l_PP2: metre {init: 0.00005, pub: out};
    var r_PP2: metre {init: 0.000004, pub: out};
    var l_PP3: metre {init: 0.00005, pub: out};
    var r_PP3: metre {init: 0.0000035, pub: out};
    // ///for initialization of RBC_mass_PP3,q_PP3
    var div_0: dimensionless {init: 1e-25, pub: out};
    var div_0y: dimensionless {init: 1e-8, pub: out};
    // so when intializing with no flow, hematocrit =0.45 because 0.45+Div_0/div_0
    var H_ph: dimensionless {init: 0.0, pub: out};
    // var H_L_out_VP1: dimensionless {init: 0.6, pub: out};
    var one_mm3: m3 {init: 1e-9, pub: out};
    // 1 mm^3 in m^3
    // /place holder for the blocked vessel in vv junction
    var l_VV1: metre {init: 0.000001, pub: out};
    var r_VV1: metre {init: 0.0000077, pub: out};
    var q_C_init: m3 {init: 0, pub: out};
    var l_VV2: metre {init: 0.00000, pub: out};
    var r_VV2: metre {init: 0.000000, pub: out};
    // /////////////////////////////PP1/////////////////////////////////////
    var w_v1: dimensionless {pub: out};
    var w_v2: dimensionless {pub: out};
    w_v1 = 0.5{dimensionless}+1{dimensionless}/pi*atan(v1/v_scale);
    w_v2 = 0.5{dimensionless}+1{dimensionless}/pi*atan(v2/v_scale);
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_PP1R: dimensionless {init: H_global_L, pub: out};
    ode(H_link_PP1R, t) = (H_L_out_VP1-H_link_PP1R)/tau_link;
    var H_L_in_PP1: dimensionless {pub: out};
    var H_R_in_PP1: dimensionless {pub: out};
    var H_up_PP1: dimensionless {pub: out};
    var H_down_PP1: dimensionless {init: H_global_L, pub: out};
    var H_L_out_PP1: dimensionless {pub: out};
    var H_R_out_PP1: dimensionless {pub: out};
    var gamma_mirror: dimensionless {init: 0.02, pub: out};
    var s_v2: dimensionless {pub: out};
    var tau_H_down: second {init: 0.00001, pub: out};
    s_v2 = abs(v2)/(abs(v2)+v_eps);
    var H_down_PP1_target: dimensionless {pub: out};
    H_down_PP1_target = s_v2*(H_mean_PP1+gamma_mirror*(H_mean_PP1-H_up_PP1))+(1{dimensionless}-s_v2)*H_mean_PP1;
    ode(H_down_PP1, t) = (H_down_PP1_target-H_down_PP1)/tau_H_down;
    H_L_in_PP1 = H_global_L;
    // *** loop-broken "incoming from right" ***
    H_R_in_PP1 = H_link_PP1R;
    H_up_PP1 = w_v2*H_L_in_PP1+(1{dimensionless}-w_v2)*H_R_in_PP1;
    // H_down_PP1  = 2{dimensionless}*H_mean_PP1-H_up_PP1;
    H_L_out_PP1 = (1{dimensionless}-w_v2)*H_down_PP1+w_v2*H_L_in_PP1;
    H_R_out_PP1 = w_v2*H_down_PP1+(1{dimensionless}-w_v2)*H_R_in_PP1;
    var RBC_mass_PP1: m3 {init: RBC_mass_PP1_init, pub: out};
    var RBC_mass_PP1_init: m3 {pub: out};
    RBC_mass_PP1_init = H_global_L*q_us_PP1;
    var H_PP1_target: dimensionless {pub: out};
    H_PP1_target = RBC_mass_PP1/q_PP1;
    var H_mean_PP1: dimensionless {init: H_global_L, pub: out};
    ode(H_mean_PP1, t) = (H_PP1_target-H_mean_PP1)/tau_H_mean;
    var H_mass_L_PP1: dimensionless {pub: out};
    var H_mass_R_PP1: dimensionless {pub: out};
    H_mass_L_PP1 = w_v1*H_L_in_PP1+(1{dimensionless}-w_v1)*H_L_out_PP1;
    H_mass_R_PP1 = w_v2*H_R_out_PP1+(1{dimensionless}-w_v2)*H_R_in_PP1;
    // ode(RBC_mass_PP1, t) = v1*H_mass_L_PP1-v2*H_mass_R_PP1;
    var v1_pos: m3_per_s {pub: out};
    var v1_neg: m3_per_s {pub: out};
    var v2_pos: m3_per_s {pub: out};
    var v2_neg: m3_per_s {pub: out};
    v1_pos = w_v1*v1;
    // inflow from left (v1>0)
    v1_neg = (1{dimensionless}-w_v1)*(-v1);
    // outflow to left (v1<0)
    v2_pos = w_v2*v2;
    // flow from left to right (v2>0) => outflow on right
    v2_neg = (1{dimensionless}-w_v2)*(-v2);
    // inflow from right (v2<0)
    ode(RBC_mass_PP1, t) = v1*H_mass_L_PP1-v2*H_mass_R_PP1;
    // inflows
    // outflows
    // //////////////
    var q_C_PP1: m3 {init: q_C_init, pub: out};
    var q_PP1: m3 {pub: out};
    var q_us_PP1: m3 {pub: out};
    q_us_PP1 = pi*sqr(r_PP1)*l_PP1;
    q_PP1 = q_us_PP1+q_C_PP1;
    var C_PP1: m6_per_J {pub: out};
    C_PP1 = pi*sqr(8.5e-9{metre})*l_PP1/133.322{J_per_m3};
    var Z_PP1: dimensionless {pub: out};
    Z_PP1 = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r_PP1*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r_PP1*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r_PP1*1e6{dimensionless}, 12{dimensionless}));
    var mu_45_PP1: dimensionless;
    mu_45_PP1 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r_PP1*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_PP1*1e6{dimensionless}, 0.645{dimensionless}));
    var mu_PP1: Js_per_m3 {pub: out};
    mu_PP1 = hem_dep_u_rel_PP1*mu_plasma;
    var hem_dep_u_rel_PP1: dimensionless;
    hem_dep_u_rel_PP1 = 1{dimensionless}+(mu_45_PP1-1{dimensionless})*(pow(1{dimensionless}-H_mean_PP1, Z_PP1)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z_PP1)-1{dimensionless})*sqr(2{dimensionless}*r_PP1*1e6{dimensionless}/(2{dimensionless}*r_PP1*1e6{dimensionless}-1.1{metre}));
    var R_PP1: Js_per_m6 {pub: out};
    R_PP1 = 8{dimensionless}*mu_PP1*l_PP1/(pi*pow(r_PP1, 4{dimensionless}));
    var v1: m3_per_s {pub: out};
    var v1_mm3_s: mm3_per_s {pub: out};
    v1_mm3_s = v1/one_mm3;
    v1 = (u_in-u1)/(R_PP1/2{dimensionless});
    var u1: J_per_m3 {pub: out};
    var u1_mmHg: dimensionless {pub: out};
    u1_mmHg = u1/133.322{J_per_m3};
    u1 = q_C_PP1/C_PP1+u_ext;
    ode(q_C_PP1, t) = v1-v2;
    var v2: m3_per_s {pub: out};
    var v2_mm3_s: mm3_per_s {pub: out};
    v2_mm3_s = v2/one_mm3;
    v2 = (u1-u2)/(R_PP1/2{dimensionless});
    var w_v3: dimensionless {pub: out};
    w_v3 = 0.5{dimensionless}+1{dimensionless}/pi*atan(v3/v_scale);
    // ///////////////////coupling between modules when L-R flow
    var H_link_VP1L: dimensionless {init: H_global_L, pub: out};
    ode(H_link_VP1L, t) = (H_R_out_PP1-H_link_VP1L)/tau_link;
    var H_L_in_VP1: dimensionless {pub: out};
    var H_R_in_VP1: dimensionless {pub: out};
    H_R_in_VP1 = H_from1;
    var H_up_VP1: dimensionless {pub: out};
    var H_down_VP1: dimensionless {init: H_global_L, pub: out};
    var H_L_out_VP1: dimensionless {pub: out};
    var H_R_out_VP1: dimensionless {pub: out};
    var H_down_VP1_target: dimensionless {pub: out};
    H_down_VP1_target = s_v2*(H_mean_VP1+gamma_mirror*(H_mean_VP1-H_up_VP1))+(1{dimensionless}-s_v2)*H_mean_VP1;
    ode(H_down_VP1, t) = (H_down_VP1_target-H_down_VP1)/tau_H_down;
    // *** loop-broken "incoming from left" ***
    H_L_in_VP1 = H_link_VP1L;
    // H_R_in_VP1 = H_global_R;
    H_up_VP1 = w_v3*H_L_in_VP1+(1{dimensionless}-w_v3)*H_R_in_VP1;
    // w_v3 just determines the directionality inside the vessel and therefore which L or R interface to use
    // H_down_VP1  = 2{dimensionless}*H_mean_VP1-H_up_VP1;
    H_L_out_VP1 = (1{dimensionless}-w_v3)*H_down_VP1+w_v3*H_L_in_VP1;
    H_R_out_VP1 = w_v3*H_down_VP1+(1{dimensionless}-w_v3)*H_R_in_VP1;
    var RBC_mass_VP1: m3 {init: RBC_mass_VP1_init, pub: out};
    var RBC_mass_VP1_init: m3 {pub: out};
    RBC_mass_VP1_init = H_global_L*q_us_VP1;
    var H_VP1_target: dimensionless {pub: out};
    H_VP1_target = RBC_mass_VP1/q_VP1;
    var H_mean_VP1: dimensionless {init: H_global_L, pub: out};
    ode(H_mean_VP1, t) = (H_VP1_target-H_mean_VP1)/tau_H_mean;
    var H_mass_L_VP1: dimensionless {pub: out};
    var H_mass_R_VP1: dimensionless {pub: out};
    H_mass_L_VP1 = w_v2*H_L_in_VP1+(1{dimensionless}-w_v2)*H_L_out_VP1;
    H_mass_R_VP1 = w_v3*H_R_out_VP1+(1{dimensionless}-w_v3)*H_R_in_VP1;
    ode(RBC_mass_VP1, t) = v2*H_mass_L_VP1-v3*H_mass_R_VP1;
    var q_C_VP1: m3 {init: q_C_init, pub: out};
    var q_VP1: m3 {pub: out};
    var q_us_VP1: m3 {pub: out};
    q_us_VP1 = pi*sqr(r_VP1)*l_VP1;
    q_VP1 = q_us_VP1+q_C_VP1;
    var C_VP1: m6_per_J {pub: out};
    C_VP1 = pi*sqr(8.5e-9{metre})*l_VP1/133.322{J_per_m3};
    var Z_VP1: dimensionless {pub: out};
    Z_VP1 = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r_VP1*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r_VP1*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r_VP1*1e6{dimensionless}, 12{dimensionless}));
    var mu_45_VP1: dimensionless;
    mu_45_VP1 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r_VP1*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_VP1*1e6{dimensionless}, 0.645{dimensionless}));
    var mu_VP1: Js_per_m3 {pub: out};
    mu_VP1 = hem_dep_u_rel_VP1*mu_plasma;
    var hem_dep_u_rel_VP1: dimensionless;
    hem_dep_u_rel_VP1 = 1{dimensionless}+(mu_45_VP1-1{dimensionless})*(pow(1{dimensionless}-H_mean_VP1, Z_VP1)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z_VP1)-1{dimensionless})*sqr(2{dimensionless}*r_VP1*1e6{dimensionless}/(2{dimensionless}*r_VP1*1e6{dimensionless}-1.1{metre}));
    var R_VP1: Js_per_m6 {pub: out};
    R_VP1 = 8{dimensionless}*mu_VP1*l_VP1/(pi*pow(r_VP1, 4{dimensionless}));
    var v3: m3_per_s {pub: out};
    var v3_mm3_s: mm3_per_s {pub: out};
    v3_mm3_s = v3/one_mm3;
    v3 = (u2-u3)/R_VP1;
    var u2: J_per_m3 {pub: out};
    var u2_mmHg: dimensionless {pub: out};
    u2_mmHg = u2/133.322{J_per_m3};
    u2 = q_C_VP1/C_VP1+u_ext;
    ode(q_C_VP1, t) = v2-v3;
    // //////////////////////////////////////////
    // /////////////////////////////////////////
    // ///////////////////////////////////////////
    // ////////////////////////////////////////////
    // //////////////////VV junctional mapping//////////////////////////
    // ///////////////////////vessel mapping coupling module/////////////////////
    var vbc1: m3_per_s {pub: out};
    var vbc2: m3_per_s {pub: out};
    var vbc3: m3_per_s {pub: out};
    var vbc4: m3_per_s {pub: out};
    vbc1 = v3;
    vbc2 = 0{m3_per_s};
    //  if unused
    // vbc4 = 3e-13{m3_per_s};
    vbc3 = v5;
    vbc4 = v7;
    var vj1: m3_per_s {pub: out};
    var vj2: m3_per_s {pub: out};
    var vj3: m3_per_s {pub: out};
    var vj4: m3_per_s {pub: out};
    vj1 = vbc1;
    vj2 = vbc2;
    vj3 = -vbc3;
    vj4 = -vbc4;
    // ////////////Hematocrit to port (vessel to junction) mapping////////////
    var H_to1: dimensionless {pub: out};
    var H_to2: dimensionless {pub: out};
    var H_to3: dimensionless {pub: out};
    var H_to4: dimensionless {pub: out};
    // EXAMPLES — replace these with your actual port hematocrits:
    H_to1 = H_R_out_VP1;
    // port1 vessel -> junction
    H_to2 = H_global_L;
    // if unused, keep something harmless
    H_to3 = H_L_out_PP2;
    // port3 vessel -> junction
    H_to4 = H_L_out_PP3;
    // port4 vessel -> junction
    // H_to3 = H_L_out_PP2;
    // H_to4 = H_L_out_PP3;
    // H_to2 = H_global (if unused)
    // H from junction (junction-vessel) mapping
    // H_L_in_PP2 = H_from3;
    // H_L_in_PP3 = H_from4;
    // ---------- what should a DAUGHTER receive? ----------
    // ---------- split desired hematocrit for each port ----------
    var H_split1: dimensionless {pub: out};
    var H_split2: dimensionless {pub: out};
    var H_split3: dimensionless {pub: out};
    var H_split4: dimensionless {pub: out};
    H_split1 = sel
      case alpha1 == 1{dimensionless}:
        H_VV1_out_alpha;
      case beta1 == 1{dimensionless}:
        H_VV1_out_beta;
      case true:
        H_to1;
    endsel;
    // not a split-daughter => unchanged
    H_split2 = sel
      case alpha2 == 1{dimensionless}:
        H_VV1_out_alpha;
      case beta2 == 1{dimensionless}:
        H_VV1_out_beta;
      case true:
        H_to2;
    endsel;
    H_split3 = sel
      case alpha3 == 1{dimensionless}:
        H_VV1_out_alpha;
      case beta3 == 1{dimensionless}:
        H_VV1_out_beta;
      case true:
        H_to3;
    endsel;
    H_split4 = sel
      case alpha4 == 1{dimensionless}:
        H_VV1_out_alpha;
      case beta4 == 1{dimensionless}:
        H_VV1_out_beta;
      case true:
        H_to4;
    endsel;
    var H_daughter1: dimensionless {pub: out};
    var H_daughter2: dimensionless {pub: out};
    var H_daughter3: dimensionless {pub: out};
    var H_daughter4: dimensionless {pub: out};
    H_daughter1 = sel
      case is_merge == 1{dimensionless}:
        H_mean_VV1;
      case is_split == 1{dimensionless}:
        H_split1;
      case true:
        H_to1;
    endsel;
    H_daughter2 = sel
      case is_merge == 1{dimensionless}:
        H_mean_VV1;
      case is_split == 1{dimensionless}:
        H_split2;
      case true:
        H_to2;
    endsel;
    H_daughter3 = sel
      case is_merge == 1{dimensionless}:
        H_mean_VV1;
      case is_split == 1{dimensionless}:
        H_split3;
      case true:
        H_to3;
    endsel;
    H_daughter4 = sel
      case is_merge == 1{dimensionless}:
        H_mean_VV1;
      case is_split == 1{dimensionless}:
        H_split4;
      case true:
        H_to4;
    endsel;
    // ---------- H_from*_target: if daughter -> H_daughter*, else unchanged ----------
    var H_from1_target: dimensionless {pub: out};
    var H_from2_target: dimensionless {pub: out};
    var H_from3_target: dimensionless {pub: out};
    var H_from4_target: dimensionless {pub: out};
    H_from1_target = sel
      case bc1_is_out == 1{dimensionless}:
        H_daughter1;
      case true:
        H_to1;
    endsel;
    H_from2_target = sel
      case bc2_is_out == 1{dimensionless}:
        H_daughter2;
      case true:
        H_to2;
    endsel;
    H_from3_target = sel
      case bc3_is_out == 1{dimensionless}:
        H_daughter3;
      case true:
        H_to3;
    endsel;
    H_from4_target = sel
      case bc4_is_out == 1{dimensionless}:
        H_daughter4;
      case true:
        H_to4;
    endsel;
    // ==========================================================
    // (E) APPLY/HOLD junction outputs with lag (avoid reversal chatter)
    //     H_fromi is what you feed into the vessel inlet.
    //     It only updates when the port is a daughter.
    // ==========================================================
    var H_from1: dimensionless {init: H_global_L, pub: out};
    var H_from2: dimensionless {init: H_global_L, pub: out};
    var H_from3: dimensionless {init: H_global_L, pub: out};
    var H_from4: dimensionless {init: H_global_L, pub: out};
    // When w_out ~ 0 (not a daughter), derivative ~0 => holds last daughter value.
    ode(H_from1, t) = w_out1*(H_from1_target-H_from1)/tau_junc;
    ode(H_from2, t) = w_out2*(H_from2_target-H_from2)/tau_junc;
    ode(H_from3, t) = w_out3*(H_from3_target-H_from3)/tau_junc;
    ode(H_from4, t) = w_out4*(H_from4_target-H_from4)/tau_junc;
    D1 = 2{dimensionless}*r_VP1;
    // <-- port1 attached vessel diameter (example: parent VV side)
    D2 = 2{dimensionless}*0{metre};
    // <-- port2 (if unused, still define)
    D3 = 2{dimensionless}*r_PP2;
    // <-- port3 daughter candidate
    D4 = 2{dimensionless}*r_PP3;
    // <-- port4 daughter candidate
    // ////////////////////local junction type and feeding vessel determination////////
    //  -------------------------
    //  2) Smooth in/out weights and Qin/Qout
    //  -------------------------
    var w_in1: dimensionless {pub: out};
    var w_in2: dimensionless {pub: out};
    var w_in3: dimensionless {pub: out};
    var w_in4: dimensionless {pub: out};
    // 1 when vj is positive, 0 when vj is 0
    w_in1 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj1/v_scale);
    w_in2 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj2/v_scale);
    w_in3 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj3/v_scale);
    w_in4 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj4/v_scale);
    // daughter weights (also smooth)
    var w_out1: dimensionless {pub: out};
    var w_out2: dimensionless {pub: out};
    var w_out3: dimensionless {pub: out};
    var w_out4: dimensionless {pub: out};
    w_out1 = 1{dimensionless}-w_in1;
    // ~1 if vj1<0
    w_out2 = 1{dimensionless}-w_in2;
    w_out3 = 1{dimensionless}-w_in3;
    w_out4 = 1{dimensionless}-w_in4;
    var Qin1: m3_per_s {pub: out};
    var Qin2: m3_per_s {pub: out};
    var Qin3: m3_per_s {pub: out};
    var Qin4: m3_per_s {pub: out};
    var Qout1: m3_per_s {pub: out};
    var Qout2: m3_per_s {pub: out};
    var Qout3: m3_per_s {pub: out};
    var Qout4: m3_per_s {pub: out};
    // absolute flow into the junction
    Qin1 = w_in1*vj1;
    Qin2 = w_in2*vj2;
    Qin3 = w_in3*vj3;
    Qin4 = w_in4*vj4;
    // absolute (magnitude) of flow out of the junction
    Qout1 = w_out1*(-vj1);
    Qout2 = w_out2*(-vj2);
    Qout3 = w_out3*(-vj3);
    Qout4 = w_out4*(-vj4);
    var Qin_tot: m3_per_s {pub: out};
    var Qout_tot: m3_per_s {pub: out};
    Qin_tot = Qin1+Qin2+Qin3+Qin4;
    Qout_tot = Qout1+Qout2+Qout3+Qout4;
    // -------------------------
    // 3) Hard-ish classification flags (for logic only)
    // -------------------------
    var bc1_is_in: dimensionless {pub: out};
    var bc2_is_in: dimensionless {pub: out};
    var bc3_is_in: dimensionless {pub: out};
    var bc4_is_in: dimensionless {pub: out};
    var bc1_is_out: dimensionless {pub: out};
    var bc2_is_out: dimensionless {pub: out};
    var bc3_is_out: dimensionless {pub: out};
    var bc4_is_out: dimensionless {pub: out};
    bc1_is_in = sel
      case Qin1 > 1e-18{m3_per_s}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc2_is_in = sel
      case Qin2 > 1e-18{m3_per_s}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc3_is_in = sel
      case Qin3 > 1e-18{m3_per_s}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc4_is_in = sel
      case Qin4 > 1e-18{m3_per_s}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc1_is_out = sel
      case Qout1 > 1e-18{m3_per_s}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc2_is_out = sel
      case Qout2 > 1e-18{m3_per_s}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc3_is_out = sel
      case Qout3 > 1e-18{m3_per_s}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc4_is_out = sel
      case Qout4 > 1e-18{m3_per_s}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    var n_in: dimensionless {pub: out};
    var n_out: dimensionless {pub: out};
    n_in = bc1_is_in+bc2_is_in+bc3_is_in+bc4_is_in;
    n_out = bc1_is_out+bc2_is_out+bc3_is_out+bc4_is_out;
    // junction_type: +1 split (1 feeder), -1 merge (>=2 feeders), 0 other/degenerate
    var junction_type: dimensionless {pub: out};
    junction_type = sel
      case n_in == 1{dimensionless}:
        1{dimensionless};
      case n_in >= 2{dimensionless}:
        -1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    // --- junction mode flags derived from your junction_type ---
    var is_split: dimensionless {pub: out};
    var is_merge: dimensionless {pub: out};
    is_split = sel
      case junction_type == 1{dimensionless}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    is_merge = sel
      case junction_type == -1{dimensionless}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    // ==========================================================
    // (B) SAMPLE/HOLD "effective feeding hematocrits" (break loops)
    //     Each H_to_i_feed only updates when that port is feeding.
    // ==========================================================
    var H_to1_feed: dimensionless {init: H_global_L, pub: out};
    var H_to2_feed: dimensionless {init: H_global_L, pub: out};
    var H_to3_feed: dimensionless {init: H_global_L, pub: out};
    var H_to4_feed: dimensionless {init: H_global_L, pub: out};
    // When w_in ~ 0 (not feeding), derivative ~0 => holds last feeding value.
    ode(H_to1_feed, t) = w_in1*(H_to1-H_to1_feed)/tau_junc;
    ode(H_to2_feed, t) = w_in2*(H_to2-H_to2_feed)/tau_junc;
    ode(H_to3_feed, t) = w_in3*(H_to3-H_to3_feed)/tau_junc;
    ode(H_to4_feed, t) = w_in4*(H_to4-H_to4_feed)/tau_junc;
    // ///////////////////////
    // ////////////////////////
    // ////////////////////////////////pries' law for bifurcation//////////////////
    var D1: metre {pub: out};
    // diameter of vessel at port 1 (junction side)
    var D2: metre {pub: out};
    // diameter of vessel at port 2
    var D3: metre {pub: out};
    // diameter of vessel at port 3
    var D4: metre {pub: out};
    // diameter of vessel at port 4
    // ---------- pick FEED port in split: the largest Qin (ties broken 1->2->3->4) ----------
    var feed1: dimensionless {pub: out};
    var feed2: dimensionless {pub: out};
    var feed3: dimensionless {pub: out};
    var feed4: dimensionless {pub: out};
    feed1 = sel
      case (is_split == 1{dimensionless}) and (Qin1 >= Qin2) and (Qin1 >= Qin3) and (Qin1 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed2 = sel
      case (is_split == 1{dimensionless}) and (Qin2 > Qin1) and (Qin2 >= Qin3) and (Qin2 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed3 = sel
      case (is_split == 1{dimensionless}) and (Qin3 > Qin1) and (Qin3 > Qin2) and (Qin3 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed4 = sel
      case (is_split == 1{dimensionless}) and (Qin4 > Qin1) and (Qin4 > Qin2) and (Qin4 > Qin3):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    // ---------- alpha = daughter port with biggest Qout (ties 1->2->3->4) ----------
    var alpha1: dimensionless {pub: out};
    var alpha2: dimensionless {pub: out};
    var alpha3: dimensionless {pub: out};
    var alpha4: dimensionless {pub: out};
    // alpha1 if port1 is a daughter AND has >= Qout than others
    alpha1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (Qout1 >= Qout2) and (Qout1 >= Qout3) and (Qout1 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    // alpha2 only if not alpha1 (tie-break) and port2 is a daughter and beats remaining
    alpha2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (Qout2 > Qout1) and (Qout2 >= Qout3) and (Qout2 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (Qout3 > Qout1) and (Qout3 > Qout2) and (Qout3 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (Qout4 > Qout1) and (Qout4 > Qout2) and (Qout4 > Qout3):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    // ---------- beta = second-biggest daughter outflow (excluding alpha) ----------
    var Qout1_rem: m3_per_s {pub: out};
    var Qout2_rem: m3_per_s {pub: out};
    var Qout3_rem: m3_per_s {pub: out};
    var Qout4_rem: m3_per_s {pub: out};
    // if this port is alpha, remove it by setting to 0; else keep Qout
    Qout1_rem = sel
      case alpha1 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout1;
    endsel;
    Qout2_rem = sel
      case alpha2 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout2;
    endsel;
    Qout3_rem = sel
      case alpha3 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout3;
    endsel;
    Qout4_rem = sel
      case alpha4 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout4;
    endsel;
    var beta1: dimensionless {pub: out};
    var beta2: dimensionless {pub: out};
    var beta3: dimensionless {pub: out};
    var beta4: dimensionless {pub: out};
    // beta among remaining daughters (ties 1->2->3->4), must be a daughter
    beta1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (alpha1 == 0{dimensionless}) and (Qout1_rem >= Qout2_rem) and (Qout1_rem >= Qout3_rem) and (Qout1_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (alpha2 == 0{dimensionless}) and (Qout2_rem > Qout1_rem) and (Qout2_rem >= Qout3_rem) and (Qout2_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (alpha3 == 0{dimensionless}) and (Qout3_rem > Qout1_rem) and (Qout3_rem > Qout2_rem) and (Qout3_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (alpha4 == 0{dimensionless}) and (Qout4_rem > Qout1_rem) and (Qout4_rem > Qout2_rem) and (Qout4_rem > Qout3_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    var D_F: metre {pub: out};
    D_F = sel
      case feed1 == 1{dimensionless}:
        D1;
      case feed2 == 1{dimensionless}:
        D2;
      case feed3 == 1{dimensionless}:
        D3;
      case feed4 == 1{dimensionless}:
        D4;
      case true:
        D1;
    endsel;
    // ---------- D_alpha from which ALPHA port? ----------
    var D_alpha: metre {pub: out};
    D_alpha = sel
      case alpha1 == 1{dimensionless}:
        D1;
      case alpha2 == 1{dimensionless}:
        D2;
      case alpha3 == 1{dimensionless}:
        D3;
      case alpha4 == 1{dimensionless}:
        D4;
      case true:
        D3;
    endsel;
    // ---------- D_beta from which BETA port? ----------
    var D_beta: metre {pub: out};
    D_beta = sel
      case beta1 == 1{dimensionless}:
        D1;
      case beta2 == 1{dimensionless}:
        D2;
      case beta3 == 1{dimensionless}:
        D3;
      case beta4 == 1{dimensionless}:
        D4;
      case true:
        D4;
    endsel;
    // ---------- daughter outflow magnitudes for alpha/beta ----------
    var v_alpha: m3_per_s {pub: out};
    var v_beta: m3_per_s {pub: out};
    v_alpha = sel
      case alpha1 == 1{dimensionless}:
        Qout1;
      case alpha2 == 1{dimensionless}:
        Qout2;
      case alpha3 == 1{dimensionless}:
        Qout3;
      case alpha4 == 1{dimensionless}:
        Qout4;
      case true:
        0{m3_per_s};
    endsel;
    v_beta = sel
      case beta1 == 1{dimensionless}:
        Qout1;
      case beta2 == 1{dimensionless}:
        Qout2;
      case beta3 == 1{dimensionless}:
        Qout3;
      case beta4 == 1{dimensionless}:
        Qout4;
      case true:
        0{m3_per_s};
    endsel;
    var FQB_alpha: dimensionless {pub: out};
    FQB_alpha = (v_alpha+div_0)/(v_alpha+v_beta+2{dimensionless}*div_0);
    var FQE_alpha: dimensionless;
    FQE_alpha = 1{dimensionless}/(1{dimensionless}+exp(-(A+B*ph)));
    var B: dimensionless {pub: out};
    B = 1{dimensionless}+6.98{dimensionless}*(1{dimensionless}-H_mean_VV1)/(D_F*1e6{dimensionless});
    var A: dimensionless;
    A = -6.96{dimensionless}*ln(D_alpha*1e6{dimensionless}/(D_beta*1e6{dimensionless}))/(D_F*1e6{dimensionless});
    var X_0: dimensionless;
    X_0 = 0.4{dimensionless}/(D_F*1e6{dimensionless});
    var ph: dimensionless;
    ph = ln(y/(1{dimensionless}-y));
    var y_raw: dimensionless;
    y_raw = (FQB_alpha-X_0)/(1{dimensionless}-2{dimensionless}*X_0+div_0);
    var y: dimensionless;
    y = min(max(y_raw, div_0y), 1{dimensionless}-div_0y);
    var epsilon_alpha: dimensionless {pub: out};
    epsilon_alpha = H_VV1_out_alpha-H_mean_VV1*FQE_alpha/(FQB_alpha+div_0);
    var H_VV1_out_alpha: dimensionless {init: H_global_L, pub: out};
    ode(H_VV1_out_alpha, t) = is_split*(-k)*epsilon_alpha;
    var k: dimensionless {init: 1000, pub: out};
    var H_VV1_out_beta: dimensionless {pub: out};
    H_VV1_out_beta = H_mean_VV1*(1{dimensionless}-FQE_alpha)/(1{dimensionless}-FQB_alpha+div_0);
    // ==========================================================
    // VV1 mean hematocrit from conservation of RBC volume
    // Uses your existing Qin/Qout and your applied H_fromi
    // ==========================================================
    // --- RBC inflow rate (RBC volume per second) ---
    var RBC_in_VV1: m3_per_s {pub: out};
    RBC_in_VV1 = Qin1*H_to1_feed+Qin2*H_to2_feed+Qin3*H_to3_feed+Qin4*H_to4_feed;
    // --- RBC outflow rate (use the ACTUAL junction->vessel hematocrit you apply) ---
    var RBC_out_VV1: m3_per_s {pub: out};
    RBC_out_VV1 = Qout1*H_from1+Qout2*H_from2+Qout3*H_from3+Qout4*H_from4;
    // --- stored RBC volume inside VV1 ---
    var RBC_mass_VV1_init: m3 {pub: out};
    var RBC_mass_VV1: m3 {init: RBC_mass_VV1_init, pub: out};
    // init: use baseline unstressed volume (or you can use q_VV1 if your parser allows it)
    RBC_mass_VV1_init = H_global_L*q_us_VV1;
    // mass balance
    ode(RBC_mass_VV1, t) = RBC_in_VV1-RBC_out_VV1;
    // --- mean VV1 hematocrit (concentration) ---
    var H_mean_VV1: dimensionless {pub: out};
    H_mean_VV1 = RBC_mass_VV1/(q_us_VV1+div_0);
    // /////////////////////////////setting junctional compliance to greatest compliance of the vessels connected to it
    var C_conn1: m6_per_J {init: 8.51E-22, pub: out};
    var C_conn2: m6_per_J {init: 8.51E-22, pub: out};
    var C_conn3: m6_per_J {init: 8.51E-22, pub: out};
    var C_conn4: m6_per_J {pub: out};
    // C_conn1 = C_PP1;
    // C_conn2 = C_PP2;
    // C_conn3 = C_PP3;
    C_conn4 = C_VV1_base;
    var C_VV1_base: m6_per_J {pub: out};
    C_VV1_base = pi*sqr(8.5e-9{metre})*l_VV1/133.322{J_per_m3};
    var C_max12: m6_per_J;
    var C_max123: m6_per_J;
    var C_VV1: m6_per_J {pub: out};
    C_max12 = sel
      case C_conn1 > C_conn2:
        C_conn1;
      case C_conn1 <= C_conn2:
        C_conn2;
    endsel;
    C_max123 = sel
      case C_max12 > C_conn3:
        C_max12;
      case C_max12 <= C_conn3:
        C_conn3;
    endsel;
    C_VV1 = sel
      case C_max123 > C_conn4:
        C_max123;
      case C_max123 <= C_conn4:
        C_conn4;
    endsel;
    var q_C_VV1: m3 {init: q_C_init, pub: out};
    var q_C_d_VV1: m3 {init: q_C_init, pub: out};
    var q_VV1: m3 {pub: out};
    var q_us_VV1: m3 {pub: out};
    q_us_VV1 = pi*sqr(r_VV1)*l_VV1;
    q_VV1 = q_us_VV1+q_C_VV1+q_C_d_VV1;
    // /////////////
    // var C_VV1: m6_per_J {pub: out};
    // C_VV1 = pi*sqr(8.5e-9{metre})*l_VV1/133.322{J_per_m3};
    // var Z_VV1: dimensionless {pub: out};
    // Z_VV1 = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r_VV1*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r_VV1*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r_VV1*1e6{dimensionless}, 12{dimensionless}));
    // var mu_45_VV1: dimensionless;
    // mu_45_VV1 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r_VV1*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r_VV1*1e6{dimensionless}, 0.645{dimensionless}));
    // var mu_VV1: Js_per_m3 {pub: out};
    // mu_VV1 = hem_dep_u_rel_VV1*mu_plasma;
    // var hem_dep_u_rel_VV1: dimensionless;
    // hem_dep_u_rel_VV1 = 1{dimensionless}+(mu_45_VV1-1{dimensionless})*(pow(1{dimensionless}-H_mean_VV1, Z_VV1)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z_VV1)-1{dimensionless})*sqr(2{dimensionless}*r_VV1*1e6{dimensionless}/(2{dimensionless}*r_VV1*1e6{dimensionless}-1.1{metre}));
    var R_VV1: Js_per_m6 {init: 1e15, pub: out};
    // R_VV1 = 8{dimensionless}*mu_VV1*l_VV1/(pi*pow(r_VV1, 4{dimensionless}));
    // State Variables
    var u3: J_per_m3 {pub: out};
    var u3_mmHg: dimensionless {pub: out};
    var v4: m3_per_s {pub: out};
    var v4_mm3_s: mm3_per_s {pub: out};
    v4_mm3_s = v4/one_mm3;
    var u4: J_per_m3 {pub: out};
    var u4_mmHg: dimensionless {pub: out};
    //  Conservation Laws
    // question?????????? whether ode (q_c and q_C_d) should be vbc1-4 or vj1-4
    u3 = q_C_VV1/(C_VV1/2{dimensionless})+u_ext;
    ode(q_C_VV1, t) = vbc1+vbc2-v4;
    u3_mmHg = u3/133.322{J_per_m3};
    v4 = (u3-u4)/R_VV1;
    u4 = q_C_d_VV1/(C_VV1/2{dimensionless})+u_ext;
    ode(q_C_d_VV1, t) = v4-vbc3-vbc4;
    u4_mmHg = u4/133.322{J_per_m3};
    var v5: m3_per_s {init: 1.98E-13, pub: out};
    var v7: m3_per_s {init: 1.98E-13, pub: out};
    var H_L_out_PP2: dimensionless {init: 0.45, pub: out};
    var H_L_out_PP3: dimensionless {init: 0.45, pub: out};
  enddef;
enddef;
