def model CardiovascularSystem as
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule;
    unit second;
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule;
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_s2 as
    unit second {expo: -2};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_per_Fs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit mmol_per_l as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit l_per_mmol as
    unit litre;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit l_per_mmol_per_s as
    unit litre;
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l2_per_mmol_per_s as
    unit litre {expo: 2};
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s2 as
    unit mole {pref: milli};
    unit second {expo: -2};
  enddef;
  def unit mmol as
    unit mole {pref: milli};
  enddef;
  def unit mmol_per_l_per_s as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit metre {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole;
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1};
    unit mole {expo: -1};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit metre {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_millimol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit metre {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit metre {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit metre {expo: 3};
    unit mM;
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit metre {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit metre {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit metre {expo: -3};
  enddef;
  def unit umeter3 as
    unit metre {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    unit metre {expo: -3, pref: deci};
  enddef;
  def unit L_per_kPa as
    unit metre {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    unit metre {expo: -3, pref: deci};
  enddef;

  def comp parameters as
    var l_inlet: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_inlet: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_R_out_LHS_inlet: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var u_in_inlet: J_per_m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_VV_junc1: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_VV_junc1: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var vbc2_VV_junc1: m3_per_s {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_to2_VV_junc1: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_bc2_VV_junc1: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var C_conn2_VV_junc1: m6_per_J {init: EMPTY_MUST_BE_FILLED, interface: public};
    var R_constriction_final_PV1: Js_per_m6 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_PV1: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_PV1: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var R_constriction_final_PV2: Js_per_m6 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_PV2: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_PV2: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_V1: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_V1: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_L_out_RHS_V1: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var u_out_V1: J_per_m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_V2: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_V2: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_L_out_RHS_V2: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var u_out_V2: J_per_m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_VV_junc2: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_VV_junc2: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var vbc1_VV_junc2: m3_per_s {init: EMPTY_MUST_BE_FILLED, interface: public};
    var vbc2_VV_junc2: m3_per_s {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_to1_VV_junc2: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_to2_VV_junc2: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_bc1_VV_junc2: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_bc2_VV_junc2: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var C_conn1_VV_junc2: m6_per_J {init: EMPTY_MUST_BE_FILLED, interface: public};
    var C_conn2_VV_junc2: m6_per_J {init: EMPTY_MUST_BE_FILLED, interface: public};
    var R_constriction_final_PV3: Js_per_m6 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_PV3: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_PV3: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var R_constriction_final_PV4: Js_per_m6 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_PV4: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_PV4: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_V3: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_V3: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_L_out_RHS_V3: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var u_out_V3: J_per_m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_V4: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_V4: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_L_out_RHS_V4: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var u_out_V4: J_per_m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_VV_junc3: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_VV_junc3: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var vbc1_VV_junc3: m3_per_s {init: EMPTY_MUST_BE_FILLED, interface: public};
    var vbc2_VV_junc3: m3_per_s {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_to1_VV_junc3: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_to2_VV_junc3: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_bc1_VV_junc3: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_bc2_VV_junc3: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var C_conn1_VV_junc3: m6_per_J {init: EMPTY_MUST_BE_FILLED, interface: public};
    var C_conn2_VV_junc3: m6_per_J {init: EMPTY_MUST_BE_FILLED, interface: public};
    var R_constriction_final_PV5: Js_per_m6 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_PV5: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_PV5: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var R_constriction_final_PV6: Js_per_m6 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_PV6: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_PV6: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_V5: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_V5: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_L_out_RHS_V5: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var u_out_V5: J_per_m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var l_V6: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var r_V6: metre {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_L_out_RHS_V6: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var u_out_V6: J_per_m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
  enddef;

  def comp parameters_global as
    var H_global_L: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var H_global_R: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var gamma_mirror: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var tau_H_down: second {init: EMPTY_MUST_BE_FILLED, interface: public};
    var tau_H_mean: second {init: EMPTY_MUST_BE_FILLED, interface: public};
    var v_eps: m3_per_s {init: EMPTY_MUST_BE_FILLED, interface: public};
    var q_C_init: m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var mu_plasma: Js_per_m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var u_ext: J_per_m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var tau_link: second {init: EMPTY_MUST_BE_FILLED, interface: public};
    var v_scale: m3_per_s {init: EMPTY_MUST_BE_FILLED, interface: public};
    var one_mm3: m3 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var div_0: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var div_0y: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var tau_junc: second {init: EMPTY_MUST_BE_FILLED, interface: public};
    var v_threshold: m3_per_s {init: EMPTY_MUST_BE_FILLED, interface: public};
    var k: dimensionless {init: EMPTY_MUST_BE_FILLED, interface: public};
    var R: Js_per_m6 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var R_constriction_base: Js_per_m6 {init: EMPTY_MUST_BE_FILLED, interface: public};
    var tau_sig: second {init: EMPTY_MUST_BE_FILLED, interface: public};
    var t0: second {init: EMPTY_MUST_BE_FILLED, interface: public};
  enddef;

  def comp environment as
    var time: second {interface: public};
  enddef;

  def comp inlet_module as
    var t: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    H_L_out = (1{dimensionless}-w_v_d)*H_down+w_v_d*H_L_in;
    H_R_out = w_v_d*H_down+(1{dimensionless}-w_v_d)*H_R_in;
    ode(RBC_volume, t) = v*H_mass_L-v_d*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    v_d_pos = w_v_d*v_d;
    // flow from left to right (v_d>0) =>outflow on right
    v_d_neg = (1{dimensionless}-w_v_d)*(-v_d);
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp VV_junc1_module as
    var div_0: dimensionless {interface: public};
    var div_0y: dimensionless {interface: public};
    var tau_junc: second {interface: public};
    var v_threshold: m3_per_s {interface: public};
    var k: dimensionless {interface: public};
    var t: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var vbc1: m3_per_s {interface: public};
    var vbc2: m3_per_s {interface: public};
    var vbc3: m3_per_s {interface: public};
    var vbc4: m3_per_s {interface: public};
    var vj1: m3_per_s {interface: public};
    var vj2: m3_per_s {interface: public};
    var vj3: m3_per_s {interface: public};
    var vj4: m3_per_s {interface: public};
    var H_to1: dimensionless {interface: public};
    var H_to2: dimensionless {interface: public};
    var H_to3: dimensionless {interface: public};
    var H_to4: dimensionless {interface: public};
    var H_split1: dimensionless {interface: public};
    var H_split2: dimensionless {interface: public};
    var H_split3: dimensionless {interface: public};
    var H_split4: dimensionless {interface: public};
    var H_daughter1: dimensionless {interface: public};
    var H_daughter2: dimensionless {interface: public};
    var H_daughter3: dimensionless {interface: public};
    var H_daughter4: dimensionless {interface: public};
    var H_from1_target: dimensionless {interface: public};
    var H_from2_target: dimensionless {interface: public};
    var H_from3_target: dimensionless {interface: public};
    var H_from4_target: dimensionless {interface: public};
    var H_from1: dimensionless {init: H_global_L, interface: public};
    var H_from2: dimensionless {init: H_global_L, interface: public};
    var H_from3: dimensionless {init: H_global_L, interface: public};
    var H_from4: dimensionless {init: H_global_L, interface: public};
    var r_bc1: metre {interface: public};
    var r_bc2: metre {interface: public};
    var r_bc3: metre {interface: public};
    var r_bc4: metre {interface: public};
    var D1: metre {interface: public};
    var D2: metre {interface: public};
    var D3: metre {interface: public};
    var D4: metre {interface: public};
    var w_in1: dimensionless {interface: public};
    var w_in2: dimensionless {interface: public};
    var w_in3: dimensionless {interface: public};
    var w_in4: dimensionless {interface: public};
    var w_out1: dimensionless {interface: public};
    var w_out2: dimensionless {interface: public};
    var w_out3: dimensionless {interface: public};
    var w_out4: dimensionless {interface: public};
    var Qin1: m3_per_s {interface: public};
    var Qin2: m3_per_s {interface: public};
    var Qin3: m3_per_s {interface: public};
    var Qin4: m3_per_s {interface: public};
    var Qout1: m3_per_s {interface: public};
    var Qout2: m3_per_s {interface: public};
    var Qout3: m3_per_s {interface: public};
    var Qout4: m3_per_s {interface: public};
    var Qin_tot: m3_per_s {interface: public};
    var Qout_tot: m3_per_s {interface: public};
    var bc1_is_in: dimensionless {interface: public};
    var bc2_is_in: dimensionless {interface: public};
    var bc3_is_in: dimensionless {interface: public};
    var bc4_is_in: dimensionless {interface: public};
    var bc1_is_out: dimensionless {interface: public};
    var bc2_is_out: dimensionless {interface: public};
    var bc3_is_out: dimensionless {interface: public};
    var bc4_is_out: dimensionless {interface: public};
    var n_in: dimensionless {interface: public};
    var n_out: dimensionless {interface: public};
    var junction_type: dimensionless {interface: public};
    var is_split: dimensionless {interface: public};
    var is_merge: dimensionless {interface: public};
    var feed1: dimensionless {interface: public};
    var feed2: dimensionless {interface: public};
    var feed3: dimensionless {interface: public};
    var feed4: dimensionless {interface: public};
    var alpha1: dimensionless {interface: public};
    var alpha2: dimensionless {interface: public};
    var alpha3: dimensionless {interface: public};
    var alpha4: dimensionless {interface: public};
    var Qout1_rem: m3_per_s {interface: public};
    var Qout2_rem: m3_per_s {interface: public};
    var Qout3_rem: m3_per_s {interface: public};
    var Qout4_rem: m3_per_s {interface: public};
    var beta1: dimensionless {interface: public};
    var beta2: dimensionless {interface: public};
    var beta3: dimensionless {interface: public};
    var beta4: dimensionless {interface: public};
    var D_F: metre {interface: public};
    var D_alpha: metre {interface: public};
    var D_beta: metre {interface: public};
    var v_alpha: m3_per_s {interface: public};
    var v_beta: m3_per_s {interface: public};
    var FQB_alpha: dimensionless {interface: public};
    var FQE_alpha: dimensionless {interface: public};
    var B: dimensionless {interface: public};
    var A: dimensionless {interface: public};
    var X_0: dimensionless {interface: public};
    var ph: dimensionless {interface: public};
    var y_raw: dimensionless {interface: public};
    var y: dimensionless {interface: public};
    var epsilon_alpha: dimensionless {interface: public};
    var H_VV_out_alpha: dimensionless {init: H_global_L, interface: public};
    var H_VV_out_beta: dimensionless {interface: public};
    var RBC_in: m3_per_s {interface: public};
    var RBC_out: m3_per_s {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var H_mean: dimensionless {interface: public};
    var C_conn1: m6_per_J {interface: public};
    var C_conn2: m6_per_J {interface: public};
    var C_conn3: m6_per_J {interface: public};
    var C_conn4: m6_per_J {interface: public};
    var C_max12: m6_per_J {interface: public};
    var C_max123: m6_per_J {interface: public};
    var C: m6_per_J {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q_C_d: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_d_mmHg: dimensionless {interface: public};
    vj1 = vbc1;
    vj2 = vbc2;
    vj3 = -vbc3;
    vj4 = -vbc4;
    H_split1 = sel
      case alpha1 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta1 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to1;
    endsel;
    // not a split-daughter =>unchanged
    H_split2 = sel
      case alpha2 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta2 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to2;
    endsel;
    H_split3 = sel
      case alpha3 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta3 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to3;
    endsel;
    H_split4 = sel
      case alpha4 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta4 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to4;
    endsel;
    H_daughter1 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split1;
      case true:
        H_to1;
    endsel;
    H_daughter2 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split2;
      case true:
        H_to2;
    endsel;
    H_daughter3 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split3;
      case true:
        H_to3;
    endsel;
    H_daughter4 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split4;
      case true:
        H_to4;
    endsel;
    H_from1_target = sel
      case bc1_is_out == 1{dimensionless}:
        H_daughter1;
      case true:
        H_to1;
    endsel;
    H_from2_target = sel
      case bc2_is_out == 1{dimensionless}:
        H_daughter2;
      case true:
        H_to2;
    endsel;
    H_from3_target = sel
      case bc3_is_out == 1{dimensionless}:
        H_daughter3;
      case true:
        H_to3;
    endsel;
    H_from4_target = sel
      case bc4_is_out == 1{dimensionless}:
        H_daughter4;
      case true:
        H_to4;
    endsel;
    ode(H_from1, t) = w_out1*(H_from1_target-H_from1)/tau_junc;
    ode(H_from2, t) = w_out2*(H_from2_target-H_from2)/tau_junc;
    ode(H_from3, t) = w_out3*(H_from3_target-H_from3)/tau_junc;
    ode(H_from4, t) = w_out4*(H_from4_target-H_from4)/tau_junc;
    D1 = 2{dimensionless}*r_bc1;
    // <-- port1 attached vessel diameter (example: parent VV side)
    D2 = 2{dimensionless}*r_bc2;
    // <-- port2 (if unused, still define)
    D3 = 2{dimensionless}*r_bc3;
    // <-- port3 daughter candidate
    D4 = 2{dimensionless}*r_bc4;
    w_in1 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj1/v_scale);
    w_in2 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj2/v_scale);
    w_in3 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj3/v_scale);
    w_in4 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj4/v_scale);
    w_out1 = 1{dimensionless}-w_in1;
    // ~1 if vj1<0
    w_out2 = 1{dimensionless}-w_in2;
    w_out3 = 1{dimensionless}-w_in3;
    w_out4 = 1{dimensionless}-w_in4;
    Qin1 = w_in1*vj1;
    Qin2 = w_in2*vj2;
    Qin3 = w_in3*vj3;
    Qin4 = w_in4*vj4;
    // absolute (magnitude) of flow out of the junction
    Qout1 = w_out1*(-vj1);
    Qout2 = w_out2*(-vj2);
    Qout3 = w_out3*(-vj3);
    Qout4 = w_out4*(-vj4);
    Qin_tot = Qin1+Qin2+Qin3+Qin4;
    Qout_tot = Qout1+Qout2+Qout3+Qout4;
    bc1_is_in = sel
      case Qin1 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc2_is_in = sel
      case Qin2 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc3_is_in = sel
      case Qin3 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc4_is_in = sel
      case Qin4 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc1_is_out = sel
      case Qout1 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc2_is_out = sel
      case Qout2 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc3_is_out = sel
      case Qout3 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc4_is_out = sel
      case Qout4 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    n_in = bc1_is_in+bc2_is_in+bc3_is_in+bc4_is_in;
    n_out = bc1_is_out+bc2_is_out+bc3_is_out+bc4_is_out;
    junction_type = sel
      case n_in == 1{dimensionless}:
        1{dimensionless};
      case n_in >= 2{dimensionless}:
        -1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    is_split = sel
      case junction_type == 1{dimensionless}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    is_merge = sel
      case junction_type == -1{dimensionless}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed1 = sel
      case (is_split == 1{dimensionless}) and (Qin1 >= Qin2) and (Qin1 >= Qin3) and (Qin1 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed2 = sel
      case (is_split == 1{dimensionless}) and (Qin2 > Qin1) and (Qin2 >= Qin3) and (Qin2 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed3 = sel
      case (is_split == 1{dimensionless}) and (Qin3 > Qin1) and (Qin3 > Qin2) and (Qin3 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed4 = sel
      case (is_split == 1{dimensionless}) and (Qin4 > Qin1) and (Qin4 > Qin2) and (Qin4 > Qin3):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (Qout1 >= Qout2) and (Qout1 >= Qout3) and (Qout1 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    // alpha2 only if not alpha1 (tie-break) and port2 is a daughter and beats remaining
    alpha2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (Qout2 > Qout1) and (Qout2 >= Qout3) and (Qout2 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (Qout3 > Qout1) and (Qout3 > Qout2) and (Qout3 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (Qout4 > Qout1) and (Qout4 > Qout2) and (Qout4 > Qout3):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    Qout1_rem = sel
      case alpha1 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout1;
    endsel;
    Qout2_rem = sel
      case alpha2 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout2;
    endsel;
    Qout3_rem = sel
      case alpha3 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout3;
    endsel;
    Qout4_rem = sel
      case alpha4 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout4;
    endsel;
    beta1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (alpha1 == 0{dimensionless}) and (Qout1_rem >= Qout2_rem) and (Qout1_rem >= Qout3_rem) and (Qout1_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (alpha2 == 0{dimensionless}) and (Qout2_rem > Qout1_rem) and (Qout2_rem >= Qout3_rem) and (Qout2_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (alpha3 == 0{dimensionless}) and (Qout3_rem > Qout1_rem) and (Qout3_rem > Qout2_rem) and (Qout3_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (alpha4 == 0{dimensionless}) and (Qout4_rem > Qout1_rem) and (Qout4_rem > Qout2_rem) and (Qout4_rem > Qout3_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    D_F = sel
      case feed1 == 1{dimensionless}:
        D1;
      case feed2 == 1{dimensionless}:
        D2;
      case feed3 == 1{dimensionless}:
        D3;
      case feed4 == 1{dimensionless}:
        D4;
      case true:
        D1;
    endsel;
    D_alpha = sel
      case alpha1 == 1{dimensionless}:
        D1;
      case alpha2 == 1{dimensionless}:
        D2;
      case alpha3 == 1{dimensionless}:
        D3;
      case alpha4 == 1{dimensionless}:
        D4;
      case true:
        D3;
    endsel;
    D_beta = sel
      case beta1 == 1{dimensionless}:
        D1;
      case beta2 == 1{dimensionless}:
        D2;
      case beta3 == 1{dimensionless}:
        D3;
      case beta4 == 1{dimensionless}:
        D4;
      case true:
        D4;
    endsel;
    v_alpha = sel
      case alpha1 == 1{dimensionless}:
        Qout1;
      case alpha2 == 1{dimensionless}:
        Qout2;
      case alpha3 == 1{dimensionless}:
        Qout3;
      case alpha4 == 1{dimensionless}:
        Qout4;
      case true:
        0{m3_per_s};
    endsel;
    v_beta = sel
      case beta1 == 1{dimensionless}:
        Qout1;
      case beta2 == 1{dimensionless}:
        Qout2;
      case beta3 == 1{dimensionless}:
        Qout3;
      case beta4 == 1{dimensionless}:
        Qout4;
      case true:
        0{m3_per_s};
    endsel;
    FQB_alpha = (v_alpha+div_0)/(v_alpha+v_beta+2{dimensionless}*div_0);
    FQE_alpha = 1{dimensionless}/(1{dimensionless}+exp(-(A+B*ph)));
    B = 1{dimensionless}+6.98{dimensionless}*(1{dimensionless}-H_mean)/(D_F*1e6{dimensionless});
    A = -6.96{dimensionless}*ln(D_alpha*1e6{dimensionless}/(D_beta*1e6{dimensionless}))/(D_F*1e6{dimensionless});
    X_0 = 0.4{dimensionless}/(D_F*1e6{dimensionless});
    ph = ln(y/(1{dimensionless}-y));
    y_raw = (FQB_alpha-X_0)/(1{dimensionless}-2{dimensionless}*X_0+div_0);
    y = min(max(y_raw, div_0y), 1{dimensionless}-div_0y);
    epsilon_alpha = H_VV_out_alpha-H_mean*FQE_alpha/(FQB_alpha+div_0);
    ode(H_VV_out_alpha, t) = is_split*(-k)*epsilon_alpha;
    H_VV_out_beta = H_mean*(1{dimensionless}-FQE_alpha)/(1{dimensionless}-FQB_alpha+div_0);
    RBC_in = Qin1*H_to1+Qin2*H_to2+Qin3*H_to3+Qin4*H_to4;
    RBC_out = Qout1*H_from1+Qout2*H_from2+Qout3*H_from3+Qout4*H_from4;
    RBC_volume_init = H_global_L*q_us;
    // mass balance
    ode(RBC_volume, t) = RBC_in-RBC_out;
    H_mean = RBC_volume/(q_us+div_0);
    C_max12 = sel
      case C_conn1 > C_conn2:
        C_conn1;
      case C_conn1 <= C_conn2:
        C_conn2;
    endsel;
    C_max123 = sel
      case C_max12 > C_conn3:
        C_max12;
      case C_max12 <= C_conn3:
        C_conn3;
    endsel;
    C = sel
      case C_max123 > C_conn4:
        C_max123;
      case C_max123 <= C_conn4:
        C_conn4;
    endsel;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C+q_C_d;
    v_mm3_s = v/one_mm3;
    u = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C, t) = vbc1+vbc2-v;
    u_mmHg = u/133.322{J_per_m3};
    v = (u-u_d)/R;
    u_d = q_C_d/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-vbc3-vbc4;
    u_d_mmHg = u_d/133.322{J_per_m3};
  enddef;

  def comp PV1_module as
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var t: second {interface: public};
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
    R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    H_L_out = (1{dimensionless}-w_v_d)*H_down+w_v_d*H_L_in;
    H_R_out = w_v_d*H_down+(1{dimensionless}-w_v_d)*H_R_in;
    ode(RBC_volume, t) = v*H_mass_L-v_d*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    v_d_pos = w_v_d*v_d;
    // flow from left to right (v_d>0) =>outflow on right
    v_d_neg = (1{dimensionless}-w_v_d)*(-v_d);
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+R_constriction;
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp PV2_module as
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var t: second {interface: public};
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
    R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    H_L_out = (1{dimensionless}-w_v_d)*H_down+w_v_d*H_L_in;
    H_R_out = w_v_d*H_down+(1{dimensionless}-w_v_d)*H_R_in;
    ode(RBC_volume, t) = v*H_mass_L-v_d*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    v_d_pos = w_v_d*v_d;
    // flow from left to right (v_d>0) =>outflow on right
    v_d_neg = (1{dimensionless}-w_v_d)*(-v_d);
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+R_constriction;
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp V1_module as
    var t: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v = abs(v)/(abs(v)+v_eps);
    H_L_out = (1{dimensionless}-w_v)*H_down+w_v*H_L_in;
    H_R_out = w_v*H_down+(1{dimensionless}-w_v)*H_R_in;
    ode(RBC_volume, t) = v_in*H_mass_L-v*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;

  def comp V2_module as
    var t: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v = abs(v)/(abs(v)+v_eps);
    H_L_out = (1{dimensionless}-w_v)*H_down+w_v*H_L_in;
    H_R_out = w_v*H_down+(1{dimensionless}-w_v)*H_R_in;
    ode(RBC_volume, t) = v_in*H_mass_L-v*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;

  def comp VV_junc2_module as
    var div_0: dimensionless {interface: public};
    var div_0y: dimensionless {interface: public};
    var tau_junc: second {interface: public};
    var v_threshold: m3_per_s {interface: public};
    var k: dimensionless {interface: public};
    var t: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var vbc1: m3_per_s {interface: public};
    var vbc2: m3_per_s {interface: public};
    var vbc3: m3_per_s {interface: public};
    var vbc4: m3_per_s {interface: public};
    var vj1: m3_per_s {interface: public};
    var vj2: m3_per_s {interface: public};
    var vj3: m3_per_s {interface: public};
    var vj4: m3_per_s {interface: public};
    var H_to1: dimensionless {interface: public};
    var H_to2: dimensionless {interface: public};
    var H_to3: dimensionless {interface: public};
    var H_to4: dimensionless {interface: public};
    var H_split1: dimensionless {interface: public};
    var H_split2: dimensionless {interface: public};
    var H_split3: dimensionless {interface: public};
    var H_split4: dimensionless {interface: public};
    var H_daughter1: dimensionless {interface: public};
    var H_daughter2: dimensionless {interface: public};
    var H_daughter3: dimensionless {interface: public};
    var H_daughter4: dimensionless {interface: public};
    var H_from1_target: dimensionless {interface: public};
    var H_from2_target: dimensionless {interface: public};
    var H_from3_target: dimensionless {interface: public};
    var H_from4_target: dimensionless {interface: public};
    var H_from1: dimensionless {init: H_global_L, interface: public};
    var H_from2: dimensionless {init: H_global_L, interface: public};
    var H_from3: dimensionless {init: H_global_L, interface: public};
    var H_from4: dimensionless {init: H_global_L, interface: public};
    var r_bc1: metre {interface: public};
    var r_bc2: metre {interface: public};
    var r_bc3: metre {interface: public};
    var r_bc4: metre {interface: public};
    var D1: metre {interface: public};
    var D2: metre {interface: public};
    var D3: metre {interface: public};
    var D4: metre {interface: public};
    var w_in1: dimensionless {interface: public};
    var w_in2: dimensionless {interface: public};
    var w_in3: dimensionless {interface: public};
    var w_in4: dimensionless {interface: public};
    var w_out1: dimensionless {interface: public};
    var w_out2: dimensionless {interface: public};
    var w_out3: dimensionless {interface: public};
    var w_out4: dimensionless {interface: public};
    var Qin1: m3_per_s {interface: public};
    var Qin2: m3_per_s {interface: public};
    var Qin3: m3_per_s {interface: public};
    var Qin4: m3_per_s {interface: public};
    var Qout1: m3_per_s {interface: public};
    var Qout2: m3_per_s {interface: public};
    var Qout3: m3_per_s {interface: public};
    var Qout4: m3_per_s {interface: public};
    var Qin_tot: m3_per_s {interface: public};
    var Qout_tot: m3_per_s {interface: public};
    var bc1_is_in: dimensionless {interface: public};
    var bc2_is_in: dimensionless {interface: public};
    var bc3_is_in: dimensionless {interface: public};
    var bc4_is_in: dimensionless {interface: public};
    var bc1_is_out: dimensionless {interface: public};
    var bc2_is_out: dimensionless {interface: public};
    var bc3_is_out: dimensionless {interface: public};
    var bc4_is_out: dimensionless {interface: public};
    var n_in: dimensionless {interface: public};
    var n_out: dimensionless {interface: public};
    var junction_type: dimensionless {interface: public};
    var is_split: dimensionless {interface: public};
    var is_merge: dimensionless {interface: public};
    var feed1: dimensionless {interface: public};
    var feed2: dimensionless {interface: public};
    var feed3: dimensionless {interface: public};
    var feed4: dimensionless {interface: public};
    var alpha1: dimensionless {interface: public};
    var alpha2: dimensionless {interface: public};
    var alpha3: dimensionless {interface: public};
    var alpha4: dimensionless {interface: public};
    var Qout1_rem: m3_per_s {interface: public};
    var Qout2_rem: m3_per_s {interface: public};
    var Qout3_rem: m3_per_s {interface: public};
    var Qout4_rem: m3_per_s {interface: public};
    var beta1: dimensionless {interface: public};
    var beta2: dimensionless {interface: public};
    var beta3: dimensionless {interface: public};
    var beta4: dimensionless {interface: public};
    var D_F: metre {interface: public};
    var D_alpha: metre {interface: public};
    var D_beta: metre {interface: public};
    var v_alpha: m3_per_s {interface: public};
    var v_beta: m3_per_s {interface: public};
    var FQB_alpha: dimensionless {interface: public};
    var FQE_alpha: dimensionless {interface: public};
    var B: dimensionless {interface: public};
    var A: dimensionless {interface: public};
    var X_0: dimensionless {interface: public};
    var ph: dimensionless {interface: public};
    var y_raw: dimensionless {interface: public};
    var y: dimensionless {interface: public};
    var epsilon_alpha: dimensionless {interface: public};
    var H_VV_out_alpha: dimensionless {init: H_global_L, interface: public};
    var H_VV_out_beta: dimensionless {interface: public};
    var RBC_in: m3_per_s {interface: public};
    var RBC_out: m3_per_s {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var H_mean: dimensionless {interface: public};
    var C_conn1: m6_per_J {interface: public};
    var C_conn2: m6_per_J {interface: public};
    var C_conn3: m6_per_J {interface: public};
    var C_conn4: m6_per_J {interface: public};
    var C_max12: m6_per_J {interface: public};
    var C_max123: m6_per_J {interface: public};
    var C: m6_per_J {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q_C_d: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_d_mmHg: dimensionless {interface: public};
    vj1 = vbc1;
    vj2 = vbc2;
    vj3 = -vbc3;
    vj4 = -vbc4;
    H_split1 = sel
      case alpha1 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta1 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to1;
    endsel;
    // not a split-daughter =>unchanged
    H_split2 = sel
      case alpha2 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta2 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to2;
    endsel;
    H_split3 = sel
      case alpha3 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta3 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to3;
    endsel;
    H_split4 = sel
      case alpha4 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta4 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to4;
    endsel;
    H_daughter1 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split1;
      case true:
        H_to1;
    endsel;
    H_daughter2 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split2;
      case true:
        H_to2;
    endsel;
    H_daughter3 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split3;
      case true:
        H_to3;
    endsel;
    H_daughter4 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split4;
      case true:
        H_to4;
    endsel;
    H_from1_target = sel
      case bc1_is_out == 1{dimensionless}:
        H_daughter1;
      case true:
        H_to1;
    endsel;
    H_from2_target = sel
      case bc2_is_out == 1{dimensionless}:
        H_daughter2;
      case true:
        H_to2;
    endsel;
    H_from3_target = sel
      case bc3_is_out == 1{dimensionless}:
        H_daughter3;
      case true:
        H_to3;
    endsel;
    H_from4_target = sel
      case bc4_is_out == 1{dimensionless}:
        H_daughter4;
      case true:
        H_to4;
    endsel;
    ode(H_from1, t) = w_out1*(H_from1_target-H_from1)/tau_junc;
    ode(H_from2, t) = w_out2*(H_from2_target-H_from2)/tau_junc;
    ode(H_from3, t) = w_out3*(H_from3_target-H_from3)/tau_junc;
    ode(H_from4, t) = w_out4*(H_from4_target-H_from4)/tau_junc;
    D1 = 2{dimensionless}*r_bc1;
    // <-- port1 attached vessel diameter (example: parent VV side)
    D2 = 2{dimensionless}*r_bc2;
    // <-- port2 (if unused, still define)
    D3 = 2{dimensionless}*r_bc3;
    // <-- port3 daughter candidate
    D4 = 2{dimensionless}*r_bc4;
    w_in1 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj1/v_scale);
    w_in2 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj2/v_scale);
    w_in3 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj3/v_scale);
    w_in4 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj4/v_scale);
    w_out1 = 1{dimensionless}-w_in1;
    // ~1 if vj1<0
    w_out2 = 1{dimensionless}-w_in2;
    w_out3 = 1{dimensionless}-w_in3;
    w_out4 = 1{dimensionless}-w_in4;
    Qin1 = w_in1*vj1;
    Qin2 = w_in2*vj2;
    Qin3 = w_in3*vj3;
    Qin4 = w_in4*vj4;
    // absolute (magnitude) of flow out of the junction
    Qout1 = w_out1*(-vj1);
    Qout2 = w_out2*(-vj2);
    Qout3 = w_out3*(-vj3);
    Qout4 = w_out4*(-vj4);
    Qin_tot = Qin1+Qin2+Qin3+Qin4;
    Qout_tot = Qout1+Qout2+Qout3+Qout4;
    bc1_is_in = sel
      case Qin1 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc2_is_in = sel
      case Qin2 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc3_is_in = sel
      case Qin3 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc4_is_in = sel
      case Qin4 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc1_is_out = sel
      case Qout1 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc2_is_out = sel
      case Qout2 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc3_is_out = sel
      case Qout3 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc4_is_out = sel
      case Qout4 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    n_in = bc1_is_in+bc2_is_in+bc3_is_in+bc4_is_in;
    n_out = bc1_is_out+bc2_is_out+bc3_is_out+bc4_is_out;
    junction_type = sel
      case n_in == 1{dimensionless}:
        1{dimensionless};
      case n_in >= 2{dimensionless}:
        -1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    is_split = sel
      case junction_type == 1{dimensionless}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    is_merge = sel
      case junction_type == -1{dimensionless}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed1 = sel
      case (is_split == 1{dimensionless}) and (Qin1 >= Qin2) and (Qin1 >= Qin3) and (Qin1 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed2 = sel
      case (is_split == 1{dimensionless}) and (Qin2 > Qin1) and (Qin2 >= Qin3) and (Qin2 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed3 = sel
      case (is_split == 1{dimensionless}) and (Qin3 > Qin1) and (Qin3 > Qin2) and (Qin3 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed4 = sel
      case (is_split == 1{dimensionless}) and (Qin4 > Qin1) and (Qin4 > Qin2) and (Qin4 > Qin3):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (Qout1 >= Qout2) and (Qout1 >= Qout3) and (Qout1 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    // alpha2 only if not alpha1 (tie-break) and port2 is a daughter and beats remaining
    alpha2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (Qout2 > Qout1) and (Qout2 >= Qout3) and (Qout2 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (Qout3 > Qout1) and (Qout3 > Qout2) and (Qout3 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (Qout4 > Qout1) and (Qout4 > Qout2) and (Qout4 > Qout3):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    Qout1_rem = sel
      case alpha1 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout1;
    endsel;
    Qout2_rem = sel
      case alpha2 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout2;
    endsel;
    Qout3_rem = sel
      case alpha3 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout3;
    endsel;
    Qout4_rem = sel
      case alpha4 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout4;
    endsel;
    beta1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (alpha1 == 0{dimensionless}) and (Qout1_rem >= Qout2_rem) and (Qout1_rem >= Qout3_rem) and (Qout1_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (alpha2 == 0{dimensionless}) and (Qout2_rem > Qout1_rem) and (Qout2_rem >= Qout3_rem) and (Qout2_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (alpha3 == 0{dimensionless}) and (Qout3_rem > Qout1_rem) and (Qout3_rem > Qout2_rem) and (Qout3_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (alpha4 == 0{dimensionless}) and (Qout4_rem > Qout1_rem) and (Qout4_rem > Qout2_rem) and (Qout4_rem > Qout3_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    D_F = sel
      case feed1 == 1{dimensionless}:
        D1;
      case feed2 == 1{dimensionless}:
        D2;
      case feed3 == 1{dimensionless}:
        D3;
      case feed4 == 1{dimensionless}:
        D4;
      case true:
        D1;
    endsel;
    D_alpha = sel
      case alpha1 == 1{dimensionless}:
        D1;
      case alpha2 == 1{dimensionless}:
        D2;
      case alpha3 == 1{dimensionless}:
        D3;
      case alpha4 == 1{dimensionless}:
        D4;
      case true:
        D3;
    endsel;
    D_beta = sel
      case beta1 == 1{dimensionless}:
        D1;
      case beta2 == 1{dimensionless}:
        D2;
      case beta3 == 1{dimensionless}:
        D3;
      case beta4 == 1{dimensionless}:
        D4;
      case true:
        D4;
    endsel;
    v_alpha = sel
      case alpha1 == 1{dimensionless}:
        Qout1;
      case alpha2 == 1{dimensionless}:
        Qout2;
      case alpha3 == 1{dimensionless}:
        Qout3;
      case alpha4 == 1{dimensionless}:
        Qout4;
      case true:
        0{m3_per_s};
    endsel;
    v_beta = sel
      case beta1 == 1{dimensionless}:
        Qout1;
      case beta2 == 1{dimensionless}:
        Qout2;
      case beta3 == 1{dimensionless}:
        Qout3;
      case beta4 == 1{dimensionless}:
        Qout4;
      case true:
        0{m3_per_s};
    endsel;
    FQB_alpha = (v_alpha+div_0)/(v_alpha+v_beta+2{dimensionless}*div_0);
    FQE_alpha = 1{dimensionless}/(1{dimensionless}+exp(-(A+B*ph)));
    B = 1{dimensionless}+6.98{dimensionless}*(1{dimensionless}-H_mean)/(D_F*1e6{dimensionless});
    A = -6.96{dimensionless}*ln(D_alpha*1e6{dimensionless}/(D_beta*1e6{dimensionless}))/(D_F*1e6{dimensionless});
    X_0 = 0.4{dimensionless}/(D_F*1e6{dimensionless});
    ph = ln(y/(1{dimensionless}-y));
    y_raw = (FQB_alpha-X_0)/(1{dimensionless}-2{dimensionless}*X_0+div_0);
    y = min(max(y_raw, div_0y), 1{dimensionless}-div_0y);
    epsilon_alpha = H_VV_out_alpha-H_mean*FQE_alpha/(FQB_alpha+div_0);
    ode(H_VV_out_alpha, t) = is_split*(-k)*epsilon_alpha;
    H_VV_out_beta = H_mean*(1{dimensionless}-FQE_alpha)/(1{dimensionless}-FQB_alpha+div_0);
    RBC_in = Qin1*H_to1+Qin2*H_to2+Qin3*H_to3+Qin4*H_to4;
    RBC_out = Qout1*H_from1+Qout2*H_from2+Qout3*H_from3+Qout4*H_from4;
    RBC_volume_init = H_global_L*q_us;
    // mass balance
    ode(RBC_volume, t) = RBC_in-RBC_out;
    H_mean = RBC_volume/(q_us+div_0);
    C_max12 = sel
      case C_conn1 > C_conn2:
        C_conn1;
      case C_conn1 <= C_conn2:
        C_conn2;
    endsel;
    C_max123 = sel
      case C_max12 > C_conn3:
        C_max12;
      case C_max12 <= C_conn3:
        C_conn3;
    endsel;
    C = sel
      case C_max123 > C_conn4:
        C_max123;
      case C_max123 <= C_conn4:
        C_conn4;
    endsel;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C+q_C_d;
    v_mm3_s = v/one_mm3;
    u = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C, t) = vbc1+vbc2-v;
    u_mmHg = u/133.322{J_per_m3};
    v = (u-u_d)/R;
    u_d = q_C_d/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-vbc3-vbc4;
    u_d_mmHg = u_d/133.322{J_per_m3};
  enddef;

  def comp PV3_module as
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var t: second {interface: public};
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
    R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    H_L_out = (1{dimensionless}-w_v_d)*H_down+w_v_d*H_L_in;
    H_R_out = w_v_d*H_down+(1{dimensionless}-w_v_d)*H_R_in;
    ode(RBC_volume, t) = v*H_mass_L-v_d*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    v_d_pos = w_v_d*v_d;
    // flow from left to right (v_d>0) =>outflow on right
    v_d_neg = (1{dimensionless}-w_v_d)*(-v_d);
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+R_constriction;
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp PV4_module as
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var t: second {interface: public};
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
    R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    H_L_out = (1{dimensionless}-w_v_d)*H_down+w_v_d*H_L_in;
    H_R_out = w_v_d*H_down+(1{dimensionless}-w_v_d)*H_R_in;
    ode(RBC_volume, t) = v*H_mass_L-v_d*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    v_d_pos = w_v_d*v_d;
    // flow from left to right (v_d>0) =>outflow on right
    v_d_neg = (1{dimensionless}-w_v_d)*(-v_d);
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+R_constriction;
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp V3_module as
    var t: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v = abs(v)/(abs(v)+v_eps);
    H_L_out = (1{dimensionless}-w_v)*H_down+w_v*H_L_in;
    H_R_out = w_v*H_down+(1{dimensionless}-w_v)*H_R_in;
    ode(RBC_volume, t) = v_in*H_mass_L-v*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;

  def comp V4_module as
    var t: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v = abs(v)/(abs(v)+v_eps);
    H_L_out = (1{dimensionless}-w_v)*H_down+w_v*H_L_in;
    H_R_out = w_v*H_down+(1{dimensionless}-w_v)*H_R_in;
    ode(RBC_volume, t) = v_in*H_mass_L-v*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;

  def comp VV_junc3_module as
    var div_0: dimensionless {interface: public};
    var div_0y: dimensionless {interface: public};
    var tau_junc: second {interface: public};
    var v_threshold: m3_per_s {interface: public};
    var k: dimensionless {interface: public};
    var t: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var vbc1: m3_per_s {interface: public};
    var vbc2: m3_per_s {interface: public};
    var vbc3: m3_per_s {interface: public};
    var vbc4: m3_per_s {interface: public};
    var vj1: m3_per_s {interface: public};
    var vj2: m3_per_s {interface: public};
    var vj3: m3_per_s {interface: public};
    var vj4: m3_per_s {interface: public};
    var H_to1: dimensionless {interface: public};
    var H_to2: dimensionless {interface: public};
    var H_to3: dimensionless {interface: public};
    var H_to4: dimensionless {interface: public};
    var H_split1: dimensionless {interface: public};
    var H_split2: dimensionless {interface: public};
    var H_split3: dimensionless {interface: public};
    var H_split4: dimensionless {interface: public};
    var H_daughter1: dimensionless {interface: public};
    var H_daughter2: dimensionless {interface: public};
    var H_daughter3: dimensionless {interface: public};
    var H_daughter4: dimensionless {interface: public};
    var H_from1_target: dimensionless {interface: public};
    var H_from2_target: dimensionless {interface: public};
    var H_from3_target: dimensionless {interface: public};
    var H_from4_target: dimensionless {interface: public};
    var H_from1: dimensionless {init: H_global_L, interface: public};
    var H_from2: dimensionless {init: H_global_L, interface: public};
    var H_from3: dimensionless {init: H_global_L, interface: public};
    var H_from4: dimensionless {init: H_global_L, interface: public};
    var r_bc1: metre {interface: public};
    var r_bc2: metre {interface: public};
    var r_bc3: metre {interface: public};
    var r_bc4: metre {interface: public};
    var D1: metre {interface: public};
    var D2: metre {interface: public};
    var D3: metre {interface: public};
    var D4: metre {interface: public};
    var w_in1: dimensionless {interface: public};
    var w_in2: dimensionless {interface: public};
    var w_in3: dimensionless {interface: public};
    var w_in4: dimensionless {interface: public};
    var w_out1: dimensionless {interface: public};
    var w_out2: dimensionless {interface: public};
    var w_out3: dimensionless {interface: public};
    var w_out4: dimensionless {interface: public};
    var Qin1: m3_per_s {interface: public};
    var Qin2: m3_per_s {interface: public};
    var Qin3: m3_per_s {interface: public};
    var Qin4: m3_per_s {interface: public};
    var Qout1: m3_per_s {interface: public};
    var Qout2: m3_per_s {interface: public};
    var Qout3: m3_per_s {interface: public};
    var Qout4: m3_per_s {interface: public};
    var Qin_tot: m3_per_s {interface: public};
    var Qout_tot: m3_per_s {interface: public};
    var bc1_is_in: dimensionless {interface: public};
    var bc2_is_in: dimensionless {interface: public};
    var bc3_is_in: dimensionless {interface: public};
    var bc4_is_in: dimensionless {interface: public};
    var bc1_is_out: dimensionless {interface: public};
    var bc2_is_out: dimensionless {interface: public};
    var bc3_is_out: dimensionless {interface: public};
    var bc4_is_out: dimensionless {interface: public};
    var n_in: dimensionless {interface: public};
    var n_out: dimensionless {interface: public};
    var junction_type: dimensionless {interface: public};
    var is_split: dimensionless {interface: public};
    var is_merge: dimensionless {interface: public};
    var feed1: dimensionless {interface: public};
    var feed2: dimensionless {interface: public};
    var feed3: dimensionless {interface: public};
    var feed4: dimensionless {interface: public};
    var alpha1: dimensionless {interface: public};
    var alpha2: dimensionless {interface: public};
    var alpha3: dimensionless {interface: public};
    var alpha4: dimensionless {interface: public};
    var Qout1_rem: m3_per_s {interface: public};
    var Qout2_rem: m3_per_s {interface: public};
    var Qout3_rem: m3_per_s {interface: public};
    var Qout4_rem: m3_per_s {interface: public};
    var beta1: dimensionless {interface: public};
    var beta2: dimensionless {interface: public};
    var beta3: dimensionless {interface: public};
    var beta4: dimensionless {interface: public};
    var D_F: metre {interface: public};
    var D_alpha: metre {interface: public};
    var D_beta: metre {interface: public};
    var v_alpha: m3_per_s {interface: public};
    var v_beta: m3_per_s {interface: public};
    var FQB_alpha: dimensionless {interface: public};
    var FQE_alpha: dimensionless {interface: public};
    var B: dimensionless {interface: public};
    var A: dimensionless {interface: public};
    var X_0: dimensionless {interface: public};
    var ph: dimensionless {interface: public};
    var y_raw: dimensionless {interface: public};
    var y: dimensionless {interface: public};
    var epsilon_alpha: dimensionless {interface: public};
    var H_VV_out_alpha: dimensionless {init: H_global_L, interface: public};
    var H_VV_out_beta: dimensionless {interface: public};
    var RBC_in: m3_per_s {interface: public};
    var RBC_out: m3_per_s {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var H_mean: dimensionless {interface: public};
    var C_conn1: m6_per_J {interface: public};
    var C_conn2: m6_per_J {interface: public};
    var C_conn3: m6_per_J {interface: public};
    var C_conn4: m6_per_J {interface: public};
    var C_max12: m6_per_J {interface: public};
    var C_max123: m6_per_J {interface: public};
    var C: m6_per_J {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q_C_d: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_d_mmHg: dimensionless {interface: public};
    vj1 = vbc1;
    vj2 = vbc2;
    vj3 = -vbc3;
    vj4 = -vbc4;
    H_split1 = sel
      case alpha1 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta1 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to1;
    endsel;
    // not a split-daughter =>unchanged
    H_split2 = sel
      case alpha2 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta2 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to2;
    endsel;
    H_split3 = sel
      case alpha3 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta3 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to3;
    endsel;
    H_split4 = sel
      case alpha4 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta4 == 1{dimensionless}:
        H_VV_out_beta;
      case true:
        H_to4;
    endsel;
    H_daughter1 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split1;
      case true:
        H_to1;
    endsel;
    H_daughter2 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split2;
      case true:
        H_to2;
    endsel;
    H_daughter3 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split3;
      case true:
        H_to3;
    endsel;
    H_daughter4 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split4;
      case true:
        H_to4;
    endsel;
    H_from1_target = sel
      case bc1_is_out == 1{dimensionless}:
        H_daughter1;
      case true:
        H_to1;
    endsel;
    H_from2_target = sel
      case bc2_is_out == 1{dimensionless}:
        H_daughter2;
      case true:
        H_to2;
    endsel;
    H_from3_target = sel
      case bc3_is_out == 1{dimensionless}:
        H_daughter3;
      case true:
        H_to3;
    endsel;
    H_from4_target = sel
      case bc4_is_out == 1{dimensionless}:
        H_daughter4;
      case true:
        H_to4;
    endsel;
    ode(H_from1, t) = w_out1*(H_from1_target-H_from1)/tau_junc;
    ode(H_from2, t) = w_out2*(H_from2_target-H_from2)/tau_junc;
    ode(H_from3, t) = w_out3*(H_from3_target-H_from3)/tau_junc;
    ode(H_from4, t) = w_out4*(H_from4_target-H_from4)/tau_junc;
    D1 = 2{dimensionless}*r_bc1;
    // <-- port1 attached vessel diameter (example: parent VV side)
    D2 = 2{dimensionless}*r_bc2;
    // <-- port2 (if unused, still define)
    D3 = 2{dimensionless}*r_bc3;
    // <-- port3 daughter candidate
    D4 = 2{dimensionless}*r_bc4;
    w_in1 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj1/v_scale);
    w_in2 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj2/v_scale);
    w_in3 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj3/v_scale);
    w_in4 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj4/v_scale);
    w_out1 = 1{dimensionless}-w_in1;
    // ~1 if vj1<0
    w_out2 = 1{dimensionless}-w_in2;
    w_out3 = 1{dimensionless}-w_in3;
    w_out4 = 1{dimensionless}-w_in4;
    Qin1 = w_in1*vj1;
    Qin2 = w_in2*vj2;
    Qin3 = w_in3*vj3;
    Qin4 = w_in4*vj4;
    // absolute (magnitude) of flow out of the junction
    Qout1 = w_out1*(-vj1);
    Qout2 = w_out2*(-vj2);
    Qout3 = w_out3*(-vj3);
    Qout4 = w_out4*(-vj4);
    Qin_tot = Qin1+Qin2+Qin3+Qin4;
    Qout_tot = Qout1+Qout2+Qout3+Qout4;
    bc1_is_in = sel
      case Qin1 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc2_is_in = sel
      case Qin2 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc3_is_in = sel
      case Qin3 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc4_is_in = sel
      case Qin4 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc1_is_out = sel
      case Qout1 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc2_is_out = sel
      case Qout2 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc3_is_out = sel
      case Qout3 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    bc4_is_out = sel
      case Qout4 > v_threshold:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    n_in = bc1_is_in+bc2_is_in+bc3_is_in+bc4_is_in;
    n_out = bc1_is_out+bc2_is_out+bc3_is_out+bc4_is_out;
    junction_type = sel
      case n_in == 1{dimensionless}:
        1{dimensionless};
      case n_in >= 2{dimensionless}:
        -1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    is_split = sel
      case junction_type == 1{dimensionless}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    is_merge = sel
      case junction_type == -1{dimensionless}:
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed1 = sel
      case (is_split == 1{dimensionless}) and (Qin1 >= Qin2) and (Qin1 >= Qin3) and (Qin1 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed2 = sel
      case (is_split == 1{dimensionless}) and (Qin2 > Qin1) and (Qin2 >= Qin3) and (Qin2 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed3 = sel
      case (is_split == 1{dimensionless}) and (Qin3 > Qin1) and (Qin3 > Qin2) and (Qin3 >= Qin4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    feed4 = sel
      case (is_split == 1{dimensionless}) and (Qin4 > Qin1) and (Qin4 > Qin2) and (Qin4 > Qin3):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (Qout1 >= Qout2) and (Qout1 >= Qout3) and (Qout1 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    // alpha2 only if not alpha1 (tie-break) and port2 is a daughter and beats remaining
    alpha2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (Qout2 > Qout1) and (Qout2 >= Qout3) and (Qout2 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (Qout3 > Qout1) and (Qout3 > Qout2) and (Qout3 >= Qout4):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    alpha4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (Qout4 > Qout1) and (Qout4 > Qout2) and (Qout4 > Qout3):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    Qout1_rem = sel
      case alpha1 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout1;
    endsel;
    Qout2_rem = sel
      case alpha2 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout2;
    endsel;
    Qout3_rem = sel
      case alpha3 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout3;
    endsel;
    Qout4_rem = sel
      case alpha4 == 1{dimensionless}:
        0{m3_per_s};
      case true:
        Qout4;
    endsel;
    beta1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (alpha1 == 0{dimensionless}) and (Qout1_rem >= Qout2_rem) and (Qout1_rem >= Qout3_rem) and (Qout1_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (alpha2 == 0{dimensionless}) and (Qout2_rem > Qout1_rem) and (Qout2_rem >= Qout3_rem) and (Qout2_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (alpha3 == 0{dimensionless}) and (Qout3_rem > Qout1_rem) and (Qout3_rem > Qout2_rem) and (Qout3_rem >= Qout4_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    beta4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (alpha4 == 0{dimensionless}) and (Qout4_rem > Qout1_rem) and (Qout4_rem > Qout2_rem) and (Qout4_rem > Qout3_rem):
        1{dimensionless};
      case true:
        0{dimensionless};
    endsel;
    D_F = sel
      case feed1 == 1{dimensionless}:
        D1;
      case feed2 == 1{dimensionless}:
        D2;
      case feed3 == 1{dimensionless}:
        D3;
      case feed4 == 1{dimensionless}:
        D4;
      case true:
        D1;
    endsel;
    D_alpha = sel
      case alpha1 == 1{dimensionless}:
        D1;
      case alpha2 == 1{dimensionless}:
        D2;
      case alpha3 == 1{dimensionless}:
        D3;
      case alpha4 == 1{dimensionless}:
        D4;
      case true:
        D3;
    endsel;
    D_beta = sel
      case beta1 == 1{dimensionless}:
        D1;
      case beta2 == 1{dimensionless}:
        D2;
      case beta3 == 1{dimensionless}:
        D3;
      case beta4 == 1{dimensionless}:
        D4;
      case true:
        D4;
    endsel;
    v_alpha = sel
      case alpha1 == 1{dimensionless}:
        Qout1;
      case alpha2 == 1{dimensionless}:
        Qout2;
      case alpha3 == 1{dimensionless}:
        Qout3;
      case alpha4 == 1{dimensionless}:
        Qout4;
      case true:
        0{m3_per_s};
    endsel;
    v_beta = sel
      case beta1 == 1{dimensionless}:
        Qout1;
      case beta2 == 1{dimensionless}:
        Qout2;
      case beta3 == 1{dimensionless}:
        Qout3;
      case beta4 == 1{dimensionless}:
        Qout4;
      case true:
        0{m3_per_s};
    endsel;
    FQB_alpha = (v_alpha+div_0)/(v_alpha+v_beta+2{dimensionless}*div_0);
    FQE_alpha = 1{dimensionless}/(1{dimensionless}+exp(-(A+B*ph)));
    B = 1{dimensionless}+6.98{dimensionless}*(1{dimensionless}-H_mean)/(D_F*1e6{dimensionless});
    A = -6.96{dimensionless}*ln(D_alpha*1e6{dimensionless}/(D_beta*1e6{dimensionless}))/(D_F*1e6{dimensionless});
    X_0 = 0.4{dimensionless}/(D_F*1e6{dimensionless});
    ph = ln(y/(1{dimensionless}-y));
    y_raw = (FQB_alpha-X_0)/(1{dimensionless}-2{dimensionless}*X_0+div_0);
    y = min(max(y_raw, div_0y), 1{dimensionless}-div_0y);
    epsilon_alpha = H_VV_out_alpha-H_mean*FQE_alpha/(FQB_alpha+div_0);
    ode(H_VV_out_alpha, t) = is_split*(-k)*epsilon_alpha;
    H_VV_out_beta = H_mean*(1{dimensionless}-FQE_alpha)/(1{dimensionless}-FQB_alpha+div_0);
    RBC_in = Qin1*H_to1+Qin2*H_to2+Qin3*H_to3+Qin4*H_to4;
    RBC_out = Qout1*H_from1+Qout2*H_from2+Qout3*H_from3+Qout4*H_from4;
    RBC_volume_init = H_global_L*q_us;
    // mass balance
    ode(RBC_volume, t) = RBC_in-RBC_out;
    H_mean = RBC_volume/(q_us+div_0);
    C_max12 = sel
      case C_conn1 > C_conn2:
        C_conn1;
      case C_conn1 <= C_conn2:
        C_conn2;
    endsel;
    C_max123 = sel
      case C_max12 > C_conn3:
        C_max12;
      case C_max12 <= C_conn3:
        C_conn3;
    endsel;
    C = sel
      case C_max123 > C_conn4:
        C_max123;
      case C_max123 <= C_conn4:
        C_conn4;
    endsel;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C+q_C_d;
    v_mm3_s = v/one_mm3;
    u = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C, t) = vbc1+vbc2-v;
    u_mmHg = u/133.322{J_per_m3};
    v = (u-u_d)/R;
    u_d = q_C_d/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-vbc3-vbc4;
    u_d_mmHg = u_d/133.322{J_per_m3};
  enddef;

  def comp PV5_module as
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var t: second {interface: public};
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
    R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    H_L_out = (1{dimensionless}-w_v_d)*H_down+w_v_d*H_L_in;
    H_R_out = w_v_d*H_down+(1{dimensionless}-w_v_d)*H_R_in;
    ode(RBC_volume, t) = v*H_mass_L-v_d*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    v_d_pos = w_v_d*v_d;
    // flow from left to right (v_d>0) =>outflow on right
    v_d_neg = (1{dimensionless}-w_v_d)*(-v_d);
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+R_constriction;
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp PV6_module as
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var t: second {interface: public};
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
    R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    H_L_out = (1{dimensionless}-w_v_d)*H_down+w_v_d*H_L_in;
    H_R_out = w_v_d*H_down+(1{dimensionless}-w_v_d)*H_R_in;
    ode(RBC_volume, t) = v*H_mass_L-v_d*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    v_d_pos = w_v_d*v_d;
    // flow from left to right (v_d>0) =>outflow on right
    v_d_neg = (1{dimensionless}-w_v_d)*(-v_d);
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+R_constriction;
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;

  def comp V5_module as
    var t: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v = abs(v)/(abs(v)+v_eps);
    H_L_out = (1{dimensionless}-w_v)*H_down+w_v*H_L_in;
    H_R_out = w_v*H_down+(1{dimensionless}-w_v)*H_R_in;
    ode(RBC_volume, t) = v_in*H_mass_L-v*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;

  def comp V6_module as
    var t: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var l: metre {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var v_in: m3_per_s {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {init: H_global_L, interface: public};
    var H_link_L: dimensionless {init: H_global_L, interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {init: H_global_L, interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {init: RBC_volume_init, interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {init: q_C_init, interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless;
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless;
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    ode(H_link_R, t) = (H_L_out_RHS-H_link_R)/tau_link;
    ode(H_link_L, t) = (H_R_out_LHS-H_link_L)/tau_link;
    H_L_in = H_link_L;
    H_R_in = H_link_R;
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    s_v = abs(v)/(abs(v)+v_eps);
    H_L_out = (1{dimensionless}-w_v)*H_down+w_v*H_L_in;
    H_R_out = w_v*H_down+(1{dimensionless}-w_v)*H_R_in;
    ode(RBC_volume, t) = v_in*H_mass_L-v*H_mass_R;
    RBC_volume_init = H_global_L*q_us;
    v_pos = w_v*v;
    // inflow from left (v>0)
    v_neg = (1{dimensionless}-w_v)*(-v);
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    H_mass_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    H_mass_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    mu = hem_dep_u_rel*mu_plasma;
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;

  def comp terminal_venous_connection as
  enddef;

  def comp generic_junction_connection as
  enddef;

  def comp sum_blood_volume as
  enddef;

  def comp inlet as
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_R_out_LHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_in: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
  enddef;

  def comp VV_junc1 as
    var div_0: dimensionless {interface: public};
    var div_0y: dimensionless {interface: public};
    var tau_junc: second {interface: public};
    var v_threshold: m3_per_s {interface: public};
    var k: dimensionless {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var vbc2: m3_per_s {interface: public};
    var vj1: m3_per_s {interface: public};
    var vj2: m3_per_s {interface: public};
    var vj3: m3_per_s {interface: public};
    var vj4: m3_per_s {interface: public};
    var H_to2: dimensionless {interface: public};
    var H_split1: dimensionless {interface: public};
    var H_split2: dimensionless {interface: public};
    var H_split3: dimensionless {interface: public};
    var H_split4: dimensionless {interface: public};
    var H_daughter1: dimensionless {interface: public};
    var H_daughter2: dimensionless {interface: public};
    var H_daughter3: dimensionless {interface: public};
    var H_daughter4: dimensionless {interface: public};
    var H_from1_target: dimensionless {interface: public};
    var H_from2_target: dimensionless {interface: public};
    var H_from3_target: dimensionless {interface: public};
    var H_from4_target: dimensionless {interface: public};
    var H_from1: dimensionless {interface: public};
    var H_from2: dimensionless {interface: public};
    var H_from3: dimensionless {interface: public};
    var H_from4: dimensionless {interface: public};
    var r_bc2: metre {interface: public};
    var D1: metre {interface: public};
    var D2: metre {interface: public};
    var D3: metre {interface: public};
    var D4: metre {interface: public};
    var w_in1: dimensionless {interface: public};
    var w_in2: dimensionless {interface: public};
    var w_in3: dimensionless {interface: public};
    var w_in4: dimensionless {interface: public};
    var w_out1: dimensionless {interface: public};
    var w_out2: dimensionless {interface: public};
    var w_out3: dimensionless {interface: public};
    var w_out4: dimensionless {interface: public};
    var Qin1: m3_per_s {interface: public};
    var Qin2: m3_per_s {interface: public};
    var Qin3: m3_per_s {interface: public};
    var Qin4: m3_per_s {interface: public};
    var Qout1: m3_per_s {interface: public};
    var Qout2: m3_per_s {interface: public};
    var Qout3: m3_per_s {interface: public};
    var Qout4: m3_per_s {interface: public};
    var Qin_tot: m3_per_s {interface: public};
    var Qout_tot: m3_per_s {interface: public};
    var bc1_is_in: dimensionless {interface: public};
    var bc2_is_in: dimensionless {interface: public};
    var bc3_is_in: dimensionless {interface: public};
    var bc4_is_in: dimensionless {interface: public};
    var bc1_is_out: dimensionless {interface: public};
    var bc2_is_out: dimensionless {interface: public};
    var bc3_is_out: dimensionless {interface: public};
    var bc4_is_out: dimensionless {interface: public};
    var n_in: dimensionless {interface: public};
    var n_out: dimensionless {interface: public};
    var junction_type: dimensionless {interface: public};
    var is_split: dimensionless {interface: public};
    var is_merge: dimensionless {interface: public};
    var feed1: dimensionless {interface: public};
    var feed2: dimensionless {interface: public};
    var feed3: dimensionless {interface: public};
    var feed4: dimensionless {interface: public};
    var alpha1: dimensionless {interface: public};
    var alpha2: dimensionless {interface: public};
    var alpha3: dimensionless {interface: public};
    var alpha4: dimensionless {interface: public};
    var Qout1_rem: m3_per_s {interface: public};
    var Qout2_rem: m3_per_s {interface: public};
    var Qout3_rem: m3_per_s {interface: public};
    var Qout4_rem: m3_per_s {interface: public};
    var beta1: dimensionless {interface: public};
    var beta2: dimensionless {interface: public};
    var beta3: dimensionless {interface: public};
    var beta4: dimensionless {interface: public};
    var D_F: metre {interface: public};
    var D_alpha: metre {interface: public};
    var D_beta: metre {interface: public};
    var v_alpha: m3_per_s {interface: public};
    var v_beta: m3_per_s {interface: public};
    var FQB_alpha: dimensionless {interface: public};
    var FQE_alpha: dimensionless {interface: public};
    var B: dimensionless {interface: public};
    var A: dimensionless {interface: public};
    var X_0: dimensionless {interface: public};
    var ph: dimensionless {interface: public};
    var y_raw: dimensionless {interface: public};
    var y: dimensionless {interface: public};
    var epsilon_alpha: dimensionless {interface: public};
    var H_VV_out_alpha: dimensionless {interface: public};
    var H_VV_out_beta: dimensionless {interface: public};
    var RBC_in: m3_per_s {interface: public};
    var RBC_out: m3_per_s {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var RBC_volume: m3 {interface: public};
    var H_mean: dimensionless {interface: public};
    var C_conn2: m6_per_J {interface: public};
    var C_max12: m6_per_J {interface: public};
    var C_max123: m6_per_J {interface: public};
    var C: m6_per_J {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_d_mmHg: dimensionless {interface: public};
  enddef;

  def comp PV1 as
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
  enddef;

  def comp PV2 as
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
  enddef;

  def comp V1 as
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
  enddef;

  def comp V2 as
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
  enddef;

  def comp VV_junc2 as
    var div_0: dimensionless {interface: public};
    var div_0y: dimensionless {interface: public};
    var tau_junc: second {interface: public};
    var v_threshold: m3_per_s {interface: public};
    var k: dimensionless {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var vbc1: m3_per_s {interface: public};
    var vbc2: m3_per_s {interface: public};
    var vj1: m3_per_s {interface: public};
    var vj2: m3_per_s {interface: public};
    var vj3: m3_per_s {interface: public};
    var vj4: m3_per_s {interface: public};
    var H_to1: dimensionless {interface: public};
    var H_to2: dimensionless {interface: public};
    var H_split1: dimensionless {interface: public};
    var H_split2: dimensionless {interface: public};
    var H_split3: dimensionless {interface: public};
    var H_split4: dimensionless {interface: public};
    var H_daughter1: dimensionless {interface: public};
    var H_daughter2: dimensionless {interface: public};
    var H_daughter3: dimensionless {interface: public};
    var H_daughter4: dimensionless {interface: public};
    var H_from1_target: dimensionless {interface: public};
    var H_from2_target: dimensionless {interface: public};
    var H_from3_target: dimensionless {interface: public};
    var H_from4_target: dimensionless {interface: public};
    var H_from1: dimensionless {interface: public};
    var H_from2: dimensionless {interface: public};
    var H_from3: dimensionless {interface: public};
    var H_from4: dimensionless {interface: public};
    var r_bc1: metre {interface: public};
    var r_bc2: metre {interface: public};
    var D1: metre {interface: public};
    var D2: metre {interface: public};
    var D3: metre {interface: public};
    var D4: metre {interface: public};
    var w_in1: dimensionless {interface: public};
    var w_in2: dimensionless {interface: public};
    var w_in3: dimensionless {interface: public};
    var w_in4: dimensionless {interface: public};
    var w_out1: dimensionless {interface: public};
    var w_out2: dimensionless {interface: public};
    var w_out3: dimensionless {interface: public};
    var w_out4: dimensionless {interface: public};
    var Qin1: m3_per_s {interface: public};
    var Qin2: m3_per_s {interface: public};
    var Qin3: m3_per_s {interface: public};
    var Qin4: m3_per_s {interface: public};
    var Qout1: m3_per_s {interface: public};
    var Qout2: m3_per_s {interface: public};
    var Qout3: m3_per_s {interface: public};
    var Qout4: m3_per_s {interface: public};
    var Qin_tot: m3_per_s {interface: public};
    var Qout_tot: m3_per_s {interface: public};
    var bc1_is_in: dimensionless {interface: public};
    var bc2_is_in: dimensionless {interface: public};
    var bc3_is_in: dimensionless {interface: public};
    var bc4_is_in: dimensionless {interface: public};
    var bc1_is_out: dimensionless {interface: public};
    var bc2_is_out: dimensionless {interface: public};
    var bc3_is_out: dimensionless {interface: public};
    var bc4_is_out: dimensionless {interface: public};
    var n_in: dimensionless {interface: public};
    var n_out: dimensionless {interface: public};
    var junction_type: dimensionless {interface: public};
    var is_split: dimensionless {interface: public};
    var is_merge: dimensionless {interface: public};
    var feed1: dimensionless {interface: public};
    var feed2: dimensionless {interface: public};
    var feed3: dimensionless {interface: public};
    var feed4: dimensionless {interface: public};
    var alpha1: dimensionless {interface: public};
    var alpha2: dimensionless {interface: public};
    var alpha3: dimensionless {interface: public};
    var alpha4: dimensionless {interface: public};
    var Qout1_rem: m3_per_s {interface: public};
    var Qout2_rem: m3_per_s {interface: public};
    var Qout3_rem: m3_per_s {interface: public};
    var Qout4_rem: m3_per_s {interface: public};
    var beta1: dimensionless {interface: public};
    var beta2: dimensionless {interface: public};
    var beta3: dimensionless {interface: public};
    var beta4: dimensionless {interface: public};
    var D_F: metre {interface: public};
    var D_alpha: metre {interface: public};
    var D_beta: metre {interface: public};
    var v_alpha: m3_per_s {interface: public};
    var v_beta: m3_per_s {interface: public};
    var FQB_alpha: dimensionless {interface: public};
    var FQE_alpha: dimensionless {interface: public};
    var B: dimensionless {interface: public};
    var A: dimensionless {interface: public};
    var X_0: dimensionless {interface: public};
    var ph: dimensionless {interface: public};
    var y_raw: dimensionless {interface: public};
    var y: dimensionless {interface: public};
    var epsilon_alpha: dimensionless {interface: public};
    var H_VV_out_alpha: dimensionless {interface: public};
    var H_VV_out_beta: dimensionless {interface: public};
    var RBC_in: m3_per_s {interface: public};
    var RBC_out: m3_per_s {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var RBC_volume: m3 {interface: public};
    var H_mean: dimensionless {interface: public};
    var C_conn1: m6_per_J {interface: public};
    var C_conn2: m6_per_J {interface: public};
    var C_max12: m6_per_J {interface: public};
    var C_max123: m6_per_J {interface: public};
    var C: m6_per_J {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_d_mmHg: dimensionless {interface: public};
  enddef;

  def comp PV3 as
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
  enddef;

  def comp PV4 as
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
  enddef;

  def comp V3 as
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
  enddef;

  def comp V4 as
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
  enddef;

  def comp VV_junc3 as
    var div_0: dimensionless {interface: public};
    var div_0y: dimensionless {interface: public};
    var tau_junc: second {interface: public};
    var v_threshold: m3_per_s {interface: public};
    var k: dimensionless {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var vbc1: m3_per_s {interface: public};
    var vbc2: m3_per_s {interface: public};
    var vj1: m3_per_s {interface: public};
    var vj2: m3_per_s {interface: public};
    var vj3: m3_per_s {interface: public};
    var vj4: m3_per_s {interface: public};
    var H_to1: dimensionless {interface: public};
    var H_to2: dimensionless {interface: public};
    var H_split1: dimensionless {interface: public};
    var H_split2: dimensionless {interface: public};
    var H_split3: dimensionless {interface: public};
    var H_split4: dimensionless {interface: public};
    var H_daughter1: dimensionless {interface: public};
    var H_daughter2: dimensionless {interface: public};
    var H_daughter3: dimensionless {interface: public};
    var H_daughter4: dimensionless {interface: public};
    var H_from1_target: dimensionless {interface: public};
    var H_from2_target: dimensionless {interface: public};
    var H_from3_target: dimensionless {interface: public};
    var H_from4_target: dimensionless {interface: public};
    var H_from1: dimensionless {interface: public};
    var H_from2: dimensionless {interface: public};
    var H_from3: dimensionless {interface: public};
    var H_from4: dimensionless {interface: public};
    var r_bc1: metre {interface: public};
    var r_bc2: metre {interface: public};
    var D1: metre {interface: public};
    var D2: metre {interface: public};
    var D3: metre {interface: public};
    var D4: metre {interface: public};
    var w_in1: dimensionless {interface: public};
    var w_in2: dimensionless {interface: public};
    var w_in3: dimensionless {interface: public};
    var w_in4: dimensionless {interface: public};
    var w_out1: dimensionless {interface: public};
    var w_out2: dimensionless {interface: public};
    var w_out3: dimensionless {interface: public};
    var w_out4: dimensionless {interface: public};
    var Qin1: m3_per_s {interface: public};
    var Qin2: m3_per_s {interface: public};
    var Qin3: m3_per_s {interface: public};
    var Qin4: m3_per_s {interface: public};
    var Qout1: m3_per_s {interface: public};
    var Qout2: m3_per_s {interface: public};
    var Qout3: m3_per_s {interface: public};
    var Qout4: m3_per_s {interface: public};
    var Qin_tot: m3_per_s {interface: public};
    var Qout_tot: m3_per_s {interface: public};
    var bc1_is_in: dimensionless {interface: public};
    var bc2_is_in: dimensionless {interface: public};
    var bc3_is_in: dimensionless {interface: public};
    var bc4_is_in: dimensionless {interface: public};
    var bc1_is_out: dimensionless {interface: public};
    var bc2_is_out: dimensionless {interface: public};
    var bc3_is_out: dimensionless {interface: public};
    var bc4_is_out: dimensionless {interface: public};
    var n_in: dimensionless {interface: public};
    var n_out: dimensionless {interface: public};
    var junction_type: dimensionless {interface: public};
    var is_split: dimensionless {interface: public};
    var is_merge: dimensionless {interface: public};
    var feed1: dimensionless {interface: public};
    var feed2: dimensionless {interface: public};
    var feed3: dimensionless {interface: public};
    var feed4: dimensionless {interface: public};
    var alpha1: dimensionless {interface: public};
    var alpha2: dimensionless {interface: public};
    var alpha3: dimensionless {interface: public};
    var alpha4: dimensionless {interface: public};
    var Qout1_rem: m3_per_s {interface: public};
    var Qout2_rem: m3_per_s {interface: public};
    var Qout3_rem: m3_per_s {interface: public};
    var Qout4_rem: m3_per_s {interface: public};
    var beta1: dimensionless {interface: public};
    var beta2: dimensionless {interface: public};
    var beta3: dimensionless {interface: public};
    var beta4: dimensionless {interface: public};
    var D_F: metre {interface: public};
    var D_alpha: metre {interface: public};
    var D_beta: metre {interface: public};
    var v_alpha: m3_per_s {interface: public};
    var v_beta: m3_per_s {interface: public};
    var FQB_alpha: dimensionless {interface: public};
    var FQE_alpha: dimensionless {interface: public};
    var B: dimensionless {interface: public};
    var A: dimensionless {interface: public};
    var X_0: dimensionless {interface: public};
    var ph: dimensionless {interface: public};
    var y_raw: dimensionless {interface: public};
    var y: dimensionless {interface: public};
    var epsilon_alpha: dimensionless {interface: public};
    var H_VV_out_alpha: dimensionless {interface: public};
    var H_VV_out_beta: dimensionless {interface: public};
    var RBC_in: m3_per_s {interface: public};
    var RBC_out: m3_per_s {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var RBC_volume: m3 {interface: public};
    var H_mean: dimensionless {interface: public};
    var C_conn1: m6_per_J {interface: public};
    var C_conn2: m6_per_J {interface: public};
    var C_max12: m6_per_J {interface: public};
    var C_max123: m6_per_J {interface: public};
    var C: m6_per_J {interface: public};
    var q_C: m3 {interface: public};
    var q_C_d: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var R: Js_per_m6 {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u_d: J_per_m3 {interface: public};
    var u_d_mmHg: dimensionless {interface: public};
  enddef;

  def comp PV5 as
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
  enddef;

  def comp PV6 as
    var R_constriction_base: Js_per_m6 {interface: public};
    var R_constriction_final: Js_per_m6 {interface: public};
    var R_constriction: Js_per_m6 {interface: public};
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var w_v_d: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v_d: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var v_d_pos: m3_per_s {interface: public};
    var v_d_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
    var v_d: m3_per_s {interface: public};
    var v_d_mm3_s: mm3_per_s {interface: public};
  enddef;

  def comp V5 as
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
  enddef;

  def comp V6 as
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var H_L_out_RHS: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var r: metre {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_out: J_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var w_v: dimensionless {interface: public};
    var H_link_R: dimensionless {interface: public};
    var H_link_L: dimensionless {interface: public};
    var H_L_in: dimensionless {interface: public};
    var H_R_in: dimensionless {interface: public};
    var H_up: dimensionless {interface: public};
    var H_down: dimensionless {interface: public};
    var H_down_target: dimensionless {interface: public};
    var s_v: dimensionless {interface: public};
    var H_L_out: dimensionless {interface: public};
    var H_R_out: dimensionless {interface: public};
    var RBC_volume: m3 {interface: public};
    var RBC_volume_init: m3 {interface: public};
    var v_pos: m3_per_s {interface: public};
    var v_neg: m3_per_s {interface: public};
    var H_mean: dimensionless {interface: public};
    var H_mass_L: dimensionless {interface: public};
    var H_mass_R: dimensionless {interface: public};
    var q_C: m3 {interface: public};
    var q: m3 {interface: public};
    var q_us: m3 {interface: public};
    var C: m6_per_J {interface: public};
    var Z: dimensionless {interface: public};
    var mu_45: dimensionless {interface: public};
    var mu: Js_per_m3 {interface: public};
    var hem_dep_u_rel: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var v: m3_per_s {interface: public};
    var v_mm3_s: mm3_per_s {interface: public};
    var u: J_per_m3 {interface: public};
    var u_mmHg: dimensionless {interface: public};
  enddef;

  def comp global as
    var H_global_L: dimensionless {interface: public};
    var H_global_R: dimensionless {interface: public};
    var gamma_mirror: dimensionless {interface: public};
    var tau_H_down: second {interface: public};
    var tau_H_mean: second {interface: public};
    var v_eps: m3_per_s {interface: public};
    var q_C_init: m3 {interface: public};
    var mu_plasma: Js_per_m3 {interface: public};
    var u_ext: J_per_m3 {interface: public};
    var tau_link: second {interface: public};
    var v_scale: m3_per_s {interface: public};
    var one_mm3: m3 {interface: public};
    var div_0: dimensionless {interface: public};
    var div_0y: dimensionless {interface: public};
    var tau_junc: second {interface: public};
    var v_threshold: m3_per_s {interface: public};
    var k: dimensionless {interface: public};
    var R: Js_per_m6 {interface: public};
    var R_constriction_base: Js_per_m6 {interface: public};
    var tau_sig: second {interface: public};
    var t0: second {interface: public};
  enddef;
  def map between parameters and inlet_module for
    vars l_inlet and l;
    vars r_inlet and r;
    vars H_R_out_LHS_inlet and H_R_out_LHS;
    vars u_in_inlet and u_in;
  enddef;
  def map between parameters and VV_junc1_module for
    vars l_VV_junc1 and l;
    vars r_VV_junc1 and r;
    vars vbc2_VV_junc1 and vbc2;
    vars H_to2_VV_junc1 and H_to2;
    vars r_bc2_VV_junc1 and r_bc2;
    vars C_conn2_VV_junc1 and C_conn2;
  enddef;
  def map between parameters and PV1_module for
    vars R_constriction_final_PV1 and R_constriction_final;
    vars l_PV1 and l;
    vars r_PV1 and r;
  enddef;
  def map between parameters and PV2_module for
    vars R_constriction_final_PV2 and R_constriction_final;
    vars l_PV2 and l;
    vars r_PV2 and r;
  enddef;
  def map between parameters and V1_module for
    vars l_V1 and l;
    vars r_V1 and r;
    vars H_L_out_RHS_V1 and H_L_out_RHS;
    vars u_out_V1 and u_out;
  enddef;
  def map between parameters and V2_module for
    vars l_V2 and l;
    vars r_V2 and r;
    vars H_L_out_RHS_V2 and H_L_out_RHS;
    vars u_out_V2 and u_out;
  enddef;
  def map between parameters and VV_junc2_module for
    vars l_VV_junc2 and l;
    vars r_VV_junc2 and r;
    vars vbc1_VV_junc2 and vbc1;
    vars vbc2_VV_junc2 and vbc2;
    vars H_to1_VV_junc2 and H_to1;
    vars H_to2_VV_junc2 and H_to2;
    vars r_bc1_VV_junc2 and r_bc1;
    vars r_bc2_VV_junc2 and r_bc2;
    vars C_conn1_VV_junc2 and C_conn1;
    vars C_conn2_VV_junc2 and C_conn2;
  enddef;
  def map between parameters and PV3_module for
    vars R_constriction_final_PV3 and R_constriction_final;
    vars l_PV3 and l;
    vars r_PV3 and r;
  enddef;
  def map between parameters and PV4_module for
    vars R_constriction_final_PV4 and R_constriction_final;
    vars l_PV4 and l;
    vars r_PV4 and r;
  enddef;
  def map between parameters and V3_module for
    vars l_V3 and l;
    vars r_V3 and r;
    vars H_L_out_RHS_V3 and H_L_out_RHS;
    vars u_out_V3 and u_out;
  enddef;
  def map between parameters and V4_module for
    vars l_V4 and l;
    vars r_V4 and r;
    vars H_L_out_RHS_V4 and H_L_out_RHS;
    vars u_out_V4 and u_out;
  enddef;
  def map between parameters and VV_junc3_module for
    vars l_VV_junc3 and l;
    vars r_VV_junc3 and r;
    vars vbc1_VV_junc3 and vbc1;
    vars vbc2_VV_junc3 and vbc2;
    vars H_to1_VV_junc3 and H_to1;
    vars H_to2_VV_junc3 and H_to2;
    vars r_bc1_VV_junc3 and r_bc1;
    vars r_bc2_VV_junc3 and r_bc2;
    vars C_conn1_VV_junc3 and C_conn1;
    vars C_conn2_VV_junc3 and C_conn2;
  enddef;
  def map between parameters and PV5_module for
    vars R_constriction_final_PV5 and R_constriction_final;
    vars l_PV5 and l;
    vars r_PV5 and r;
  enddef;
  def map between parameters and PV6_module for
    vars R_constriction_final_PV6 and R_constriction_final;
    vars l_PV6 and l;
    vars r_PV6 and r;
  enddef;
  def map between parameters and V5_module for
    vars l_V5 and l;
    vars r_V5 and r;
    vars H_L_out_RHS_V5 and H_L_out_RHS;
    vars u_out_V5 and u_out;
  enddef;
  def map between parameters and V6_module for
    vars l_V6 and l;
    vars r_V6 and r;
    vars H_L_out_RHS_V6 and H_L_out_RHS;
    vars u_out_V6 and u_out;
  enddef;
  def map between parameters_global and global for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars tau_junc and tau_junc;
    vars v_threshold and v_threshold;
    vars k and k;
    vars R and R;
    vars R_constriction_base and R_constriction_base;
    vars tau_sig and tau_sig;
    vars t0 and t0;
  enddef;
  def map between parameters_global and inlet_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  def map between parameters_global and VV_junc1_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars tau_junc and tau_junc;
    vars v_threshold and v_threshold;
    vars k and k;
    vars R and R;
  enddef;
  def map between parameters_global and PV1_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars R_constriction_base and R_constriction_base;
    vars tau_sig and tau_sig;
    vars t0 and t0;
  enddef;
  def map between parameters_global and PV2_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars R_constriction_base and R_constriction_base;
    vars tau_sig and tau_sig;
    vars t0 and t0;
  enddef;
  def map between parameters_global and V1_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  def map between parameters_global and V2_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  def map between parameters_global and VV_junc2_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars tau_junc and tau_junc;
    vars v_threshold and v_threshold;
    vars k and k;
    vars R and R;
  enddef;
  def map between parameters_global and PV3_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars R_constriction_base and R_constriction_base;
    vars tau_sig and tau_sig;
    vars t0 and t0;
  enddef;
  def map between parameters_global and PV4_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars R_constriction_base and R_constriction_base;
    vars tau_sig and tau_sig;
    vars t0 and t0;
  enddef;
  def map between parameters_global and V3_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  def map between parameters_global and V4_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  def map between parameters_global and VV_junc3_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars tau_junc and tau_junc;
    vars v_threshold and v_threshold;
    vars k and k;
    vars R and R;
  enddef;
  def map between parameters_global and PV5_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars R_constriction_base and R_constriction_base;
    vars tau_sig and tau_sig;
    vars t0 and t0;
  enddef;
  def map between parameters_global and PV6_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars R_constriction_base and R_constriction_base;
    vars tau_sig and tau_sig;
    vars t0 and t0;
  enddef;
  def map between parameters_global and V5_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  def map between parameters_global and V6_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  def map between environment and inlet_module for
    vars time and t;
  enddef;
  def map between environment and VV_junc1_module for
    vars time and t;
  enddef;
  def map between environment and PV1_module for
    vars time and t;
  enddef;
  def map between environment and PV2_module for
    vars time and t;
  enddef;
  def map between environment and V1_module for
    vars time and t;
  enddef;
  def map between environment and V2_module for
    vars time and t;
  enddef;
  def map between environment and VV_junc2_module for
    vars time and t;
  enddef;
  def map between environment and PV3_module for
    vars time and t;
  enddef;
  def map between environment and PV4_module for
    vars time and t;
  enddef;
  def map between environment and V3_module for
    vars time and t;
  enddef;
  def map between environment and V4_module for
    vars time and t;
  enddef;
  def map between environment and VV_junc3_module for
    vars time and t;
  enddef;
  def map between environment and PV5_module for
    vars time and t;
  enddef;
  def map between environment and PV6_module for
    vars time and t;
  enddef;
  def map between environment and V5_module for
    vars time and t;
  enddef;
  def map between environment and V6_module for
    vars time and t;
  enddef;
  def map between inlet_module and inlet for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars H_R_out_LHS and H_R_out_LHS;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_in and u_in;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars w_v_d and w_v_d;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v_d and s_v_d;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars v_d_pos and v_d_pos;
    vars v_d_neg and v_d_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
  enddef;
  def map between inlet_module and VV_junc1_module for
    vars H_L_out_RHS and H_from1;
    vars r and r_bc1;
    vars u_out and u;
    vars H_R_out and H_to1;
    vars C and C_conn1;
    vars v_d and vbc1;
  enddef;
  def map between VV_junc1_module and VV_junc1 for
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars tau_junc and tau_junc;
    vars v_threshold and v_threshold;
    vars k and k;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars vbc2 and vbc2;
    vars vj1 and vj1;
    vars vj2 and vj2;
    vars vj3 and vj3;
    vars vj4 and vj4;
    vars H_to2 and H_to2;
    vars H_split1 and H_split1;
    vars H_split2 and H_split2;
    vars H_split3 and H_split3;
    vars H_split4 and H_split4;
    vars H_daughter1 and H_daughter1;
    vars H_daughter2 and H_daughter2;
    vars H_daughter3 and H_daughter3;
    vars H_daughter4 and H_daughter4;
    vars H_from1_target and H_from1_target;
    vars H_from2_target and H_from2_target;
    vars H_from3_target and H_from3_target;
    vars H_from4_target and H_from4_target;
    vars H_from1 and H_from1;
    vars H_from2 and H_from2;
    vars H_from3 and H_from3;
    vars H_from4 and H_from4;
    vars r_bc2 and r_bc2;
    vars D1 and D1;
    vars D2 and D2;
    vars D3 and D3;
    vars D4 and D4;
    vars w_in1 and w_in1;
    vars w_in2 and w_in2;
    vars w_in3 and w_in3;
    vars w_in4 and w_in4;
    vars w_out1 and w_out1;
    vars w_out2 and w_out2;
    vars w_out3 and w_out3;
    vars w_out4 and w_out4;
    vars Qin1 and Qin1;
    vars Qin2 and Qin2;
    vars Qin3 and Qin3;
    vars Qin4 and Qin4;
    vars Qout1 and Qout1;
    vars Qout2 and Qout2;
    vars Qout3 and Qout3;
    vars Qout4 and Qout4;
    vars Qin_tot and Qin_tot;
    vars Qout_tot and Qout_tot;
    vars bc1_is_in and bc1_is_in;
    vars bc2_is_in and bc2_is_in;
    vars bc3_is_in and bc3_is_in;
    vars bc4_is_in and bc4_is_in;
    vars bc1_is_out and bc1_is_out;
    vars bc2_is_out and bc2_is_out;
    vars bc3_is_out and bc3_is_out;
    vars bc4_is_out and bc4_is_out;
    vars n_in and n_in;
    vars n_out and n_out;
    vars junction_type and junction_type;
    vars is_split and is_split;
    vars is_merge and is_merge;
    vars feed1 and feed1;
    vars feed2 and feed2;
    vars feed3 and feed3;
    vars feed4 and feed4;
    vars alpha1 and alpha1;
    vars alpha2 and alpha2;
    vars alpha3 and alpha3;
    vars alpha4 and alpha4;
    vars Qout1_rem and Qout1_rem;
    vars Qout2_rem and Qout2_rem;
    vars Qout3_rem and Qout3_rem;
    vars Qout4_rem and Qout4_rem;
    vars beta1 and beta1;
    vars beta2 and beta2;
    vars beta3 and beta3;
    vars beta4 and beta4;
    vars D_F and D_F;
    vars D_alpha and D_alpha;
    vars D_beta and D_beta;
    vars v_alpha and v_alpha;
    vars v_beta and v_beta;
    vars FQB_alpha and FQB_alpha;
    vars FQE_alpha and FQE_alpha;
    vars B and B;
    vars A and A;
    vars X_0 and X_0;
    vars ph and ph;
    vars y_raw and y_raw;
    vars y and y;
    vars epsilon_alpha and epsilon_alpha;
    vars H_VV_out_alpha and H_VV_out_alpha;
    vars H_VV_out_beta and H_VV_out_beta;
    vars RBC_in and RBC_in;
    vars RBC_out and RBC_out;
    vars RBC_volume_init and RBC_volume_init;
    vars RBC_volume and RBC_volume;
    vars H_mean and H_mean;
    vars C_conn2 and C_conn2;
    vars C_max12 and C_max12;
    vars C_max123 and C_max123;
    vars C and C;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q and q;
    vars q_us and q_us;
    vars R and R;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u_d and u_d;
    vars u_d_mmHg and u_d_mmHg;
  enddef;
  def map between VV_junc1_module and PV1_module for
    vars vbc3 and v;
    vars H_to3 and H_L_out;
    vars H_from3 and H_R_out_LHS;
    vars r_bc3 and r;
    vars C_conn3 and C;
    vars u_d and u_in;
  enddef;
  def map between VV_junc1_module and PV2_module for
    vars vbc4 and v;
    vars H_to4 and H_L_out;
    vars H_from4 and H_R_out_LHS;
    vars r_bc4 and r;
    vars C_conn4 and C;
    vars u_d and u_in;
  enddef;
  def map between PV1_module and PV1 for
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars R_constriction_base and R_constriction_base;
    vars R_constriction_final and R_constriction_final;
    vars R_constriction and R_constriction;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars w_v_d and w_v_d;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v_d and s_v_d;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars v_d_pos and v_d_pos;
    vars v_d_neg and v_d_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
  enddef;
  def map between PV1_module and V1_module for
    vars H_L_out_RHS and H_L_out;
    vars u_out and u;
    vars H_R_out and H_R_out_LHS;
    vars v_d and v_in;
  enddef;
  def map between PV2_module and PV2 for
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars R_constriction_base and R_constriction_base;
    vars R_constriction_final and R_constriction_final;
    vars R_constriction and R_constriction;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars w_v_d and w_v_d;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v_d and s_v_d;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars v_d_pos and v_d_pos;
    vars v_d_neg and v_d_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
  enddef;
  def map between PV2_module and V2_module for
    vars H_L_out_RHS and H_L_out;
    vars u_out and u;
    vars H_R_out and H_R_out_LHS;
    vars v_d and v_in;
  enddef;
  def map between V1_module and V1 for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars H_L_out_RHS and H_L_out_RHS;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v and s_v;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
  enddef;
  def map between V2_module and V2 for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars H_L_out_RHS and H_L_out_RHS;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v and s_v;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
  enddef;
  def map between VV_junc2_module and VV_junc2 for
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars tau_junc and tau_junc;
    vars v_threshold and v_threshold;
    vars k and k;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars vbc1 and vbc1;
    vars vbc2 and vbc2;
    vars vj1 and vj1;
    vars vj2 and vj2;
    vars vj3 and vj3;
    vars vj4 and vj4;
    vars H_to1 and H_to1;
    vars H_to2 and H_to2;
    vars H_split1 and H_split1;
    vars H_split2 and H_split2;
    vars H_split3 and H_split3;
    vars H_split4 and H_split4;
    vars H_daughter1 and H_daughter1;
    vars H_daughter2 and H_daughter2;
    vars H_daughter3 and H_daughter3;
    vars H_daughter4 and H_daughter4;
    vars H_from1_target and H_from1_target;
    vars H_from2_target and H_from2_target;
    vars H_from3_target and H_from3_target;
    vars H_from4_target and H_from4_target;
    vars H_from1 and H_from1;
    vars H_from2 and H_from2;
    vars H_from3 and H_from3;
    vars H_from4 and H_from4;
    vars r_bc1 and r_bc1;
    vars r_bc2 and r_bc2;
    vars D1 and D1;
    vars D2 and D2;
    vars D3 and D3;
    vars D4 and D4;
    vars w_in1 and w_in1;
    vars w_in2 and w_in2;
    vars w_in3 and w_in3;
    vars w_in4 and w_in4;
    vars w_out1 and w_out1;
    vars w_out2 and w_out2;
    vars w_out3 and w_out3;
    vars w_out4 and w_out4;
    vars Qin1 and Qin1;
    vars Qin2 and Qin2;
    vars Qin3 and Qin3;
    vars Qin4 and Qin4;
    vars Qout1 and Qout1;
    vars Qout2 and Qout2;
    vars Qout3 and Qout3;
    vars Qout4 and Qout4;
    vars Qin_tot and Qin_tot;
    vars Qout_tot and Qout_tot;
    vars bc1_is_in and bc1_is_in;
    vars bc2_is_in and bc2_is_in;
    vars bc3_is_in and bc3_is_in;
    vars bc4_is_in and bc4_is_in;
    vars bc1_is_out and bc1_is_out;
    vars bc2_is_out and bc2_is_out;
    vars bc3_is_out and bc3_is_out;
    vars bc4_is_out and bc4_is_out;
    vars n_in and n_in;
    vars n_out and n_out;
    vars junction_type and junction_type;
    vars is_split and is_split;
    vars is_merge and is_merge;
    vars feed1 and feed1;
    vars feed2 and feed2;
    vars feed3 and feed3;
    vars feed4 and feed4;
    vars alpha1 and alpha1;
    vars alpha2 and alpha2;
    vars alpha3 and alpha3;
    vars alpha4 and alpha4;
    vars Qout1_rem and Qout1_rem;
    vars Qout2_rem and Qout2_rem;
    vars Qout3_rem and Qout3_rem;
    vars Qout4_rem and Qout4_rem;
    vars beta1 and beta1;
    vars beta2 and beta2;
    vars beta3 and beta3;
    vars beta4 and beta4;
    vars D_F and D_F;
    vars D_alpha and D_alpha;
    vars D_beta and D_beta;
    vars v_alpha and v_alpha;
    vars v_beta and v_beta;
    vars FQB_alpha and FQB_alpha;
    vars FQE_alpha and FQE_alpha;
    vars B and B;
    vars A and A;
    vars X_0 and X_0;
    vars ph and ph;
    vars y_raw and y_raw;
    vars y and y;
    vars epsilon_alpha and epsilon_alpha;
    vars H_VV_out_alpha and H_VV_out_alpha;
    vars H_VV_out_beta and H_VV_out_beta;
    vars RBC_in and RBC_in;
    vars RBC_out and RBC_out;
    vars RBC_volume_init and RBC_volume_init;
    vars RBC_volume and RBC_volume;
    vars H_mean and H_mean;
    vars C_conn1 and C_conn1;
    vars C_conn2 and C_conn2;
    vars C_max12 and C_max12;
    vars C_max123 and C_max123;
    vars C and C;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q and q;
    vars q_us and q_us;
    vars R and R;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u_d and u_d;
    vars u_d_mmHg and u_d_mmHg;
  enddef;
  def map between VV_junc2_module and PV3_module for
    vars vbc3 and v;
    vars H_to3 and H_L_out;
    vars H_from3 and H_R_out_LHS;
    vars r_bc3 and r;
    vars C_conn3 and C;
    vars u_d and u_in;
  enddef;
  def map between VV_junc2_module and PV4_module for
    vars vbc4 and v;
    vars H_to4 and H_L_out;
    vars H_from4 and H_R_out_LHS;
    vars r_bc4 and r;
    vars C_conn4 and C;
    vars u_d and u_in;
  enddef;
  def map between PV3_module and PV3 for
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars R_constriction_base and R_constriction_base;
    vars R_constriction_final and R_constriction_final;
    vars R_constriction and R_constriction;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars w_v_d and w_v_d;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v_d and s_v_d;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars v_d_pos and v_d_pos;
    vars v_d_neg and v_d_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
  enddef;
  def map between PV3_module and V3_module for
    vars H_L_out_RHS and H_L_out;
    vars u_out and u;
    vars H_R_out and H_R_out_LHS;
    vars v_d and v_in;
  enddef;
  def map between PV4_module and PV4 for
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars R_constriction_base and R_constriction_base;
    vars R_constriction_final and R_constriction_final;
    vars R_constriction and R_constriction;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars w_v_d and w_v_d;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v_d and s_v_d;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars v_d_pos and v_d_pos;
    vars v_d_neg and v_d_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
  enddef;
  def map between PV4_module and V4_module for
    vars H_L_out_RHS and H_L_out;
    vars u_out and u;
    vars H_R_out and H_R_out_LHS;
    vars v_d and v_in;
  enddef;
  def map between V3_module and V3 for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars H_L_out_RHS and H_L_out_RHS;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v and s_v;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
  enddef;
  def map between V4_module and V4 for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars H_L_out_RHS and H_L_out_RHS;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v and s_v;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
  enddef;
  def map between VV_junc3_module and VV_junc3 for
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars tau_junc and tau_junc;
    vars v_threshold and v_threshold;
    vars k and k;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars vbc1 and vbc1;
    vars vbc2 and vbc2;
    vars vj1 and vj1;
    vars vj2 and vj2;
    vars vj3 and vj3;
    vars vj4 and vj4;
    vars H_to1 and H_to1;
    vars H_to2 and H_to2;
    vars H_split1 and H_split1;
    vars H_split2 and H_split2;
    vars H_split3 and H_split3;
    vars H_split4 and H_split4;
    vars H_daughter1 and H_daughter1;
    vars H_daughter2 and H_daughter2;
    vars H_daughter3 and H_daughter3;
    vars H_daughter4 and H_daughter4;
    vars H_from1_target and H_from1_target;
    vars H_from2_target and H_from2_target;
    vars H_from3_target and H_from3_target;
    vars H_from4_target and H_from4_target;
    vars H_from1 and H_from1;
    vars H_from2 and H_from2;
    vars H_from3 and H_from3;
    vars H_from4 and H_from4;
    vars r_bc1 and r_bc1;
    vars r_bc2 and r_bc2;
    vars D1 and D1;
    vars D2 and D2;
    vars D3 and D3;
    vars D4 and D4;
    vars w_in1 and w_in1;
    vars w_in2 and w_in2;
    vars w_in3 and w_in3;
    vars w_in4 and w_in4;
    vars w_out1 and w_out1;
    vars w_out2 and w_out2;
    vars w_out3 and w_out3;
    vars w_out4 and w_out4;
    vars Qin1 and Qin1;
    vars Qin2 and Qin2;
    vars Qin3 and Qin3;
    vars Qin4 and Qin4;
    vars Qout1 and Qout1;
    vars Qout2 and Qout2;
    vars Qout3 and Qout3;
    vars Qout4 and Qout4;
    vars Qin_tot and Qin_tot;
    vars Qout_tot and Qout_tot;
    vars bc1_is_in and bc1_is_in;
    vars bc2_is_in and bc2_is_in;
    vars bc3_is_in and bc3_is_in;
    vars bc4_is_in and bc4_is_in;
    vars bc1_is_out and bc1_is_out;
    vars bc2_is_out and bc2_is_out;
    vars bc3_is_out and bc3_is_out;
    vars bc4_is_out and bc4_is_out;
    vars n_in and n_in;
    vars n_out and n_out;
    vars junction_type and junction_type;
    vars is_split and is_split;
    vars is_merge and is_merge;
    vars feed1 and feed1;
    vars feed2 and feed2;
    vars feed3 and feed3;
    vars feed4 and feed4;
    vars alpha1 and alpha1;
    vars alpha2 and alpha2;
    vars alpha3 and alpha3;
    vars alpha4 and alpha4;
    vars Qout1_rem and Qout1_rem;
    vars Qout2_rem and Qout2_rem;
    vars Qout3_rem and Qout3_rem;
    vars Qout4_rem and Qout4_rem;
    vars beta1 and beta1;
    vars beta2 and beta2;
    vars beta3 and beta3;
    vars beta4 and beta4;
    vars D_F and D_F;
    vars D_alpha and D_alpha;
    vars D_beta and D_beta;
    vars v_alpha and v_alpha;
    vars v_beta and v_beta;
    vars FQB_alpha and FQB_alpha;
    vars FQE_alpha and FQE_alpha;
    vars B and B;
    vars A and A;
    vars X_0 and X_0;
    vars ph and ph;
    vars y_raw and y_raw;
    vars y and y;
    vars epsilon_alpha and epsilon_alpha;
    vars H_VV_out_alpha and H_VV_out_alpha;
    vars H_VV_out_beta and H_VV_out_beta;
    vars RBC_in and RBC_in;
    vars RBC_out and RBC_out;
    vars RBC_volume_init and RBC_volume_init;
    vars RBC_volume and RBC_volume;
    vars H_mean and H_mean;
    vars C_conn1 and C_conn1;
    vars C_conn2 and C_conn2;
    vars C_max12 and C_max12;
    vars C_max123 and C_max123;
    vars C and C;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q and q;
    vars q_us and q_us;
    vars R and R;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u_d and u_d;
    vars u_d_mmHg and u_d_mmHg;
  enddef;
  def map between VV_junc3_module and PV5_module for
    vars vbc3 and v;
    vars H_to3 and H_L_out;
    vars H_from3 and H_R_out_LHS;
    vars r_bc3 and r;
    vars C_conn3 and C;
    vars u_d and u_in;
  enddef;
  def map between VV_junc3_module and PV6_module for
    vars vbc4 and v;
    vars H_to4 and H_L_out;
    vars H_from4 and H_R_out_LHS;
    vars r_bc4 and r;
    vars C_conn4 and C;
    vars u_d and u_in;
  enddef;
  def map between PV5_module and PV5 for
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars R_constriction_base and R_constriction_base;
    vars R_constriction_final and R_constriction_final;
    vars R_constriction and R_constriction;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars w_v_d and w_v_d;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v_d and s_v_d;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars v_d_pos and v_d_pos;
    vars v_d_neg and v_d_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
  enddef;
  def map between PV5_module and V5_module for
    vars H_L_out_RHS and H_L_out;
    vars u_out and u;
    vars H_R_out and H_R_out_LHS;
    vars v_d and v_in;
  enddef;
  def map between PV6_module and PV6 for
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars R_constriction_base and R_constriction_base;
    vars R_constriction_final and R_constriction_final;
    vars R_constriction and R_constriction;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars w_v_d and w_v_d;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v_d and s_v_d;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars v_d_pos and v_d_pos;
    vars v_d_neg and v_d_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
  enddef;
  def map between PV6_module and V6_module for
    vars H_L_out_RHS and H_L_out;
    vars u_out and u;
    vars H_R_out and H_R_out_LHS;
    vars v_d and v_in;
  enddef;
  def map between V5_module and V5 for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars H_L_out_RHS and H_L_out_RHS;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v and s_v;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
  enddef;
  def map between V6_module and V6 for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars H_L_out_RHS and H_L_out_RHS;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars u_out and u_out;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v and s_v;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_pos and v_pos;
    vars v_neg and v_neg;
    vars H_mean and H_mean;
    vars H_mass_L and H_mass_L;
    vars H_mass_R and H_mass_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
  enddef;
enddef;
