// #This model was automatically generated with the circulatory_autogen software
// # https://github.com/FinbarArgus/circulatory_autogen
def model CardiovascularSystem as
  // inlined from switching_test_parameters.cellml

  def comp parameters as
    var l_inlet: metre {init: 0.0003, pub: out};
    var r_inlet: metre {init: 6e-06, pub: out};
    var H_R_out_LHS_inlet: dimensionless {init: 0.45, pub: out};
    var u_in_inlet: J_per_m3 {init: 6300, pub: out};
    var l_VV_junc1: metre {init: 1e-06, pub: out};
    var r_VV_junc1: metre {init: 4.3e-06, pub: out};
    var vbc2_VV_junc1: m3_per_s {init: 0, pub: out};
    var H_to2_VV_junc1: dimensionless {init: 0.45, pub: out};
    var r_bc2_VV_junc1: metre {init: 0, pub: out};
    var C_conn2_VV_junc1: m6_per_J {init: 8.51e-22, pub: out};
    var l_PV1: metre {init: 1.5e-05, pub: out};
    var r_PV1: metre {init: 3e-06, pub: out};
    var l_PV2: metre {init: 1.5e-05, pub: out};
    var r_PV2: metre {init: 3e-06, pub: out};
    var l_V1: metre {init: 0.00015, pub: out};
    var r_V1: metre {init: 3.1e-06, pub: out};
    var l_V2: metre {init: 0.00012, pub: out};
    var r_V2: metre {init: 2.9e-06, pub: out};
    var l_VV_junc2: metre {init: 1e-06, pub: out};
    var r_VV_junc2: metre {init: 3e-06, pub: out};
    var vbc4_VV_junc2: m3_per_s {init: 0, pub: out};
    var H_to4_VV_junc2: dimensionless {init: 0, pub: out};
    var r_bc4_VV_junc2: metre {init: 0, pub: out};
    var C_conn4_VV_junc2: m6_per_J {init: 0, pub: out};
    var l_V3: metre {init: 0.0001, pub: out};
    var r_V3: metre {init: 3e-06, pub: out};
    var H_L_out_RHS_V3: dimensionless {init: 0.45, pub: out};
    var u_out_V3: J_per_m3 {init: 6000, pub: out};
  enddef;

  def comp parameters_global as
    var H_global_L: dimensionless {init: 0.45, pub: out};
    var H_global_R: dimensionless {init: 0.6, pub: out};
    var gamma_mirror: dimensionless {init: 0.02, pub: out};
    var tau_H_down: second {init: 0.001, pub: out};
    var tau_H_mean: second {init: 0.001, pub: out};
    var v_eps: m3_per_s {init: 1e-30, pub: out};
    var q_C_init: m3 {init: 0, pub: out};
    var mu_plasma: Js_per_m3 {init: 0.001, pub: out};
    var u_ext: J_per_m3 {init: 133, pub: out};
    var tau_link: second {init: 1e-05, pub: out};
    var v_scale: m3_per_s {init: 1e-50, pub: out};
    var one_mm3: m3 {init: 1e-09, pub: out};
    var div_0: dimensionless {init: 1e-25, pub: out};
    var div_0y: dimensionless {init: 1e-08, pub: out};
    var v_threshold: m3_per_s {init: 1e-18, pub: out};
    var k: dimensionless {init: 1000, pub: out};
    var R_VV_junc: Js_per_m6 {init: 30000000000000, pub: out};
    var tau_sig: second {init: 1, pub: out};
    var t0: second {init: 100, pub: out};
    var Re_stall: Js_per_m6 {init: 1e+18, pub: out};
    var tau_K_deprived: second {init: 300, pub: out};
    var alpha_max: dimensionless {init: 1.2, pub: out};
    var alpha_min: dimensionless {init: 0.6, pub: out};
    var BOSF_Bx: m3_per_s {init: 1.2e-14, pub: out};
    var K_deprived_init: dimensionless {init: 0, pub: out};
    var f_crit: dimensionless {init: 3, pub: out};
    var n: dimensionless {init: 4, pub: out};
    // var r_stall: metre {init: 0.0000028, pub: out};
    var f_wss: dimensionless {init: 0.4, pub: out};
    var n_stall: dimensionless {init: 4, pub: out};
    var fs: dimensionless {init: 0.1, pub: out};
    var stall_init: dimensionless {init: 0, pub: out};
    var tau_stall: second {init: 0.1, pub: out};
  enddef;

  def comp environment as
    var time: second {pub: out};
  enddef;
  // #STARTGENBELOW
  // ------------units------------//
  // inlined from switching_test_units.cellml
  def unit s2 as
    unit second {expo: 2};
  enddef;
  def unit Hz as
    unit second {expo: -1};
  enddef;
  def unit millis as
    unit second {pref: milli};
  enddef;
  def unit per_millis as
    unit millis {expo: -1};
  enddef;
  def unit mm as
    unit metre {pref: milli};
  enddef;
  def unit m2 as
    unit metre {expo: 2};
  enddef;
  def unit mm2 as
    unit metre {expo: 2, pref: milli};
  enddef;
  def unit m3 as
    unit metre {expo: 3};
  enddef;
  def unit m4 as
    unit metre {expo: 4};
  enddef;
  def unit mm3 as
    unit metre {expo: 3, pref: milli};
  enddef;
  def unit J_per_s as
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit mol_per_s as
    unit mole;
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s as
    unit mole {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit umol_per_s as
    unit mole {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit C_per_s as
    unit coulomb;
    unit second {expo: -1};
  enddef;
  def unit mC_per_s as
    unit coulomb {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit uC_per_s as
    unit coulomb {pref: micro};
    unit second {expo: -1};
  enddef;
  def unit nC_per_s as
    unit coulomb {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit Cm_per_millis as
    unit coulomb;
    unit metre;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m_per_s as
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit mm_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit um_per_s as
    unit metre {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit rad_per_s as
    unit radian;
    unit second {expo: -1};
  enddef;
  def unit m3_per_s as
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit mL as
    unit litre {pref: milli};
  enddef;
  def unit per_milliL_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit s_per_m3 as
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit s_per_milliV as
    unit second;
    unit volt {expo: -1, pref: milli};
  enddef;
  def unit s_per_millis as
    unit second;
    unit second {expo: -1, pref: milli};
  enddef;
  def unit millis_per_s as
    unit second {pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mm3_per_s as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l_per_s as
    unit litre;
    unit second {expo: -1};
  enddef;
  def unit per_ml_s as
    unit litre {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit per_m3_s as
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit J_per_mol as
    unit joule;
    unit mole {expo: -1};
  enddef;
  def unit J_per_kmol_K as
    unit joule;
    unit mole {expo: -1, pref: kilo};
    unit kelvin {expo: -1};
  enddef;
  def unit J_per_M as
    unit J_per_mol;
  enddef;
  def unit J_per_C as
    unit joule;
    unit coulomb {expo: -1};
  enddef;
  def unit J_per_C_s as
    unit joule;
    unit coulomb {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_m as
    unit joule;
    unit metre {expo: -1};
  enddef;
  def unit J_per_m3 as
    unit joule;
    unit metre {expo: -3};
  enddef;
  def unit mmHg as
    unit pascal {mult: 133.32};
  enddef;
  def unit per_mmHg as
    unit mmHg {expo: -1};
  enddef;
  def unit mmHg2 as
    unit mmHg {expo: 2};
  enddef;
  def unit Pa_per_mmHg as
    unit pascal;
    unit mmHg {expo: -1};
  enddef;
  def unit m3_per_J as
    unit joule {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit J_per_m3s as
    unit joule;
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit m3_per_Js as
    unit joule {expo: -1};
    unit metre {expo: 3};
    unit second {expo: -1};
  enddef;
  def unit J2_per_m6 as
    unit joule {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_C2 as
    unit second {expo: 2};
    unit joule {expo: 1};
    unit coulomb {expo: -2};
  enddef;
  def unit Js2_per_mol2 as
    unit joule;
    unit second {expo: 2};
    unit mole {expo: -2};
  enddef;
  def unit Js_per_mol2 as
    unit joule;
    unit second;
    unit mole {expo: -2};
  enddef;
  def unit Js_per_C2 as
    unit joule {expo: 1};
    unit second {expo: 1};
    unit coulomb {expo: -2};
  enddef;
  def unit J_per_mol2 as
    unit joule;
    unit mole {expo: -2};
  enddef;
  def unit C2_per_J_s as
    unit coulomb {expo: 2};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit J_per_C2 as
    unit joule {expo: 1};
    unit coulomb {expo: -2};
  enddef;
  def unit C2_per_J as
    unit joule {expo: 1};
    unit coulomb {expo: -2};
  enddef;
  def unit mol_per_m3 as
    unit mole;
    unit metre {expo: -3};
  enddef;
  def unit M as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit mM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit milliM as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit uM as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit kg_per_m3 as
    unit kilogram;
    unit metre {expo: -3};
  enddef;
  def unit m3_per_kg as
    unit kilogram {expo: -1};
    unit metre {expo: 3};
  enddef;
  def unit per_m3 as
    unit metre {expo: -3};
  enddef;
  def unit mol_per_m2_s as
    unit mole;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit mM_m_per_s as
    unit mM;
    unit metre;
    unit second {expo: -1};
  enddef;
  def unit J_per_m2_s as
    unit joule;
    unit metre {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit Js_per_m4 as
    unit joule;
    unit second;
    unit metre {expo: -4};
  enddef;
  def unit mM_per_s as
    unit mM;
    unit second {expo: -1};
  enddef;
  def unit per_s as
    unit second {expo: -1};
  enddef;
  def unit per_s2 as
    unit second {expo: -2};
  enddef;
  def unit per_mM_s as
    unit mM {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit m6_per_mol2_s as
    unit metre {expo: 6};
    unit mole {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol as
    unit metre {expo: 3};
    unit mole {expo: -1};
  enddef;
  def unit mol_per_m3_s as
    unit mole {expo: 1};
    unit metre {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit per_mol as
    unit mole {expo: -1};
  enddef;
  def unit J_per_mol_K as
    unit joule;
    unit mole {expo: -1};
    unit kelvin {expo: -1};
  enddef;
  def unit m2_per_s as
    unit metre {expo: 2};
    unit second {expo: -1};
  enddef;
  def unit per_C as
    unit coulomb {expo: -1};
  enddef;
  def unit per_m as
    unit metre {expo: -1};
  enddef;
  def unit per_mM as
    unit mM {expo: -1};
  enddef;
  def unit Js2_per_m2 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -2};
  enddef;
  def unit Js_per_m2 as
    unit joule;
    unit second;
    unit metre {expo: -2};
  enddef;
  def unit J_per_m2 as
    unit joule;
    unit metre {expo: -2};
  enddef;
  def unit m_per_s2 as
    unit metre;
    unit second {expo: -2};
  enddef;
  def unit rad_per_s2 as
    unit radian;
    unit second {expo: -2};
  enddef;
  def unit Js_per_m3 as
    unit joule;
    unit second;
    unit metre {expo: -3};
  enddef;
  def unit Js2_per_m5 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -5};
  enddef;
  def unit m5_per_Js2 as
    unit joule {expo: -1};
    unit second {expo: -2};
    unit metre {expo: 5};
  enddef;
  def unit J_per_m6 as
    unit joule;
    unit metre {expo: -6};
  enddef;
  def unit m6_per_J as
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit m6_per_Js as
    unit metre {expo: 6};
    unit joule {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mm6_per_J as
    unit metre {expo: 6, pref: milli};
    unit joule {expo: -1};
  enddef;
  def unit Js2_per_m9 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -9};
  enddef;
  def unit m6s_per_J as
    unit second;
    unit metre {expo: 6};
    unit joule {expo: -1};
  enddef;
  def unit Js_per_m6 as
    unit joule;
    unit second;
    unit metre {expo: -6};
  enddef;
  def unit Js2_per_m6 as
    unit joule;
    unit second {expo: 2};
    unit metre {expo: -6};
  enddef;
  def unit m3_per_s2 as
    unit metre {expo: 3};
    unit second {expo: -2};
  enddef;
  def unit mm3_per_s2 as
    unit metre {expo: 3, pref: milli};
    unit second {expo: -2};
  enddef;
  def unit per_mm3 as
    unit metre {expo: -3, pref: milli};
  enddef;
  def unit UnitValve as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit J_per_m3 {expo: -0.5};
  enddef;
  def unit J_per_m9 as
    unit joule;
    unit metre {expo: -9};
  enddef;
  def unit milliV as
    unit volt {pref: milli};
  enddef;
  def unit per_milliV as
    unit milliV {expo: -1};
  enddef;
  def unit millis_per_milliV as
    unit milliV {expo: -1};
    unit millis;
  enddef;
  def unit per_V as
    unit volt {expo: -1};
  enddef;
  def unit milliV_per_V as
    unit milliV;
    unit volt {expo: -1};
  enddef;
  def unit V_per_milliV as
    unit volt;
    unit milliV {expo: -1};
  enddef;
  def unit V_per_s as
    unit volt;
    unit second {expo: -1};
  enddef;
  def unit milliV_per_kiloV as
    unit volt {pref: milli};
    unit volt {expo: -1, pref: kilo};
  enddef;
  def unit V2 as
    unit volt {expo: 2};
  enddef;
  def unit milliV2 as
    unit volt {expo: 2, pref: milli};
  enddef;
  def unit millimol as
    unit mole {pref: milli};
  enddef;
  def unit millimolar as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit per_millimolar as
    unit millimolar {expo: -1};
  enddef;
  def unit per_millimolar_s as
    unit millimolar {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit per_millimolar2_s as
    unit millimolar {expo: -2};
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_s as
    unit millimolar;
    unit second {expo: -1};
  enddef;
  def unit millimolar_per_megamolar as
    unit millimolar;
    unit mole {expo: -1, pref: mega};
    unit litre;
  enddef;
  def unit per_millimol_milliS as
    unit mole {expo: -1, pref: milli};
    unit siemens {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_millis as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit per_millimol_s as
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit microm as
    unit metre {pref: micro};
  enddef;
  def unit microS as
    unit siemens {pref: micro};
  enddef;
  def unit microm3 as
    unit microm {expo: 3};
  enddef;
  def unit m3_per_microm3 as
    unit m3;
    unit microm3 {expo: -1};
  enddef;
  def unit picoF as
    unit farad {pref: pico};
  enddef;
  def unit S_per_F as
    unit siemens;
    unit farad {expo: -1};
  enddef;
  def unit m3_pefs as
    unit metre {expo: 3};
    unit farad {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit A_per_F as
    unit ampere;
    unit farad {expo: -1};
  enddef;
  def unit megaOhm as
    unit ohm {pref: mega};
  enddef;
  def unit nanoA as
    unit ampere {pref: nano};
  enddef;
  def unit nanoA_per_milliA as
    unit ampere {pref: nano};
    unit ampere {expo: -1, pref: milli};
  enddef;
  def unit nanoA_per_A as
    unit ampere {pref: nano};
    unit ampere {expo: -1};
  enddef;
  def unit A_per_nanoA as
    unit ampere {expo: -1, pref: nano};
    unit ampere;
  enddef;
  def unit C_per_mol as
    unit coulomb;
    unit mole {expo: -1};
  enddef;
  def unit m3_per_J_millis as
    unit metre {expo: 3};
    unit joule {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_mol_millis as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1, pref: milli};
  enddef;
  def unit m3_per_millimol_s as
    unit metre {expo: 3};
    unit second {expo: -1};
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit millimol_per_m3 as
    unit metre {expo: -3};
    unit mole {pref: milli};
  enddef;
  def unit mmol_per_l as
    unit mole {pref: milli};
    unit litre {expo: -1};
  enddef;
  def unit l_per_mmol as
    unit litre;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit l_per_mmol_per_s as
    unit litre;
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit l2_per_mmol_per_s as
    unit litre {expo: 2};
    unit mole {expo: -1, pref: milli};
    unit second {expo: -1};
  enddef;
  def unit mmol_per_s2 as
    unit mole {pref: milli};
    unit second {expo: -2};
  enddef;
  def unit mmol as
    unit mole {pref: milli};
  enddef;
  def unit mmol_per_l_per_s as
    unit mole {pref: milli};
    unit litre {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit Hz2 as
    unit second {expo: -2};
  enddef;
  def unit cm as
    unit metre {pref: centi};
  enddef;
  def unit J_per_m4_s as
    unit meter {expo: -4};
    unit joule;
    unit second {expo: -1};
  enddef;
  def unit m3_per_mol_per_sec as
    unit metre {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_kPa as
    unit mole {expo: 1};
    unit metre {expo: -3};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit mol_per_m3_per_Pa as
    unit mole {expo: 1};
    unit metre {expo: -3};
    unit pascal {expo: -1};
  enddef;
  def unit m3_per_mol_per_s as
    unit meter {expo: 3};
    unit mole {expo: -1};
    unit second {expo: -1};
  enddef;
  def unit mol_per_m3_per_s as
    unit mole;
    unit meter {expo: -3};
    unit second {expo: -1};
  enddef;
  def unit dim as
    unit dimensionless;
  enddef;
  def unit fmol as
    unit mole {pref: femto};
  enddef;
  def unit per_fmol as
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_s as
    unit joule {pref: nano};
    unit second {expo: -1};
  enddef;
  def unit fmol_per_s as
    unit fmol;
    unit second {expo: -1};
  enddef;
  def unit nC_per_fmol as
    unit coulomb {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nC as
    unit coulomb {pref: nano};
  enddef;
  def unit nJ_per_fmol as
    unit joule {pref: nano};
    unit fmol {expo: -1};
  enddef;
  def unit nJ_per_nC as
    unit joule {pref: nano};
    unit nC {expo: -1};
  enddef;
  def unit fC as
    unit coulomb {pref: femto};
  enddef;
  def unit fF as
    unit farad {pref: femto};
  enddef;
  def unit volt_per_sec as
    unit second {expo: -1.0};
    unit volt;
  enddef;
  def unit J_per_K_per_mol as
    unit joule;
    unit kelvin {expo: -1.0};
    unit mole {expo: -1.0};
  enddef;
  def unit nS as
    unit siemens {pref: nano};
  enddef;
  def unit nSmV as
    unit nS;
    unit mV;
  enddef;
  def unit per_ms as
    unit second {expo: -1, pref: milli};
  enddef;
  def unit mM4 as
    unit mM {expo: 4};
  enddef;
  def unit mM_per_ms as
    unit mM;
    unit ms {expo: -1};
  enddef;
  def unit mMms as
    unit mM;
    unit ms;
  enddef;
  def unit per_mMms as
    unit mMms {expo: -1};
  enddef;
  def unit molar as
    unit mole;
    unit litre {expo: -1};
  enddef;
  def unit micromolar as
    unit mole {pref: micro};
    unit litre {expo: -1};
  enddef;
  def unit nanomolar as
    unit mole {pref: nano};
    unit litre {expo: -1};
  enddef;
  def unit ms as
    unit second {pref: milli};
  enddef;
  def unit m_cubed as
    unit meter {pref: kilo};
  enddef;
  def unit mV as
    unit volt {pref: milli};
  enddef;
  def unit m_cubed_per_second as
    unit m_cubed;
    unit per_s;
  enddef;
  def unit micromolar_m_cubed as
    unit micromolar;
    unit m_cubed;
  enddef;
  def unit C as
    unit ampere;
    unit second;
  enddef;
  def unit C_per_millimol as
    unit C;
    unit mole {expo: -1, pref: milli};
  enddef;
  def unit picoA as
    unit ampere {pref: pico};
  enddef;
  def unit picoA_per_picoFarad as
    unit picoA;
    unit picoFarad {expo: -1};
  enddef;
  def unit microL as
    unit litre {pref: micro};
  enddef;
  def unit picoFarad as
    unit farad {pref: pico};
  enddef;
  def unit cm3_per_second as
    unit meter {expo: 3, pref: centi};
    unit second {expo: -1};
  enddef;
  def unit um3_per_second as
    unit meter {expo: 3, pref: micro};
    unit second {expo: -1};
  enddef;
  def unit m3mM as
    unit meter {expo: 3};
    unit mM {expo: 1};
  enddef;
  def unit ms2 as
    unit ms {expo: 2};
  enddef;
  def unit nM3_per_ps as
    unit meter {expo: 3, pref: nano};
    unit second {expo: -1, pref: pico};
  enddef;
  def unit per_s_squared_m_cubed as
    unit second {expo: -2};
    unit meter {expo: -3};
  enddef;
  def unit per_meters_cubed as
    unit meter {expo: -3};
  enddef;
  def unit umeter3 as
    unit meter {expo: 3, pref: micro};
  enddef;
  def unit mill1 as
    unit volt {expo: -1};
    unit volt {pref: milli};
  enddef;
  def unit picoV as
    unit volt {pref: pico};
  enddef;
  def unit pic0 as
    unit volt {expo: -1};
    unit picoV;
  enddef;
  def unit nanoV as
    unit volt {pref: nano};
  enddef;
  def unit nan0 as
    unit volt {expo: -1};
    unit nanoV;
  enddef;
  def unit kPa as
    unit pascal {pref: kilo};
  enddef;
  def unit L_per_s as
    // unit litre;
    unit meter {expo: 3, pref: deci};
    unit second {expo: -1};
  enddef;
  def unit L_per_s_per_kPa as
    // unit litre;
    unit meter {expo: 3, pref: deci};
    unit second {expo: -1};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_per_L as
    unit pascal {pref: kilo};
    // unit litre {expo: -1};
    unit meter {expo: -3, pref: deci};
  enddef;
  def unit L_per_kPa as
    // unit litre;
    unit meter {expo: 3, pref: deci};
    unit pascal {expo: -1, pref: kilo};
  enddef;
  def unit kPa_s_per_L as
    unit pascal {pref: kilo};
    unit second;
    // unit litre {expo: -1};
    unit meter {expo: -3, pref: deci};
  enddef;
  // ------------imports------------//
  // inlined from switching_test_modules.cellml

  def comp inlet_module as
    // import variables
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    var w_v_d: dimensionless {pub: out};
    // w_v   = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v = sel
      case v > 0{dimensionless}:
        1{dimensionless};
      case v < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    w_v_d = sel
      case v_d > 0{dimensionless}:
        1{dimensionless};
      case v_d < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    var H_down: dimensionless {init: 0.449999999836463, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v_d: dimensionless {pub: out};
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v_d)*H_down;
    H_R_out = w_v_d*H_down;
    var v_RBC: m3_per_s {pub: out};
    var v_d_RBC: m3_per_s {pub: out};
    v_RBC = 1.37{dimensionless}*v;
    v_d_RBC = 1.37{dimensionless}*v_d;
    var RBC_volume: m3 {init: 1.52695561386807e-14, pub: out};
    ode(RBC_volume, t) = v_RBC*RBC_volume_L-v_d_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    // //////////////
    var q_C: m3 {init: 3.14632811845253e-18, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    var v_d: m3_per_s {pub: out};
    var v_d_mm3_s: mm3_per_s {pub: out};
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;
  // inlined from switching_test_modules.cellml

  def comp VV_junc1_module as
    var div_0: dimensionless {pub: in};
    var div_0y: dimensionless {pub: in};
    var v_threshold: m3_per_s {pub: in};
    var k: dimensionless {pub: in};
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var q_C_init: m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    // ///////////////////////vessel mapping coupling module/////////////////////
    var vbc1: m3_per_s {pub: in};
    var vbc2: m3_per_s {pub: in};
    var vbc3: m3_per_s {pub: in};
    var vbc4: m3_per_s {pub: in};
    var vj1: m3_per_s {pub: out};
    var vj2: m3_per_s {pub: out};
    var vj3: m3_per_s {pub: out};
    var vj4: m3_per_s {pub: out};
    vj1 = vbc1;
    vj2 = vbc2;
    vj3 = -vbc3;
    vj4 = -vbc4;
    // ////////////Hematocrit to port (vessel to junction) mapping////////////
    var H_to1: dimensionless {pub: in};
    var H_to2: dimensionless {pub: in};
    var H_to3: dimensionless {pub: in};
    var H_to4: dimensionless {pub: in};
    // EXAMPLES
    var H_split1: dimensionless {pub: out};
    var H_split2: dimensionless {pub: out};
    var H_split3: dimensionless {pub: out};
    var H_split4: dimensionless {pub: out};
    H_split1 = sel
      case alpha1 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta1 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to1;
    endsel;
    // not a split-daughter => unchanged
    H_split2 = sel
      case alpha2 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta2 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to2;
    endsel;
    H_split3 = sel
      case alpha3 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta3 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to3;
    endsel;
    H_split4 = sel
      case alpha4 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta4 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to4;
    endsel;
    var H_daughter1: dimensionless {pub: out};
    var H_daughter2: dimensionless {pub: out};
    var H_daughter3: dimensionless {pub: out};
    var H_daughter4: dimensionless {pub: out};
    H_daughter1 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split1;
      otherwise:
        H_to1;
    endsel;
    H_daughter2 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split2;
      otherwise:
        H_to2;
    endsel;
    H_daughter3 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split3;
      otherwise:
        H_to3;
    endsel;
    H_daughter4 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split4;
      otherwise:
        H_to4;
    endsel;
    // ---------- H_from*_target: if daughter -> H_daughter*, else unchanged ----------
    var H_from1_target: dimensionless {pub: out};
    var H_from2_target: dimensionless {pub: out};
    var H_from3_target: dimensionless {pub: out};
    var H_from4_target: dimensionless {pub: out};
    H_from1_target = sel
      case bc1_is_out == 1{dimensionless}:
        H_daughter1;
      otherwise:
        H_to1;
    endsel;
    H_from2_target = sel
      case bc2_is_out == 1{dimensionless}:
        H_daughter2;
      otherwise:
        H_to2;
    endsel;
    H_from3_target = sel
      case bc3_is_out == 1{dimensionless}:
        H_daughter3;
      otherwise:
        H_to3;
    endsel;
    H_from4_target = sel
      case bc4_is_out == 1{dimensionless}:
        H_daughter4;
      otherwise:
        H_to4;
    endsel;
    var H_from1: dimensionless {pub: out};
    var H_from2: dimensionless {pub: out};
    var H_from3: dimensionless {pub: out};
    var H_from4: dimensionless {pub: out};
    // When w_out ~ 0 (not a daughter), derivative ~0 => holds last daughter value.
    // ode(H_from1, t) = w_out1*(H_from1_target-H_from1)/tau_junc;
    H_from1 = w_out1*H_from1_target;
    H_from2 = w_out2*H_from2_target;
    H_from3 = w_out3*H_from3_target;
    H_from4 = w_out4*H_from4_target;
    // ode(H_from2, t) = w_out2*(H_from2_target-H_from2)/tau_junc;
    // ode(H_from3, t) = w_out3*(H_from3_target-H_from3)/tau_junc;
    // ode(H_from4, t) = w_out4*(H_from4_target-H_from4)/tau_junc;
    var r_bc1: metre {pub: in};
    // diameter of vessel at port 1 (junction side)
    var r_bc2: metre {pub: in};
    // diameter of vessel at port 2
    var r_bc3: metre {pub: in};
    // diameter of vessel at port 3
    var r_bc4: metre {pub: in};
    var D1: metre {pub: out};
    // diameter of vessel at port 1 (junction side)
    var D2: metre {pub: out};
    // diameter of vessel at port 2
    var D3: metre {pub: out};
    // diameter of vessel at port 3
    var D4: metre {pub: out};
    D1 = 2{dimensionless}*r_bc1;
    // <-- port1 attached vessel diameter (example: parent VV side)
    D2 = 2{dimensionless}*r_bc2;
    // <-- port2 (if unused, still define)
    D3 = 2{dimensionless}*r_bc3;
    // <-- port3 daughter candidate
    D4 = 2{dimensionless}*r_bc4;
    var w_in1: dimensionless {pub: out};
    var w_in2: dimensionless {pub: out};
    var w_in3: dimensionless {pub: out};
    var w_in4: dimensionless {pub: out};
    // 1 when vj is positive, 0 when vj is 0
    w_in1 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj1/v_scale);
    w_in2 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj2/v_scale);
    w_in3 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj3/v_scale);
    w_in4 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj4/v_scale);
    var w_out1: dimensionless {pub: out};
    var w_out2: dimensionless {pub: out};
    var w_out3: dimensionless {pub: out};
    var w_out4: dimensionless {pub: out};
    w_out1 = 1{dimensionless}-w_in1;
    // ~1 if vj1<0
    w_out2 = 1{dimensionless}-w_in2;
    w_out3 = 1{dimensionless}-w_in3;
    w_out4 = 1{dimensionless}-w_in4;
    var Qin1: m3_per_s {pub: out};
    var Qin2: m3_per_s {pub: out};
    var Qin3: m3_per_s {pub: out};
    var Qin4: m3_per_s {pub: out};
    var Qout1: m3_per_s {pub: out};
    var Qout2: m3_per_s {pub: out};
    var Qout3: m3_per_s {pub: out};
    var Qout4: m3_per_s {pub: out};
    // absolute flow into the junction
    Qin1 = w_in1*vj1;
    Qin2 = w_in2*vj2;
    Qin3 = w_in3*vj3;
    Qin4 = w_in4*vj4;
    // absolute (magnitude) of flow out of the junction
    Qout1 = w_out1*(-vj1);
    Qout2 = w_out2*(-vj2);
    Qout3 = w_out3*(-vj3);
    Qout4 = w_out4*(-vj4);
    var Qin_tot: m3_per_s {pub: out};
    var Qout_tot: m3_per_s {pub: out};
    Qin_tot = Qin1+Qin2+Qin3+Qin4;
    Qout_tot = Qout1+Qout2+Qout3+Qout4;
    var bc1_is_in: dimensionless {pub: out};
    var bc2_is_in: dimensionless {pub: out};
    var bc3_is_in: dimensionless {pub: out};
    var bc4_is_in: dimensionless {pub: out};
    var bc1_is_out: dimensionless {pub: out};
    var bc2_is_out: dimensionless {pub: out};
    var bc3_is_out: dimensionless {pub: out};
    var bc4_is_out: dimensionless {pub: out};
    bc1_is_in = sel
      case Qin1 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc2_is_in = sel
      case Qin2 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc3_is_in = sel
      case Qin3 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc4_is_in = sel
      case Qin4 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc1_is_out = sel
      case Qout1 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc2_is_out = sel
      case Qout2 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc3_is_out = sel
      case Qout3 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc4_is_out = sel
      case Qout4 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var n_in: dimensionless {pub: out};
    var n_out: dimensionless {pub: out};
    n_in = bc1_is_in+bc2_is_in+bc3_is_in+bc4_is_in;
    n_out = bc1_is_out+bc2_is_out+bc3_is_out+bc4_is_out;
    // junction_type: +1 split (1 feeder), -1 merge (>=2 feeders), 0 other/degenerate
    var junction_type: dimensionless {pub: out};
    junction_type = sel
      case n_in == 1{dimensionless}:
        1{dimensionless};
      case n_in >= 2{dimensionless}:
        -1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // --- junction mode flags derived from your junction_type ---
    var is_split: dimensionless {pub: out};
    var is_merge: dimensionless {pub: out};
    is_split = sel
      case junction_type == 1{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    is_merge = sel
      case junction_type == -1{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // ---------- pick FEED port in split: the largest Qin (ties broken 1->2->3->4) ----------
    var feed1: dimensionless {pub: out};
    var feed2: dimensionless {pub: out};
    var feed3: dimensionless {pub: out};
    var feed4: dimensionless {pub: out};
    feed1 = sel
      case (is_split == 1{dimensionless}) and (Qin1 >= Qin2) and (Qin1 >= Qin3) and (Qin1 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed2 = sel
      case (is_split == 1{dimensionless}) and (Qin2 > Qin1) and (Qin2 >= Qin3) and (Qin2 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed3 = sel
      case (is_split == 1{dimensionless}) and (Qin3 > Qin1) and (Qin3 > Qin2) and (Qin3 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed4 = sel
      case (is_split == 1{dimensionless}) and (Qin4 > Qin1) and (Qin4 > Qin2) and (Qin4 > Qin3):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // ---------- alpha = daughter port with biggest Qout (ties 1->2->3->4) ----------
    var alpha1: dimensionless {pub: out};
    var alpha2: dimensionless {pub: out};
    var alpha3: dimensionless {pub: out};
    var alpha4: dimensionless {pub: out};
    // alpha1 if port1 is a daughter AND has >= Qout than others
    alpha1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (Qout1 >= Qout2) and (Qout1 >= Qout3) and (Qout1 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // alpha2 only if not alpha1 (tie-break) and port2 is a daughter and beats remaining
    alpha2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (Qout2 > Qout1) and (Qout2 >= Qout3) and (Qout2 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    alpha3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (Qout3 > Qout1) and (Qout3 > Qout2) and (Qout3 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    alpha4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (Qout4 > Qout1) and (Qout4 > Qout2) and (Qout4 > Qout3):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var beta1: dimensionless {pub: out};
    var beta2: dimensionless {pub: out};
    var beta3: dimensionless {pub: out};
    var beta4: dimensionless {pub: out};
    // beta among remaining daughters (ties 1->2->3->4), must be a daughter
    beta1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (alpha1 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (alpha2 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (alpha3 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (alpha4 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var D_F: metre {pub: out};
    D_F = sel
      case feed1 == 1{dimensionless}:
        D1;
      case feed2 == 1{dimensionless}:
        D2;
      case feed3 == 1{dimensionless}:
        D3;
      case feed4 == 1{dimensionless}:
        D4;
      otherwise:
        D1;
    endsel;
    // ---------- D_alpha from which ALPHA port? ----------
    var D_alpha: metre {pub: out};
    D_alpha = sel
      case alpha1 == 1{dimensionless}:
        D1;
      case alpha2 == 1{dimensionless}:
        D2;
      case alpha3 == 1{dimensionless}:
        D3;
      case alpha4 == 1{dimensionless}:
        D4;
      otherwise:
        D3;
    endsel;
    // ---------- D_beta from which BETA port? ----------
    var D_beta: metre {pub: out};
    D_beta = sel
      case beta1 == 1{dimensionless}:
        D1;
      case beta2 == 1{dimensionless}:
        D2;
      case beta3 == 1{dimensionless}:
        D3;
      case beta4 == 1{dimensionless}:
        D4;
      otherwise:
        D4;
    endsel;
    // ---------- daughter outflow magnitudes for alpha/beta ----------
    var v_alpha: m3_per_s {pub: out};
    var v_beta: m3_per_s {pub: out};
    v_alpha = sel
      case alpha1 == 1{dimensionless}:
        Qout1;
      case alpha2 == 1{dimensionless}:
        Qout2;
      case alpha3 == 1{dimensionless}:
        Qout3;
      case alpha4 == 1{dimensionless}:
        Qout4;
      otherwise:
        0{m3_per_s};
    endsel;
    v_beta = sel
      case beta1 == 1{dimensionless}:
        Qout1;
      case beta2 == 1{dimensionless}:
        Qout2;
      case beta3 == 1{dimensionless}:
        Qout3;
      case beta4 == 1{dimensionless}:
        Qout4;
      otherwise:
        0{m3_per_s};
    endsel;
    var FQB_alpha: dimensionless {pub: out};
    FQB_alpha = (v_alpha+div_0)/(v_alpha+v_beta+2{dimensionless}*div_0);
    var FQE_alpha: dimensionless {pub: out};
    FQE_alpha = 1{dimensionless}/(1{dimensionless}+exp(-(A+B*ph)));
    var B: dimensionless {pub: out};
    B = 1{dimensionless}+6.98{dimensionless}*(1{dimensionless}-H_mean)/(D_F*1e6{dimensionless});
    var A: dimensionless {pub: out};
    A = -6.96{dimensionless}*ln(D_alpha*1e6{dimensionless}/(D_beta*1e6{dimensionless}))/(D_F*1e6{dimensionless});
    var X_0: dimensionless {pub: out};
    X_0 = 0.4{dimensionless}/(D_F*1e6{dimensionless});
    var ph: dimensionless {pub: out};
    ph = ln(y/(1{dimensionless}-y));
    var y_raw: dimensionless {pub: out};
    y_raw = (FQB_alpha-X_0)/(1{dimensionless}-2{dimensionless}*X_0+div_0);
    var y: dimensionless {pub: out};
    y = min(max(y_raw, div_0y), 1{dimensionless}-div_0y);
    // var epsilon_alpha: dimensionless {pub: out};
    // epsilon_alpha = H_VV_out_alpha-H_mean*FQE_alpha/(FQB_alpha+div_0);
    var H_VV_out_alpha: dimensionless {pub: out};
    H_VV_out_alpha = H_mean*FQE_alpha/(FQB_alpha+div_0);
    // ode(H_VV_out_alpha, t) = is_split*-k*epsilon_alpha;
    var H_VV_out_beta: dimensionless {pub: out};
    H_VV_out_beta = H_mean*(1{dimensionless}-FQE_alpha)/(1{dimensionless}-FQB_alpha+div_0);
    // ////////////////////////////////VV_BG////////////////////////////////
    // ////////////////////////////////////////////
    var RBC_in: m3_per_s {pub: out};
    RBC_in = Qin1*H_to1+Qin2*H_to2+Qin3*H_to3+Qin4*H_to4;
    var RBC_out: m3_per_s {pub: out};
    RBC_out = Qout1*H_from1+Qout2*H_from2+Qout3*H_from3+Qout4*H_from4;
    // --- stored RBC volume inside VV1 ---
    var RBC_volume_init: m3 {pub: out};
    var RBC_volume: m3 {init: 2.61396215550874e-17, pub: out};
    RBC_volume_init = H_global_L*q_us;
    // mass balance
    ode(RBC_volume, t) = RBC_in-RBC_out;
    // --- mean VV1 hematocrit (concentration) ---
    var H_mean: dimensionless {pub: out};
    H_mean = RBC_volume/(q_us+div_0);
    // /////////////////////////////setting junctional compliance to greatest compliance of the vessels connected to it
    var C_conn1: m6_per_J {pub: in};
    var C_conn2: m6_per_J {pub: in};
    var C_conn3: m6_per_J {pub: in};
    var C_conn4: m6_per_J {pub: in};
    var C_max12: m6_per_J {pub: out};
    var C_max123: m6_per_J {pub: out};
    var C: m6_per_J {pub: out};
    C_max12 = sel
      case C_conn1 > C_conn2:
        C_conn1;
      case C_conn1 <= C_conn2:
        C_conn2;
    endsel;
    C_max123 = sel
      case C_max12 > C_conn3:
        C_max12;
      case C_max12 <= C_conn3:
        C_conn3;
    endsel;
    C = sel
      case C_max123 > C_conn4:
        C_max123;
      case C_max123 <= C_conn4:
        C_conn4;
    endsel;
    var q_C: m3 {init: 2.61829632845498e-18, pub: out};
    var q_C_d: m3 {init: 2.61822468856469e-18, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C+q_C_d;
    var R_VV_junc: Js_per_m6 {pub: in};
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    var u_d: J_per_m3 {pub: out};
    var u_d_mmHg: dimensionless {pub: out};
    //  Conservation Laws
    // question?????????? whether ode (q_c and q_C_d) should be vbc1-4 or vj1-4
    u = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C, t) = vbc1+vbc2-v;
    u_mmHg = u/133.322{J_per_m3};
    v = (u-u_d)/R_VV_junc;
    u_d = q_C_d/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-vbc3-vbc4;
    u_d_mmHg = u_d/133.322{J_per_m3};
  enddef;
  // inlined from switching_test_modules.cellml

  def comp PV1_module as
    // import variables
    var v_downstream_RHS: m3_per_s {pub: in};
    var v_downstream_LHS: m3_per_s {pub: in};
    var v_downstream: m3_per_s {pub: out};
    v_downstream = w_v*v_downstream_RHS+(1{dimensionless}-w_v)*v_downstream_LHS;
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var t: second {pub: in};
    // var R_constriction_base: Js_per_m6 {pub: in};
    // var R_constriction_final: Js_per_m6 {pub: in};
    // var R_constriction: Js_per_m6 {pub: out};
    // R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    // var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    // var tau_base: second {pub: in};
    // var gate: dimensionless {pub: out};
    // var v_base: m3_per_s {init: 0, pub: out};
    // gate = sel
    //     case t < t0:
    //         1{dimensionless};
    //     otherwise:
    //         0{dimensionless};
    // endsel;
    // ode(v_base, t) = gate*(abs(v)-v_base)/tau_base;
    var mu_plasma: Js_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    // var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    // var w_v_d: dimensionless {pub: out};
    // w_v   = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v = sel
      case v > 0{dimensionless}:
        1{dimensionless};
      case v < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // /////compliance kept in new modules for compliance port mapping
    // for VV junction compliance determination
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    // w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    // w_v_d = sel
    //     case v_d > 0{dimensionless}:
    //         1{dimensionless};
    //     case v_d < 0{dimensionless}:
    //         0{dimensionless};
    //     otherwise:
    //         0.5{dimensionless};
    // endsel;
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    var H_down: dimensionless {init: 0.463812895643357, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = (s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean)*(1{dimensionless}-stall);
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v: dimensionless {pub: out};
    s_v = sel
      case abs(v) > v_eps:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v)*H_down;
    H_R_out = w_v*H_down;
    // var blockage: dimensionles {pub:out};
    // var blockage: dimensionless {pub: out};
    // blockage = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+pow(R_constriction/1e5{Js_per_m6}, 8{dimensionless}));
    // var R_constriction_blockage_threshold: Js_per_m6 {pub: in};
    // blockage = sel
    //     case R_constriction < R_constriction_blockage_threshold:
    //         0{dimensionless};
    //     otherwise:
    //         1{dimensionless};
    // endsel;
    var v_RBC: m3_per_s {pub: out};
    var v_d_RBC: m3_per_s {pub: out};
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-(1{dimensionless}-w_v_d)*blockage);
    // v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-w_v_d*blockage);
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-blockage);
    // v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-blockage);
    v_RBC = 1.37{dimensionless}*v*(1{dimensionless}-stall);
    v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-stall);
    var RBC_volume: m3 {init: 1.9671001050678e-16, pub: out};
    ode(RBC_volume, t) = v_RBC*RBC_volume_L-v_d_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    // //////////////
    // var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us;
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var Re_stall: Js_per_m6 {pub: in};
    // 1e21 for stalled resistance
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+Re_stall*stall;
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u_in-u_out)/R;
    // var u: J_per_m3 {pub: out};
    // var u_mmHg: dimensionless {pub: out};
    // u_mmHg      = u/133.322{J_per_m3};
    // u           = q_C/C+u_ext;
    // ode(q_C, t) = v-v_d;
    var v_d: m3_per_s {pub: out};
    var v_d_mm3_s: mm3_per_s {pub: out};
    v_d_mm3_s = v_d/one_mm3;
    v_d = v;
    // ///////////////radius modulation////////////////////
    var r_m: metre {pub: out};
    // modulated radius
    r_m = alpha*r;
    var alpha: dimensionless {pub: out};
    alpha = 1{dimensionless}+(alpha_max-1{dimensionless})*K_deprived;
    // var alpha_target: dimensionless {pub:out};
    // alpha_target = 1{dimensionless}+(alpha_max-1{dimensionless})/(1{dimensionless}+pow(10{dimensionless}*abs(v_downstream)/(v_base+v_eps), 4{dimensionless}));
    // alpha_target=1{dimensionless}+(alpha_max-1{dimensionless})*q_deprived;
    // the number 10 above says when flow in the pericyte is 10% of baseline flowing state, is the midpoint and vessel starts dilating
    // var alpha_init: dimensionless { pub: in};
    var tau_K_deprived: second {pub: in};
    var alpha_max: dimensionless {pub: in};
    var alpha_min: dimensionless {pub: in};
    var BOSF_Bx: m3_per_s {pub: in};
    // branch-order_specific_flow
    var K_deprived: dimensionless {init: K_deprived_init, pub: out};
    var K_deprived_init: dimensionless {pub: in};
    // should be initilaized to 0 for alpha to start at 1
    var deprivation_sensor: dimensionless {pub: out};
    var f_crit: dimensionless {pub: in};
    // critical fraction of flow to baseline flow where it is considered half deprived, e.g if 10 then 1/10=is ur flow i 10% of baseline flow you are cosnidered half deprived
    var n: dimensionless {pub: in};
    // controls steepness of function, at 8 its like a step wise function
    deprivation_sensor = 1{dimensionless}/(1{dimensionless}+pow(f_crit*abs(v)/BOSF_Bx, n));
    ode(K_deprived, t) = (deprivation_sensor-K_deprived)/tau_K_deprived;
    var r_stall: metre {pub: out};
    r_stall = r*1.05{dimensionless};
    var r_thresh: metre {pub: out};
    // r_thresh      = r_stall*(1{dimensionless}+fs*(1{dimensionless}-deformation_force));
    r_thresh = r_stall*(1{dimensionless}+fs*low_q);
    var low_q: dimensionless {init: low_q_init, pub: out};
    var low_q_init: dimensionless {init: 0, pub: out};
    var tau_low_q: second {init: 0.1, pub: out};
    ode(low_q, t) = (deprivation_sensor-low_q)/tau_low_q;
    var Z_ref: dimensionless {pub: out};
    Z_ref = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45_ref: dimensionless {pub: out};
    mu_45_ref = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu_ref: Js_per_m3 {pub: out};
    mu_ref = hem_dep_u_rel_ref*mu_plasma;
    var hem_dep_u_rel_ref: dimensionless {pub: out};
    hem_dep_u_rel_ref = 1{dimensionless}+(mu_45_ref-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var wss: J_per_m3 {pub: out};
    var wss_BOSF_ref: J_per_m3 {pub: out};
    var wss_crit: J_per_m3 {pub: out};
    var f_wss: dimensionless {pub: in};
    // var deformation_force: dimensionless {pub: out};//low deformation_force means high driving force, high means low drivign force, hence low flow and more stalls
    var retention: dimensionless {pub: out};
    var n_stall: dimensionless {pub: in};
    var fs: dimensionless {pub: in};
    wss = 4{dimensionless}*mu*abs(v)/(pi*pow(r_m, 3{dimensionless}));
    wss_BOSF_ref = 4{dimensionless}*mu_ref*BOSF_Bx/(pi*pow(r, 3{dimensionless}));
    wss_crit = f_wss*wss_BOSF_ref;
    // deformation_force     = 1{dimensionless}/(1{dimensionless}+pow(wss_crit/wss, n_stall));
    retention = 1{dimensionless}/(1{dimensionless}+pow(wss/wss_crit, n_stall));
    var stall_target: dimensionless {pub: out};
    var stall_memory: dimensionless {init: 0, pub: out};
    var stall_init: dimensionless {pub: in};
    var stall: dimensionless {pub: out};
    var tau_stall: second {pub: in};
    stall_target = sel
      case r_m < r_thresh:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    ode(stall_memory, t) = (stall_target-stall_memory)/tau_stall;
    stall = sel
      case stall_memory > 0.5{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;
  // inlined from switching_test_modules.cellml

  def comp PV2_module as
    // import variables
    var v_downstream_RHS: m3_per_s {pub: in};
    var v_downstream_LHS: m3_per_s {pub: in};
    var v_downstream: m3_per_s {pub: out};
    v_downstream = w_v*v_downstream_RHS+(1{dimensionless}-w_v)*v_downstream_LHS;
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var t: second {pub: in};
    // var R_constriction_base: Js_per_m6 {pub: in};
    // var R_constriction_final: Js_per_m6 {pub: in};
    // var R_constriction: Js_per_m6 {pub: out};
    // R_constriction = R_constriction_base+(R_constriction_final-R_constriction_base)/(1{dimensionless}+exp(-(t-t0)/tau_sig));
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    // var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    // var tau_base: second {pub: in};
    // var gate: dimensionless {pub: out};
    // var v_base: m3_per_s {init: 0, pub: out};
    // gate = sel
    //     case t < t0:
    //         1{dimensionless};
    //     otherwise:
    //         0{dimensionless};
    // endsel;
    // ode(v_base, t) = gate*(abs(v)-v_base)/tau_base;
    var mu_plasma: Js_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    // var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    // var w_v_d: dimensionless {pub: out};
    // w_v   = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v = sel
      case v > 0{dimensionless}:
        1{dimensionless};
      case v < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // /////compliance kept in new modules for compliance port mapping
    // for VV junction compliance determination
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    // w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    // w_v_d = sel
    //     case v_d > 0{dimensionless}:
    //         1{dimensionless};
    //     case v_d < 0{dimensionless}:
    //         0{dimensionless};
    //     otherwise:
    //         0.5{dimensionless};
    // endsel;
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    var H_down: dimensionless {init: 0, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = (s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean)*(1{dimensionless}-stall);
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v: dimensionless {pub: out};
    s_v = sel
      case abs(v) > v_eps:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v)*H_down;
    H_R_out = w_v*H_down;
    // var blockage: dimensionles {pub:out};
    // var blockage: dimensionless {pub: out};
    // blockage = 1{dimensionless}-1{dimensionless}/(1{dimensionless}+pow(R_constriction/1e5{Js_per_m6}, 8{dimensionless}));
    // var R_constriction_blockage_threshold: Js_per_m6 {pub: in};
    // blockage = sel
    //     case R_constriction < R_constriction_blockage_threshold:
    //         0{dimensionless};
    //     otherwise:
    //         1{dimensionless};
    // endsel;
    var v_RBC: m3_per_s {pub: out};
    var v_d_RBC: m3_per_s {pub: out};
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-(1{dimensionless}-w_v_d)*blockage);
    // v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-w_v_d*blockage);
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-blockage);
    // v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-blockage);
    v_RBC = 1.37{dimensionless}*v*(1{dimensionless}-stall);
    v_d_RBC = 1.37{dimensionless}*v_d*(1{dimensionless}-stall);
    var RBC_volume: m3 {init: 1.58448742526483e-16, pub: out};
    ode(RBC_volume, t) = v_RBC*RBC_volume_L-v_d_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    // //////////////
    // var q_C: m3 {init: q_C_init, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us;
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var Re_stall: Js_per_m6 {pub: in};
    // 1e21 for stalled resistance
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}))+Re_stall*stall;
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u_in-u_out)/R;
    // var u: J_per_m3 {pub: out};
    // var u_mmHg: dimensionless {pub: out};
    // u_mmHg      = u/133.322{J_per_m3};
    // u           = q_C/C+u_ext;
    // ode(q_C, t) = v-v_d;
    var v_d: m3_per_s {pub: out};
    var v_d_mm3_s: mm3_per_s {pub: out};
    v_d_mm3_s = v_d/one_mm3;
    v_d = v;
    // ///////////////radius modulation////////////////////
    var r_m: metre {pub: out};
    // modulated radius
    r_m = alpha*r;
    var alpha: dimensionless {pub: out};
    alpha = 1{dimensionless}+(alpha_max-1{dimensionless})*K_deprived;
    // var alpha_target: dimensionless {pub:out};
    // alpha_target = 1{dimensionless}+(alpha_max-1{dimensionless})/(1{dimensionless}+pow(10{dimensionless}*abs(v_downstream)/(v_base+v_eps), 4{dimensionless}));
    // alpha_target=1{dimensionless}+(alpha_max-1{dimensionless})*q_deprived;
    // the number 10 above says when flow in the pericyte is 10% of baseline flowing state, is the midpoint and vessel starts dilating
    // var alpha_init: dimensionless { pub: in};
    var tau_K_deprived: second {pub: in};
    var alpha_max: dimensionless {pub: in};
    var alpha_min: dimensionless {pub: in};
    var BOSF_Bx: m3_per_s {pub: in};
    // branch-order_specific_flow
    var K_deprived: dimensionless {init: K_deprived_init, pub: out};
    var K_deprived_init: dimensionless {pub: in};
    // should be initilaized to 0 for alpha to start at 1
    var deprivation_sensor: dimensionless {pub: out};
    var f_crit: dimensionless {pub: in};
    // critical fraction of flow to baseline flow where it is considered half deprived, e.g if 10 then 1/10=is ur flow i 10% of baseline flow you are cosnidered half deprived
    var n: dimensionless {pub: in};
    // controls steepness of function, at 8 its like a step wise function
    deprivation_sensor = 1{dimensionless}/(1{dimensionless}+pow(f_crit*abs(v)/BOSF_Bx, n));
    ode(K_deprived, t) = (deprivation_sensor-K_deprived)/tau_K_deprived;
    var r_stall: metre {pub: out};
    r_stall = r*1.05{dimensionless};
    var r_thresh: metre {pub: out};
    // r_thresh      = r_stall*(1{dimensionless}+fs*(1{dimensionless}-deformation_force));
    r_thresh = r_stall*(1{dimensionless}+fs*low_q);
    var low_q: dimensionless {init: low_q_init, pub: out};
    var low_q_init: dimensionless {init: 0, pub: out};
    var tau_low_q: second {init: 0.1, pub: out};
    ode(low_q, t) = (deprivation_sensor-low_q)/tau_low_q;
    var Z_ref: dimensionless {pub: out};
    Z_ref = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45_ref: dimensionless {pub: out};
    mu_45_ref = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu_ref: Js_per_m3 {pub: out};
    mu_ref = hem_dep_u_rel_ref*mu_plasma;
    var hem_dep_u_rel_ref: dimensionless {pub: out};
    hem_dep_u_rel_ref = 1{dimensionless}+(mu_45_ref-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var wss: J_per_m3 {pub: out};
    var wss_BOSF_ref: J_per_m3 {pub: out};
    var wss_crit: J_per_m3 {pub: out};
    var f_wss: dimensionless {pub: in};
    // var deformation_force: dimensionless {pub: out};//low deformation_force means high driving force, high means low drivign force, hence low flow and more stalls
    var retention: dimensionless {pub: out};
    var n_stall: dimensionless {pub: in};
    var fs: dimensionless {pub: in};
    wss = 4{dimensionless}*mu*abs(v)/(pi*pow(r_m, 3{dimensionless}));
    wss_BOSF_ref = 4{dimensionless}*mu_ref*BOSF_Bx/(pi*pow(r, 3{dimensionless}));
    wss_crit = f_wss*wss_BOSF_ref;
    // deformation_force     = 1{dimensionless}/(1{dimensionless}+pow(wss_crit/wss, n_stall));
    retention = 1{dimensionless}/(1{dimensionless}+pow(wss/wss_crit, n_stall));
    var stall_target: dimensionless {pub: out};
    var stall_memory: dimensionless {init: 1, pub: out};
    var stall_init: dimensionless {pub: in};
    var stall: dimensionless {pub: out};
    var tau_stall: second {pub: in};
    stall_target = sel
      case r_m < r_thresh:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    ode(stall_memory, t) = (stall_target-stall_memory)/tau_stall;
    stall = sel
      case stall_memory > 0.5{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
  enddef;
  // inlined from switching_test_modules.cellml

  def comp V1_module as
    // import variables
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    var H_down: dimensionless {init: 0.463812958396349, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v: dimensionless {pub: out};
    s_v = abs(v)/(abs(v)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v)*H_down;
    H_R_out = w_v*H_down;
    var v_in_RBC: m3_per_s {pub: out};
    var v_RBC: m3_per_s {pub: out};
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-(1{dimensionless}-w_v)*blockage);
    // v_in_RBC = 1.37{dimensionless}*v_in*(1{dimensionless}-w_d*blockage);
    // the above formulas are for if we wanna have the sections with the flow before the vlockage site to be unaffected by the blockage
    v_in_RBC = 1.3{dimensionless}*v_in;
    v_RBC = 1.3{dimensionless}*v;
    var RBC_volume: m3 {init: 2.10115279975442e-15, pub: out};
    ode(RBC_volume, t) = v_in_RBC*RBC_volume_L-v_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    // //////////////
    var q_C: m3 {init: 1.56689716772442e-18, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;
  // inlined from switching_test_modules.cellml

  def comp V2_module as
    // import variables
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var v_in: m3_per_s {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    w_v = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v*H_L_in+(1{dimensionless}-w_v)*H_R_in;
    var H_down: dimensionless {init: 7.43642046782801e-05, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = s_v*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v: dimensionless {pub: out};
    s_v = abs(v)/(abs(v)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v)*H_down;
    H_R_out = w_v*H_down;
    var v_in_RBC: m3_per_s {pub: out};
    var v_RBC: m3_per_s {pub: out};
    // v_RBC   = 1.37{dimensionless}*v*(1{dimensionless}-(1{dimensionless}-w_v)*blockage);
    // v_in_RBC = 1.37{dimensionless}*v_in*(1{dimensionless}-w_d*blockage);
    // the above formulas are for if we wanna have the sections with the flow before the vlockage site to be unaffected by the blockage
    v_in_RBC = 1.3{dimensionless}*v_in;
    v_RBC = 1.3{dimensionless}*v;
    var RBC_volume: m3 {init: 2.31221389985842e-19, pub: out};
    ode(RBC_volume, t) = v_in_RBC*RBC_volume_L-v_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // outflow to left (v<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v*H_R_out+(1{dimensionless}-w_v)*H_R_in;
    // //////////////
    var q_C: m3 {init: 1.22287534239578e-18, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u-u_out)/R;
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v_in-v;
  enddef;
  // inlined from switching_test_modules.cellml

  def comp VV_junc2_module as
    var div_0: dimensionless {pub: in};
    var div_0y: dimensionless {pub: in};
    var v_threshold: m3_per_s {pub: in};
    var k: dimensionless {pub: in};
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var q_C_init: m3 {pub: in};
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    // ///////////////////////vessel mapping coupling module/////////////////////
    var vbc1: m3_per_s {pub: in};
    var vbc2: m3_per_s {pub: in};
    var vbc3: m3_per_s {pub: in};
    var vbc4: m3_per_s {pub: in};
    var vj1: m3_per_s {pub: out};
    var vj2: m3_per_s {pub: out};
    var vj3: m3_per_s {pub: out};
    var vj4: m3_per_s {pub: out};
    vj1 = vbc1;
    vj2 = vbc2;
    vj3 = -vbc3;
    vj4 = -vbc4;
    // ////////////Hematocrit to port (vessel to junction) mapping////////////
    var H_to1: dimensionless {pub: in};
    var H_to2: dimensionless {pub: in};
    var H_to3: dimensionless {pub: in};
    var H_to4: dimensionless {pub: in};
    // EXAMPLES
    var H_split1: dimensionless {pub: out};
    var H_split2: dimensionless {pub: out};
    var H_split3: dimensionless {pub: out};
    var H_split4: dimensionless {pub: out};
    H_split1 = sel
      case alpha1 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta1 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to1;
    endsel;
    // not a split-daughter => unchanged
    H_split2 = sel
      case alpha2 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta2 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to2;
    endsel;
    H_split3 = sel
      case alpha3 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta3 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to3;
    endsel;
    H_split4 = sel
      case alpha4 == 1{dimensionless}:
        H_VV_out_alpha;
      case beta4 == 1{dimensionless}:
        H_VV_out_beta;
      otherwise:
        H_to4;
    endsel;
    var H_daughter1: dimensionless {pub: out};
    var H_daughter2: dimensionless {pub: out};
    var H_daughter3: dimensionless {pub: out};
    var H_daughter4: dimensionless {pub: out};
    H_daughter1 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split1;
      otherwise:
        H_to1;
    endsel;
    H_daughter2 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split2;
      otherwise:
        H_to2;
    endsel;
    H_daughter3 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split3;
      otherwise:
        H_to3;
    endsel;
    H_daughter4 = sel
      case is_merge == 1{dimensionless}:
        H_mean;
      case is_split == 1{dimensionless}:
        H_split4;
      otherwise:
        H_to4;
    endsel;
    // ---------- H_from*_target: if daughter -> H_daughter*, else unchanged ----------
    var H_from1_target: dimensionless {pub: out};
    var H_from2_target: dimensionless {pub: out};
    var H_from3_target: dimensionless {pub: out};
    var H_from4_target: dimensionless {pub: out};
    H_from1_target = sel
      case bc1_is_out == 1{dimensionless}:
        H_daughter1;
      otherwise:
        H_to1;
    endsel;
    H_from2_target = sel
      case bc2_is_out == 1{dimensionless}:
        H_daughter2;
      otherwise:
        H_to2;
    endsel;
    H_from3_target = sel
      case bc3_is_out == 1{dimensionless}:
        H_daughter3;
      otherwise:
        H_to3;
    endsel;
    H_from4_target = sel
      case bc4_is_out == 1{dimensionless}:
        H_daughter4;
      otherwise:
        H_to4;
    endsel;
    var H_from1: dimensionless {pub: out};
    var H_from2: dimensionless {pub: out};
    var H_from3: dimensionless {pub: out};
    var H_from4: dimensionless {pub: out};
    // When w_out ~ 0 (not a daughter), derivative ~0 => holds last daughter value.
    // ode(H_from1, t) = w_out1*(H_from1_target-H_from1)/tau_junc;
    H_from1 = w_out1*H_from1_target;
    H_from2 = w_out2*H_from2_target;
    H_from3 = w_out3*H_from3_target;
    H_from4 = w_out4*H_from4_target;
    // ode(H_from2, t) = w_out2*(H_from2_target-H_from2)/tau_junc;
    // ode(H_from3, t) = w_out3*(H_from3_target-H_from3)/tau_junc;
    // ode(H_from4, t) = w_out4*(H_from4_target-H_from4)/tau_junc;
    var r_bc1: metre {pub: in};
    // diameter of vessel at port 1 (junction side)
    var r_bc2: metre {pub: in};
    // diameter of vessel at port 2
    var r_bc3: metre {pub: in};
    // diameter of vessel at port 3
    var r_bc4: metre {pub: in};
    var D1: metre {pub: out};
    // diameter of vessel at port 1 (junction side)
    var D2: metre {pub: out};
    // diameter of vessel at port 2
    var D3: metre {pub: out};
    // diameter of vessel at port 3
    var D4: metre {pub: out};
    D1 = 2{dimensionless}*r_bc1;
    // <-- port1 attached vessel diameter (example: parent VV side)
    D2 = 2{dimensionless}*r_bc2;
    // <-- port2 (if unused, still define)
    D3 = 2{dimensionless}*r_bc3;
    // <-- port3 daughter candidate
    D4 = 2{dimensionless}*r_bc4;
    var w_in1: dimensionless {pub: out};
    var w_in2: dimensionless {pub: out};
    var w_in3: dimensionless {pub: out};
    var w_in4: dimensionless {pub: out};
    // 1 when vj is positive, 0 when vj is 0
    w_in1 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj1/v_scale);
    w_in2 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj2/v_scale);
    w_in3 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj3/v_scale);
    w_in4 = 0.5{dimensionless}+1{dimensionless}/pi*atan(vj4/v_scale);
    var w_out1: dimensionless {pub: out};
    var w_out2: dimensionless {pub: out};
    var w_out3: dimensionless {pub: out};
    var w_out4: dimensionless {pub: out};
    w_out1 = 1{dimensionless}-w_in1;
    // ~1 if vj1<0
    w_out2 = 1{dimensionless}-w_in2;
    w_out3 = 1{dimensionless}-w_in3;
    w_out4 = 1{dimensionless}-w_in4;
    var Qin1: m3_per_s {pub: out};
    var Qin2: m3_per_s {pub: out};
    var Qin3: m3_per_s {pub: out};
    var Qin4: m3_per_s {pub: out};
    var Qout1: m3_per_s {pub: out};
    var Qout2: m3_per_s {pub: out};
    var Qout3: m3_per_s {pub: out};
    var Qout4: m3_per_s {pub: out};
    // absolute flow into the junction
    Qin1 = w_in1*vj1;
    Qin2 = w_in2*vj2;
    Qin3 = w_in3*vj3;
    Qin4 = w_in4*vj4;
    // absolute (magnitude) of flow out of the junction
    Qout1 = w_out1*(-vj1);
    Qout2 = w_out2*(-vj2);
    Qout3 = w_out3*(-vj3);
    Qout4 = w_out4*(-vj4);
    var Qin_tot: m3_per_s {pub: out};
    var Qout_tot: m3_per_s {pub: out};
    Qin_tot = Qin1+Qin2+Qin3+Qin4;
    Qout_tot = Qout1+Qout2+Qout3+Qout4;
    var bc1_is_in: dimensionless {pub: out};
    var bc2_is_in: dimensionless {pub: out};
    var bc3_is_in: dimensionless {pub: out};
    var bc4_is_in: dimensionless {pub: out};
    var bc1_is_out: dimensionless {pub: out};
    var bc2_is_out: dimensionless {pub: out};
    var bc3_is_out: dimensionless {pub: out};
    var bc4_is_out: dimensionless {pub: out};
    bc1_is_in = sel
      case Qin1 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc2_is_in = sel
      case Qin2 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc3_is_in = sel
      case Qin3 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc4_is_in = sel
      case Qin4 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc1_is_out = sel
      case Qout1 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc2_is_out = sel
      case Qout2 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc3_is_out = sel
      case Qout3 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    bc4_is_out = sel
      case Qout4 > v_threshold:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var n_in: dimensionless {pub: out};
    var n_out: dimensionless {pub: out};
    n_in = bc1_is_in+bc2_is_in+bc3_is_in+bc4_is_in;
    n_out = bc1_is_out+bc2_is_out+bc3_is_out+bc4_is_out;
    // junction_type: +1 split (1 feeder), -1 merge (>=2 feeders), 0 other/degenerate
    var junction_type: dimensionless {pub: out};
    junction_type = sel
      case n_in == 1{dimensionless}:
        1{dimensionless};
      case n_in >= 2{dimensionless}:
        -1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // --- junction mode flags derived from your junction_type ---
    var is_split: dimensionless {pub: out};
    var is_merge: dimensionless {pub: out};
    is_split = sel
      case junction_type == 1{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    is_merge = sel
      case junction_type == -1{dimensionless}:
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // ---------- pick FEED port in split: the largest Qin (ties broken 1->2->3->4) ----------
    var feed1: dimensionless {pub: out};
    var feed2: dimensionless {pub: out};
    var feed3: dimensionless {pub: out};
    var feed4: dimensionless {pub: out};
    feed1 = sel
      case (is_split == 1{dimensionless}) and (Qin1 >= Qin2) and (Qin1 >= Qin3) and (Qin1 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed2 = sel
      case (is_split == 1{dimensionless}) and (Qin2 > Qin1) and (Qin2 >= Qin3) and (Qin2 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed3 = sel
      case (is_split == 1{dimensionless}) and (Qin3 > Qin1) and (Qin3 > Qin2) and (Qin3 >= Qin4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    feed4 = sel
      case (is_split == 1{dimensionless}) and (Qin4 > Qin1) and (Qin4 > Qin2) and (Qin4 > Qin3):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // ---------- alpha = daughter port with biggest Qout (ties 1->2->3->4) ----------
    var alpha1: dimensionless {pub: out};
    var alpha2: dimensionless {pub: out};
    var alpha3: dimensionless {pub: out};
    var alpha4: dimensionless {pub: out};
    // alpha1 if port1 is a daughter AND has >= Qout than others
    alpha1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (Qout1 >= Qout2) and (Qout1 >= Qout3) and (Qout1 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    // alpha2 only if not alpha1 (tie-break) and port2 is a daughter and beats remaining
    alpha2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (Qout2 > Qout1) and (Qout2 >= Qout3) and (Qout2 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    alpha3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (Qout3 > Qout1) and (Qout3 > Qout2) and (Qout3 >= Qout4):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    alpha4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (Qout4 > Qout1) and (Qout4 > Qout2) and (Qout4 > Qout3):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var beta1: dimensionless {pub: out};
    var beta2: dimensionless {pub: out};
    var beta3: dimensionless {pub: out};
    var beta4: dimensionless {pub: out};
    // beta among remaining daughters (ties 1->2->3->4), must be a daughter
    beta1 = sel
      case (is_split == 1{dimensionless}) and (bc1_is_out == 1{dimensionless}) and (alpha1 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta2 = sel
      case (is_split == 1{dimensionless}) and (bc2_is_out == 1{dimensionless}) and (alpha2 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta3 = sel
      case (is_split == 1{dimensionless}) and (bc3_is_out == 1{dimensionless}) and (alpha3 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    beta4 = sel
      case (is_split == 1{dimensionless}) and (bc4_is_out == 1{dimensionless}) and (alpha4 == 0{dimensionless}):
        1{dimensionless};
      otherwise:
        0{dimensionless};
    endsel;
    var D_F: metre {pub: out};
    D_F = sel
      case feed1 == 1{dimensionless}:
        D1;
      case feed2 == 1{dimensionless}:
        D2;
      case feed3 == 1{dimensionless}:
        D3;
      case feed4 == 1{dimensionless}:
        D4;
      otherwise:
        D1;
    endsel;
    // ---------- D_alpha from which ALPHA port? ----------
    var D_alpha: metre {pub: out};
    D_alpha = sel
      case alpha1 == 1{dimensionless}:
        D1;
      case alpha2 == 1{dimensionless}:
        D2;
      case alpha3 == 1{dimensionless}:
        D3;
      case alpha4 == 1{dimensionless}:
        D4;
      otherwise:
        D3;
    endsel;
    // ---------- D_beta from which BETA port? ----------
    var D_beta: metre {pub: out};
    D_beta = sel
      case beta1 == 1{dimensionless}:
        D1;
      case beta2 == 1{dimensionless}:
        D2;
      case beta3 == 1{dimensionless}:
        D3;
      case beta4 == 1{dimensionless}:
        D4;
      otherwise:
        D4;
    endsel;
    // ---------- daughter outflow magnitudes for alpha/beta ----------
    var v_alpha: m3_per_s {pub: out};
    var v_beta: m3_per_s {pub: out};
    v_alpha = sel
      case alpha1 == 1{dimensionless}:
        Qout1;
      case alpha2 == 1{dimensionless}:
        Qout2;
      case alpha3 == 1{dimensionless}:
        Qout3;
      case alpha4 == 1{dimensionless}:
        Qout4;
      otherwise:
        0{m3_per_s};
    endsel;
    v_beta = sel
      case beta1 == 1{dimensionless}:
        Qout1;
      case beta2 == 1{dimensionless}:
        Qout2;
      case beta3 == 1{dimensionless}:
        Qout3;
      case beta4 == 1{dimensionless}:
        Qout4;
      otherwise:
        0{m3_per_s};
    endsel;
    var FQB_alpha: dimensionless {pub: out};
    FQB_alpha = (v_alpha+div_0)/(v_alpha+v_beta+2{dimensionless}*div_0);
    var FQE_alpha: dimensionless {pub: out};
    FQE_alpha = 1{dimensionless}/(1{dimensionless}+exp(-(A+B*ph)));
    var B: dimensionless {pub: out};
    B = 1{dimensionless}+6.98{dimensionless}*(1{dimensionless}-H_mean)/(D_F*1e6{dimensionless});
    var A: dimensionless {pub: out};
    A = -6.96{dimensionless}*ln(D_alpha*1e6{dimensionless}/(D_beta*1e6{dimensionless}))/(D_F*1e6{dimensionless});
    var X_0: dimensionless {pub: out};
    X_0 = 0.4{dimensionless}/(D_F*1e6{dimensionless});
    var ph: dimensionless {pub: out};
    ph = ln(y/(1{dimensionless}-y));
    var y_raw: dimensionless {pub: out};
    y_raw = (FQB_alpha-X_0)/(1{dimensionless}-2{dimensionless}*X_0+div_0);
    var y: dimensionless {pub: out};
    y = min(max(y_raw, div_0y), 1{dimensionless}-div_0y);
    // var epsilon_alpha: dimensionless {pub: out};
    // epsilon_alpha = H_VV_out_alpha-H_mean*FQE_alpha/(FQB_alpha+div_0);
    var H_VV_out_alpha: dimensionless {pub: out};
    H_VV_out_alpha = H_mean*FQE_alpha/(FQB_alpha+div_0);
    // ode(H_VV_out_alpha, t) = is_split*-k*epsilon_alpha;
    var H_VV_out_beta: dimensionless {pub: out};
    H_VV_out_beta = H_mean*(1{dimensionless}-FQE_alpha)/(1{dimensionless}-FQB_alpha+div_0);
    // ////////////////////////////////VV_BG////////////////////////////////
    // ////////////////////////////////////////////
    var RBC_in: m3_per_s {pub: out};
    RBC_in = Qin1*H_to1+Qin2*H_to2+Qin3*H_to3+Qin4*H_to4;
    var RBC_out: m3_per_s {pub: out};
    RBC_out = Qout1*H_from1+Qout2*H_from2+Qout3*H_from3+Qout4*H_from4;
    // --- stored RBC volume inside VV1 ---
    var RBC_volume_init: m3 {pub: out};
    var RBC_volume: m3 {init: 1.27235130740022e-17, pub: out};
    RBC_volume_init = H_global_L*q_us;
    // mass balance
    ode(RBC_volume, t) = RBC_in-RBC_out;
    // --- mean VV1 hematocrit (concentration) ---
    var H_mean: dimensionless {pub: out};
    H_mean = RBC_volume/(q_us+div_0);
    // /////////////////////////////setting junctional compliance to greatest compliance of the vessels connected to it
    var C_conn1: m6_per_J {pub: in};
    var C_conn2: m6_per_J {pub: in};
    var C_conn3: m6_per_J {pub: in};
    var C_conn4: m6_per_J {pub: in};
    var C_max12: m6_per_J {pub: out};
    var C_max123: m6_per_J {pub: out};
    var C: m6_per_J {pub: out};
    C_max12 = sel
      case C_conn1 > C_conn2:
        C_conn1;
      case C_conn1 <= C_conn2:
        C_conn2;
    endsel;
    C_max123 = sel
      case C_max12 > C_conn3:
        C_max12;
      case C_max12 <= C_conn3:
        C_conn3;
    endsel;
    C = sel
      case C_max123 > C_conn4:
        C_max123;
      case C_max123 <= C_conn4:
        C_conn4;
    endsel;
    var q_C: m3 {init: 7.64204797509218e-19, pub: out};
    var q_C_d: m3 {init: 7.64183299288611e-19, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C+q_C_d;
    var R_VV_junc: Js_per_m6 {pub: in};
    // State Variables
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    var u_d: J_per_m3 {pub: out};
    var u_d_mmHg: dimensionless {pub: out};
    //  Conservation Laws
    // question?????????? whether ode (q_c and q_C_d) should be vbc1-4 or vj1-4
    u = q_C/(C/2{dimensionless})+u_ext;
    ode(q_C, t) = vbc1+vbc2-v;
    u_mmHg = u/133.322{J_per_m3};
    v = (u-u_d)/R_VV_junc;
    u_d = q_C_d/(C/2{dimensionless})+u_ext;
    ode(q_C_d, t) = v-vbc3-vbc4;
    u_d_mmHg = u_d/133.322{J_per_m3};
  enddef;
  // inlined from switching_test_modules.cellml

  def comp V3_module as
    // import variables
    var t: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    // 0.001
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    // 0
    var l: metre {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: out};
    var w_v_d: dimensionless {pub: out};
    // w_v   = 0.5{dimensionless}+1{dimensionless}/pi*atan(v/v_scale);
    w_v = sel
      case v > 0{dimensionless}:
        1{dimensionless};
      case v < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // w_v_d = 0.5{dimensionless}+1{dimensionless}/pi*atan(v_d/v_scale);
    w_v_d = sel
      case v_d > 0{dimensionless}:
        1{dimensionless};
      case v_d < 0{dimensionless}:
        0{dimensionless};
      otherwise:
        0.5{dimensionless};
    endsel;
    // /////////////////////////coupling with RHS vessel using ode to break
    // instaneous coupling requirement/////////
    var H_link_R: dimensionless {pub: out};
    H_link_R = H_L_out_RHS;
    // RHS means RHS vessel
    var H_link_L: dimensionless {pub: out};
    H_link_L = H_R_out_LHS;
    // RHS means RHS vessel
    var H_L_in: dimensionless {pub: out};
    H_L_in = H_link_L;
    var H_R_in: dimensionless {pub: out};
    H_R_in = H_link_R;
    var H_up: dimensionless {pub: out};
    H_up = w_v_d*H_L_in+(1{dimensionless}-w_v_d)*H_R_in;
    var H_down: dimensionless {init: 0.450002281977362, pub: out};
    var H_down_target: dimensionless {pub: out};
    H_down_target = s_v_d*(H_mean+gamma_mirror*(H_mean-H_up))+(1{dimensionless}-s_v_d)*H_mean;
    ode(H_down, t) = (H_down_target-H_down)/tau_H_down;
    var s_v_d: dimensionless {pub: out};
    s_v_d = abs(v_d)/(abs(v_d)+v_eps);
    // /useful when flow =0, if 0, make H_down=H_mean
    var H_L_out: dimensionless {pub: out};
    var H_R_out: dimensionless {pub: out};
    H_L_out = (1{dimensionless}-w_v_d)*H_down;
    H_R_out = w_v_d*H_down;
    var v_RBC: m3_per_s {pub: out};
    var v_d_RBC: m3_per_s {pub: out};
    v_RBC = 1.37{dimensionless}*v;
    v_d_RBC = 1.37{dimensionless}*v_d;
    var RBC_volume: m3 {init: 1.27280547241853e-15, pub: out};
    ode(RBC_volume, t) = v_RBC*RBC_volume_L-v_d_RBC*RBC_volume_R;
    var RBC_volume_init: m3 {pub: out};
    RBC_volume_init = H_global_L*q_us;
    // pos/neg for RBC mass conservation only
    // inflow from right (v_d<0)
    // var H_target: dimensionless {pub: out};
    // H_target = RBC_volume/q;
    H_mean = RBC_volume/q;
    var H_mean: dimensionless {pub: out};
    // ode(H_mean, t) = (H_target-H_mean)/tau_H_mean;
    var RBC_volume_L: dimensionless {pub: out};
    var RBC_volume_R: dimensionless {pub: out};
    RBC_volume_L = w_v*H_L_in+(1{dimensionless}-w_v)*H_L_out;
    RBC_volume_R = w_v_d*H_R_out+(1{dimensionless}-w_v_d)*H_R_in;
    // //////////////
    var q_C: m3 {init: 1.00888250894794e-18, pub: out};
    var q: m3 {pub: out};
    var q_us: m3 {pub: out};
    q_us = pi*sqr(r)*l;
    q = q_us+q_C;
    var C: m6_per_J {pub: out};
    C = pi*sqr(8.5e-9{metre})*l/133.322{J_per_m3};
    var Z: dimensionless {pub: out};
    Z = (0.8{dimensionless}+exp(-0.075{dimensionless}*2{dimensionless}*r*1e6{dimensionless}))*(-1{dimensionless}+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless})))+1{dimensionless}/(1{dimensionless}+pow(10{dimensionless}, -11{dimensionless})*pow(2{dimensionless}*r*1e6{dimensionless}, 12{dimensionless}));
    var mu_45: dimensionless {pub: out};
    mu_45 = 6{dimensionless}*exp(-0.085{per_m}*2{dimensionless}*r*1e6{dimensionless})+3.2{dimensionless}-2.44{dimensionless}*exp(-0.06{dimensionless}*pow(2{per_m}*r*1e6{dimensionless}, 0.645{dimensionless}));
    var mu: Js_per_m3 {pub: out};
    mu = hem_dep_u_rel*mu_plasma;
    var hem_dep_u_rel: dimensionless {pub: out};
    hem_dep_u_rel = 1{dimensionless}+(mu_45-1{dimensionless})*(pow(1{dimensionless}-H_mean, Z)-1{dimensionless})/(pow(1{dimensionless}-H_global_L, Z)-1{dimensionless})*sqr(2{dimensionless}*r*1e6{dimensionless}/(2{dimensionless}*r*1e6{dimensionless}-1.1{metre}));
    var R: Js_per_m6 {pub: out};
    R = 8{dimensionless}*mu*l/(pi*pow(r, 4{dimensionless}));
    var v: m3_per_s {pub: out};
    var v_mm3_s: mm3_per_s {pub: out};
    v_mm3_s = v/one_mm3;
    v = (u_in-u)/(R/2{dimensionless});
    var u: J_per_m3 {pub: out};
    var u_mmHg: dimensionless {pub: out};
    u_mmHg = u/133.322{J_per_m3};
    u = q_C/C+u_ext;
    ode(q_C, t) = v-v_d;
    var v_d: m3_per_s {pub: out};
    var v_d_mm3_s: mm3_per_s {pub: out};
    v_d_mm3_s = v_d/one_mm3;
    v_d = (u-u_out)/(R/2{dimensionless});
  enddef;
  // ------------vessel mappings------------//
  def map between inlet_module and VV_junc1_module for
    vars H_R_out and H_to1;
    vars H_L_out_RHS and H_from1;
    vars v_d and vbc1;
    vars u_out and u;
    vars r and r_bc1;
    vars C and C_conn1;
  enddef;
  def map between VV_junc1_module and PV1_module for
    vars vbc3 and v;
    vars u_d and u_in;
    vars H_from3 and H_R_out_LHS;
    vars H_to3 and H_L_out;
    vars r_bc3 and r;
    vars C_conn3 and C;
    vars v and v_downstream_LHS;
  enddef;
  def map between VV_junc1_module and PV2_module for
    vars vbc4 and v;
    vars u_d and u_in;
    vars H_from4 and H_R_out_LHS;
    vars H_to4 and H_L_out;
    vars r_bc4 and r;
    vars C_conn4 and C;
    vars v and v_downstream_LHS;
  enddef;
  def map between PV1_module and V1_module for
    vars H_R_out and H_R_out_LHS;
    vars H_L_out_RHS and H_L_out;
    vars v_d and v_in;
    vars u_out and u;
    vars v_downstream_RHS and v;
  enddef;
  def map between PV2_module and V2_module for
    vars H_R_out and H_R_out_LHS;
    vars H_L_out_RHS and H_L_out;
    vars v_d and v_in;
    vars u_out and u;
    vars v_downstream_RHS and v;
  enddef;
  def map between V1_module and VV_junc2_module for
    vars H_R_out and H_to1;
    vars H_L_out_RHS and H_from1;
    vars v and vbc1;
    vars u_out and u;
    vars r and r_bc1;
    vars C and C_conn1;
  enddef;
  def map between V2_module and VV_junc2_module for
    vars H_R_out and H_to2;
    vars H_L_out_RHS and H_from2;
    vars v and vbc2;
    vars u_out and u;
    vars r and r_bc2;
    vars C and C_conn2;
  enddef;
  def map between VV_junc2_module and V3_module for
    vars vbc3 and v;
    vars u_d and u_in;
    vars H_from3 and H_R_out_LHS;
    vars H_to3 and H_L_out;
    vars r_bc3 and r;
    vars C_conn3 and C;
  enddef;
  // ------------terminal venous connection------------//

  def comp terminal_venous_connection as
  enddef;
  // ------------generic junction connection------------//

  def comp generic_junction_connection as
  enddef;
  // ------------applying multiport operations for ports------------//

  def comp sum_blood_volume as
  enddef;
  // ------------access_variables------------//

  def comp inlet as
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_R_out_LHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_in: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: in};
    var w_v_d: dimensionless {pub: in};
    var H_link_R: dimensionless {pub: in};
    var H_link_L: dimensionless {pub: in};
    var H_L_in: dimensionless {pub: in};
    var H_R_in: dimensionless {pub: in};
    var H_up: dimensionless {pub: in};
    var H_down: dimensionless {pub: in};
    var H_down_target: dimensionless {pub: in};
    var s_v_d: dimensionless {pub: in};
    var H_L_out: dimensionless {pub: in};
    var H_R_out: dimensionless {pub: in};
    var RBC_volume: m3 {pub: in};
    var RBC_volume_init: m3 {pub: in};
    var v_RBC: m3_per_s {pub: in};
    var v_d_RBC: m3_per_s {pub: in};
    var H_mean: dimensionless {pub: in};
    var RBC_volume_L: dimensionless {pub: in};
    var RBC_volume_R: dimensionless {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var C: m6_per_J {pub: in};
    var Z: dimensionless {pub: in};
    var mu_45: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
    var hem_dep_u_rel: dimensionless {pub: in};
    var R: Js_per_m6 {pub: in};
    var v: m3_per_s {pub: in};
    var v_mm3_s: mm3_per_s {pub: in};
    var u: J_per_m3 {pub: in};
    var u_mmHg: dimensionless {pub: in};
    var v_d: m3_per_s {pub: in};
    var v_d_mm3_s: mm3_per_s {pub: in};
  enddef;

  def comp VV_junc1 as
    var div_0: dimensionless {pub: in};
    var div_0y: dimensionless {pub: in};
    var v_threshold: m3_per_s {pub: in};
    var k: dimensionless {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var q_C_init: m3 {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var vbc2: m3_per_s {pub: in};
    var vj1: m3_per_s {pub: in};
    var vj2: m3_per_s {pub: in};
    var vj3: m3_per_s {pub: in};
    var vj4: m3_per_s {pub: in};
    var H_to2: dimensionless {pub: in};
    var H_split1: dimensionless {pub: in};
    var H_split2: dimensionless {pub: in};
    var H_split3: dimensionless {pub: in};
    var H_split4: dimensionless {pub: in};
    var H_daughter1: dimensionless {pub: in};
    var H_daughter2: dimensionless {pub: in};
    var H_daughter3: dimensionless {pub: in};
    var H_daughter4: dimensionless {pub: in};
    var H_from1_target: dimensionless {pub: in};
    var H_from2_target: dimensionless {pub: in};
    var H_from3_target: dimensionless {pub: in};
    var H_from4_target: dimensionless {pub: in};
    var H_from1: dimensionless {pub: in};
    var H_from2: dimensionless {pub: in};
    var H_from3: dimensionless {pub: in};
    var H_from4: dimensionless {pub: in};
    var r_bc2: metre {pub: in};
    var D1: metre {pub: in};
    var D2: metre {pub: in};
    var D3: metre {pub: in};
    var D4: metre {pub: in};
    var w_in1: dimensionless {pub: in};
    var w_in2: dimensionless {pub: in};
    var w_in3: dimensionless {pub: in};
    var w_in4: dimensionless {pub: in};
    var w_out1: dimensionless {pub: in};
    var w_out2: dimensionless {pub: in};
    var w_out3: dimensionless {pub: in};
    var w_out4: dimensionless {pub: in};
    var Qin1: m3_per_s {pub: in};
    var Qin2: m3_per_s {pub: in};
    var Qin3: m3_per_s {pub: in};
    var Qin4: m3_per_s {pub: in};
    var Qout1: m3_per_s {pub: in};
    var Qout2: m3_per_s {pub: in};
    var Qout3: m3_per_s {pub: in};
    var Qout4: m3_per_s {pub: in};
    var Qin_tot: m3_per_s {pub: in};
    var Qout_tot: m3_per_s {pub: in};
    var bc1_is_in: dimensionless {pub: in};
    var bc2_is_in: dimensionless {pub: in};
    var bc3_is_in: dimensionless {pub: in};
    var bc4_is_in: dimensionless {pub: in};
    var bc1_is_out: dimensionless {pub: in};
    var bc2_is_out: dimensionless {pub: in};
    var bc3_is_out: dimensionless {pub: in};
    var bc4_is_out: dimensionless {pub: in};
    var n_in: dimensionless {pub: in};
    var n_out: dimensionless {pub: in};
    var junction_type: dimensionless {pub: in};
    var is_split: dimensionless {pub: in};
    var is_merge: dimensionless {pub: in};
    var feed1: dimensionless {pub: in};
    var feed2: dimensionless {pub: in};
    var feed3: dimensionless {pub: in};
    var feed4: dimensionless {pub: in};
    var alpha1: dimensionless {pub: in};
    var alpha2: dimensionless {pub: in};
    var alpha3: dimensionless {pub: in};
    var alpha4: dimensionless {pub: in};
    var beta1: dimensionless {pub: in};
    var beta2: dimensionless {pub: in};
    var beta3: dimensionless {pub: in};
    var beta4: dimensionless {pub: in};
    var D_F: metre {pub: in};
    var D_alpha: metre {pub: in};
    var D_beta: metre {pub: in};
    var v_alpha: m3_per_s {pub: in};
    var v_beta: m3_per_s {pub: in};
    var FQB_alpha: dimensionless {pub: in};
    var FQE_alpha: dimensionless {pub: in};
    var B: dimensionless {pub: in};
    var A: dimensionless {pub: in};
    var X_0: dimensionless {pub: in};
    var ph: dimensionless {pub: in};
    var y_raw: dimensionless {pub: in};
    var y: dimensionless {pub: in};
    var H_VV_out_alpha: dimensionless {pub: in};
    var H_VV_out_beta: dimensionless {pub: in};
    var RBC_in: m3_per_s {pub: in};
    var RBC_out: m3_per_s {pub: in};
    var RBC_volume_init: m3 {pub: in};
    var RBC_volume: m3 {pub: in};
    var H_mean: dimensionless {pub: in};
    var C_conn2: m6_per_J {pub: in};
    var C_max12: m6_per_J {pub: in};
    var C_max123: m6_per_J {pub: in};
    var C: m6_per_J {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var R_VV_junc: Js_per_m6 {pub: in};
    var u: J_per_m3 {pub: in};
    var u_mmHg: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var v_mm3_s: mm3_per_s {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_d_mmHg: dimensionless {pub: in};
  enddef;

  def comp PV1 as
    var v_downstream: m3_per_s {pub: in};
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    var v_eps: m3_per_s {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: in};
    var C: m6_per_J {pub: in};
    var H_link_R: dimensionless {pub: in};
    var H_link_L: dimensionless {pub: in};
    var H_L_in: dimensionless {pub: in};
    var H_R_in: dimensionless {pub: in};
    var H_up: dimensionless {pub: in};
    var H_down: dimensionless {pub: in};
    var H_down_target: dimensionless {pub: in};
    var s_v: dimensionless {pub: in};
    var H_L_out: dimensionless {pub: in};
    var H_R_out: dimensionless {pub: in};
    var v_RBC: m3_per_s {pub: in};
    var v_d_RBC: m3_per_s {pub: in};
    var RBC_volume: m3 {pub: in};
    var RBC_volume_init: m3 {pub: in};
    var H_mean: dimensionless {pub: in};
    var RBC_volume_L: dimensionless {pub: in};
    var RBC_volume_R: dimensionless {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var Z: dimensionless {pub: in};
    var mu_45: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
    var hem_dep_u_rel: dimensionless {pub: in};
    var Re_stall: Js_per_m6 {pub: in};
    var R: Js_per_m6 {pub: in};
    var v: m3_per_s {pub: in};
    var v_mm3_s: mm3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var v_d_mm3_s: mm3_per_s {pub: in};
    var r_m: metre {pub: in};
    var alpha: dimensionless {pub: in};
    var tau_K_deprived: second {pub: in};
    var alpha_max: dimensionless {pub: in};
    var alpha_min: dimensionless {pub: in};
    var BOSF_Bx: m3_per_s {pub: in};
    var K_deprived: dimensionless {pub: in};
    var K_deprived_init: dimensionless {pub: in};
    var deprivation_sensor: dimensionless {pub: in};
    var f_crit: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    // var r_stall: metre {pub: out};
    var r_thresh: metre {pub: in};
    var Z_ref: dimensionless {pub: in};
    var mu_45_ref: dimensionless {pub: in};
    var mu_ref: Js_per_m3 {pub: in};
    var hem_dep_u_rel_ref: dimensionless {pub: in};
    var wss: J_per_m3 {pub: in};
    var wss_BOSF_ref: J_per_m3 {pub: in};
    var wss_crit: J_per_m3 {pub: in};
    var f_wss: dimensionless {pub: in};
    var retention: dimensionless {pub: in};
    var n_stall: dimensionless {pub: in};
    var fs: dimensionless {pub: in};
    var stall_target: dimensionless {pub: in};
    var stall_memory: dimensionless {pub: in};
    var stall_init: dimensionless {pub: in};
    var stall: dimensionless {pub: in};
    var tau_stall: second {pub: in};
  enddef;

  def comp PV2 as
    var v_downstream: m3_per_s {pub: in};
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    var v_eps: m3_per_s {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: in};
    var C: m6_per_J {pub: in};
    var H_link_R: dimensionless {pub: in};
    var H_link_L: dimensionless {pub: in};
    var H_L_in: dimensionless {pub: in};
    var H_R_in: dimensionless {pub: in};
    var H_up: dimensionless {pub: in};
    var H_down: dimensionless {pub: in};
    var H_down_target: dimensionless {pub: in};
    var s_v: dimensionless {pub: in};
    var H_L_out: dimensionless {pub: in};
    var H_R_out: dimensionless {pub: in};
    var v_RBC: m3_per_s {pub: in};
    var v_d_RBC: m3_per_s {pub: in};
    var RBC_volume: m3 {pub: in};
    var RBC_volume_init: m3 {pub: in};
    var H_mean: dimensionless {pub: in};
    var RBC_volume_L: dimensionless {pub: in};
    var RBC_volume_R: dimensionless {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var Z: dimensionless {pub: in};
    var mu_45: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
    var hem_dep_u_rel: dimensionless {pub: in};
    var Re_stall: Js_per_m6 {pub: in};
    var R: Js_per_m6 {pub: in};
    var v: m3_per_s {pub: in};
    var v_mm3_s: mm3_per_s {pub: in};
    var v_d: m3_per_s {pub: in};
    var v_d_mm3_s: mm3_per_s {pub: in};
    var r_m: metre {pub: in};
    var alpha: dimensionless {pub: in};
    var tau_K_deprived: second {pub: in};
    var alpha_max: dimensionless {pub: in};
    var alpha_min: dimensionless {pub: in};
    var BOSF_Bx: m3_per_s {pub: in};
    var K_deprived: dimensionless {pub: in};
    var K_deprived_init: dimensionless {pub: in};
    var deprivation_sensor: dimensionless {pub: in};
    var f_crit: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    // var r_stall: metre {pub: out};
    var r_thresh: metre {pub: in};
    var Z_ref: dimensionless {pub: in};
    var mu_45_ref: dimensionless {pub: in};
    var mu_ref: Js_per_m3 {pub: in};
    var hem_dep_u_rel_ref: dimensionless {pub: in};
    var wss: J_per_m3 {pub: in};
    var wss_BOSF_ref: J_per_m3 {pub: in};
    var wss_crit: J_per_m3 {pub: in};
    var f_wss: dimensionless {pub: in};
    var retention: dimensionless {pub: in};
    var n_stall: dimensionless {pub: in};
    var fs: dimensionless {pub: in};
    var stall_target: dimensionless {pub: in};
    var stall_memory: dimensionless {pub: in};
    var stall_init: dimensionless {pub: in};
    var stall: dimensionless {pub: in};
    var tau_stall: second {pub: in};
  enddef;

  def comp V1 as
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: in};
    var H_link_R: dimensionless {pub: in};
    var H_link_L: dimensionless {pub: in};
    var H_L_in: dimensionless {pub: in};
    var H_R_in: dimensionless {pub: in};
    var H_up: dimensionless {pub: in};
    var H_down: dimensionless {pub: in};
    var H_down_target: dimensionless {pub: in};
    var s_v: dimensionless {pub: in};
    var H_L_out: dimensionless {pub: in};
    var H_R_out: dimensionless {pub: in};
    var RBC_volume: m3 {pub: in};
    var RBC_volume_init: m3 {pub: in};
    var v_in_RBC: m3_per_s {pub: in};
    var v_RBC: m3_per_s {pub: in};
    var H_mean: dimensionless {pub: in};
    var RBC_volume_L: dimensionless {pub: in};
    var RBC_volume_R: dimensionless {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var C: m6_per_J {pub: in};
    var Z: dimensionless {pub: in};
    var mu_45: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
    var hem_dep_u_rel: dimensionless {pub: in};
    var R: Js_per_m6 {pub: in};
    var v: m3_per_s {pub: in};
    var v_mm3_s: mm3_per_s {pub: in};
    var u: J_per_m3 {pub: in};
    var u_mmHg: dimensionless {pub: in};
  enddef;

  def comp V2 as
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: in};
    var H_link_R: dimensionless {pub: in};
    var H_link_L: dimensionless {pub: in};
    var H_L_in: dimensionless {pub: in};
    var H_R_in: dimensionless {pub: in};
    var H_up: dimensionless {pub: in};
    var H_down: dimensionless {pub: in};
    var H_down_target: dimensionless {pub: in};
    var s_v: dimensionless {pub: in};
    var H_L_out: dimensionless {pub: in};
    var H_R_out: dimensionless {pub: in};
    var RBC_volume: m3 {pub: in};
    var RBC_volume_init: m3 {pub: in};
    var v_in_RBC: m3_per_s {pub: in};
    var v_RBC: m3_per_s {pub: in};
    var H_mean: dimensionless {pub: in};
    var RBC_volume_L: dimensionless {pub: in};
    var RBC_volume_R: dimensionless {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var C: m6_per_J {pub: in};
    var Z: dimensionless {pub: in};
    var mu_45: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
    var hem_dep_u_rel: dimensionless {pub: in};
    var R: Js_per_m6 {pub: in};
    var v: m3_per_s {pub: in};
    var v_mm3_s: mm3_per_s {pub: in};
    var u: J_per_m3 {pub: in};
    var u_mmHg: dimensionless {pub: in};
  enddef;

  def comp VV_junc2 as
    var div_0: dimensionless {pub: in};
    var div_0y: dimensionless {pub: in};
    var v_threshold: m3_per_s {pub: in};
    var k: dimensionless {pub: in};
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var q_C_init: m3 {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var vbc4: m3_per_s {pub: in};
    var vj1: m3_per_s {pub: in};
    var vj2: m3_per_s {pub: in};
    var vj3: m3_per_s {pub: in};
    var vj4: m3_per_s {pub: in};
    var H_to4: dimensionless {pub: in};
    var H_split1: dimensionless {pub: in};
    var H_split2: dimensionless {pub: in};
    var H_split3: dimensionless {pub: in};
    var H_split4: dimensionless {pub: in};
    var H_daughter1: dimensionless {pub: in};
    var H_daughter2: dimensionless {pub: in};
    var H_daughter3: dimensionless {pub: in};
    var H_daughter4: dimensionless {pub: in};
    var H_from1_target: dimensionless {pub: in};
    var H_from2_target: dimensionless {pub: in};
    var H_from3_target: dimensionless {pub: in};
    var H_from4_target: dimensionless {pub: in};
    var H_from1: dimensionless {pub: in};
    var H_from2: dimensionless {pub: in};
    var H_from3: dimensionless {pub: in};
    var H_from4: dimensionless {pub: in};
    var r_bc4: metre {pub: in};
    var D1: metre {pub: in};
    var D2: metre {pub: in};
    var D3: metre {pub: in};
    var D4: metre {pub: in};
    var w_in1: dimensionless {pub: in};
    var w_in2: dimensionless {pub: in};
    var w_in3: dimensionless {pub: in};
    var w_in4: dimensionless {pub: in};
    var w_out1: dimensionless {pub: in};
    var w_out2: dimensionless {pub: in};
    var w_out3: dimensionless {pub: in};
    var w_out4: dimensionless {pub: in};
    var Qin1: m3_per_s {pub: in};
    var Qin2: m3_per_s {pub: in};
    var Qin3: m3_per_s {pub: in};
    var Qin4: m3_per_s {pub: in};
    var Qout1: m3_per_s {pub: in};
    var Qout2: m3_per_s {pub: in};
    var Qout3: m3_per_s {pub: in};
    var Qout4: m3_per_s {pub: in};
    var Qin_tot: m3_per_s {pub: in};
    var Qout_tot: m3_per_s {pub: in};
    var bc1_is_in: dimensionless {pub: in};
    var bc2_is_in: dimensionless {pub: in};
    var bc3_is_in: dimensionless {pub: in};
    var bc4_is_in: dimensionless {pub: in};
    var bc1_is_out: dimensionless {pub: in};
    var bc2_is_out: dimensionless {pub: in};
    var bc3_is_out: dimensionless {pub: in};
    var bc4_is_out: dimensionless {pub: in};
    var n_in: dimensionless {pub: in};
    var n_out: dimensionless {pub: in};
    var junction_type: dimensionless {pub: in};
    var is_split: dimensionless {pub: in};
    var is_merge: dimensionless {pub: in};
    var feed1: dimensionless {pub: in};
    var feed2: dimensionless {pub: in};
    var feed3: dimensionless {pub: in};
    var feed4: dimensionless {pub: in};
    var alpha1: dimensionless {pub: in};
    var alpha2: dimensionless {pub: in};
    var alpha3: dimensionless {pub: in};
    var alpha4: dimensionless {pub: in};
    var beta1: dimensionless {pub: in};
    var beta2: dimensionless {pub: in};
    var beta3: dimensionless {pub: in};
    var beta4: dimensionless {pub: in};
    var D_F: metre {pub: in};
    var D_alpha: metre {pub: in};
    var D_beta: metre {pub: in};
    var v_alpha: m3_per_s {pub: in};
    var v_beta: m3_per_s {pub: in};
    var FQB_alpha: dimensionless {pub: in};
    var FQE_alpha: dimensionless {pub: in};
    var B: dimensionless {pub: in};
    var A: dimensionless {pub: in};
    var X_0: dimensionless {pub: in};
    var ph: dimensionless {pub: in};
    var y_raw: dimensionless {pub: in};
    var y: dimensionless {pub: in};
    var H_VV_out_alpha: dimensionless {pub: in};
    var H_VV_out_beta: dimensionless {pub: in};
    var RBC_in: m3_per_s {pub: in};
    var RBC_out: m3_per_s {pub: in};
    var RBC_volume_init: m3 {pub: in};
    var RBC_volume: m3 {pub: in};
    var H_mean: dimensionless {pub: in};
    var C_conn4: m6_per_J {pub: in};
    var C_max12: m6_per_J {pub: in};
    var C_max123: m6_per_J {pub: in};
    var C: m6_per_J {pub: in};
    var q_C: m3 {pub: in};
    var q_C_d: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var R_VV_junc: Js_per_m6 {pub: in};
    var u: J_per_m3 {pub: in};
    var u_mmHg: dimensionless {pub: in};
    var v: m3_per_s {pub: in};
    var v_mm3_s: mm3_per_s {pub: in};
    var u_d: J_per_m3 {pub: in};
    var u_d_mmHg: dimensionless {pub: in};
  enddef;

  def comp V3 as
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var H_L_out_RHS: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    var r: metre {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_out: J_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var w_v: dimensionless {pub: in};
    var w_v_d: dimensionless {pub: in};
    var H_link_R: dimensionless {pub: in};
    var H_link_L: dimensionless {pub: in};
    var H_L_in: dimensionless {pub: in};
    var H_R_in: dimensionless {pub: in};
    var H_up: dimensionless {pub: in};
    var H_down: dimensionless {pub: in};
    var H_down_target: dimensionless {pub: in};
    var s_v_d: dimensionless {pub: in};
    var H_L_out: dimensionless {pub: in};
    var H_R_out: dimensionless {pub: in};
    var RBC_volume: m3 {pub: in};
    var RBC_volume_init: m3 {pub: in};
    var v_RBC: m3_per_s {pub: in};
    var v_d_RBC: m3_per_s {pub: in};
    var H_mean: dimensionless {pub: in};
    var RBC_volume_L: dimensionless {pub: in};
    var RBC_volume_R: dimensionless {pub: in};
    var q_C: m3 {pub: in};
    var q: m3 {pub: in};
    var q_us: m3 {pub: in};
    var C: m6_per_J {pub: in};
    var Z: dimensionless {pub: in};
    var mu_45: dimensionless {pub: in};
    var mu: Js_per_m3 {pub: in};
    var hem_dep_u_rel: dimensionless {pub: in};
    var R: Js_per_m6 {pub: in};
    var v: m3_per_s {pub: in};
    var v_mm3_s: mm3_per_s {pub: in};
    var u: J_per_m3 {pub: in};
    var u_mmHg: dimensionless {pub: in};
    var v_d: m3_per_s {pub: in};
    var v_d_mm3_s: mm3_per_s {pub: in};
  enddef;
  // ------------global_parameters_access------------//

  def comp global as
    var H_global_L: dimensionless {pub: in};
    var H_global_R: dimensionless {pub: in};
    var gamma_mirror: dimensionless {pub: in};
    var tau_H_down: second {pub: in};
    var tau_H_mean: second {pub: in};
    var v_eps: m3_per_s {pub: in};
    var q_C_init: m3 {pub: in};
    var mu_plasma: Js_per_m3 {pub: in};
    var u_ext: J_per_m3 {pub: in};
    var tau_link: second {pub: in};
    var v_scale: m3_per_s {pub: in};
    var one_mm3: m3 {pub: in};
    var div_0: dimensionless {pub: in};
    var div_0y: dimensionless {pub: in};
    var v_threshold: m3_per_s {pub: in};
    var k: dimensionless {pub: in};
    var R_VV_junc: Js_per_m6 {pub: in};
    var tau_sig: second {pub: in};
    var t0: second {pub: in};
    var Re_stall: Js_per_m6 {pub: in};
    var tau_K_deprived: second {pub: in};
    var alpha_max: dimensionless {pub: in};
    var alpha_min: dimensionless {pub: in};
    var BOSF_Bx: m3_per_s {pub: in};
    var K_deprived_init: dimensionless {pub: in};
    var f_crit: dimensionless {pub: in};
    var n: dimensionless {pub: in};
    // var r_stall: metre {pub: out};
    var f_wss: dimensionless {pub: in};
    var n_stall: dimensionless {pub: in};
    var fs: dimensionless {pub: in};
    var stall_init: dimensionless {pub: in};
    var tau_stall: second {pub: in};
  enddef;
  // ------------own vessel mappings------------//
  def map between inlet and inlet_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars H_R_out_LHS and H_R_out_LHS;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_in and u_in;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars w_v_d and w_v_d;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v_d and s_v_d;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_RBC and v_RBC;
    vars v_d_RBC and v_d_RBC;
    vars H_mean and H_mean;
    vars RBC_volume_L and RBC_volume_L;
    vars RBC_volume_R and RBC_volume_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
  enddef;
  def map between VV_junc1 and VV_junc1_module for
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars v_threshold and v_threshold;
    vars k and k;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars vbc2 and vbc2;
    vars vj1 and vj1;
    vars vj2 and vj2;
    vars vj3 and vj3;
    vars vj4 and vj4;
    vars H_to2 and H_to2;
    vars H_split1 and H_split1;
    vars H_split2 and H_split2;
    vars H_split3 and H_split3;
    vars H_split4 and H_split4;
    vars H_daughter1 and H_daughter1;
    vars H_daughter2 and H_daughter2;
    vars H_daughter3 and H_daughter3;
    vars H_daughter4 and H_daughter4;
    vars H_from1_target and H_from1_target;
    vars H_from2_target and H_from2_target;
    vars H_from3_target and H_from3_target;
    vars H_from4_target and H_from4_target;
    vars H_from1 and H_from1;
    vars H_from2 and H_from2;
    vars H_from3 and H_from3;
    vars H_from4 and H_from4;
    vars r_bc2 and r_bc2;
    vars D1 and D1;
    vars D2 and D2;
    vars D3 and D3;
    vars D4 and D4;
    vars w_in1 and w_in1;
    vars w_in2 and w_in2;
    vars w_in3 and w_in3;
    vars w_in4 and w_in4;
    vars w_out1 and w_out1;
    vars w_out2 and w_out2;
    vars w_out3 and w_out3;
    vars w_out4 and w_out4;
    vars Qin1 and Qin1;
    vars Qin2 and Qin2;
    vars Qin3 and Qin3;
    vars Qin4 and Qin4;
    vars Qout1 and Qout1;
    vars Qout2 and Qout2;
    vars Qout3 and Qout3;
    vars Qout4 and Qout4;
    vars Qin_tot and Qin_tot;
    vars Qout_tot and Qout_tot;
    vars bc1_is_in and bc1_is_in;
    vars bc2_is_in and bc2_is_in;
    vars bc3_is_in and bc3_is_in;
    vars bc4_is_in and bc4_is_in;
    vars bc1_is_out and bc1_is_out;
    vars bc2_is_out and bc2_is_out;
    vars bc3_is_out and bc3_is_out;
    vars bc4_is_out and bc4_is_out;
    vars n_in and n_in;
    vars n_out and n_out;
    vars junction_type and junction_type;
    vars is_split and is_split;
    vars is_merge and is_merge;
    vars feed1 and feed1;
    vars feed2 and feed2;
    vars feed3 and feed3;
    vars feed4 and feed4;
    vars alpha1 and alpha1;
    vars alpha2 and alpha2;
    vars alpha3 and alpha3;
    vars alpha4 and alpha4;
    vars beta1 and beta1;
    vars beta2 and beta2;
    vars beta3 and beta3;
    vars beta4 and beta4;
    vars D_F and D_F;
    vars D_alpha and D_alpha;
    vars D_beta and D_beta;
    vars v_alpha and v_alpha;
    vars v_beta and v_beta;
    vars FQB_alpha and FQB_alpha;
    vars FQE_alpha and FQE_alpha;
    vars B and B;
    vars A and A;
    vars X_0 and X_0;
    vars ph and ph;
    vars y_raw and y_raw;
    vars y and y;
    vars H_VV_out_alpha and H_VV_out_alpha;
    vars H_VV_out_beta and H_VV_out_beta;
    vars RBC_in and RBC_in;
    vars RBC_out and RBC_out;
    vars RBC_volume_init and RBC_volume_init;
    vars RBC_volume and RBC_volume;
    vars H_mean and H_mean;
    vars C_conn2 and C_conn2;
    vars C_max12 and C_max12;
    vars C_max123 and C_max123;
    vars C and C;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q and q;
    vars q_us and q_us;
    vars R_VV_junc and R_VV_junc;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u_d and u_d;
    vars u_d_mmHg and u_d_mmHg;
  enddef;
  def map between PV1 and PV1_module for
    vars v_downstream and v_downstream;
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars C and C;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v and s_v;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars v_RBC and v_RBC;
    vars v_d_RBC and v_d_RBC;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars H_mean and H_mean;
    vars RBC_volume_L and RBC_volume_L;
    vars RBC_volume_R and RBC_volume_R;
    vars q and q;
    vars q_us and q_us;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars Re_stall and Re_stall;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
    vars r_m and r_m;
    vars alpha and alpha;
    vars tau_K_deprived and tau_K_deprived;
    vars alpha_max and alpha_max;
    vars alpha_min and alpha_min;
    vars BOSF_Bx and BOSF_Bx;
    vars K_deprived and K_deprived;
    vars K_deprived_init and K_deprived_init;
    vars deprivation_sensor and deprivation_sensor;
    vars f_crit and f_crit;
    vars n and n;
    // vars r_stall and r_stall;
    vars r_thresh and r_thresh;
    vars Z_ref and Z_ref;
    vars mu_45_ref and mu_45_ref;
    vars mu_ref and mu_ref;
    vars hem_dep_u_rel_ref and hem_dep_u_rel_ref;
    vars wss and wss;
    vars wss_BOSF_ref and wss_BOSF_ref;
    vars wss_crit and wss_crit;
    vars f_wss and f_wss;
    vars retention and retention;
    vars n_stall and n_stall;
    vars fs and fs;
    vars stall_target and stall_target;
    vars stall_memory and stall_memory;
    vars stall_init and stall_init;
    vars stall and stall;
    vars tau_stall and tau_stall;
  enddef;
  def map between PV2 and PV2_module for
    vars v_downstream and v_downstream;
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars C and C;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v and s_v;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars v_RBC and v_RBC;
    vars v_d_RBC and v_d_RBC;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars H_mean and H_mean;
    vars RBC_volume_L and RBC_volume_L;
    vars RBC_volume_R and RBC_volume_R;
    vars q and q;
    vars q_us and q_us;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars Re_stall and Re_stall;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
    vars r_m and r_m;
    vars alpha and alpha;
    vars tau_K_deprived and tau_K_deprived;
    vars alpha_max and alpha_max;
    vars alpha_min and alpha_min;
    vars BOSF_Bx and BOSF_Bx;
    vars K_deprived and K_deprived;
    vars K_deprived_init and K_deprived_init;
    vars deprivation_sensor and deprivation_sensor;
    vars f_crit and f_crit;
    vars n and n;
    // vars r_stall and r_stall;
    vars r_thresh and r_thresh;
    vars Z_ref and Z_ref;
    vars mu_45_ref and mu_45_ref;
    vars mu_ref and mu_ref;
    vars hem_dep_u_rel_ref and hem_dep_u_rel_ref;
    vars wss and wss;
    vars wss_BOSF_ref and wss_BOSF_ref;
    vars wss_crit and wss_crit;
    vars f_wss and f_wss;
    vars retention and retention;
    vars n_stall and n_stall;
    vars fs and fs;
    vars stall_target and stall_target;
    vars stall_memory and stall_memory;
    vars stall_init and stall_init;
    vars stall and stall;
    vars tau_stall and tau_stall;
  enddef;
  def map between V1 and V1_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v and s_v;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_in_RBC and v_in_RBC;
    vars v_RBC and v_RBC;
    vars H_mean and H_mean;
    vars RBC_volume_L and RBC_volume_L;
    vars RBC_volume_R and RBC_volume_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
  enddef;
  def map between V2 and V2_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v and s_v;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_in_RBC and v_in_RBC;
    vars v_RBC and v_RBC;
    vars H_mean and H_mean;
    vars RBC_volume_L and RBC_volume_L;
    vars RBC_volume_R and RBC_volume_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
  enddef;
  def map between VV_junc2 and VV_junc2_module for
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars v_threshold and v_threshold;
    vars k and k;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars vbc4 and vbc4;
    vars vj1 and vj1;
    vars vj2 and vj2;
    vars vj3 and vj3;
    vars vj4 and vj4;
    vars H_to4 and H_to4;
    vars H_split1 and H_split1;
    vars H_split2 and H_split2;
    vars H_split3 and H_split3;
    vars H_split4 and H_split4;
    vars H_daughter1 and H_daughter1;
    vars H_daughter2 and H_daughter2;
    vars H_daughter3 and H_daughter3;
    vars H_daughter4 and H_daughter4;
    vars H_from1_target and H_from1_target;
    vars H_from2_target and H_from2_target;
    vars H_from3_target and H_from3_target;
    vars H_from4_target and H_from4_target;
    vars H_from1 and H_from1;
    vars H_from2 and H_from2;
    vars H_from3 and H_from3;
    vars H_from4 and H_from4;
    vars r_bc4 and r_bc4;
    vars D1 and D1;
    vars D2 and D2;
    vars D3 and D3;
    vars D4 and D4;
    vars w_in1 and w_in1;
    vars w_in2 and w_in2;
    vars w_in3 and w_in3;
    vars w_in4 and w_in4;
    vars w_out1 and w_out1;
    vars w_out2 and w_out2;
    vars w_out3 and w_out3;
    vars w_out4 and w_out4;
    vars Qin1 and Qin1;
    vars Qin2 and Qin2;
    vars Qin3 and Qin3;
    vars Qin4 and Qin4;
    vars Qout1 and Qout1;
    vars Qout2 and Qout2;
    vars Qout3 and Qout3;
    vars Qout4 and Qout4;
    vars Qin_tot and Qin_tot;
    vars Qout_tot and Qout_tot;
    vars bc1_is_in and bc1_is_in;
    vars bc2_is_in and bc2_is_in;
    vars bc3_is_in and bc3_is_in;
    vars bc4_is_in and bc4_is_in;
    vars bc1_is_out and bc1_is_out;
    vars bc2_is_out and bc2_is_out;
    vars bc3_is_out and bc3_is_out;
    vars bc4_is_out and bc4_is_out;
    vars n_in and n_in;
    vars n_out and n_out;
    vars junction_type and junction_type;
    vars is_split and is_split;
    vars is_merge and is_merge;
    vars feed1 and feed1;
    vars feed2 and feed2;
    vars feed3 and feed3;
    vars feed4 and feed4;
    vars alpha1 and alpha1;
    vars alpha2 and alpha2;
    vars alpha3 and alpha3;
    vars alpha4 and alpha4;
    vars beta1 and beta1;
    vars beta2 and beta2;
    vars beta3 and beta3;
    vars beta4 and beta4;
    vars D_F and D_F;
    vars D_alpha and D_alpha;
    vars D_beta and D_beta;
    vars v_alpha and v_alpha;
    vars v_beta and v_beta;
    vars FQB_alpha and FQB_alpha;
    vars FQE_alpha and FQE_alpha;
    vars B and B;
    vars A and A;
    vars X_0 and X_0;
    vars ph and ph;
    vars y_raw and y_raw;
    vars y and y;
    vars H_VV_out_alpha and H_VV_out_alpha;
    vars H_VV_out_beta and H_VV_out_beta;
    vars RBC_in and RBC_in;
    vars RBC_out and RBC_out;
    vars RBC_volume_init and RBC_volume_init;
    vars RBC_volume and RBC_volume;
    vars H_mean and H_mean;
    vars C_conn4 and C_conn4;
    vars C_max12 and C_max12;
    vars C_max123 and C_max123;
    vars C and C;
    vars q_C and q_C;
    vars q_C_d and q_C_d;
    vars q and q;
    vars q_us and q_us;
    vars R_VV_junc and R_VV_junc;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u_d and u_d;
    vars u_d_mmHg and u_d_mmHg;
  enddef;
  def map between V3 and V3_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars H_L_out_RHS and H_L_out_RHS;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars r and r;
    vars mu_plasma and mu_plasma;
    vars u_out and u_out;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars w_v and w_v;
    vars w_v_d and w_v_d;
    vars H_link_R and H_link_R;
    vars H_link_L and H_link_L;
    vars H_L_in and H_L_in;
    vars H_R_in and H_R_in;
    vars H_up and H_up;
    vars H_down and H_down;
    vars H_down_target and H_down_target;
    vars s_v_d and s_v_d;
    vars H_L_out and H_L_out;
    vars H_R_out and H_R_out;
    vars RBC_volume and RBC_volume;
    vars RBC_volume_init and RBC_volume_init;
    vars v_RBC and v_RBC;
    vars v_d_RBC and v_d_RBC;
    vars H_mean and H_mean;
    vars RBC_volume_L and RBC_volume_L;
    vars RBC_volume_R and RBC_volume_R;
    vars q_C and q_C;
    vars q and q;
    vars q_us and q_us;
    vars C and C;
    vars Z and Z;
    vars mu_45 and mu_45;
    vars mu and mu;
    vars hem_dep_u_rel and hem_dep_u_rel;
    vars R and R;
    vars v and v;
    vars v_mm3_s and v_mm3_s;
    vars u and u;
    vars u_mmHg and u_mmHg;
    vars v_d and v_d;
    vars v_d_mm3_s and v_d_mm3_s;
  enddef;
  // ------------own global parameters mapping------------//
  def map between global and parameters_global for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars v_threshold and v_threshold;
    vars k and k;
    vars R_VV_junc and R_VV_junc;
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars Re_stall and Re_stall;
    vars tau_K_deprived and tau_K_deprived;
    vars alpha_max and alpha_max;
    vars alpha_min and alpha_min;
    vars BOSF_Bx and BOSF_Bx;
    vars K_deprived_init and K_deprived_init;
    vars f_crit and f_crit;
    vars n and n;
    // vars r_stall and r_stall;
    vars f_wss and f_wss;
    vars n_stall and n_stall;
    vars fs and fs;
    vars stall_init and stall_init;
    vars tau_stall and tau_stall;
  enddef;
  // ------------parameters mapping to modules------------//
  def map between parameters and inlet_module for
    vars H_R_out_LHS_inlet and H_R_out_LHS;
    vars l_inlet and l;
    vars r_inlet and r;
    vars u_in_inlet and u_in;
  enddef;
  def map between parameters_global and inlet_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  def map between parameters and VV_junc1_module for
    vars l_VV_junc1 and l;
    vars r_VV_junc1 and r;
    vars vbc2_VV_junc1 and vbc2;
    vars H_to2_VV_junc1 and H_to2;
    vars r_bc2_VV_junc1 and r_bc2;
    vars C_conn2_VV_junc1 and C_conn2;
  enddef;
  def map between parameters_global and VV_junc1_module for
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars v_threshold and v_threshold;
    vars k and k;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars R_VV_junc and R_VV_junc;
  enddef;
  def map between parameters and PV1_module for
    vars l_PV1 and l;
    vars r_PV1 and r;
  enddef;
  def map between parameters_global and PV1_module for
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars mu_plasma and mu_plasma;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars Re_stall and Re_stall;
    vars tau_K_deprived and tau_K_deprived;
    vars alpha_max and alpha_max;
    vars alpha_min and alpha_min;
    vars BOSF_Bx and BOSF_Bx;
    vars K_deprived_init and K_deprived_init;
    vars f_crit and f_crit;
    vars n and n;
    // vars r_stall and r_stall;
    vars f_wss and f_wss;
    vars n_stall and n_stall;
    vars fs and fs;
    vars stall_init and stall_init;
    vars tau_stall and tau_stall;
  enddef;
  def map between parameters and PV2_module for
    vars l_PV2 and l;
    vars r_PV2 and r;
  enddef;
  def map between parameters_global and PV2_module for
    vars tau_sig and tau_sig;
    vars t0 and t0;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars mu_plasma and mu_plasma;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars Re_stall and Re_stall;
    vars tau_K_deprived and tau_K_deprived;
    vars alpha_max and alpha_max;
    vars alpha_min and alpha_min;
    vars BOSF_Bx and BOSF_Bx;
    vars K_deprived_init and K_deprived_init;
    vars f_crit and f_crit;
    vars n and n;
    // vars r_stall and r_stall;
    vars f_wss and f_wss;
    vars n_stall and n_stall;
    vars fs and fs;
    vars stall_init and stall_init;
    vars tau_stall and tau_stall;
  enddef;
  def map between parameters and V1_module for
    vars l_V1 and l;
    vars r_V1 and r;
  enddef;
  def map between parameters_global and V1_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  def map between parameters and V2_module for
    vars l_V2 and l;
    vars r_V2 and r;
  enddef;
  def map between parameters_global and V2_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  def map between parameters and VV_junc2_module for
    vars l_VV_junc2 and l;
    vars r_VV_junc2 and r;
    vars vbc4_VV_junc2 and vbc4;
    vars H_to4_VV_junc2 and H_to4;
    vars r_bc4_VV_junc2 and r_bc4;
    vars C_conn4_VV_junc2 and C_conn4;
  enddef;
  def map between parameters_global and VV_junc2_module for
    vars div_0 and div_0;
    vars div_0y and div_0y;
    vars v_threshold and v_threshold;
    vars k and k;
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
    vars R_VV_junc and R_VV_junc;
  enddef;
  def map between parameters and V3_module for
    vars H_L_out_RHS_V3 and H_L_out_RHS;
    vars l_V3 and l;
    vars r_V3 and r;
    vars u_out_V3 and u_out;
  enddef;
  def map between parameters_global and V3_module for
    vars H_global_L and H_global_L;
    vars H_global_R and H_global_R;
    vars gamma_mirror and gamma_mirror;
    vars tau_H_down and tau_H_down;
    vars tau_H_mean and tau_H_mean;
    vars v_eps and v_eps;
    vars q_C_init and q_C_init;
    vars mu_plasma and mu_plasma;
    vars u_ext and u_ext;
    vars tau_link and tau_link;
    vars v_scale and v_scale;
    vars one_mm3 and one_mm3;
  enddef;
  // ------------time mapping------------//
  def map between environment and inlet_module for
    vars time and t;
  enddef;
  def map between environment and VV_junc1_module for
    vars time and t;
  enddef;
  def map between environment and PV1_module for
    vars time and t;
  enddef;
  def map between environment and PV2_module for
    vars time and t;
  enddef;
  def map between environment and V1_module for
    vars time and t;
  enddef;
  def map between environment and V2_module for
    vars time and t;
  enddef;
  def map between environment and VV_junc2_module for
    vars time and t;
  enddef;
  def map between environment and V3_module for
    vars time and t;
  enddef;
enddef;
